<?xml version="1.0" standalone="no"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices">
        <iodevice type="labjacku6" tag="labjacku6" pulse_duration="pulse_duration" pulse_on="pulse_on" lever1="lever1" lever1_solenoid="lever1_solenoid" laser_trigger="laser_trigger" quadrature="quadrature" counter="counter1" counter2="counter2" optic_device="optic_device" do2led="do2led" led_seq="led_seq" led1_status="led1_status" led2_status="led2_status"
            puff_duration="puff_dur"></iodevice>
    </io_devices>
    <variables tag="Variables">
        <variable tag="pulse_duration" scope="global" logging="when_changed" default_value="0" type="integer">
            <action type="if" tag="If non zero" condition="pulse_duration != 0">
                <action type="assignment" tag="Set pulse_on" variable="pulse_on" value="1"></action>
            </action>
            <action type="if" tag="If zero" condition="pulse_duration == 0">
                <action type="assignment" tag="Clear pulse_on" variable="pulse_on" value="0"></action>
            </action>
        </variable>
        <variable tag="pulse_on" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="pulse_on_SINK" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="do2led" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
        <variable tag="led1_status" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
        <variable tag="led2_status" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
        <variable tag="led_seq" scope="global" logging="when_changed" default_value="1,1,1,2" type="list"></variable>
        <variable tag="led_seq_i" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever1" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever1_SOURCE" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever1_solenoid" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever1_solenoid_SINK" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="laser_trigger" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="laser_trigger_SINK" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="counter1" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
        <variable tag="counter2" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
        <variable tag="quadrature" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="puff_dur" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="optic_device" scope="global" logging="when_changed" default_value="led" type="string"></variable>
        <variable tag="tempCount1" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="tempCount2" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="nScans1" scope="global" logging="when_changed" default_value="200" type="integer"></variable>
        <variable tag="nScans2" scope="global" logging="when_changed" default_value="200" type="integer"></variable>
        <variable tag="nScans3" scope="global" logging="when_changed" default_value="200" type="integer"></variable>
    </variables>
    <sounds tag="Sounds"></sounds>
    <stimuli tag="Stimuli"></stimuli>
    <filters tag="Filters"></filters>
    <optimizers tag="Optimizers"></optimizers>
    <experiment tag="New Experiment" full_name="" description="">
        <protocol tag="New Protocol" nsamples="1" sampling_method="cycles" selection="sequential" interruptible="YES">
            <task_system tag="New Task System" interruptible="YES">
                <task_system_state tag="Task State One" interruptible="YES">
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                    <action tag="Start labjack" type="start_device_IO" device="labjacku6"></action>
                    <action type="report" message="**** In First Task State"></action>
                    <action type="assignment" variable="led_seq_i" value="led_seq[0]"></action>
                    <action type="report" message="led_seq(0) is $led_seq_i"></action>
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                    <transition type="conditional" tag="If Condition is True, Transition to ..." condition="counter1 >= nScans1" target="Task State Two"></transition>
                </task_system_state>
                <task_system_state tag="Task State Two" interruptible="YES">
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                    <action type="report" message="**** In Second Task State"></action>
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                    <action type="assignment" tag="Set tempCount1" variable="tempCount1" value="counter1"></action>
                    <transition type="conditional" tag="If Condition is True, Transition to ..." condition="(counter1 - tempCount1) >= nScans2" target="Task State Three"></transition>
                </task_system_state>
                <task_system_state tag="Task State Three" interruptible="YES">
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                    <action type="report" message="**** In Third Task State"></action>
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                    <action type="assignment" tag="Set tempCount2" variable="tempCount2" value="counter1"></action>
                    <transition type="conditional" tag="If Condition is True, Transition to ..." condition="(counter1- tempCount2) >= nScans3" target="Exit State System"></transition>
                </task_system_state>
                <task_system_state tag="Exit State System" interruptible="YES">
                    <action type="report" message="**** Exiting Task State"></action>
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                    <action tag="Stop labjack" type="stop_device_IO" device="labjacku6"></action>
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                    <transition tag="Return to parent task system" type="yield"></transition>
                </task_system_state>
            </task_system>
        </protocol>
    </experiment>
</monkeyml>