<?xml version="1.0"?>
<monkeyml version="1.0">
   <io_devices tag="IO Devices">
    <iodevice tag="LabJackU6" priority="" type="LabJackU6" 
              pulse_duration="juice" pulse_on="juice" 
              lever1="FIO1" lever2=""
              lever1_solenoid="FIO2"
              counter2="counter2"
              laser_trigger="laserTriggerFIO"
              strobed_digital_word="strobedDigitalWord"
              counter="counter"/>
    <iodevice tag="FakeMonkey" priority="" type="fake_monkey" id="" alt="" spike_rate="10"/>
    <iodevice type="serverside_conduit" tag="Server-side Event Conduit" resource_name="server_conduit"/>
  </io_devices> 
  <variables tag="Variables">
    <folder tag="Behavioral Control">
      <variable tag="subjectNum" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="ExptStruct"/>
      <variable tag="experimentXmlTrialId" scope="global" logging="when_changed" default_value="90" type="integer" persistant="1"/> <!-- n.b. it is forcibly set each trial below -->
    </folder>
    <folder tag="Stimuli">
      <variable tag="stopAfterNTrials" scope="local" logging="when_changed" default_value="90" type="integer" persistant="1" groups="ExptStruct"/>      
      <variable tag="nScansOn" scope="global" logging="when_changed" default_value="200" type="integer" persistant="1" groups="ExptStruct"/>
      <variable tag="nScansOff" scope="global" logging="when_changed" default_value="200" type="integer" persistant="1" groups="ExptStruct"/>
      <variable tag="doMatrix" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1" groups="ExptStruct"/> 
      <variable tag="doRand" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1" groups="ExptStruct"/>

 	  <variable tag="nTotalImagingFrames" scope="global" logging="when_changed" default_value="3600" type="integer" persistant="1" groups="ImagingVars"/>
      <variable tag="frameImagingRateMs" scope="global" logging="when_changed" default_value="500" type="float" persistant="1" groups="ImagingVars"/>
      <variable tag="frameImagingExposureMs" scope="global" logging="when_changed" default_value="450" type="integer" persistant="1" groups="ImagingVars"/>	 
      <variable tag="frameImagingBinning" scope="global" logging="when_changed" default_value="4" type="integer" persistant="1" groups="ImagingVars"/>
	 
      <variable tag="doRetStim" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1" groups="ExptStruct"/>
      <variable tag="doConStim" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1" groups="ExptStruct"/>
      <variable tag="doDirStim" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1" groups="ExptStruct"/>
      <variable tag="doSFStim" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1" groups="ExptStruct"/>
      <variable tag="doTFStim" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1" groups="ExptStruct"/>      
      <variable tag="doSizeStim" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1" groups="ExptStruct"/> 
      <variable tag="doDotsSpeedStim" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1" groups="ExptStruct"/> 
      <variable tag="doPhaseStim" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1" groups="ExptStruct"/>   

	  <variable tag="baseGratingContrast" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="GratingSpecs"/>
	  <variable tag="baseGratingDirectionDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="GratingSpecs"/>
	  <variable tag="baseGratingStartingPhaseDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="GratingSpecs"/>
	  
      <variable tag="gratingElevationDeg" scope="global" logging="when_changed" default_value="20" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingElevationStepDeg" scope="global" logging="when_changed" default_value="-20" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingElevationStepN" scope="global" logging="when_changed" default_value="3" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingAzimuthDeg" scope="global" logging="when_changed" default_value="-30" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingAzimuthStepDeg" scope="global" logging="when_changed" default_value="30" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingAzimuthStepN" scope="global" logging="when_changed" default_value="3" type="float" persistant="1" groups="GratingSpecs"/>
      
      <variable tag="gratingContrast" scope="global" logging="when_changed" default_value="1" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingContrastStepLog" scope="global" logging="when_changed" default_value="2" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingContrastStepDir" scope="global" logging="when_changed" default_value="1" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingContrastStepN" scope="global" logging="when_changed" default_value="6" type="float" persistant="1" groups="GratingSpecs"/>
       
      <variable tag="gratingDirectionDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingDirectionStepDeg" scope="global" logging="when_changed" default_value="30" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingDirectionStepN" scope="global" logging="when_changed" default_value="12" type="float" persistant="1" groups="GratingSpecs"/>

      <variable tag="gratingSpatialFreqCPD" scope="global" logging="when_changed" default_value="0.02" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingSpatialFreqStepLog" scope="global" logging="when_changed" default_value="2" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingSpatialFreqStepDir" scope="global" logging="when_changed" default_value="1" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingSpatialFreqStepN" scope="global" logging="when_changed" default_value="6" type="float" persistant="1" groups="GratingSpecs"/>
    
      <variable tag="gratingTemporalFreqCPS" scope="global" logging="when_changed" default_value="1" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingTemporalFreqStepLog" scope="global" logging="when_changed" default_value="2" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingTemporalFreqStepDir" scope="global" logging="when_changed" default_value="1" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingTemporalFreqStepN" scope="global" logging="when_changed" default_value="6" type="float" persistant="1" groups="GratingSpecs"/>

      <variable tag="gratingDiameterDeg" scope="global" logging="when_changed" default_value="40" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingDiameterStepDeg" scope="global" logging="when_changed" default_value="-5" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingDiameterStepN" scope="global" logging="when_changed" default_value="6" type="float" persistant="1" groups="GratingSpecs"/>
      
      <variable tag="gratingStartingPhaseDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingStartingPhaseStepDeg" scope="global" logging="when_changed" default_value="45" type="float" persistant="1" groups="GratingSpecs"/>
      <variable tag="gratingStartingPhaseStepN" scope="global" logging="when_changed" default_value="8" type="float" persistant="1" groups="GratingSpecs"/>

      <variable tag="doMovingDots" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1" groups="MovingDots"/>
      <variable tag="baseDotCoherence" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="MovingDots"/>
      <variable tag="baseDotContrast" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="MovingDots"/>
      <variable tag="baseDotSpeedDPS" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="MovingDots"/>
      
      <variable tag="dotElevationDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="MovingDots"/>
      <variable tag="dotAzimuthDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="MovingDots"/>
      <variable tag="dotContrast" scope="global" logging="when_changed" default_value="1" type="float" persistant="1" groups="MovingDots"/>
      <variable tag="dotFieldSizeDeg" scope="global" logging="when_changed" default_value="30" type="float" persistant="1" groups="MovingDots"/>
      <variable tag="dotSizeDeg" scope="global" logging="when_changed" default_value=".2" type="float" persistant="1" groups="MovingDots"/>
      <variable tag="dotDensity" scope="global" logging="when_changed" default_value="1" type="float" persistant="1" groups="MovingDots"/>
      <variable tag="dotCoherence" scope="global" logging="when_changed" default_value="1" type="float" persistant="1" groups="MovingDots"/>
      
      <variable tag="dotDirectionDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="MovingDots"/>
      <variable tag="dotDirectionStepDeg" scope="global" logging="when_changed" default_value="30" type="float" persistant="1" groups="MovingDots"/>
      <variable tag="dotDirectionStepN" scope="global" logging="when_changed" default_value="12" type="float" persistant="1" groups="MovingDots"/>

      <variable tag="dotSpeedDPS" scope="global" logging="when_changed" default_value="5" type="float" persistant="1" groups="MovingDots"/>
      <variable tag="dotSpeedStepLog" scope="global" logging="when_changed" default_value="2" type="float" persistant="1" groups="MovingDots"/>
      <variable tag="dotSpeedStepDir" scope="global" logging="when_changed" default_value="1" type="float" persistant="1" groups="MovingDots"/>
      <variable tag="dotSpeedStepN" scope="global" logging="when_changed" default_value="5" type="float" persistant="1" groups="MovingDots"/>


    </folder>
    <folder tag="Task Status">
      <variable tag="stimulusOn" scope="global" logging="when_changed" default_value="0" type="boolean"/>
      <variable tag="trialStart" scope="global" logging="when_changed" default_value="0" type="boolean"/>
    </folder>
    <folder tag="Online Display">
      <variable tag="sync" scope="global" logging="when_changed" default_value="0" type="integer"/>
    </folder>
     <folder tag="Hardware variables">
      <variable tag="FIO1" full_name="FIO1" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed" groups="Hardware"/>
      <variable tag="FIO2" full_name="FIO2" default_value="0" scope="GLOBAL" type="boolean" editable="never" logging="when_changed" groups="Hardware"/>
      <variable tag="laserTriggerFIO" full_name="laserTriggerFIO" default_value="0" scope="GLOBAL" type="boolean" logging="when_changed" persistant="0"/>
      <variable tag="strobedDigitalWord" full_name="strobedDigitalWord" default_value="0" scope="GLOBAL" type="integer" logging="when_changed" persistant="0"/> 
      <variable tag="juice" full_name="juice" scope="GLOBAL" logging="when_changed" default_value="0" type="integer" groups="Hardware"/>
      <variable tag="counter" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"></variable>
      <variable tag="counter2" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="SpeedCounters"></variable>
      <variable tag="sendLaserParams" full_name="sendLaserParams" scope="GLOBAL" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="sendSerialParams" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
    </folder>
    <folder tag="Internal Variables">
      <variable tag="tTempStim" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tCounter2" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
      <variable tag="ttCounter2" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
      
	    <variable tag="spCounter1" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
	    <variable tag="spCounter2" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
	    <variable tag="spCounter3" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
      <variable tag="spCounter4" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
      <variable tag="spCounter5" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
      <variable tag="spCounter6" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
      <variable tag="spCounter7" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
      <variable tag="spCounter8" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
      <variable tag="spCounter9" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
      <variable tag="spCounter10" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
      <variable tag="speedTimerIntervalMs" scope="global" logging="when_changed" default_value="500" type="float" persistant="0" groups="ExptStruct"/>
      <variable tag="tITIWheelCounter" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
      <variable tag="tStimWheelCounter" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>

      <variable tag="tTrialsDoneSinceStart" scope="global" logging="when_changed" default_value="90" type="integer" persistant="1"/>
      <variable tag="tTrialStartMWTimestampMs" scope="global" logging="when_changed" default_value="90" type="integer" persistant="1"/>
      <variable tag="tThisTrialStartTimeMs" scope="global" logging="when_changed" default_value="90" type="integer" persistant="1"/>
      <variable tag="tLastTrialStartTimeMs" scope="global" logging="when_changed" default_value="90" type="integer" persistant="1"/>
        
      <variable tag="rrStimulusNumber" scope="local" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tStimulusNumber" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      
      <variable tag="tBaseGratingDirectionDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tBaseGratingContrast" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingDirectionDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingContrast" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingElevationDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingAzimuthDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingDiameterDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingSpatialFreqCPD" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingStartingPhaseDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingTemporalFreqCPS" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingSpeedDPS" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      
      <variable tag="tBaseDotCoherence" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tBaseDotContrast" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tBaseDotSpeedDPS" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tDotDirectionDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tDotContrast" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tDotElevationDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tDotAzimuthDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tDotFieldSizeDeg" scope="global" logging="when_changed" default_value="30" type="float" persistant="0"/>
      <variable tag="tDotSizeDeg" scope="global" logging="when_changed" default_value=".1" type="float" persistant="0"/>
      <variable tag="tDotDensity" scope="global" logging="when_changed" default_value="1" type="float" persistant="0"/>
      <variable tag="tDotSpeedDPS" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tDotCoherence" scope="global" logging="when_changed" default_value="1" type="float" persistant="0"/>
        
      <variable tag="tNStimAccepted" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="frameCountN" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      
      <variable type="selection" tag="svRandStimNumber" values="0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45, 46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79,80,81,82,83,84,85,86,87,88,89, 90,91,92,93,94,95,96,97,98,99,100,101,102,103,104,105,106,107,108,109,110,111,112,113,114,115,116,117,118,119,120,121,122, 123,124,125,126,127,128,129,130, 131,132,133,134,135,136,137,138,139,140,141,142,143,144,145,146,147,148,149,150,151,152,153,154,155,156,157,158, 159" selection="random_without_replacement" nsamples="160" sampling_method="samples"/>
      <variable type="selection" tag="svSeqStimNumber" values="0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32, 33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79,80,81,82,83,84,85,86,87,88,89,90,91,92,93,94,95,96,97,98,99,100,101,102,103,104,105,106,107,108,109,110,111,112,113,114,115,116,117,118,119,120,121,122, 123,124,125,126,127,128,129,130, 131,132,133,134,135,136,137,138,139,140,141,142,143,144,145,146,147,148,149,150,151,152,153,154,155,156,157,158, 159" selection="sequential_ascending" nsamples="160" sampling_method="samples"/>

    </folder>
  </variables>
  <sounds tag="Sounds">
  </sounds>
  <stimuli tag="Stimuli">
    <stimulus type="blank_screen" tag="background" color="0.5,0.5,0.5"></stimulus>

    <stimulus type="drifting_grating" tag="base_grating"  direction="0" starting_phase="baseGratingStartingPhaseDeg"
              spatial_frequency="tGratingSpatialFreqCPD" 
              
              speed="tGratingSpeedDPS" 
              grating_type="sinusoid" mask="gaussian" std_dev="0.3" mean="0.1" 
              x_size="tGratingDiameterDeg" y_size="tGratingDiameterDeg" 
              x_position="tGratingAzimuthDeg" y_position="tGratingElevationDeg" 
              rotation="tBaseGratingDirectionDeg" 
              alpha_multiplier="tBaseGratingContrast"></stimulus>
    <stimulus type="drifting_grating" tag="target_grating"  direction="0" starting_phase="tGratingStartingPhaseDeg"
              spatial_frequency="tGratingSpatialFreqCPD" 
              speed="tGratingSpeedDPS" 
              grating_type="sinusoid" mask="gaussian" std_dev="0.3" mean="0.1" 
              x_size="tGratingDiameterDeg" y_size="tGratingDiameterDeg" 
              x_position="tGratingAzimuthDeg" y_position="tGratingElevationDeg" 
              rotation="tGratingDirectionDeg" 
              alpha_multiplier="tGratingContrast"></stimulus>
    <stimulus type="moving_dots" tag="base_moving_dots"  direction="tDotDirectionDeg"
              dot_density="tDotDensity" dot_size="tDotSizeDeg" coherence="tBaseDotCoherence"
              speed="tBaseDotSpeedDPS" 
              field_radius="tDotFieldSizeDeg/2" 
              field_center_x="tDotAzimuthDeg" field_center_y="tDotElevationDeg" 
              alpha_multiplier="tBaseDotContrast"></stimulus>
    <stimulus type="moving_dots" tag="target_moving_dots"  direction="tDotDirectionDeg"
              dot_density="tDotDensity" dot_size="tDotSizeDeg" coherence="tDotCoherence"
              speed="tDotSpeedDPS" 
              field_radius="tDotFieldSizeDeg/2" 
              field_center_x="tDotAzimuthDeg" field_center_y="tDotElevationDeg" 
              alpha_multiplier="tDotContrast"></stimulus>         
  </stimuli>    
  <experiment tag="Experiment" full_name="">
    <protocol tag="JuiceOnHoldProtocol" full_name="" selection="sequential" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
      <action type="queue_stimulus" stimulus="background"></action>
      
    <action tag="Start IO Device" type="start_device_IO" device="LabJackU6"></action>
      <!-- init actions before running trials after any press of start-->
            
      <action type="assignment" variable="tTrialsDoneSinceStart" value="0"></action>
      <action type="assignment" tag="juice = 0" variable="juice" value="0"></action>
      <action type="assignment" tag="set counter to 0" variable="counter" value="0"></action>
      <action type="assignment" tag="set counter2 to 0" variable="counter2" value="0"></action>
      <action type="assignment" tag="set tCounter2 to 0" variable="tCounter2" value="0"></action>
      <action type="assignment" tag="set ttCounter2 to 0" variable="ttCounter2" value="0"></action>
        
      <trial tag="Trial" full_name="Trial" description="" interruptible="1" selection="sequential" nsamples="1" sampling_method="cycles">
      <trial tag="New List" nsamples="99999999" sampling_method="samples" selection="random_without_replacement">
      <!--<range_replicator tag="New Replicator" from="0" to="89" step="1" variable="rrStimulusNumber"> -->
    <task_system tag="TS" full_name="TS" interruptable="YES" description="" interruptible="YES" _error="Task Systems must contain >=1 transition that yields to parent">
      <task_system_state tag="Inter Stimulus Interval" interruptible="YES">
          <action_marker _unmoveable="1" tag="Actions"></action_marker>
          <action type="assignment" tag="set tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
          <action type="assignment" variable="tBaseGratingDirectionDeg" value="baseGratingDirectionDeg"></action>
          <action type="assignment" variable="tBaseGratingContrast" value="baseGratingContrast"></action>
          <action type="assignment" variable="tBaseDotCoherence" value="baseDotCoherence"></action>
          <action type="assignment" variable="tBaseDotContrast" value="baseDotContrast"></action>
          <action type="assignment" variable="tBaseDotSpeedDPS" value="baseDotSpeedDPS"></action>
          
          <action type="if" condition="doMovingDots != 1">
          	<action tag="Queue Stimulus" type="live_queue_stimulus" stimulus="base_grating"></action>    
      	  	<action type="play_dynamic_stimulus" stimulus="base_grating" tag="start"></action>
      	  </action>
      	   <action type="if" condition="doMovingDots == 1">
          	<action tag="Queue Stimulus" type="live_queue_stimulus" stimulus="base_moving_dots"></action>    
      	  	<action type="play_dynamic_stimulus" stimulus="base_moving_dots" tag="start"></action>
      	  </action>
          <action type="update_stimulus_display" tag="-"></action>        
          <!-- if we have done enough trials, abort this trial - before any encodes/sync are done -->
          <action type="if" condition="stopAfterNTrials > 0 &amp;&amp; tTrialsDoneSinceStart > stopAfterNTrials">
              <action type="report" message="** Stopping after completing $stopAfterNTrials trials"></action>
              <action type="stop_experiment"></action>  
          </action>
          

          <action type="assignment" variable="tTrialStartMWTimestampMs" value="now()/1000"></action>  <!-- integer valued ms timestamp -->

          <action type="assignment" tag="Encode START" variable="strobedDigitalWord" value="170"></action>
          <action type="assignment" tag="Encode START" variable="strobedDigitalWord" value="170"></action>
          <action type="assignment" tag="Encode START" variable="strobedDigitalWord" value="170"></action>

          <!--Transmit the trial timestamp so strobed code sequences are unique -->
          <action type="assert" condition="tTrialStartMWTimestampMs &lt;= 2147483648" 
                  message="tTrialStartMWTimestampMs is too large - should happen only after several days of running!?"
                  stop_on_failure="1"/>  
          <!-- prevent overflow outside 2**31ms ~ 10 days - I don't know how to get unsigned casts in the XML -->
          <!-- encode trialStartTimestamp in bytes: 4 bytes: millions of seconds, 1000s, s, ms -->
          <action type="assignment" tag="Encode TimestampStart" variable="strobedDigitalWord" value="200"/>
          <action type="assignment" variable="strobedDigitalWord" value="tTrialStartMWTimestampMs/1000/1000000"/>  <!-- mega s -->
          <action type="assignment" variable="strobedDigitalWord" value="(tTrialStartMWTimestampMs- (tTrialStartMWTimestampMs/1000000000)*1000000000) /1000000"/> <!-- mega to kilo s -->
          <action type="assignment" variable="strobedDigitalWord" value="(tTrialStartMWTimestampMs- (tTrialStartMWTimestampMs/1000000)*1000000) /1000"/> <!-- 0-999s -->
          <action type="assignment" variable="strobedDigitalWord" value="(tTrialStartMWTimestampMs - (tTrialStartMWTimestampMs/1000)*1000)"/>  <!-- ms -->
          <action type="assignment" tag="Encode TimestampEnd" variable="strobedDigitalWord" value="201"/>

          <action type="assignment" tag="Sync Matlab" variable="sync" value="1"></action>
          <action type="assignment" tag="Set trialStart" variable="trialStart" value="1"></action>
          <action type="assignment" tag="juice = 0" variable="juice" value="0"></action>
          <action type="assignment" tag="-" variable="laserTriggerFIO" value="0"></action>
          
      
          <!-- set unchanging stimulus parameters-->
          <action type="assignment" variable="tDotAzimuthDeg" value= "dotAzimuthDeg"/>
          <action type="assignment" variable="tDotElevationDeg" value= "dotElevationDeg"/>
          <action type="assignment" variable="tDotDensity" value= "dotDensity"/>
          <action type="assignment" variable="tDotSizeDeg" value= "dotSizeDeg"/>
          <action type="assignment" variable="tDotFieldSizeDeg" value= "dotFieldSizeDeg"/>
          <action type="assignment" variable="tDotContrast" value= "dotContrast"/>
          <action type="assignment" variable="tDotCoherence" value= "dotCoherence"/>

          <!-- choose correct stimulus number based on odds; block2 tr number does not get assigned if ! doBlock2 -->
          <action type="if" condition="doRand == 1">
              <action type="assignment" variable="tStimulusNumber" value="svRandStimNumber"/>
          </action>
          <action type="if" condition="doRand == 0">
              <action type="assignment" variable="tStimulusNumber" value="svSeqStimNumber"/>
          </action>
          
          
          <!--Select retinotopy position; choose a value from selection var, 0-origin -->
          <action type="if" condition="doRetStim">
            <!--Select direction with Retinotopy -->
            <action type="if" condition="doDirStim">
              <action type="assignment" variable="tTempStim" value= "tStimulusNumber % (gratingElevationStepN * gratingAzimuthStepN * gratingDirectionStepN)"/>
              <action type="if" condition="tTempStim &lt; (gratingAzimuthStepN * gratingDirectionStepN)">
                <action type="assignment" variable="tGratingElevationDeg" value= "gratingElevationDeg"/>
                <action type="assignment" variable="tGratingAzimuthDeg" value= "gratingAzimuthDeg + (gratingAzimuthStepDeg * floor(tTempStim/gratingDirectionStepN))"/>
                <action type="assignment" variable="tGratingDirectionDeg" value= "gratingDirectionDeg + (gratingDirectionStepDeg * (tTempStim % gratingDirectionStepN))"/>
                <action type="report" message="Azimuth is $tGratingAzimuthDeg ; Elevation is $tGratingElevationDeg ; Direction is $tGratingDirectionDeg"/>
              </action>
              <action type="if" condition="tTempStim &gt;= (gratingAzimuthStepN * gratingDirectionStepN)">
                <action type="assignment" variable="tGratingElevationDeg" value= "gratingElevationDeg + (gratingElevationStepDeg * (floor(tTempStim / (gratingAzimuthStepN * gratingDirectionStepN))))"/>
                <action type="assignment" variable="tGratingAzimuthDeg" value= "gratingAzimuthDeg + (gratingAzimuthStepDeg * floor(((tTempStim) % (gratingAzimuthStepN * gratingDirectionStepN))/gratingDirectionStepN))"/>
                <action type="assignment" variable="tGratingDirectionDeg" value= "gratingDirectionDeg + (gratingDirectionStepDeg * (tTempStim % gratingDirectionStepN))"/>
                <action type="report" message="Azimuth is $tGratingAzimuthDeg ; Elevation is $tGratingElevationDeg ; Direction is $tGratingDirectionDeg"/>
              </action>
            </action> 
            <action type="if" condition="!doDirStim">
            <action type="assignment" variable="tTempStim" value= "tStimulusNumber % (gratingElevationStepN * gratingAzimuthStepN)"/>    
          	 <action type="if" condition="tTempStim &lt; gratingAzimuthStepN">
              	<action type="assignment" variable="tGratingAzimuthDeg" value= "gratingAzimuthDeg + (gratingAzimuthStepDeg * (tTempStim))"/>
              	<action type="assignment" variable="tGratingElevationDeg" value= "gratingElevationDeg"/>
        		    <action type="report" message="Azimuth is $tGratingAzimuthDeg ; Elevation is $tGratingElevationDeg"/>
      		    </action>
      		    <action type="if" condition="tTempStim &gt;= gratingAzimuthStepN">
              	<action type="assignment" variable="tGratingAzimuthDeg" value= "gratingAzimuthDeg+ (gratingAzimuthStepDeg * ((tTempStim) % gratingAzimuthStepN))"/>
              	<action type="assignment" variable="tGratingElevationDeg" value= "gratingElevationDeg+ (gratingElevationStepDeg * (floor(tTempStim / gratingAzimuthStepN)))"/>
        		    <action type="report" message="Azimuth is $tGratingAzimuthDeg ; Elevation is $tGratingElevationDeg"/>
      		    </action>
            </action>
          </action>
          <action type="if" condition="doRetStim = 0">
			        <action type="assignment" variable="tGratingAzimuthDeg" value= "gratingAzimuthDeg"/>
              <action type="assignment" variable="tGratingElevationDeg" value= "gratingElevationDeg"/>
          </action>
          
<!--Select features if not in matrix mode -->
          <action type="if" condition="doMatrix = 0">	
                    <!--Select size -->
          <action type="if" condition="doSizeStim = 1">	
          	<action type="assignment" variable="tTempStim" value= "tStimulusNumber % gratingDiameterStepN"/>
            <action type="assignment" variable="tGratingDiameterDeg" value= "gratingDiameterDeg + (gratingDiameterStepDeg * (tTempStim))"/>
          	<action type="report" message="Direction is $tGratingDiameterDeg"/>
          </action>		
          <action type="if" condition="doSizeStim = 0">
			  <action type="assignment" variable="tGratingDiameterDeg" value= "gratingDiameterDeg"/>
          </action>          
          
          <!--Select spatial frequency -->
          <action type="if" condition="doSFStim = 1">	
    		<action type="assignment" variable="tTempStim" value= "tStimulusNumber % gratingSpatialFreqStepN"/>          	
          	
          	<action type="if" condition="doRetStim = 1">
          		<action type="assignment" variable="tTempStim" value= "floor((tStimulusNumber % (gratingElevationStepN * gratingAzimuthStepN * gratingSpatialFreqStepN))/(gratingElevationStepN * gratingAzimuthStepN))"/>
	      	</action>	
	      	<action type="assignment" variable="tGratingSpatialFreqCPD" value= "gratingSpatialFreqCPD * (pow(gratingSpatialFreqStepLog,(gratingSpatialFreqStepDir*(tTempStim))))"/>
          	<action type="report" message="Spatial Frequency is $tGratingSpatialFreqCPD"/>
          </action>		
          <action type="if" condition="doSFStim = 0">
			  <action type="assignment" variable="tGratingSpatialFreqCPD" value= "gratingSpatialFreqCPD"/>
          </action>
          
         <!--Select temporal frequency -->
          <action type="if" condition="doTFStim = 1">	
    		<action type="assignment" variable="tTempStim" value= "tStimulusNumber % gratingTemporalFreqStepN"/>
            <!--Select temporal frequency with Retinotopy -->
          	<action type="if" condition="doRetStim = 1">
    			<action type="assignment" variable="tTempStim" value= "floor((tStimulusNumber % (gratingElevationStepN * gratingAzimuthStepN * gratingTemporalFreqStepN))/(gratingElevationStepN * gratingAzimuthStepN))"/>
	      	</action>	
            <action type="assignment" variable="tGratingTemporalFreqCPS" value= "gratingTemporalFreqCPS * (pow(gratingTemporalFreqStepLog,(gratingTemporalFreqStepDir*(tTempStim))))"/>
            <action type="report" message="Temporal Frequency is $tGratingTemporalFreqCPS"/>
          </action>		
          <action type="if" condition="doTFStim = 0">
			  <action type="assignment" variable="tGratingTemporalFreqCPS" value= "gratingTemporalFreqCPS"/>
          </action> 
          
          <!--Select direction -->
          <action type="if" condition="doDirStim &amp;&amp; !doRetStim">
          	<action type="if" condition="doMovingDots != 1">
            	<action type="assignment" variable="tTempStim" value= "tStimulusNumber % gratingDirectionStepN"/>
              <action type="assignment" variable="tGratingDirectionDeg" value= "gratingDirectionDeg + (gratingDirectionStepDeg * (tTempStim))"/>
              <action type="report" message="Direction is $tGratingDirectionDeg"/>
            </action> 
            <action type="if" condition="doMovingDots = 1">
              <action type="assignment" variable="tTempStim" value= "tStimulusNumber % dotDirectionStepN"/>
              <action type="assignment" variable="tDotDirectionDeg" value= "dotDirectionDeg + (dotDirectionStepDeg * (tTempStim))"/>
              <action type="report" message="Direction is $tDotDirectionDeg"/>
            </action> 
          </action>		
          <action type="if" condition="doDirStim = 0">
			       <action type="assignment" variable="tGratingDirectionDeg" value= "gratingDirectionDeg"/>
             <action type="assignment" variable="tDotDirectionDeg" value= "dotDirectionDeg"/>
          </action>
          
          
          <!--Select contrast -->
          <action type="if" condition="doConStim = 1">	
          		<action type="assignment" variable="tTempStim" value= "tStimulusNumber % gratingContrastStepN"/>
              	<action type="assignment" variable="tGratingContrast" value= "gratingContrast * (pow(gratingContrastStepLog,(gratingContrastStepDir*(tTempStim))))"/>
              	<action type="report" message="Contrast is $tGratingContrast"/>
          </action>		
          <action type="if" condition="doConStim = 0">
			  <action type="assignment" variable="tGratingContrast" value= "gratingContrast"/>
          </action>


          <!--Select speed- for moving dots only -->
          <action type="if" condition="doDotsSpeedStim = 1">  
              <action type="assignment" variable="tTempStim" value= "tStimulusNumber % dotSpeedStepN"/>
                <action type="assignment" variable="tDotSpeedDPS" value= "dotSpeedDPS * (pow(dotSpeedStepLog,(dotSpeedStepDir*(tTempStim))))"/>
                <action type="report" message="Speed is $tDotSpeedDPS"/>
          </action>   
          <action type="if" condition="doDotsSpeedStim = 0">
        <action type="assignment" variable="tDotSpeedDPS" value= "dotSpeedDPS"/>
          </action>
          </action>
          
          <!-- do Phase -->
           <action type="if" condition="doPhaseStim = 1">  
            <action type="assignment" variable="tTempStim" value= "tStimulusNumber % gratingStartingPhaseStepN"/>
            <action type="assignment" variable="tGratingStartingPhaseDeg" value= "gratingStartingPhaseDeg + (gratingStartingPhaseStepDeg * (tTempStim))"/>
            <action type="report" message="Starting phase is $tGratingStartingPhaseDeg"/>
          </action>   
          <action type="if" condition="doPhaseStim = 0">
        <action type="assignment" variable="tGratingStartingPhaseDeg" value= "gratingStartingPhaseDeg"/>
          </action> 
          
          <!--Select features if IN matrix mode -->
          <action type="if" condition="doMatrix = 1">
          		<!-- Make SFxTF Matrix-->	
				<action type="if" condition="(doTFStim == 1) &amp;&amp; (doSFStim == 1)">
          			<action type="assignment" variable="tTempStim" value= "tStimulusNumber % (gratingSpatialFreqStepN * gratingTemporalFreqStepN)"/>
          			<action type="if" condition="tTempStim &lt; gratingSpatialFreqStepN">
              			<action type="assignment" variable="tGratingSpatialFreqCPD" value= "gratingSpatialFreqCPD *(pow(gratingSpatialFreqStepLog,(gratingSpatialFreqStepDir*tTempStim)))"/>
              			<action type="assignment" variable="tGratingTemporalFreqCPS" value= "gratingTemporalFreqCPS"/>
              			<action type="report" message="SF is $tGratingSpatialFreqCPD ; TF is $tGratingTemporalFreqCPS"/>
          			</action>
          			<action type="if" condition="tTempStim &gt;= gratingSpatialFreqStepN">
              			<action type="assignment" variable="tGratingSpatialFreqCPD" value= "gratingSpatialFreqCPD * (pow(gratingSpatialFreqStepLog, (gratingSpatialFreqStepDir*(tTempStim % gratingSpatialFreqStepN))))"/>
              			<action type="assignment" variable="tGratingTemporalFreqCPS" value= "gratingTemporalFreqCPS * (pow(gratingTemporalFreqStepLog, (gratingTemporalFreqStepDir*(floor(tTempStim / gratingSpatialFreqStepN)))))"/>
              			<action type="report" message="SF is $tGratingSpatialFreqCPD ; TF is $tGratingTemporalFreqCPS"/>
          			</action>
          			<action type="assignment" variable="tGratingContrast" value= "gratingContrast"/>
          			<action type="assignment" variable="tGratingDirectionDeg" value= "gratingDirectionDeg"/>
          			<action type="assignment" variable="tGratingDiameterDeg" value= "gratingDiameterDeg"/>
              		<action type="assignment" variable="tGratingAzimuthDeg" value= "gratingAzimuthDeg"/>
              		<action type="assignment" variable="tGratingElevationDeg" value= "gratingElevationDeg"/>
          		</action>

	      		<!-- Make SF x Dir Matrix -->
	      		<action type="if" condition="(doDirStim == 1) &amp;&amp; (doSFStim) == 1">
					<action type="if" condition="tStimulusNumber &lt; (gratingSpatialFreqStepN * gratingDirectionStepN)">
		  	  			<action type="assignment" variable="tTempStim" value= "tStimulusNumber"/>
		  			</action>
		  			<action type="if" condition="tStimulusNumber &gt;= (gratingSpatialFreqStepN * gratingDirectionStepN)">
          				<action type="assignment" variable="tTempStim" value= "tStimulusNumber % (gratingSpatialFreqStepN * gratingDirectionStepN)"/>
          			</action>
          			<action type="if" condition="tTempStim &lt;= gratingSpatialFreqStepN">
              			<action type="assignment" variable="tGratingSpatialFreqCPD" value= "gratingSpatialFreqCPD * (pow(gratingSpatialFreqStepLog, (gratingSpatialFreqStepDir*(tTempStim))))"/>
              			<action type="assignment" variable="tGratingDirectionDeg" value= "gratingDirectionDeg"/>
              			<action type="report" message="SF is $tGratingSpatialFreqCPD ; Direction is $tGratingDirectionDeg"/>
          			</action>
          			<action type="if" condition="tTempStim > gratingSpatialFreqStepN">
              			<action type="assignment" variable="tGratingSpatialFreqCPD" value= "gratingSpatialFreqCPD * (pow(gratingSpatialFreqStepLog, (gratingSpatialFreqStepDir*((tTempStim) % gratingSpatialFreqStepN))))"/>
              			<action type="assignment" variable="tGratingDirectionDeg" value= "gratingDirectionDeg + (gratingDirectionStepDeg * (floor(tTempStim / gratingSpatialFreqStepN)))"/>
              			<action type="report" message="SF is $tGratingSpatialFreqCPD ; Direction is $tGratingDirectionDeg"/>
          			</action>
          			<action type="assignment" variable="tGratingContrast" value= "gratingContrast"/>
                <action type="assignment" variable="tGratingTemporalFreqCPS" value= "gratingTemporalFreqCPS"/>
                <action type="assignment" variable="tGratingDiameterDeg" value= "gratingDiameterDeg"/>
              	<action type="assignment" variable="tGratingAzimuthDeg" value= "gratingAzimuthDeg"/>
              	<action type="assignment" variable="tGratingElevationDeg" value= "gratingElevationDeg"/>
	      		</action>

                   

	      	  <!-- Make Dir X SFPhase--> 
            <action type="if" condition="(doDirStim == 1) &amp;&amp; (doPhaseStim == 1)">
              <action type="if" condition="tStimulusNumber &lt; (gratingDirectionStepN * gratingStartingPhaseStepN)">    
                <action type="assignment" variable="tTempStim" value= "tStimulusNumber"/>
              </action>
              <action type="if" condition="tStimulusNumber &gt;= (gratingDirectionStepN * gratingStartingPhaseStepN)">
                <action type="assignment" variable="tTempStim" value= "tStimulusNumber % (gratingDirectionStepN * gratingStartingPhaseStepN)"/>
              </action>
              <action type="if" condition="tTempStim &lt; gratingStartingPhaseStepN">
                <action type="assignment" variable="tGratingStartingPhaseDeg" value= "gratingStartingPhaseDeg + (gratingStartingPhaseStepDeg * (tTempStim))"/> 
                <action type="assignment" variable="tGratingDirectionDeg" value= "gratingDirectionDeg"/>   
                <action type="report" message="SP is $tGratingStartingPhaseDeg ; Direction is $tGratingDirectionDeg"/>
              </action>
              <action type="if" condition="tTempStim >= gratingStartingPhaseStepN">
                <action type="assignment" variable="tGratingStartingPhaseDeg" value= "gratingStartingPhaseDeg + (gratingStartingPhaseStepDeg * ((tTempStim % gratingStartingPhaseStepN)))"/> 
                <action type="assignment" variable="tGratingDirectionDeg" value= "gratingDirectionDeg + (gratingDirectionStepDeg * (floor(tTempStim / gratingStartingPhaseStepN)))"/>
                <action type="report" message="SP is $tGratingStartingPhaseDeg; Direction is $tGratingDirectionDeg"/>
              </action>
                <action type="assignment" variable="tGratingContrast" value= "gratingContrast"/>
                <action type="assignment" variable="tGratingTemporalFreqCPS" value= "gratingTemporalFreqCPS"/>
                <action type="assignment" variable="tGratingDiameterDeg" value= "gratingDiameterDeg"/>
                <action type="assignment" variable="tGratingAzimuthDeg" value= "gratingAzimuthDeg"/>
                <action type="assignment" variable="tGratingElevationDeg" value= "gratingElevationDeg"/>
                <action type="assignment" variable="tGratingSpatialFreqCPD" value="gratingSpatialFreqCPD"/>
            </action>


	      	<!-- check for errors in feature combos 
	      		<action type="if" condition= "(doTFStim+doSFStim+doDirStim+doConStim+doSizeStim+(doRetStim*2)) &gt; 2">
	      			<action type="assert" condition= "1 = 1" message="Too many stim features selected for matrix mode"
                  stop_on_failure="1"/>
                 </action>
                 <action type="if" condition= "(doTFStim+doSFStim+doDirStim+doConStim+doSizeStim+(doRetStim*2)) &lt; 2">
	      			<action type="assert" condition= "1 = 1" message="Too few stim features selected for matrix mode"
                  stop_on_failure="1"/>
                 </action>
	      		<action type="if" condition= "((doTFStim+doSFStim) &lt; 2) &amp;&amp; ((doDirStim+doSFStim) &lt; 2)">
                  <action type="assert" condition= "1 = 1" message="Code not written to do matrix for these features"
                  stop_on_failure="1"/>
                </action> -->
	      	</action>
			
          <!-- convert TF/SF to speed -->
          <action type="if" condition="doMovingDots != 1">                                     
            <action type="assignment" variable="tGratingSpeedDPS" value="tGratingTemporalFreqCPS / tGratingSpatialFreqCPD"></action> 
      	    <action type="report" message="Speed is $tGratingSpeedDPS"/>
          </action>
      	
          <!-- initialize trial start/end times -->
          <action type="if" condition="tThisTrialStartTimeMs == -1">  
              <!--first trial, leave lasttime as -1 -->
              <action type="assignment" variable="tLastTrialStartTimeMs" value="-1"></action>
          </action>
          <action type="if" condition="tThisTrialStartTimeMs != -1">  <!--else-->
              <!--later trials, copy this into last before setting this again below -->
              <action type="assignment" variable="tLastTrialStartTimeMs" value="tThisTrialStartTimeMs"></action>
          </action>
          <action type="assignment" variable="tThisTrialStartTimeMs" value="now()/1000"></action>
          <action type="assignment" tag="Clear stimulusOn" variable="stimulusOn" value="0"></action>
          <action type="assignment" tag="Encode InterStimIntervalStart" variable="strobedDigitalWord" value="6"></action> 

          <action type="report" message="In InterStimInterval, waiting for $nScansOff frames"></action>          
          <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
          <transition type="conditional" tag="If nScansOff, move to StimOn" condition="counter >= ((nScansOff+nScansOn) * tTrialsDoneSinceStart) + nScansOff" target="StimOn"></transition>
      </task_system_state>

      <task_system_state tag="StimOn" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>

            <action type="assignment" tag="Log Number of Wheel-pulses received during ITI" variable="tITIWheelCounter" value="counter2 - tCounter2"></action>
            <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
            <action type="assignment" tag="reset ttCounter2 to counter2" variable="ttCounter2" value="counter2"></action>
			
			<action type="if" condition="doMovingDots != 1">
				<action tag="Dequeue Stimulus" type="dequeue_stimulus" stimulus="base_grating"></action>
    	        <action tag="Update Stimulus" type="update_stimulus_display"></action>
    	    </action>
    	    <action type="if" condition="doMovingDots == 1">
    	    	<action tag="Dequeue Stimulus" type="dequeue_stimulus" stimulus="base_moving_dots"></action>
    	        <action tag="Update Stimulus" type="update_stimulus_display"></action>
    	    </action>    

            <action type="if" condition="doMovingDots != 1">
              <action tag="Queue Stimulus" type="queue_stimulus" stimulus="target_grating"></action>
              <action type="play_dynamic_stimulus" stimulus="target_grating" tag="start"></action>
            </action>
            <action type="if" condition="doMovingDots == 1">
              <action tag="Queue Stimulus" type="queue_stimulus" stimulus="target_moving_dots"></action>
              <action type="play_dynamic_stimulus" stimulus="target_moving_dots" tag="start"></action>
            </action>
            <action type="assignment" tag="Encode VisStimOn" variable="strobedDigitalWord" value="4"></action>
            
            <!-- update display, finalize variables -->
            <action tag="Update Display" type="update_stimulus_display"></action>
            <action type="report" message="Visual Stim ON, presenting for $nScansOn scans."></action>
            <action type="start_timer" tag="Start 1st Speed Timer" timer="speedTimer1" timebase="" duration="speedTimerIntervalMs" duration_units="ms"></action> 

            <action type="if" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)"> 
            <action type="assignment" tag="Log Speed of current Interval" variable="spCounter1" value="counter2 - tCounter2"></action>
            <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
            </action>

            <!-- Can't actually jave a system state for timer 1, but it would be here-->
            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="timer_expired" timer="speedTimer1" target="speedCounter2"/> 
            <transition type="conditional" tag="If nScansON, move to EndTrial" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)" target="EndTrial" ></transition>
      </task_system_state>
      
      <task_system_state tag="speedCounter2" interruptible="YES">
      		<action_marker _unmoveable="1" tag="Actions"></action_marker>
      		<action type="start_timer" tag="Start speedTimer2" timer="speedTimer2" timebase="" duration="speedTimerIntervalMs" duration_units="ms"></action>
      		<action type="assignment" tag="Log Speed of previous Interval" variable="spCounter1" value="counter2 - tCounter2"></action>
          <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>

          <action type="if" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)"> 
            <action type="assignment" tag="Log Speed of current Interval" variable="spCounter2" value="counter2 - tCounter2"></action>
            <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
            </action>
      		
      		<transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
      		<transition type="timer_expired" target="speedCounter3" timer="speedTimer2"></transition>
      		<transition type="conditional" tag="If nScansON, move to EndTrial" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)" target="EndTrial" ></transition>
      </task_system_state>
      
      <task_system_state tag="speedCounter3" interruptible="YES">
      		<action_marker _unmoveable="1" tag="Actions"></action_marker>
      		<action type="start_timer" tag="Start speedTimer3" timer="speedTimer3" timebase="" duration="speedTimerIntervalMs" duration_units="ms"></action>
      		<action type="assignment" tag="Log Speed of previous Interval" variable="spCounter2" value="counter2 - tCounter2"></action>
          <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>

          <action type="if" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)"> 
            <action type="assignment" tag="Log Speed of current Interval" variable="spCounter3" value="counter2 - tCounter2"></action>
            <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
            </action>
      		
      		<transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
      		<transition type="timer_expired" target="speedCounter4" timer="speedTimer3"></transition>
      		<transition type="conditional" tag="If nScansON, move to EndTrial" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)" target="EndTrial" ></transition>
      </task_system_state>
      
      <task_system_state tag="speedCounter4" interruptible="YES">
      		<action_marker _unmoveable="1" tag="Actions"></action_marker>
      		<action type="start_timer" tag="Start speedTimer4" timer="speedTimer4" timebase="" duration="speedTimerIntervalMs" duration_units="ms"></action>
      		<action type="assignment" tag="Log Speed of previous Interval" variable="spCounter3" value="counter2 - tCounter2"></action>
          <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>

          <action type="if" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)"> 
            <action type="assignment" tag="Log Speed of current Interval" variable="spCounter4" value="counter2 - tCounter2"></action>
            <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
            </action>
      		
      		<transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
      		<transition type="timer_expired" target="speedCounter5" timer="speedTimer4"></transition>
      		<transition type="conditional" tag="If nScansON, move to EndTrial" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)" target="EndTrial" ></transition>
      </task_system_state>
      
      <task_system_state tag="speedCounter5" interruptible="YES">
      		<action_marker _unmoveable="1" tag="Actions"></action_marker>
      		<action type="start_timer" tag="Start speedTimer5" timer="speedTimer5" timebase="" duration="speedTimerIntervalMs" duration_units="ms"></action>
      		<action type="assignment" tag="Log Speed of previous Interval" variable="spCounter4" value="counter2 - tCounter2"></action>
          <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
      		
          <action type="if" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)"> 
            <action type="assignment" tag="Log Speed of current Interval" variable="spCounter5" value="counter2 - tCounter2"></action>
            <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
            </action>

      		<transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
      		<transition type="timer_expired" target="speedCounter6" timer="speedTimer5"></transition>
      		<transition type="conditional" tag="If nScansON, move to EndTrial" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)" target="EndTrial" ></transition>
      </task_system_state>
      
      <task_system_state tag="speedCounter6" interruptible="YES">
      		<action_marker _unmoveable="1" tag="Actions"></action_marker>
      		<action type="start_timer" tag="Start speedTimer6" timer="speedTimer6" timebase="" duration="speedTimerIntervalMs" duration_units="ms"></action>
      		<action type="assignment" tag="Log Speed of previous Interval" variable="spCounter5" value="counter2 - tCounter2"></action>
          <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
      		
          <action type="if" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)"> 
            <action type="assignment" tag="Log Speed of current Interval" variable="spCounter6" value="counter2 - tCounter2"></action>
            <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
            </action>

      		<transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
      		<transition type="timer_expired" target="speedCounter7" timer="speedTimer6"></transition>
      		<transition type="conditional" tag="If nScansON, move to EndTrial" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)" target="EndTrial" ></transition>
      </task_system_state>
      
      <task_system_state tag="speedCounter7" interruptible="YES">
      		<action_marker _unmoveable="1" tag="Actions"></action_marker>
      		<action type="start_timer" tag="Start speedTimer7" timer="speedTimer7" timebase="" duration="speedTimerIntervalMs" duration_units="ms"></action>
      		<action type="assignment" tag="Log Speed of previous Interval" variable="spCounter6" value="counter2 - tCounter2"></action>
          <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
      		
          <action type="if" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)"> 
            <action type="assignment" tag="Log Speed of current Interval" variable="spCounter7" value="counter2 - tCounter2"></action>
            <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
            </action>

      		<transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
      		<transition type="timer_expired" target="speedCounter8" timer="speedTimer7"></transition>
      		<transition type="conditional" tag="If nScansON, move to EndTrial" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)" target="EndTrial" ></transition>
      </task_system_state>
      
      <task_system_state tag="speedCounter8" interruptible="YES">
      		<action_marker _unmoveable="1" tag="Actions"></action_marker>
      		<action type="start_timer" tag="Start speedTimer8" timer="speedTimer8" timebase="" duration="speedTimerIntervalMs" duration_units="ms"></action>
      		<action type="assignment" tag="Log Speed of previous Interval" variable="spCounter7" value="counter2 - tCounter2"></action>
          <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
      		
          <action type="if" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)"> 
            <action type="assignment" tag="Log Speed of current Interval" variable="spCounter8" value="counter2 - tCounter2"></action>
            <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
            </action>

      		<transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
      		<transition type="timer_expired" target="speedCounter9" timer="speedTimer8"></transition>
      		<transition type="conditional" tag="If nScansON, move to EndTrial" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)" target="EndTrial" ></transition>
      </task_system_state>
      
      <task_system_state tag="speedCounter9" interruptible="YES">
      		<action_marker _unmoveable="1" tag="Actions"></action_marker>
      		<action type="start_timer" tag="Start speedTimer9" timer="speedTimer9" timebase="" duration="speedTimerIntervalMs" duration_units="ms"></action>
      		<action type="assignment" tag="Log Speed of previous Interval" variable="spCounter8" value="counter2 - tCounter2"></action>
          <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
      		
          <action type="if" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)"> 
            <action type="assignment" tag="Log Speed of current Interval" variable="spCounter9" value="counter2 - tCounter2"></action>
            <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
            </action>

      		<transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
      		<transition type="timer_expired" target="speedCounter10" timer="speedTimer9"></transition>
      		<transition type="conditional" tag="If nScansON, move to EndTrial" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)" target="EndTrial" ></transition>
      </task_system_state>
      
      <task_system_state tag="speedCounter10" interruptible="YES">
      		<action_marker _unmoveable="1" tag="Actions"></action_marker>
      		<action type="start_timer" tag="Start speedTimer10" timer="speedTimer10" timebase="" duration="speedTimerIntervalMs" duration_units="ms"></action>
      		<action type="assignment" tag="Log Speed of previous Interval" variable="spCounter9" value="counter2 - tCounter2"></action>
          <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
      		
          <action type="if" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)"> 
            <action type="assignment" tag="Log Speed of current Interval" variable="spCounter10" value="counter2 - tCounter2"></action>
            <action type="assignment" tag="reset tCounter2 to counter2" variable="tCounter2" value="counter2"></action>
            </action>

      		<transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
          <transition type="timer_expired" target="speedCounterEnd" timer="speedTimer10"></transition>
      		<transition type="conditional" tag="If nScansON, move to EndTrial" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)" target="EndTrial" ></transition>
      </task_system_state>

      <task_system_state tag="speedCounterEnd" interruptible="YES">
          <action_marker _unmoveable="1" tag="Actions"></action_marker>
          <action type="assignment" tag="Log Speed of previous Interval" variable="spCounter10" value="counter2 - tCounter2"></action>

          <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
          <transition type="conditional" tag="If nScansON, move to EndTrial" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)" target="EndTrial" ></transition>
      </task_system_state>
                    
      <task_system_state tag="EndTrial" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>
          <action type="assignment" tag="Log Speed of entire stim Interval" variable="tStimWheelCounter" value="counter2 - ttCounter2"></action>
          <!-- Must use next selection and reset selection here to move through rand/seq -->
          <action type="if" condition="doRand == 0 &amp;&amp; tNStimAccepted &lt; 159">
              <action type="next_selection" selection="svSeqStimNumber"/>
              <action type="assignment" variable="tNStimAccepted" value="tNStimAccepted + 1"></action>
          </action>
          <action type="if" condition="doRand == 0 &amp;&amp; tNStimAccepted &gt;= 159">
              <action type="reset_selection" selection="svSeqStimNumber"/>
              <action type="assignment" variable="tNStimAccepted" value="0"></action>
          </action>
          
          <action type="if" condition="doRand == 1 &amp;&amp; tNStimAccepted &lt; 159">
              <action type="next_selection" selection="svRandStimNumber"/>
              <action type="assignment" variable="tNStimAccepted" value="tNStimAccepted + 1"></action>
          </action>
          <action type="if" condition="doRand == 1 &amp;&amp; tNStimAccepted &gt;= 159">
              <action type="reset_selection" selection="svRandStimNumber"/>
              <action type="assignment" variable="tNStimAccepted" value="0"></action>
          </action>
          
          
            <action type="assignment" variable="laserTriggerFIO" value="0"></action> <!-- disable trigger no matter if it went high or not -->

            <action type="if" condition="doMovingDots != 1">
            	<action tag="Dequeue Stimulus 0" type="dequeue_stimulus" stimulus="target_grating"></action>
            	<action tag="Update Stimulus" type="update_stimulus_display"></action>
				<action tag="Queue Stimulus" type="live_queue_stimulus" stimulus="base_grating"></action>    
        		<action type="play_dynamic_stimulus" stimulus="base_grating" tag="start"></action>
        	</action>
        	
        	<action type="if" condition="doMovingDots == 1">
            	<action tag="Dequeue Stimulus 0" type="dequeue_stimulus" stimulus="target_moving_dots"></action>
            	<action tag="Update Stimulus" type="update_stimulus_display"></action>
				<action tag="Queue Stimulus" type="live_queue_stimulus" stimulus="base_moving_dots"></action>    
        		<action type="play_dynamic_stimulus" stimulus="base_moving_dots" tag="start"></action>
        	</action>
        	
            <action tag="Update Stimulus" type="update_stimulus_display"></action>
            
            <action type="assignment" tag="End Matlab Sync" variable="sync" value="0"></action>
            

            <action type="assignment" tag="Encode END" variable="strobedDigitalWord" value="85"></action>
            <action type="assignment" tag="Encode END" variable="strobedDigitalWord" value="85"></action>
            <action type="assignment" tag="Encode END" variable="strobedDigitalWord" value="85"></action>

            <!-- trigger serial param dump to cyberkinetics -->
            <action type="assignment" tag="Send serial params" variable="sendSerialParams" value="1"></action>
            <action type="assignment" tag="Send serial params" variable="sendSerialParams" value="0"></action>
            
            <action type="assignment" variable="tTrialsDoneSinceStart" value="tTrialsDoneSinceStart+1"/>
              
            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="yield" tag="return to parent task system"></transition>
        </task_system_state>
          
        </task_system>
      </trial>
      </trial>
      <action tag="Stop IO Device" type="stop_device_IO" device="LabJackU6"></action>
    </protocol>
  </experiment>
</monkeyml>

