monkeyml version=1.0
io_devices "IO Devices"
  iodevice LabJackU6 "LabJackU6": pulse_duration=juice, pulse_on=juice, lever1=FIO1, lever1_solenoid=MIO0, laser_trigger=laserTrigger, optic_device=optic_device, trial_laser_powerMw=tTrialLaserPowerMw, strobed_digital_word=strobedDigitalWord, quadrature=quadrature, counter=counter, counter2=counter2
  iodevice fake_monkey "FakeMonkey": spike_rate=10
  iodevice serverside_conduit "Server-side Event Conduit": resource_name=server_conduit
variables "Variables"
  folder "Behavioral Control"
    variable integer "subjectNum": default_value=0, persistant=1
    variable integer "experimentXmlTrialId": default_value=8, persistant=1
    <!-- n.b. it is forcibly set each trial below -->
    variable string "optic_device": default_value=led
    variable integer "doAnalogLever": default_value=0, persistant=1, groups=Task Type
    variable integer "doVisualStim": default_value=1, persistant=1, groups=Task Type
    variable integer "doLaserStim": default_value=0, persistant=1
    variable integer "doOriDetect": default_value=0, persistant=1, groups=Task Type
    variable integer "doContrastDetect": default_value=1, persistant=1, groups=Task Type
    variable integer "doITIStim": default_value=1, persistant=1, groups=Task Type
    variable integer "doNoStimulusChange": default_value=0, persistant=1, groups=Task Type
    variable boolean "doAllCorrects": default_value=0, persistant=1, groups=Task Type
    variable integer "doStartCueSound": default_value=0, persistant=1, groups=Task Type
    variable boolean "doIncorrectSound": default_value=0, persistant=1, groups=Task Type
    variable boolean "doRewardSound": default_value=0, persistant=1, groups=Task Type
    variable boolean "doLED": default_value=0, persistant=1, groups=LED Debug
    variable integer "doLeverSolenoidAllTrials": default_value=0, persistant=1, groups=Solenoid
    variable integer "doLeverSolenoidOnMiss": default_value=0, persistant=1, groups=Solenoid
    variable integer "doLeverSolenoidOnEarly": default_value=0, persistant=1, groups=Solenoid
    variable float "frameRateHz": default_value=30, persistant=1, groups=Trial Structure
    variable integer "tooFastTimeMs": default_value=100, persistant=1, groups=Trial Structure
    variable integer "randReqHoldMaxMs": default_value=300, persistant=1, groups=Trial Structure
    variable integer "fixedReqHoldTimeMs": default_value=400, persistant=1, groups=Trial Structure
    variable integer "doGeomHoldDist": default_value=0, persistant=1, groups=Trial Structure
    variable integer "geomHoldMeanMs": default_value=1, persistant=1, groups=Trial Structure
    variable integer "reactTimeMs": default_value=1000, persistant=1, groups=Trial Structure
    variable integer "itiTimeMs": default_value=750, persistant=1, groups=Trial Structure
    variable boolean "doRandItiTime": default_value=0, persistant=1, groups=Trial Structure
    variable integer "itiRangeMaxTimeMs": default_value=25000, persistant=1, groups=Trial Structure
    variable integer "itiRangeMinTimeMs": default_value=20000, persistant=1, groups=Trial Structure
    variable integer "doExtendItiOnShortPrevTrial": default_value=0, persistant=1, groups=Trial Structure
    variable boolean "doSolenoidOnTimeout": default_value=0, persistant=1, groups=Timeouts
    variable integer "earlyTimeoutMs": default_value=200, persistant=1, groups=Timeouts
    variable integer "missedTimeoutMs": default_value=2000, persistant=1, groups=Timeouts
    variable integer "nConsecErrorsCauseTimeout": default_value=10, persistant=1, groups=Timeouts
    variable integer "consecErrorTimeoutS": default_value=0, persistant=1, groups=Timeouts
    variable integer "postRewardMs": default_value=500, persistant=1, groups=Reward
    variable integer "minRewardUs": default_value=20000, persistant=1, groups=Reward
    variable integer "maxRewardUs": default_value=20000, persistant=1, groups=Reward
    variable integer "interRewardIntervalMs": default_value=200, persistant=1, groups=Reward
    variable integer "maxConsecCorrects": default_value=1, persistant=1, groups=Reward
    variable integer "rewardEveryNCorrect": default_value=0, persistant=1, groups=Reward
    variable float "rewardOmissionPercent": default_value=0, persistant=1, groups=Reward
    variable float "rewardDelayPercent": default_value=0, persistant=1, groups=Reward
    variable integer "RewardDelayDurationMs": default_value=500, persistant=1, groups=Reward
    variable float "rewardUnexpectPercent": default_value=0, persistant=1, groups=Reward
    variable float "itiRewardUnexpectPercent": default_value=0, persistant=1, groups=Reward
  folder "Stimuli"
    variable integer "baseGratingDirectionDeg": default_value=0, persistant=1, groups=Stimulus Parameters
    variable integer "baseGratingContrast": default_value=0, persistant=1, groups=Stimulus Parameters
    variable float "gratingElevationDeg": default_value=0, persistant=1, groups=Stimulus Parameters
    variable float "gratingAzimuthDeg": default_value=0, persistant=1, groups=Stimulus Parameters
    variable integer "gratingHeightDeg": default_value=200, persistant=1, groups=Stimulus Parameters
    variable integer "gratingWidthDeg": default_value=200, persistant=1, groups=Stimulus Parameters
    variable float "gratingSpatialFreqCPD": default_value=0.05, persistant=1, groups=Stimulus Parameters
    variable integer "gratingSpeedDPS": default_value=0, persistant=1, groups=Stimulus Parameters
    variable integer "gratingDurationMs": default_value=800, persistant=1, groups=Stimulus Parameters
    variable float "gratingStartingPhaseDeg": default_value=0, persistant=1, groups=Stimulus Parameters
    variable float "gratingMaxContrastStep": default_value=1, persistant=1, groups=Stimulus Parameters
    variable float "gratingContrastStepsPerOctave": default_value=0, persistant=1, groups=Stimulus Parameters
    variable float "gratingMaxDirectionStepDeg": default_value=10, persistant=1, groups=Stimulus Parameters
    variable float "gratingDirectionStepsPerOctave": default_value=0, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level1": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level2": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level3": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level4": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level5": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level6": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level7": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level8": default_value=10, persistant=1, groups=Stimulus Parameters
    <!-- sound variables -->
    variable integer "soundDuration200ms": default_value=0, persistant=1, groups=Sound
    variable integer "soundDuration767ms": default_value=0, persistant=1, groups=Sound
    variable float "soundPressAmplitude": default_value=0, persistant=1, groups=Sound
    variable float "soundTrialStartAmplitude": default_value=0, persistant=1, groups=Sound
    variable float "soundStartCueAmplitude": default_value=0, persistant=1, groups=Sound
    variable float "soundTargetAmplitude": default_value=0, persistant=0, groups=Sound
    variable float "block1ToneAmplitude": default_value=0, persistant=1, groups=Sound
    variable float "block2ToneAmplitude": default_value=0, persistant=1, groups=Sound
    <!-- block 2 control -->
    variable integer "doBlock2": default_value=0, persistant=1, groups=Block2
    variable integer "doBlock2SeparateReward": default_value=0, persistant=1, groups=Block2 Reward
    variable integer "block2MinRewardUs": default_value=20000, persistant=1, groups=Block2 Reward
    variable integer "block2MaxRewardUs": default_value=20000, persistant=1, groups=Block2 Reward
    variable float "block2RewardOmissionPercent": default_value=0, persistant=1, groups=Block2 Reward
    variable integer "block2DoGratingAppearance": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2BaseGratingContrast": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2BaseGratingDirectionDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingElevationDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingAzimuthDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingHeightDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingWidthDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingSpatialFreqCPD": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingSpeedDPS": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2GratingDurationMs": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingMaxContrastStep": default_value=1, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingContrastStepsPerOctave": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingMaxDirectionStepDeg": default_value=10, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingDirectionStepsPerOctave": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "doBlock2SeparateOdds": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level1": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level2": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level3": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level4": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level5": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level6": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level7": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level8": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2DoTrialLaser": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserPowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserOnTimeMs": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserOffTimeMs": default_value=0, persistant=1, groups=Block2 Laser
    variable integer "block2DoRampLength": default_value=0, persistant=1, groups=Block2 Laser
    variable integer "block2RampLengthMs2": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RampLengthPowerMaxMw2": default_value=0, persistant=1, groups=Block2 Laser
    variable integer "block2DoRampVTrain": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainPowerMaxMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainStepsPerOctave": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtRampBaselinePowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainBaselinePowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable integer "doBlock2SecondLaser": default_value=0, persistant=1, groups=Block2 Laser
    <!-- stimulus control parameters -->
    variable integer "laserPeakMaxMw": default_value=20, persistant=1
    variable integer "laserPeakStepsPerOctave": default_value=2, persistant=1
    variable integer "laserOffPowerMw": default_value=0, persistant=1
    variable integer "laserTransitionRampUpDownMs": default_value=2, persistant=1
    variable integer "laserTransitionDoExpRamp": default_value=0, persistant=1
    variable float "laserBaselinePowerMw": default_value=0, persistant=1
    <!-- 0: do not do baseline -->
    variable float "laserBaselinePostStimTimeMs": default_value=500, persistant=1
    variable integer "laserDoLinearRamp": default_value=1, persistant=1
    variable integer "laserRampLengthMs": default_value=100, persistant=1
    variable integer "laserRampExtraConstantLengthMs": default_value=0, persistant=1
    variable integer "laserRampDoExpRamp": default_value=0, persistant=1
    variable integer "laserDoPulseTrain": default_value=0, persistant=1
    variable integer "laserPulseLengthMs": default_value=5, persistant=1
    variable integer "laserPulsePeriodMs": default_value=20, persistant=1
    variable integer "laserTrainLengthMs": default_value=100, persistant=1
    variable integer "laserTrainRandomNPulses": default_value=0, persistant=1
    variable integer "laserTrainRandomType": default_value=0, persistant=1
    variable float "trialLaserPowerMw": default_value=0, persistant=1
    variable float "trialLaserOnTimeMs": default_value=0, persistant=1
    variable float "trialLaserOffTimeMs": default_value=0, persistant=1
  folder "Fake Mouse"
    variable boolean "doLever": default_value=0, persistant=1, groups=Fake Mouse
    variable integer "fakeMouseMaxPressMs": default_value=300, persistant=1, groups=Fake Mouse
    variable integer "fakeMouseMaxReactMs": default_value=5000, persistant=1, groups=Fake Mouse
    variable integer "doFakeMouseSuccessOnly": default_value=5000, persistant=1, groups=Fake Mouse
  folder "Task Status" '
    variable integer "failure": default_value=0
    variable boolean "leverResult": default_value=0
    variable boolean "stimulusOn": default_value=0
    variable boolean "startCueOn": default_value=0
    variable integer "success": default_value=0
    variable integer "ignore": default_value=0
    variable boolean "trialStart": default_value=0
    variable float "pressTimestampMs": default_value=0, persistant=0
    variable float "actualHoldTimeMs": default_value=0, persistant=0
  folder "Online Display"
    variable integer "sync": default_value=0
  folder "Hardware variables"
    variable INTEGER "FIO1": default_value=0, scope=GLOBAL, editable=never
    variable boolean "MIO0": default_value=0, scope=GLOBAL, editable=never
    variable boolean "laserTrigger": default_value=0, scope=GLOBAL, persistant=0
    variable integer "strobedDigitalWord": default_value=0, scope=GLOBAL, persistant=0
    variable integer "juice": scope=GLOBAL, default_value=0, groups=Reward
    variable integer "sendLaserParams": scope=GLOBAL, default_value=0, persistant=0
    variable integer "sendSerialParams": default_value=0, persistant=0
    variable integer "counter": default_value=0, persistant=0
    variable integer "counter2": default_value=0, persistant=0
    variable integer "quadrature": default_value=0, scope=GLOBAL, editable=never, groups=Lever
    variable integer "leverThreshold": default_value=0, persistant=1, groups=Lever
  folder "Internal Variables"
    variable integer "tTrialStartMWTimestampMs": default_value=0, persistant=0
    variable boolean "tDoAllCorrects": default_value=0, persistant=0
    variable integer "tTotalReqHoldTimeMs": default_value=0
    variable integer "tTotalBaselineTimeMs": default_value=900
    variable integer "tTotalRewardTimeUs": default_value=0
    variable integer "tRandReqHoldTimeMs": default_value=0
    variable integer "tFakeMouseReactMs": default_value=0
    variable integer "tFakeMousePressMs": default_value=0
    variable integer "tFakeMouseReactFrames": default_value=0
    variable integer "tStartTrialWaitForPressTimeMs": default_value=0
    variable integer "consecCorrects": default_value=0
    variable integer "tConsecErrors": default_value=0, persistent=0
    variable integer "tempNCorrect": default_value=0, persistent=0
    variable integer "tConsecTimeoutStartTime": default_value=0, persistent=0
    variable integer "tNRewards": default_value=0
    variable integer "tInterRewardIntervalMs": default_value=0
    variable integer "tRewardAddPerMsHoldUs": default_value=0
    variable integer "tStimTurnedOn": default_value=0
    variable integer "tItiWaitTimeMs": default_value=0
    variable integer "tThisTrialStartTimeMs": default_value=0
    variable integer "tLastTrialStartTimeMs": default_value=0
    variable integer "lastActualHoldTimeMs": default_value=0
    variable integer "tempMs": default_value=0
    variable integer "tTempStimOdds": default_value=0, persistant=0
    variable integer "tStimulusNumber": default_value=0, persistant=0
    variable integer "tSvStimNumber": default_value=0, persistant=0
    variable float "tLaserPowerMw": default_value=0, persistant=0
    variable integer "tLaserDoLinearRamp": default_value=0, persistant=0
    variable integer "tLaserDoPulseTrain": default_value=0, persistant=0
    variable integer "tLaserRampLengthMs": default_value=0, persistant=0
    variable integer "tLaserPeakMaxMw": default_value=0, persistant=0
    variable float "tLaserBaselinePowerMw": default_value=0, persistant=0
    variable float "tBaseGratingContrast": default_value=0, persistant=0
    variable float "tBaseGratingDirectionDeg": default_value=0, persistant=0
    variable float "tGratingMaxContrastStep": default_value=0, persistant=0
    variable float "tGratingContrastStepsPerOctave": default_value=1, persistant=0
    variable float "tGratingMaxDirectionStepDeg": default_value=0, persistant=0
    variable float "tGratingDirectionStepsPerOctave": default_value=1, persistant=0
    variable float "tLaserPeakStepsPerOctave": default_value=1, persistant=0
    variable boolean "isFirstTrial": default_value=0, persistant=0
    variable boolean "isTooFast": default_value=0, persistant=0
    variable float "tGratingDirectionDeg": default_value=0, persistant=0
    variable float "tGratingContrast": default_value=0, persistant=0
    variable float "tGratingElevationDeg": default_value=0, persistant=0
    variable float "tGratingAzimuthDeg": default_value=0, persistant=0
    variable float "tGratingHeightDeg": default_value=0, persistant=0
    variable float "tGratingWidthDeg": default_value=0, persistant=0
    variable float "tGratingSpatialFreqCPD": default_value=0, persistant=0
    variable float "tGratingSpeedDPS": default_value=0, persistant=0
    variable integer "tGratingDurationMs": default_value=0, persistant=0
    variable integer "tDoNoStimulusChange": default_value=0, persistant=0
    variable integer "tUnexpectRewardNum": default_value=0, persistant=0
    variable integer "tITIUnexpectRewardNum": default_value=0, persistant=0
    variable float "tTrialLaserPowerMw": default_value=0, persistant=0
    variable float "tTrialLaserPowerMw_trigger": default_value=0, persistant=0
    variable float "tTrialLaserOnTimeMs": default_value=0, persistant=0
    variable float "tTrialLaserOffTimeMs": default_value=0, persistant=0
    variable integer "tBlock2TrialNumber": default_value=0, persistant=0
    <!-- frame conversion -->
    variable integer "tTotalReqHoldFrames": default_value=0, persistant=0
    variable integer "tTotalBaselineFrames": default_value=0, persistant=0
    variable integer "tItiWaitFrames": default_value=0, persistant=0
    variable integer "nFramesOn": default_value=0, persistant=1
    variable integer "nFramesTooFast": default_value=0, persistant=1
    variable integer "nFramesReact": default_value=0, persistant=1
    variable integer "nFramesEarlyTimeout": default_value=0, persistant=1
    variable integer "nFramesMissedTimeout": default_value=0, persistant=1
    <!-- counter variables -->
    variable integer "cTrialStart": default_value=0, persistant=0
    variable integer "cTrialEnd": default_value=0, persistant=0, groups=Counter
    variable integer "cItiStart": default_value=0, persistant=0
    variable integer "cLeverDown": default_value=0, persistant=0
    variable integer "cTargetOn": default_value=0, persistant=0
    variable integer "cLeverUp": default_value=0, persistant=0
    variable integer "cStartCueOn": default_value=0, persistant=0
    variable boolean "tRewardOmissionTrial": default_value=0, persistant=0
    variable integer "tOmissionRewardNum": default_value=0, persistant=0
    variable boolean "tRewardDelayTrial": default_value=0, persistant=0
    variable integer "tRewardDelayDurationMs": default_value=0, persistant=0
    variable boolean "tItiUnexpectedRewardTrial": default_value=0, persistant=0
    variable integer "rewardOmissionEveryN": default_value=0, persistant=0
    variable integer "rewardUnexpectEveryN": default_value=0, persistant=0
    variable integer "itiRewardUnexpectEveryN": default_value=0, persistant=0
    variable integer "NumRewardOmissionPer80": default_value=0, persistant=0
    variable integer "B2NumRewardOmissionPer80": default_value=0, persistant=0
    variable integer "tNStimAccepted": default_value=0, persistant=0
    variable selection "svStimNumber": values=0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79, selection=random_without_replacement, nsamples=80, sampling_method=samples
sounds "Sounds"
  sound wav_file "louderPressSound": path=wavs/louderFlatterPress.wav, amplitude=soundPressAmplitude
  sound wav_file "waitingForLeverSound": path=wavs/trialStart-F10e-short.wav, amplitude=soundTrialStartAmplitude
  sound wav_file "correctSound": path=wavs/shortCorrect.wav
  sound wav_file "incorrectSound": path=wavs/incorrectMouse.wav
  sound wav_file "rewardSound": path=wavs/shortCorrect.wav
  sound wav_file "trialStartSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/5kHz_.2s.wav, amplitude=soundStartCueAmplitude
  sound wav_file "targetSound200ms": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/5kHz_.2s.wav, amplitude=soundTargetAmplitude
  sound wav_file "targetSound767ms": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/5kHz_.767s.wav, amplitude=soundTargetAmplitude
stimuli "Stimuli"
  stimulus blank_screen "background": color=0.5,0.5,0.5
  stimulus drifting_grating "base_grating": direction=0, starting_phase=gratingStartingPhaseDeg, spatial_frequency=tGratingSpatialFreqCPD, speed=tGratingSpeedDPS, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=tGratingWidthDeg, y_size=tGratingHeightDeg, x_position=tGratingAzimuthDeg, y_position=tGratingElevationDeg, rotation=tBaseGratingDirectionDeg, alpha_multiplier=tBaseGratingContrast
  stimulus drifting_grating "target_grating": direction=0, starting_phase=gratingStartingPhaseDeg, spatial_frequency=tGratingSpatialFreqCPD, speed=tGratingSpeedDPS, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=tGratingWidthDeg, y_size=tGratingHeightDeg, x_position=tGratingAzimuthDeg, y_position=tGratingElevationDeg, rotation=tGratingDirectionDeg, alpha_multiplier=tGratingContrast
experiment "Experiment"
  protocol "JuiceOnHoldProtocol": selection=sequential, nsamples=1, sampling_method=cycles
    <!-- init actions before running trials after any press of start -->
    action queue_stimulus: stimulus=background
    action if: condition=doVisualStim
      action if: condition=doITIStim
        action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
        action play_dynamic_stimulus "start": stimulus=base_grating
    action update_stimulus_display "-"
    action assignment "consecCorrects = 0": variable=consecCorrects, value=0
    action assignment "tempNCorrect = 0": variable=tempNCorrect, value=0
    action assignment: variable=tConsecErrors, value=0
    action assignment "juice = 0": variable=juice, value=0
    action report: message=*** 1st Trial - LabJack init
    <!-- init actions run only on first trial after loading experiment -->
    action if: condition=success+ignore+failure == 0
      action report: message=**** First trial since experiment load - initializing
      action start_device_IO "Start IO Device": device=LabJackU6
      action assignment "reset counter": variable=counter, value=0
      action assignment: variable=tLastTrialStartTimeMs, value=-1
      action assignment: variable=tThisTrialStartTimeMs, value=-1
      action assignment: variable=lastActualHoldTimeMs, value=0
      action assignment: variable=isFirstTrial, value=1
      <!-- reset selection var -->
      action reset_selection: selection=svStimNumber
      action assignment: variable=tNStimAccepted, value=0
    trial "Trial 01": nsamples=10000, sampling_method=cycles, selection=sequential
      task_system "TS"
        task_system_state "Intertrial"
          action report: message=**** Initializing Trial
          action if: condition=success+ignore+failure > 0
            action assignment: variable=isFirstTrial, value=0
          action assignment: variable=tTrialStartMWTimestampMs, value=now()/1000
          <!-- integer valued ms timestamp -->
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          <!-- Transmit the trial timestamp so strobed code sequences are unique -->
          action assert: condition=tTrialStartMWTimestampMs <= 2147483648, message=tTrialStartMWTimestampMs is too large - should happen only after several days of running!?, stop_on_failure=1
          <!-- prevent overflow outside 2**31ms ~ 10 days - I don't know how to get unsigned casts in the XML -->
          <!-- encode trialStartTimestamp in bytes: 4 bytes: millions of seconds, 1000s, s, ms -->
          action assignment "Encode TimestampStart": variable=strobedDigitalWord, value=200
          action assignment "Encode TimestampEnd": variable=strobedDigitalWord, value=201
          action assignment "reset sound variable": variable=soundTargetAmplitude, value=0
          action assignment "Sync Matlab": variable=sync, value=1
          action assignment "Set trialStart": variable=trialStart, value=1
          action assignment "juice = 0": variable=juice, value=0
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment: variable=laserTrigger, value=0
          action assignment: variable=lastActualHoldTimeMs, value=actualHoldTimeMs
          action assignment: variable=experimentXmlTrialId, value=8
          action assignment: variable=tStimTurnedOn, value=0
          action assignment: variable=tDoNoStimulusChange, value=doNoStimulusChange
          action assignment: variable=tDoAllCorrects, value=doAllCorrects
          action assignment: variable=cTrialStart, value=counter
          action assignment: variable=tRewardDelayTrial, value=0
          action assignment: variable=tRewardDelayDurationMs, value=0
          action assignment "reset too fast time over": variable=isTooFast, value=1
          <!-- choose correct stimulus number based on odds; block2 tr number does not get assigned if ! doBlock2 -->
          action assignment: variable=tSvStimNumber, value=svStimNumber
          <!-- choose a value from selection var, 0-origin -->
          action assignment: variable=tTempStimOdds, value=0
          <!-- this variable exists only for code clarity below -->
          <!-- choose reward omission and unexpected reward randomly -->
          action if: condition=rewardOmissionPercent != 0
            action assignment: variable=rewardOmissionEveryN, value=round(100/rewardOmissionPercent)
          action if: condition=rewardUnexpectPercent != 0
            action assignment: variable=rewardUnexpectEveryN, value=round(100/rewardUnexpectPercent)
          action if: condition=itiRewardUnexpectPercent != 0
            action assignment: variable=itiRewardUnexpectEveryN, value=round(100/itiRewardUnexpectPercent)
          <!-- if block2 then determine the number of reward omission trials per block -->
          action if: condition=!doBlock2
            action assignment: variable=NumRewardOmissionPer80, value=round(((rewardOmissionPercent/100)*trPer80Level1))
            action assignment: variable=B2NumRewardOmissionPer80, value=0
          action if: condition=doBlock2 && !doBlock2SeparateOdds && !doBlock2SeparateReward
            action assignment: variable=NumRewardOmissionPer80, value=round(((rewardOmissionPercent/100)*trPer80Level1)/2)
            action assignment: variable=B2NumRewardOmissionPer80, value=NumRewardOmissionPer80
          action if: condition=doBlock2 && doBlock2SeparateOdds && !doBlock2SeparateReward
            action assignment: variable=NumRewardOmissionPer80, value=round((rewardOmissionPercent/100)*trPer80Level1)
            action assignment: variable=B2NumRewardOmissionPer80, value=round((block2RewardOmissionPercent/100)*block2TrPer80Level1)
          action if: condition=doBlock2 && !doBlock2SeparateOdds && doBlock2SeparateReward
            action assignment: variable=NumRewardOmissionPer80, value=round((rewardOmissionPercent/100)*trPer80Level1)
            action assignment: variable=B2NumRewardOmissionPer80, value=round((block2RewardOmissionPercent/100)*trPer80Level1)
          action if: condition=doBlock2 && doBlock2SeparateOdds && doBlock2SeparateReward
            action assignment: variable=NumRewardOmissionPer80, value=round((rewardOmissionPercent/100)*trPer80Level1)
            action assignment: variable=B2NumRewardOmissionPer80, value=round((block2RewardOmissionPercent/100)*block2TrPer80Level1)
          <!-- if only doing block1 then choose reward omission trial in blocks of size rewardOmissionEveryN -->
          action if: condition=!doBlock2
            action if: condition=rewardOmissionPercent != 0 && (success % rewardOmissionEveryN == 0)  
              action assignment: variable=tOmissionRewardNum, value=(int)(disc_rand(1,rewardOmissionEveryN)) + success
              action report: message=the tOmissionRewardNum is $tOmissionRewardNum
            action if: condition=success==tOmissionRewardNum
              action assignment: variable=tRewardOmissionTrial, value=1
            action if: condition=success!=tOmissionRewardNum
              action assignment: variable=tRewardOmissionTrial, value=0
          action if: condition=rewardUnexpectPercent != 0 && ((success+ignore+failure+1) % (rewardUnexpectEveryN) == 0) 
            action assignment: variable=tUnexpectRewardNum, value=(int)(disc_rand(0,rewardUnexpectEveryN-1)) + (success+ignore+failure)
            action report: message=the tUnexpectRewardNum is $tUnexpectRewardNum
          action if: condition=rewardUnexpectPercent != 0 && success+ignore+failure == 0 
            action assignment: variable=tUnexpectRewardNum, value=(int)(disc_rand(0,rewardUnexpectEveryN-1))
            action report: message=the tUnexpectRewardNum is $tUnexpectRewardNum
          action if: condition=itiRewardUnexpectPercent != 0 && ((success+ignore+failure+1) % (rewardUnexpectEveryN) == 0) 
            action assignment: variable=tITIUnexpectRewardNum, value=(int)(disc_rand(0,itiRewardUnexpectEveryN-1)) + (success+ignore+failure)
            action report: message=the tITIUnexpectRewardNum is $tITIUnexpectRewardNum
          action if: condition=itiRewardUnexpectPercent != 0 && success+ignore+failure == 0 
            action assignment: variable=tITIUnexpectRewardNum, value=(int)(disc_rand(0,itiRewardUnexpectEveryN-1))
            action report: message=the tITIUnexpectRewardNum is $tITIUnexpectRewardNum
          <!-- level 1 -->
          action if: condition=(tSvStimNumber < (trPer80Level1))
            <!-- if this is a block1 trial or if doBlock2SeparateOdds==0 -->
            action assignment: variable=tStimulusNumber, value=0
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) > (((int)trPer80Level1-1)/2))
              action if: condition=doBlock2 && tBlock2TrialNumber == 0
                action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= NumRewardOmissionPer80-1)
              action if: condition=doBlock2 && tBlock2TrialNumber
                action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= B2NumRewardOmissionPer80-1)
          <!-- level 1b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber) > ((int)trPer80Level1-1))
            action assignment: variable=tRewardOmissionTrial, value=0
            action assignment: variable=tStimulusNumber, value=0
            action if: condition=doBlock2 && tBlock2TrialNumber == 0
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= NumRewardOmissionPer80-1)
              action report: message=the tSvStimNumber is $tSvStimNumber and the tTempStimOdds is $tTempStimOdds
            action if: condition=doBlock2 && tBlock2TrialNumber
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= B2NumRewardOmissionPer80-1)
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level1
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level1
          <!-- level 2 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level2))
            action assignment: variable=tStimulusNumber, value=1
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) > (((int)trPer80Level2-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=doBlock2 && tBlock2TrialNumber == 0
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= NumRewardOmissionPer80-1)
            action if: condition=doBlock2 && tBlock2TrialNumber
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= B2NumRewardOmissionPer80-1)
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level2
          <!-- level 2b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level2))
              action assignment: variable=tStimulusNumber, value=1
              action assignment: variable=tBlock2TrialNumber, value=1
            <!-- <action type="if" condition="doBlock2 &amp;&amp; tBlock2TrialNumber == 0">
                            <action type="assignment" variable="tRewardOmissionTrial" value="(int)((tSvStimNumber-tTempStimOdds) &lt;= NumRewardOmissionPer80-1)"/>
                          </action>
                          <action type="if" condition="doBlock2 &amp;&amp; tBlock2TrialNumber">
                            <action type="assignment" variable="tRewardOmissionTrial" value="0"/>  
                          </action> -->
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level2
          <!-- level3 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level3))
            action assignment: variable=tStimulusNumber, value=2
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) > (((int)trPer80Level3-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=doBlock2 && tBlock2TrialNumber == 0
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= NumRewardOmissionPer80-1)
            action if: condition=doBlock2 && tBlock2TrialNumber
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= B2NumRewardOmissionPer80-1)
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level3
          <!-- level3b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level3))
              action assignment: variable=tStimulusNumber, value=2
              action assignment: variable=tBlock2TrialNumber, value=1
            <!-- <action type="if" condition="doBlock2 &amp;&amp; tBlock2TrialNumber == 0">
                            <action type="assignment" variable="tRewardOmissionTrial" value="(int)((tSvStimNumber-tTempStimOdds) &lt;= NumRewardOmissionPer80-1)"/>
                          </action>
                          <action type="if" condition="doBlock2 &amp;&amp; tBlock2TrialNumber">
                            <action type="assignment" variable="tRewardOmissionTrial" value="0"/>  
                          </action> -->
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level3
          <!-- level4 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level4))
            action assignment: variable=tStimulusNumber, value=3
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) > (((int)trPer80Level4-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=doBlock2 && tBlock2TrialNumber == 0
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= NumRewardOmissionPer80-1)
            action if: condition=doBlock2 && tBlock2TrialNumber
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= B2NumRewardOmissionPer80-1)
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level4
          <!-- level4b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level4))
              action assignment: variable=tStimulusNumber, value=3
              action assignment: variable=tBlock2TrialNumber, value=1
            <!-- <action type="if" condition="doBlock2 &amp;&amp; tBlock2TrialNumber == 0">
                            <action type="assignment" variable="tRewardOmissionTrial" value="(int)((tSvStimNumber-tTempStimOdds) &lt;= NumRewardOmissionPer80-1)"/>
                          </action>
                          <action type="if" condition="doBlock2 &amp;&amp; tBlock2TrialNumber">
                            <action type="assignment" variable="tRewardOmissionTrial" value="0"/>  
                          </action> -->
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level4
          <!-- level5 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level5))
            action assignment: variable=tStimulusNumber, value=4
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) > (((int)trPer80Level5-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=doBlock2 && tBlock2TrialNumber == 0
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= NumRewardOmissionPer80-1)
            action if: condition=doBlock2 && tBlock2TrialNumber
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= B2NumRewardOmissionPer80-1)
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level5
          <!-- level5b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level5))
              action assignment: variable=tStimulusNumber, value=4
              action assignment: variable=tBlock2TrialNumber, value=1
            <!-- <action type="if" condition="doBlock2 &amp;&amp; tBlock2TrialNumber == 0">
                            <action type="assignment" variable="tRewardOmissionTrial" value="(int)((tSvStimNumber-tTempStimOdds) &lt;= NumRewardOmissionPer80-1)"/>
                          </action>
                          <action type="if" condition="doBlock2 &amp;&amp; tBlock2TrialNumber">
                            <action type="assignment" variable="tRewardOmissionTrial" value="0"/>  
                          </action> -->
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level5
          <!-- level6 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level6))
            action assignment: variable=tStimulusNumber, value=5
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) > (((int)trPer80Level6-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=doBlock2 && tBlock2TrialNumber == 0
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= NumRewardOmissionPer80-1)
            action if: condition=doBlock2 && tBlock2TrialNumber
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= B2NumRewardOmissionPer80-1)
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level6
          <!-- level6b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level6))
              action assignment: variable=tStimulusNumber, value=5
              action assignment: variable=tBlock2TrialNumber, value=1
            <!-- <action type="if" condition="doBlock2 &amp;&amp; tBlock2TrialNumber == 0">
                            <action type="assignment" variable="tRewardOmissionTrial" value="(int)((tSvStimNumber-tTempStimOdds) &lt;= NumRewardOmissionPer80-1)"/>
                          </action>
                          <action type="if" condition="doBlock2 &amp;&amp; tBlock2TrialNumber">
                            <action type="assignment" variable="tRewardOmissionTrial" value="0"/>  
                          </action> -->
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level6
          <!-- level7 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level7))
            action assignment: variable=tStimulusNumber, value=6
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) > (((int)trPer80Level7-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=doBlock2 && tBlock2TrialNumber == 0
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= NumRewardOmissionPer80-1)
            action if: condition=doBlock2 && tBlock2TrialNumber
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= B2NumRewardOmissionPer80-1)
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level7
          <!-- level7b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level7))
              action assignment: variable=tStimulusNumber, value=6
              action assignment: variable=tBlock2TrialNumber, value=1
            <!-- <action type="if" condition="doBlock2 &amp;&amp; tBlock2TrialNumber == 0">
                            <action type="assignment" variable="tRewardOmissionTrial" value="(int)((tSvStimNumber-tTempStimOdds) &lt;= NumRewardOmissionPer80-1)"/>
                          </action>
                          <action type="if" condition="doBlock2 &amp;&amp; tBlock2TrialNumber">
                            <action type="assignment" variable="tRewardOmissionTrial" value="0"/>  
                          </action> -->
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level7
          <!-- level8 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level8))
            action assignment: variable=tStimulusNumber, value=7
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) > (((int)trPer80Level8-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=doBlock2 && tBlock2TrialNumber == 0
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= NumRewardOmissionPer80-1)
            action if: condition=doBlock2 && tBlock2TrialNumber
              action assignment: variable=tRewardOmissionTrial, value=(int)((tSvStimNumber-tTempStimOdds) <= B2NumRewardOmissionPer80-1)
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level8
          <!-- level8b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level8))
              action assignment: variable=tStimulusNumber, value=7
              action assignment: variable=tBlock2TrialNumber, value=1
            <!-- <action type="if" condition="doBlock2 &amp;&amp; tBlock2TrialNumber == 0">
                            <action type="assignment" variable="tRewardOmissionTrial" value="(int)((tSvStimNumber-tTempStimOdds) &lt;= NumRewardOmissionPer80-1)"/>
                          </action>
                          <action type="if" condition="doBlock2 &amp;&amp; tBlock2TrialNumber">
                            <action type="assignment" variable="tRewardOmissionTrial" value="0"/>  
                          </action> -->
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level8
          <!-- error checking -->
          action assert: stop_on_failure=1, condition=tTempStimOdds == 80, message=stim odds must sum to 80!  (sum now is $tTempStimOdds )
          <!-- stop_on_failure=0: allow slop so it can be changed while running -->
          action if: condition=doBlock2 && !doBlock2SeparateOdds
            action assert: condition=trPer80Level1-(((int)trPer80Level1)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level2-(((int)trPer80Level2)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level3-(((int)trPer80Level3)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level4-(((int)trPer80Level4)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level5-(((int)trPer80Level5)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level6-(((int)trPer80Level6)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level7-(((int)trPer80Level7)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level8-(((int)trPer80Level8)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
          <!-- Choose block 2 trial type -->
          action if: condition=doBlock2
            action assert: stop_on_failure=1, condition=(block2DoGratingAppearance+block2DoRampLength+block2DoRampVTrain+block2DoTrialLaser) == 1, message=must select exactly one of block2Do variables!
            <!-- trial numbers assigned above in switch statement.  Note equal probability
                               - if more complicated odds wanted; add a set of block2 level odds -->
            <!-- grating appearance for block 2 -->
            action if: condition=block2DoGratingAppearance
              action assert: condition=doVisualStim == 1, stop_on_failure=1, message=doVisualStim must be 1 for block2DoGratingAppearance == 1
              <!-- same for both types of block2 trials -->
              action assignment: variable=tTrialLaserPowerMw_trigger, value=trialLaserPowerMw
              action if: condition=tBlock2TrialNumber == 0
                action assignment: variable=tBaseGratingDirectionDeg, value=baseGratingDirectionDeg
                action assignment: variable=tBaseGratingContrast, value=baseGratingContrast
                action assignment: variable=tGratingMaxContrastStep, value=gratingMaxContrastStep
                action assignment: variable=tGratingContrastStepsPerOctave, value=gratingContrastStepsPerOctave
                action assignment: variable=tGratingMaxDirectionStepDeg, value=gratingMaxDirectionStepDeg
                action assignment: variable=tGratingDirectionStepsPerOctave, value=gratingDirectionStepsPerOctave
                action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
                action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
                action assignment: variable=tGratingHeightDeg, value=gratingHeightDeg
                action assignment: variable=tGratingWidthDeg, value=gratingWidthDeg
                action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
                action assignment: variable=tGratingSpeedDPS, value=gratingSpeedDPS
                action assignment: variable=tGratingDurationMs, value=gratingDurationMs
                action assignment: variable=soundTargetAmplitude, value=block1ToneAmplitude
                <!-- allow different tone amplitude in block 1 and 2 -->
              action if: condition=tBlock2TrialNumber == 1
                action assignment: variable=tBaseGratingDirectionDeg, value=block2BaseGratingDirectionDeg
                action assignment: variable=tBaseGratingContrast, value=block2BaseGratingContrast
                action assignment: variable=tGratingMaxContrastStep, value=block2GratingMaxContrastStep
                action assignment: variable=tGratingContrastStepsPerOctave, value=block2GratingContrastStepsPerOctave
                action assignment: variable=tGratingMaxDirectionStepDeg, value=block2GratingMaxDirectionStepDeg
                action assignment: variable=tGratingDirectionStepsPerOctave, value=block2GratingDirectionStepsPerOctave
                action assignment: variable=tGratingElevationDeg, value=block2GratingElevationDeg
                action assignment: variable=tGratingAzimuthDeg, value=block2GratingAzimuthDeg
                action assignment: variable=tGratingHeightDeg, value=block2GratingHeightDeg
                action assignment: variable=tGratingWidthDeg, value=block2GratingWidthDeg
                action assignment: variable=tGratingSpatialFreqCPD, value=block2GratingSpatialFreqCPD
                action assignment: variable=tGratingSpeedDPS, value=block2GratingSpeedDPS
                action assignment: variable=tGratingDurationMs, value=block2GratingDurationMs
                action assignment: variable=soundTargetAmplitude, value=block2ToneAmplitude
            <!-- ramp length for block 2 -->
            action if: condition=block2DoRampLength
              action assert: condition=doLaserStim == 1, stop_on_failure=1, message=doLaserStim must be 1 for block2DoRampLength == 1
              action assignment: variable=tLaserBaselinePowerMw, value=laserBaselinePowerMw
              action if: condition=tBlock2TrialNumber == 0
                action assignment: variable=tLaserRampLengthMs, value=laserRampLengthMs
                action assignment: variable=tLaserPeakMaxMw, value=laserPeakMaxMw
              action if: condition=tBlock2TrialNumber == 1
                action assignment: variable=tLaserRampLengthMs, value=block2RampLengthMs2
                action assignment: variable=tLaserPeakMaxMw, value=block2RampLengthPowerMaxMw2
            <!-- ramp v train for block 2 -->
            action if: condition=block2DoRampVTrain
              action assert: condition=doLaserStim == 1, stop_on_failure=1, message=doLaserStim must be 1 for block2DoRampLength == 1
              action assert: condition=laserDoLinearRamp+laserDoPulseTrain == 0, stop_on_failure=1, message=when block2 controls ramp v. train, set laserDoLinearRamp/PulseTrain both to 0
              action if: condition=tBlock2TrialNumber == 0
                <!-- ramp -->
                action assignment: variable=tLaserDoLinearRamp, value=1
                action assignment: variable=tLaserRampLengthMs, value=laserRampLengthMs
                action assignment: variable=tLaserDoPulseTrain, value=0
                action assignment: variable=tLaserPeakMaxMw, value=laserPeakMaxMw
                action assignment: variable=tLaserPeakStepsPerOctave, value=laserPeakStepsPerOctave
                action assignment: variable=tLaserBaselinePowerMw, value=block2RvtRampBaselinePowerMw
              action if: condition=tBlock2TrialNumber == 1
                <!-- train -->
                action assignment: variable=tLaserDoLinearRamp, value=0
                action assignment: variable=tLaserRampLengthMs, value=laserRampLengthMs
                action assignment: variable=tLaserDoPulseTrain, value=1
                action assignment: variable=tLaserPeakMaxMw, value=block2RvtTrainPowerMaxMw
                action assignment: variable=tLaserPeakStepsPerOctave, value=block2RvtTrainStepsPerOctave
                action assignment: variable=tLaserBaselinePowerMw, value=block2RvtTrainBaselinePowerMw
              <!-- in both cases: for paired vision -->
              action if: condition=doVisualStim == 1
                action assignment: variable=tBaseGratingDirectionDeg, value=baseGratingDirectionDeg
                action assignment: variable=tBaseGratingContrast, value=baseGratingContrast
                action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
                action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
                action assignment: variable=tGratingHeightDeg, value=gratingHeightDeg
                action assignment: variable=tGratingWidthDeg, value=gratingWidthDeg
                action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
                action assignment: variable=tGratingSpeedDPS, value=gratingSpeedDPS
                action assignment: variable=tGratingDurationMs, value=gratingDurationMs
                action assignment: variable=tGratingMaxContrastStep, value=gratingMaxContrastStep
                action assignment: variable=tGratingContrastStepsPerOctave, value=gratingContrastStepsPerOctave
                action assignment: variable=tGratingMaxDirectionStepDeg, value=gratingMaxDirectionStepDeg
                action assignment: variable=tGratingDirectionStepsPerOctave, value=gratingDirectionStepsPerOctave
            <!-- using trial laser for block 2 -->
            action if: condition=block2DoTrialLaser
              action assert: condition=!doLaserStim, stop_on_failure=1, message=When using trialLaser, doLaserStim must be off
              action assignment: variable=tGratingDurationMs, value=gratingDurationMs
              action if: condition=tBlock2TrialNumber == 0
                <!-- off -->
                action assignment: variable=tTrialLaserPowerMw_trigger, value=trialLaserPowerMw
                action assignment: variable=tTrialLaserOnTimeMs, value=trialLaserOnTimeMs
                action assignment: variable=tTrialLaserOffTimeMs, value=trialLaserOffTimeMs
                action assignment: variable=tGratingMaxContrastStep, value=gratingMaxContrastStep
                action assignment: variable=tGratingContrastStepsPerOctave, value=gratingContrastStepsPerOctave
                action assignment: variable=tGratingMaxDirectionStepDeg, value=gratingMaxDirectionStepDeg
                action assignment: variable=tGratingDirectionStepsPerOctave, value=gratingDirectionStepsPerOctave
              action if: condition=tBlock2TrialNumber == 1
                <!-- on -->
                action assignment: variable=tTrialLaserPowerMw_trigger, value=block2TrialLaserPowerMw
                action assignment: variable=tTrialLaserOnTimeMs, value=block2TrialLaserOnTimeMs
                action assignment: variable=tTrialLaserOffTimeMs, value=block2TrialLaserOffTimeMs
                action assignment: variable=tGratingMaxContrastStep, value=block2GratingMaxContrastStep
                action assignment: variable=tGratingContrastStepsPerOctave, value=block2GratingContrastStepsPerOctave
                action assignment: variable=tGratingMaxDirectionStepDeg, value=block2GratingMaxDirectionStepDeg
                action assignment: variable=tGratingDirectionStepsPerOctave, value=block2GratingDirectionStepsPerOctave
              <!-- in both cases -->
              action assignment: variable=tBaseGratingDirectionDeg, value=baseGratingDirectionDeg
              action assignment: variable=tBaseGratingContrast, value=baseGratingContrast
              action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
              action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
              action assignment: variable=tGratingHeightDeg, value=gratingHeightDeg
              action assignment: variable=tGratingWidthDeg, value=gratingWidthDeg
              action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
              action assignment: variable=tGratingSpeedDPS, value=gratingSpeedDPS
              action assignment: variable=tGratingDurationMs, value=gratingDurationMs
          <!-- end doBlock2 -->
          <!-- if no block 2 randomization, just set all affected vars to fixed values -->
          action if: condition=! doBlock2
            action assignment: variable=soundTargetAmplitude, value=block1ToneAmplitude
            action assignment: variable=soundTargetAmplitude, value=block1ToneAmplitude
            action assignment: variable=tBaseGratingDirectionDeg, value=baseGratingDirectionDeg
            action assignment: variable=tBaseGratingContrast, value=baseGratingContrast
            action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
            action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
            action assignment: variable=tGratingHeightDeg, value=gratingHeightDeg
            action assignment: variable=tGratingWidthDeg, value=gratingWidthDeg
            action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
            action assignment: variable=tGratingSpeedDPS, value=gratingSpeedDPS
            action assignment: variable=tGratingDurationMs, value=gratingDurationMs
            action assignment: variable=tLaserRampLengthMs, value=laserRampLengthMs
            action assignment: variable=tLaserPeakMaxMw, value=laserPeakMaxMw
            action assignment: variable=tLaserPeakStepsPerOctave, value=laserPeakStepsPerOctave
            action assignment: variable=tGratingMaxContrastStep, value=gratingMaxContrastStep
            action assignment: variable=tGratingContrastStepsPerOctave, value=gratingContrastStepsPerOctave
            action assignment: variable=tGratingMaxDirectionStepDeg, value=gratingMaxDirectionStepDeg
            action assignment: variable=tGratingDirectionStepsPerOctave, value=gratingDirectionStepsPerOctave
            action assignment: variable=tLaserDoLinearRamp, value=laserDoLinearRamp
            action assignment: variable=tLaserDoPulseTrain, value=laserDoPulseTrain
            action assignment: variable=tLaserBaselinePowerMw, value=laserBaselinePowerMw
            action assignment: variable=tTrialLaserPowerMw_trigger, value=trialLaserPowerMw
            action assignment: variable=tTrialLaserOnTimeMs, value=trialLaserOnTimeMs
            action assignment: variable=tTrialLaserOffTimeMs, value=trialLaserOffTimeMs
            <!-- !doBlock2 error checking -->
            action assert: stop_on_failure=1, condition=!doLaserStim || (laserDoLinearRamp || laserDoPulseTrain), message=When doLaserStim, ramp or train must be set
          <!-- !doBlock2 -->
          <!-- choose hold time this trial -->
          action if: condition=!doGeomHoldDist
            <!-- default, uniform -->
            action assignment: variable=tRandReqHoldTimeMs, value=rand(0,randReqHoldMaxMs)
          action if: condition=doGeomHoldDist
            action assignment: variable=tRandReqHoldTimeMs, value=geom_rand(1.0/geomHoldMeanMs, randReqHoldMaxMs)
          action assignment: variable=tTotalReqHoldTimeMs, value=fixedReqHoldTimeMs + tRandReqHoldTimeMs
          action assignment: variable=tTotalReqHoldFrames, value=ceil((tTotalReqHoldTimeMs/1000)*frameRateHz)
          action assignment: variable=tTotalBaselineFrames, value=ceil((tTotalBaselineTimeMs/1000)*frameRateHz)
          <!-- choose laser power -->
          action if: condition=doLaserStim
            action assignment: variable=tLaserPowerMw, value=tLaserPeakMaxMw / pow(2, 1.0*tStimulusNumber/tLaserPeakStepsPerOctave)
            <!-- adjust from baseline -->
            action if: condition=tLaserBaselinePowerMw > 0
              action assignment: variable=tLaserPowerMw, value=tLaserPowerMw + tLaserBaselinePowerMw
            action report: message=Laser power this trial is $tLaserPowerMw
            action assignment: variable=tTrialLaserPowerMw, value=0
            action assert: condition=tTrialLaserPowerMw == 0, stop_on_failure=1, message=bug: tLaserPowerMw and tTrialLaserPowerMw != 0
          action if: condition=!doLaserStim
            action assignment: variable=tLaserPowerMw, value=0
          <!-- choose vis stim ori/dir -->
          action if: condition=doVisualStim
            action if: condition=doOriDetect
              action assignment: variable=tGratingDirectionDeg, value=tBaseGratingDirectionDeg + (tGratingMaxDirectionStepDeg / (pow(2, tStimulusNumber/tGratingDirectionStepsPerOctave)))
              action assignment: variable=tGratingContrast, value=tBaseGratingContrast
              action report: message=Grating direction this trial is $tGratingDirectionDeg
            action if: condition=doContrastDetect
              action assignment: variable=tGratingContrast, value=tBaseGratingContrast + (tGratingMaxContrastStep / (pow(2, 1.0*tStimulusNumber/tGratingContrastStepsPerOctave)))
              action assignment: variable=tGratingDirectionDeg, value=tBaseGratingDirectionDeg
              action report: message=Grating contrast this trial is $tGratingContrast
          action if: condition=!doVisualStim
            action assignment: variable=tGratingContrast, value=0
            action assignment: variable=tGratingDirectionDeg, value=0
          action assert: condition=tGratingContrast >= 0, stop_on_failure=1, message=No negative contrasts allowed
          action assert: condition=abs(tBaseGratingDirectionDeg-tGratingDirectionDeg) <= 360, stop_on_failure=1, message=Maximum direction step is 360 degrees
          <!-- send laser params to controller -->
          action if: condition=doLaserStim
            action assignment "Send laser params to controller": variable=sendLaserParams, value=1
            action assignment "Send laser params to controller": variable=sendLaserParams, value=0
          <!-- lock down the min stimulus value to a fixed number if variable not negative -->
          <!-- initialize trial start/end times -->
          action if: condition=tThisTrialStartTimeMs == -1
            <!-- first trial, leave lasttime as -1 -->
            action assignment: variable=tLastTrialStartTimeMs, value=-1
          action if: condition=tThisTrialStartTimeMs != -1
            <!-- else -->
            <!-- later trials, copy this into last before setting this again below -->
            action assignment: variable=tLastTrialStartTimeMs, value=tThisTrialStartTimeMs
          action assignment: variable=tThisTrialStartTimeMs, value=now()/1000
          <!-- debug -->
          action report: message=tNStimAccepted == $tNStimAccepted, svStimN is $svStimNumber, tb2TrN is $tBlock2TrialNumber 
          action assignment "Calculate nFramesOn": variable=nFramesOn, value=ceil((tGratingDurationMs/1000)*frameRateHz)
          action assignment "Calculate nFramesTooFast": variable=nFramesTooFast, value=ceil((tooFastTimeMs/1000)*frameRateHz)
          action assignment "Calculate nFramesReact": variable=nFramesReact, value=ceil((reactTimeMs/1000)*frameRateHz)
          action assignment "Calculate nFramesEarlyTimeout": variable=nFramesEarlyTimeout, value=ceil((earlyTimeoutMs/1000)*frameRateHz)
          action assignment "Calculate nFramesMissedTimeout": variable=nFramesMissedTimeout, value=ceil((missedTimeoutMs/1000)*frameRateHz)
          <!-- compute ITI time -->
          <!-- initialize with a const value -->
          action if: condition=doRandItiTime == 0
            action assignment: variable=tItiWaitTimeMs, value=itiTimeMs
          action if: condition=doRandItiTime == 1
            action assignment: variable=tItiWaitTimeMs, value=disc_rand(itiRangeMinTimeMs/100, itiRangeMaxTimeMs/100)*100
          action report: message=-------The randomization of ITI is $tItiWaitTimeMs
          <!-- extend based on previous hold and max stim time, if asked for -->
          action if: condition=!isFirstTrial
            action if: condition=doExtendItiOnShortPrevTrial == 1
              action assignment: variable=tempMs, value=(fixedReqHoldTimeMs+randReqHoldMaxMs)-lastActualHoldTimeMs
              action if: condition=tempMs > 0
                <!-- add to ITI -->
                action assignment "-": variable=tItiWaitTimeMs, value=tItiWaitTimeMs+tempMs
          action if: condition=isFirstTrial
            action assignment: variable=tempMs, value=0
          action assignment: variable=tItiWaitFrames, value=ceil((tItiWaitTimeMs/1000)*frameRateHz)
          action start_timer "Start interTrialTimer": timer=interTrialTimer, duration=tItiWaitTimeMs, duration_units=ms
          action assignment "Log counter": variable=cItiStart, value=counter
          action run_python_file "Load script": path=L0.py
          <!-- run python code to turn laser off -->
          action assignment "Clear stimulusOn": variable=stimulusOn, value=0
          action assignment "Encode ItiStart": variable=strobedDigitalWord, value=6
          action if: condition=doLeverSolenoidAllTrials
            <!-- Turn on solenoid for ITI only if doLS is true, not if doLSErrorsOnly -->
            action assignment "lever Solenoid on": variable=MIO0, value=1
            action assignment "Encode LeverSolenoidOn": variable=strobedDigitalWord, value=12
          action if: condition=!doLeverSolenoidAllTrials
            action assignment: variable=MIO0, value=0
            action assignment "Encode LeverSolenoidOff": variable=strobedDigitalWord, value=13
          action report: message=In ITI, waiting for $tItiWaitTimeMs ms, then waiting for press
          <!-- if trialLaser, send params to controller -->
          action if: condition=tTrialLaserPowerMw_trigger > 0
            action assignment "Send laser params to controller": variable=sendLaserParams, value=1
            action assignment "Send laser params to controller": variable=sendLaserParams, value=0
            action assert: condition=tLaserPowerMw == 0, stop_on_failure=1, message=bug: tLaserPowerMw and tTrialLaserPowerMw_trigger > 0
            action assert: stop_on_failure=1, condition=(tTrialLaserOnTimeMs == 0 && tTrialLaserOffTimeMs == 0) || (tTrialLaserOnTimeMs > 0 && tTrialLaserOffTimeMs > 0), message=For constant trial laser, set on and off time to 0.  Otherwise on/off time must both be set
          <!-- start iti unexpected reward timer -->
          action if: condition=itiRewardUnexpectPercent !=0 && (success+ignore+failure) != tITIUnexpectRewardNum
            action assignment: variable=tItiUnexpectedRewardTrial, value=0
          action report: message=during ITI and wait for tItiWaitFrames to start
          transition conditional "if do unexpected reward during mid ITI, Go to itiReward": condition=itiRewardUnexpectPercent !=0 && (success+ignore+failure) == tITIUnexpectRewardNum && (counter >= (cItiStart + tItiWaitFrames/2)), target=itiReward
          transition conditional "if counter larger than tItiWaitFrames": condition=counter >= (cItiStart + tItiWaitFrames), target=StartTrial
        task_system_state "itiReward"
          action assignment: variable=tItiUnexpectedRewardTrial, value=1
          action assignment "Start reward": variable=juice, value=minRewardUs + ( tRewardAddPerMsHoldUs * tRandReqHoldTimeMs )
          action report: message=----- Unexpected Reward in ITI -----
          transition conditional "if counter larger than tItiWaitFrames": condition=counter >= (cItiStart + tItiWaitFrames), target=StartTrial
        task_system_state "StartTrial"
          action if "if doLeverSolenoid/ErrorsOnly": condition=doLeverSolenoidAllTrials || doLeverSolenoidOnMiss || doLeverSolenoidOnEarly
            <!-- Lower solenoid at beginning of trial for any solenoid -->
            action assignment "lever Solenoid off": variable=MIO0, value=0
            action assignment "Encode LeverSolenoidOff": variable=strobedDigitalWord, value=13
          action assignment: variable=tStartTrialWaitForPressTimeMs, value=now()/1000.0
          action assignment "Encode StartTrialWaitForPress": variable=strobedDigitalWord, value=7
          action if "if fakeMouse": condition=soundTrialStartAmplitude>0
            action play_sound "Play waitingForLeverSound": sound=waitingForLeverSound
          <!-- fake mouse calculations -->
          action if "if fakeMouse": condition=!doLever
            action assignment: variable=tFakeMousePressMs, value=rand(0, fakeMouseMaxPressMs)
          transition conditional "if first trial, counter = 20 and ITI over": condition=counter >= (cItiStart + tItiWaitFrames) && isFirstTrial && counter > 19, target=WaitForLeverPress
          transition conditional "if not first trial, counter still going and ITI over": condition=counter >= (cItiStart + tItiWaitFrames) && !isFirstTrial && counter > cLeverUp, target=WaitForLeverPress
          transition conditional "if not first trial, counter stopped": condition=!isFirstTrial && counter == cLeverUp, target=ExitTask
        task_system_state "ExitTask"
          action assert: stop_on_failure=1, condition=counter > cLeverUp, message=Not receiving triggers from microscope
        task_system_state "WaitForLeverPress"
          action if "if doLeverSolenoid/ErrorsOnly": condition=doLeverSolenoidAllTrials || doLeverSolenoidOnMiss || doLeverSolenoidOnEarly
            <!-- Lower solenoid at beginning of trial for any solenoid -->
            action assignment "lever Solenoid off": variable=MIO0, value=0
            action assignment "Encode LeverSolenoidOff": variable=strobedDigitalWord, value=13
          action assignment: variable=tStartTrialWaitForPressTimeMs, value=now()/1000.0
          action assignment "Encode StartTrialWaitForPress": variable=strobedDigitalWord, value=7
          action report: message=in WaitforLever Stage
          <!-- fake mouse calculations -->
          action if "if fakeMouse": condition=!doLever
            action assignment "Assign tFakeMouseReactFrames": variable=tFakeMouseReactFrames, value=rand(0, ceil((fakeMouseMaxReactMs/1000)*frameRateHz))
            action if "if doFakeMouseSuccess": condition=doFakeMouseSuccessOnly
              action assignment "Assign tFakeMouseReactMs": variable=tFakeMouseReactFrames, value=tTotalReqHoldFrames + nFramesTooFast + ceil(0.1*frameRateHz)
          transition conditional "If Lever Down, Go To TrialStimOn": condition=doLever && doAnalogLever == 0 && FIO1 == 1, target=HoldLever
          transition conditional "If Lever Down, Go To TrialStimOn": condition=doLever && doAnalogLever && (quadrature > leverThreshold), target=HoldLever
          transition conditional "If fakeMouse elapsed, go to TrialStimOn": condition=!doLever && ( (now()/1000.0)-tStartTrialWaitForPressTimeMs) > 100, target=HoldLever
          transition conditional "If waiting here too long (120s), go to TrialStimOn": condition=doLever && ( (now()/1000.0)-tStartTrialWaitForPressTimeMs) > 120*1000, target=HoldLever
        task_system_state "HoldLever"
          action assignment: variable=laserTrigger, value=1
          action if: condition=soundPressAmplitude>0
            action play_sound "p": sound=louderPressSound
          action assignment "leverResult = 1": variable=leverResult, value=1
          action assignment "set pressTimestampMs": variable=pressTimestampMs, value=now()/1000
          action assignment "Encode LeverPressStart": variable=strobedDigitalWord, value=3
          action assignment: variable=cLeverDown, value=counter
          action run_python_file "Load script": path=L1.py
          <!-- run python code to turn laser on -->
          action if: condition=doVisualStim
            action if: condition=!doITIStim
              action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
              action play_dynamic_stimulus "start": stimulus=base_grating
          action update_stimulus_display "-"
          <!-- turn on trial laser if requested -->
          action if: condition=tTrialLaserPowerMw_trigger > 0
            action assignment: variable=laserTrigger, value=1
            action assignment: variable=tTrialLaserPowerMw, value=tTrialLaserPowerMw_trigger
            action report: message=********* SENDING LASER TRIGGER *********
            action assignment "Encode LaserStimOn": variable=strobedDigitalWord, value=5
          action report "Report LeverDown": full_name=ReportDigital, message=LeverDown (need to hold for $tTotalReqHoldTimeMs + tooFastTime ms)
          transition conditional "If Lever Up, Go To EarlyRelease": condition=doAnalogLever==0 && FIO1 == 0 && doLever == 1, target=EarlyRelease
          transition conditional "If Lever Up, Go To EarlyRelease": condition=doAnalogLever && quadrature < leverThreshold && doLever == 1, target=EarlyRelease
          transition conditional "If Fake mouse frames elapsed, Go To EarlyRelease": condition=(counter >= (cLeverDown + tFakeMouseReactFrames)) && !doLever, target=EarlyRelease
          transition conditional "Trial Start Cue Presentation": condition=counter  >= cLeverDown + tTotalBaselineFrames && doStartCueSound, target=StartCueOn
          transition conditional "Target Stimulus Presentation": condition=counter  >= cLeverDown + tTotalReqHoldFrames && !doStartCueSound, target=StimOn
        <!-- startCueStimulus on -->
        task_system_state "StartCueOn"
          action assignment "Set StartCueOn": variable=startCueOn, value=1
          action report "Report StartCueOn": full_name=ReportDigital, message=Start Cue On (still holding; signaling release ok)
          action assignment: variable=cStartCueOn, value=counter
          action if: condition=rewardUnexpectPercent !=0 && (success+ignore+failure) == tUnexpectRewardNum
            action assignment: variable=tDoNoStimulusChange, value=1
          action assignment: variable=soundTrialStartAmplitude, value=soundTrialStartAmplitude
          <!-- modify amplitude manually each trial -->
          action report "Report": message=soundAmplitude = $soundTargetAmplitude
          action if: condition=doStartCueSound && soundStartCueAmplitude>0
            action play_sound: sound=trialStartSound
          transition conditional "Target Stimulus Presentation": condition=counter  >= cLeverDown + tTotalReqHoldFrames, target=StimOn
        task_system_state "StimOn"
          action assignment "Set StimulusOn": variable=stimulusOn, value=1
          action report "Report StimOn": full_name=ReportDigital, message=StimOn (still holding; signaling release ok)
          action assignment: variable=cTargetOn, value=counter
          action if: condition=rewardUnexpectPercent !=0 && (success+ignore+failure) == tUnexpectRewardNum
            action assignment: variable=tDoNoStimulusChange, value=1
          <!-- vis stim on -->
          action if: condition=doVisualStim && tDoNoStimulusChange == 0
            action dequeue_stimulus "Dequeue Stimulus": stimulus=base_grating
            action update_stimulus_display "Update Display"
            action queue_stimulus "Queue Stimulus": stimulus=target_grating
            action play_dynamic_stimulus "start": stimulus=target_grating
            action update_stimulus_display "Update Display"
            action assignment "Encode VisStimOn": variable=strobedDigitalWord, value=4
          action report "Report": message=soundAmplitude = $soundTargetAmplitude
          action if: condition=soundDuration200ms && soundTargetAmplitude>0
            action play_sound: sound=targetSound200ms
          action if: condition=soundDuration767ms && soundTargetAmplitude>0
            action play_sound: sound=targetSound767ms
          <!-- laser stim on -->
          action if: condition=doLaserStim
            action assignment: variable=laserTrigger, value=1
            action assignment "Encode LaserStimOn": variable=strobedDigitalWord, value=5
          <!-- update display, finalize variables -->
          action update_stimulus_display "Update Display"
          action assignment: variable=tStimTurnedOn, value=1
          transition conditional "If Lever Up, Go To EarlyRelease": condition=doAnalogLever==0 && FIO1 == 0 && doLever == 1, target=EarlyRelease
          transition conditional "If Lever Up, Go To EarlyRelease": condition=doAnalogLever && (quadrature < leverThreshold) && doLever == 1, target=EarlyRelease
          transition conditional "If Fake mouse frames elapsed, Go To EarlyRelease": condition=(counter >= (cLeverDown + tFakeMouseReactFrames)) && !doLever, target=EarlyRelease
          transition conditional "if nFramesTooFast elapsed, go to React": condition=(counter >= (cTargetOn + nFramesTooFast)), target=React
          transition conditional "Dequeue Visual Stimulus": condition=(counter >= (cTargetOn + nFramesOn)), target=EndTrialStimOff
        task_system_state "EndTrialStimOff"
          action dequeue_stimulus: stimulus=target_grating
          action update_stimulus_display
          action if: condition=doITIStim==1
            action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
            action play_dynamic_stimulus "start": stimulus=base_grating
          action update_stimulus_display
          action assignment: variable=tStimTurnedOn, value=0
          transition conditional "If Lever Up, and too fast Go To EarlyRelease": condition=doAnalogLever==0 && FIO1 == 0 && doLever == 1 && isTooFast == 1, target=EarlyRelease
          transition conditional "If Lever Up, and too fast Go To EarlyRelease": condition=doAnalogLever && (quadrature < leverThreshold) && doLever == 1 && isTooFast == 1, target=EarlyRelease
          transition conditional "If fake mouse timer expired, and too fast Go To EarlyRelease": condition=(counter >= (cLeverDown + tFakeMouseReactFrames)) && !doLever && isTooFast == 1, target=EarlyRelease
          transition conditional "If Lever Up, and too fast expired Go To Reward": condition=doAnalogLever==0 && FIO1 == 0 && doLever == 1 && isTooFast == 0, target=Reward
          transition conditional "If Lever Up, and too fast expired Go To Reward": condition=doAnalogLever && (quadrature < leverThreshold) && doLever == 1 && isTooFast == 0, target=Reward
          transition conditional "If fake mouse timer expired, and too fast expired Go To Reward": condition=(counter >= (cLeverDown + tFakeMouseReactFrames))&& !doLever && isTooFast == 0, target=Reward
          transition conditional "if tooFastTimer expired, go to React": condition=(isTooFast==1) && (counter >= (cTargetOn + nFramesTooFast)), target=React
          transition conditional "Go to Missed": condition=(counter >= (cTargetOn + nFramesReact)), target=Missed
        task_system_state "React"
          action assignment "set too fast time over": variable=isTooFast, value=0
          transition conditional "If Unexpected Reward": condition=!doLever && rewardUnexpectPercent!=0 && (success+ignore+failure) == tDoNoStimulusChange, target=Reward
          transition conditional "If Lever Up": condition=doAnalogLever==0 && FIO1 == 0 && doLever == 1, target=Reward
          transition conditional "If Lever Up": condition=doAnalogLever && (quadrature < leverThreshold) && doLever == 1, target=Reward
          transition conditional "If Lever Up": condition=!doLever && (counter >= (cLeverDown + tFakeMouseReactFrames)), target=Reward
          transition conditional "Go to Missed": condition=(counter >= (cTargetOn + nFramesReact)), target=Missed
          transition conditional "Dequeue Visual Stimulus": condition=(counter >= (cTargetOn + nFramesOn)), target=EndTrialStimOff
        task_system_state "EarlyRelease"
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment: variable=cLeverUp, value=counter
          action assignment "Encode LeverReleaseEarly": variable=strobedDigitalWord, value=8
          action assignment: variable=actualHoldTimeMs, value= (now()/1000) - pressTimestampMs
          action report "Report": message=actualHoldTimeMs = $actualHoldTimeMs
          action report "ReportEarlyRelease": full_name=ReportDigital, message=** Early Release **
          <!-- update running variables -->
          action assignment "failure++": variable=failure, value=failure+1
          action assignment "consecCorrects = 0": variable=consecCorrects, value=0
          action assignment: variable=tConsecErrors, value=tConsecErrors+1
          action if: condition=doIncorrectSound == 1
            action play_sound "Play incorrectSound": sound=incorrectSound
          <!-- reject stim selection -->
          action reject_selections: selection=svStimNumber
          action if "if doLeverSolenoid/Early": condition=doLeverSolenoidAllTrials || doLeverSolenoidOnEarly
            action assignment "lever Solenoid on": variable=MIO0, value=1
            action assignment "Encode LeverSolenoidOn": variable=strobedDigitalWord, value=12
          action dequeue_stimulus "Dequeue Stimulus 0": stimulus=target_grating
          action update_stimulus_display "Update Display"
          action if: condition=doITIStim==1
            action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
            action play_dynamic_stimulus "start": stimulus=base_grating
            action update_stimulus_display "Update Display"
          action if: condition=doITIStim==0
            action dequeue_stimulus "Dequeue Stimulus": stimulus=base_grating
            action update_stimulus_display "Update Display"
          action update_stimulus_display "Update Display"
          transition conditional "Early timeout elapsed": condition=counter >= (cLeverUp + nFramesEarlyTimeout), target=EndTrial
        task_system_state "Reward"
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment: variable=cLeverUp, value=counter
          action if: condition=success+ignore+failure == tUnexpectRewardNum
            action report: message=~~~~~Unexpected Reward~~~~~for total trial.
          action if "if doLeverSolenoid/ErrorsOnly": condition=doLeverSolenoidAllTrials || doLeverSolenoidOnMiss || doLeverSolenoidOnEarly
            <!-- Raise solenoid after correct trial for any solenoid -->
            action assignment "lever Solenoid On": variable=MIO0, value=1
            action assignment "Encode LeverSolenoidOn": variable=strobedDigitalWord, value=13
          action assignment "Encode LeverReleaseCorrect": variable=strobedDigitalWord, value=9
          <!-- accept stim selection -->
          action accept_selections: selection=svStimNumber
          action assignment: variable=tNStimAccepted, value=tNStimAccepted + 1
          <!-- update selection variable -->
          action if: condition=tNStimAccepted >= 80
            action reset_selection: selection=svStimNumber
            action assignment: variable=tNStimAccepted, value=0
          action if: condition=tNStimAccepted < 80
            action next_selection: selection=svStimNumber
          action assignment: variable=actualHoldTimeMs, value= (now()/1000) - pressTimestampMs
          action report "Report": message=actualHoldTimeMs = $actualHoldTimeMs
          action report "Report Reward": full_name=ReportDigital, message=** Success
          <!-- update running variables -->
          action assignment "success++": variable=success, value=success+1
          action assignment: variable=tConsecErrors, value=0
          action assignment "Assign reward": variable=tTotalRewardTimeUs, value=minRewardUs + ( tRewardAddPerMsHoldUs * tRandReqHoldTimeMs )
          action assignment "summing corrects": variable=tempNCorrect, value=tempNCorrect+1
          <!-- assign reward size based on elapsed rand if rampdown == 0 -->
          action if: condition=doBlock2 == 1
            action if: condition=doBlock2SeparateReward == 0
              action assignment "Compute tRewardAddPerMsHoldUs": variable=tRewardAddPerMsHoldUs, value=(maxRewardUs - minRewardUs) / ( randReqHoldMaxMs )
              action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=minRewardUs + ( tRewardAddPerMsHoldUs * tRandReqHoldTimeMs )
            action if: condition=doBlock2SeparateReward == 1
              action if: condition=tBlock2TrialNumber == 0
                action assignment "Compute tRewardAddPerMsHoldUs": variable=tRewardAddPerMsHoldUs, value=(maxRewardUs - minRewardUs) / ( randReqHoldMaxMs )
                action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=minRewardUs + ( tRewardAddPerMsHoldUs * tRandReqHoldTimeMs )
              action if: condition=tBlock2TrialNumber == 1
                action assignment "Compute tRewardAddPerMsHoldUs": variable=tRewardAddPerMsHoldUs, value=(block2MaxRewardUs - block2MinRewardUs) / ( randReqHoldMaxMs )
                action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=block2MinRewardUs + ( tRewardAddPerMsHoldUs * tRandReqHoldTimeMs )
          <!-- give reward on every N corrects -->
          action if: condition=tempNCorrect < rewardEveryNCorrect
            action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=0
          action if: condition=tempNCorrect == rewardEveryNCorrect
            action assignment "rezero tempNCorrect": variable=tempNCorrect, value=0
          <!-- scale based on consec corrects -->
          action if "if consecCorrects < max": condition=consecCorrects < maxConsecCorrects
            action assignment "consecCorrects++": variable=consecCorrects, value=consecCorrects+1
          action assignment "set tNRewards": variable=tNRewards, value=consecCorrects
          action dequeue_stimulus "Dequeue Stimulus 2": stimulus=target_grating
          action if: condition=doITIStim==1
            action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
            action play_dynamic_stimulus "start": stimulus=base_grating
          action update_stimulus_display "Update Display"
          transition direct "Always Go to GiveReward": target=GiveReward
        task_system_state "GiveReward"
          action assignment "tNRewards--": variable=tNRewards, value=tNRewards-1
          action if: condition=rewardDelayPercent != 0 && tNRewards > -1
            action assignment: variable=tRewardDelayTrial, value=(int)(disc_rand(0,100) < rewardDelayPercent)
            action report: message=the tRewardDelayTrial is $tRewardDelayTrial
            action if: condition=tRewardDelayTrial != 0
              action assignment: variable=tRewardDelayDurationMs, value=RewardDelayDurationMs
          transition conditional "if rewards remain, go to SingleReward (note must be -1)": condition=tNRewards > -1 && tRewardDelayTrial == 0, target=SingleReward
          transition conditional "if rewards remain, go to DelayReward (note must be -1)": condition=tNRewards > -1 && tRewardDelayTrial != 0, target=DelayReward
          transition direct "Always Go to PRP": target=PostRewardPause
        task_system_state "PostRewardPause"
          action start_timer "StartTimer": timer=postRewardTimer, duration=postRewardMs, duration_units=ms
          transition timer_expired: target=PossibleEndTimeout, timer=postRewardTimer
        task_system_state "DelayReward"
          action start_timer "StartTimer": timer=DelayRewardTimer, duration=tRewardDelayDurationMs, duration_units=ms
          action report: message=Delay Reward for $tRewardDelayDurationMs ms.
          transition timer_expired: target=SingleReward, timer=DelayRewardTimer
        task_system_state "SingleReward"
          action assignment "interRewardInterval minimum to juiceTime": variable=tInterRewardIntervalMs, value=interRewardIntervalMs + ( tTotalRewardTimeUs / 1000 )
          action start_timer "Start interRewardIntervalTimer": timer=interRewardIntervalTimer, duration=tInterRewardIntervalMs, duration_units=ms
          action if: condition=tRewardOmissionTrial
            action report: message=~~~~~Omitted Reward~~~~~for $success success trial.
          action if: condition=!tRewardOmissionTrial
            action assignment "Start reward": variable=juice, value=tTotalRewardTimeUs
          action assignment "Encode Reward": variable=strobedDigitalWord, value=10
          action if: condition=doRewardSound == 1
            action play_sound "Play reward sound": sound=rewardSound
          action if: condition=tempNCorrect == 0
            action report "Report": message=juice = $juice
          action if: condition=tempNCorrect > 0
            action if: condition=tempNCorrect < rewardEveryNCorrect
              action report "Report": message=juice = $juice, $tempNCorrect correct: need $rewardEveryNCorrect
          transition timer_expired "If interRewardIntervalTimer expired, go to GiveReward": target=GiveReward, timer=interRewardIntervalTimer
        task_system_state "Missed"
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment "Encode LeverNoReleaseMiss": variable=strobedDigitalWord, value=11
          action assignment: variable=cLeverUp, value=counter
          action assignment: variable=actualHoldTimeMs, value= (now()/1000) - pressTimestampMs
          action report "Report": message=actualHoldTimeMs = $actualHoldTimeMs
          action assignment "ignore++": variable=ignore, value=ignore + 1
          action assignment "consecCorrects = 0": variable=consecCorrects, value=0
          action assignment: variable=tConsecErrors, value=tConsecErrors+1
          action report "Report 4": full_name=ReportDigital, message=** Ignored react stimulus
          action if: condition=doIncorrectSound == 1
            action play_sound "Play incorrectSound 2": sound=incorrectSound
          <!-- accept stim selection -->
          action accept_selections: selection=svStimNumber
          action assignment: variable=tNStimAccepted, value=tNStimAccepted + 1
          <!-- update selection variable -->
          action if: condition=tNStimAccepted >= 80
            action reset_selection: selection=svStimNumber
            action assignment: variable=tNStimAccepted, value=0
          action if: condition=tNStimAccepted < 80
            action next_selection: selection=svStimNumber
          action if "if doLeverSolenoid/ErrorsOnly": condition=doLeverSolenoidAllTrials || doLeverSolenoidOnMiss
            action assignment "lever Solenoid on": variable=MIO0, value=1
            action assignment "Encode LeverSolenoidOn": variable=strobedDigitalWord, value=12
          action dequeue_stimulus "Dequeue Stimulus 1": stimulus=target_grating
          action if: condition=doITIStim==1
            action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
            action play_dynamic_stimulus "start": stimulus=base_grating
          action update_stimulus_display "Update Display"
          transition conditional "Missed timeout elapsed": condition=counter >= (cLeverUp + nFramesMissedTimeout), target=EndTrial
        task_system_state "PossibleEndTimeout"
          <!-- do timeout if too many recent errors:
                           use a state rather than a wait action because states are interruptible -->
          action if: condition=tConsecErrors >= nConsecErrorsCauseTimeout
            action report: message=***!!*** $consecErrorTimeoutS s timeout after $tConsecErrors consecutive errors
            action start_timer: timer=consecErrorTimer, duration=consecErrorTimeoutS, duration_units=s
            action if: condition=doSolenoidOnTimeout==1
              action assignment "lever Solenoid on": variable=MIO0, value=1
          transition conditional "- bypass timer checking if no timeout requested": condition=tConsecErrors < nConsecErrorsCauseTimeout, target=EndTrial
          transition timer_expired: target=EndTrial, timer=consecErrorTimer
        task_system_state "EndTrial"
          action assignment: variable=laserTrigger, value=0
          <!-- disable trigger no matter if it went high or not -->
          action assignment: variable=tTrialLaserPowerMw, value=0
          action assignment: variable=cTrialEnd, value=counter
          action dequeue_stimulus "Dequeue Stimulus 0": stimulus=target_grating
          action update_stimulus_display "Update Stimulus"
          action if: condition=doITIStim == 0
            action dequeue_stimulus "Dequeue Stimulus 0": stimulus=base_grating
            action update_stimulus_display "Update Stimulus"
          action assignment "End Matlab Sync": variable=sync, value=0
          <!-- allow two trials after each timeout is over -->
          action if: condition=tConsecErrors == nConsecErrorsCauseTimeout
            action assignment: variable=tConsecErrors, value=nConsecErrorsCauseTimeout-2
          action assignment "Encode END": variable=strobedDigitalWord, value=85
          action assignment "Encode END": variable=strobedDigitalWord, value=85
          action assignment "Encode END": variable=strobedDigitalWord, value=85
          <!-- trigger serial param dump to cyberkinetics -->
          action assignment "Send serial params": variable=sendSerialParams, value=1
          action assignment "Send serial params": variable=sendSerialParams, value=0
          transition yield "return to parent task system"
    action dequeue_stimulus: stimulus=base_grating
    action update_stimulus_display "Update Stimulus"
