
//
// I/O Devices
//

iodevice/labjacku6 LabJackU6 (
    pulse_duration = juice
    pulse_on = juice
    lever1 = FIO1
    lever1_solenoid = MIO0
    laser_trigger = laserTrigger
    optic_device = optic_device
    strobed_digital_word = strobedDigitalWord
    counter = counter
    do2led = do2led
    led_seq = led_seq
    LED_duration = LED_durationMS
    led1_status = led1_status
    led2_status = led2_status
    do_wheelspeed = DoWheelSpeed
    ws_durationUS = speedIntervalUS
    wheel_speed = wheelSpeed
    doCB = doCerebellarStim
    quadrature = quadrature
    )
//<iodevice type="stimulus_display" tag="Stimulus Display" background_color="0.5, 0.5, 0.5"/>
//background color, range 0-1
fake_monkey FakeMonkey (spike_rate = 10)
serverside_conduit 'Server-side Event Conduit' ()

//
// Variables
//

var DoWheelSpeed = (bool)(1) (
        persistant = 1
        )
var speedIntervalUS = (float)(100000)
// creating variables 
group 'Behavioral Control' {
    var doWheelSpeed = (bool)(1) (persistant = 1)
    var speedIntervalMS = (float)(100) (persistant = 1)
    var optic_device = 'led'
    var experimentXmlTrialId = 8 (persistant = 1)
    // n.b. it is forcibly set each trial below 
    var subjectNum = 999


}
group 'Hardware Variables' {
    var FIO1 = 0
    var MIO0 = (bool)(0)
    var laserTrigger = (bool)(0)
    var strobedDigitalWord = 0
    var juice = 0
    var counter = 0
    var wheelSpeed = (float)(0)
    var LED_durationMS = (float)(0)
    var led1_status = (bool)(0)
    var led2_status = (bool)(0)
    var led_seq = [1,1,1,2]
    var quadrature = 0
    var doCerebellarStim = (bool)(0) (
        persistant = 1
        groups = 'Task Type'
        )
    var do2led = (bool)(0)
}

group 'Stimuli Variables' {
    var index = 'DEFAULT' (scope = local)
    var frameRateHz = 30 (persistant = 1)
    var xSize = 1000 (persistant = 1)
    var ySize = 1000 (persistant = 1)
    var xPosition = 0.0 (persistant = 1)
    var yPosition = 0.0 (persistant = 1)
    var fractGrat = 0 (persistant = 1)
    var gratingType = 'sinusoid' (persistant = 1)
    var gratingContrast = 1 (persistant = 1)
    var gratingDirectionDeg = 0 (persistant = 1)
    var gratingSpatialFreqCPD = 0.02 (persistant = 1)
    var gratingSpatialFreqStepN = 5 (persistant = 1)
    var gratingSpatialFreqStepLog = 2 (persistant = 1)
    var numImages = 5 (persistant = 1) // TODO: update when change stim
    var maskType = 'gaussian' (persistant = 1)
    var maskMean = 0.1 (persistant = 1)
    var maskStd = 0.3 (persistant = 1) 
    var maskEdge = 0.125 (persistant = 1)
    }
group 'Photodiode Variables' {    
    var doPhotodiode = (bool)(1) (persistant = 1)
    var photoStimulusContrast = (float)(0) (persistant = 1)
    var photoStimulusAzimuth = (int)(47) (persistant = 1)
    var photoStimulusElevation = -25 (persistant = 1)
    var photoStimulusWidth = (int)(10.0) (persistant = 1)
    var photoStimulusHeight = (int)(10.0) (persistant = 1)
    var photoMaskSpatialFreq = (float)(0) (persistant = 1)
}
group 'Trial Variables' {
    var isiTimeMs = (float)(250) (persistant = 1)
    var randIsiTimeStart = (float)(250) (persistant = 1)
    var randIsiTimeStep = (float)(250) (persistant = 1)
    var randIsiTimeInterval = (float)(4) (persistant = 1)
    var itiTimeMs = (float)(2000) (persistant = 1)
    var stimOnTimeMs = (float)(500) (persistant = 1)
    var stimOne = (float)(0) (persistant = 1)
    var stimTwo = (float)(0) (persistant = 1)
    var stimOneOffChance = 0
    var stimList = [1, 2, 3, 4, 5] (persistant = 1) // this get rewritten by stimgroup.py - just here to initialize
    var setList = ['grat_SF6_allen_nat8'] (persistant = 1) // stimgroup.py input setlist to get stimlist
    var tNStimAccepted = 0
    var tNStim2Accepted = 0	
    var tempGrat = 0
    selection svStimNumber (
        values = 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32, 33, 34, 35, 36, 37, 38, 39, 40, 41, 42, 43, 44, 45, 46, 47, 48, 49, 50, 51, 52, 53, 54, 55, 56, 57, 58, 59, 60, 61, 62, 63, 64, 65, 66, 67, 68, 69, 70, 71, 72, 73, 74, 75, 76, 77, 78, 79 // svstimnumber is 0-based indexing, bc it's the index number you select from the image list
        
        // TODO: update when change stim. if new set of img, write into stimgroups.py
        selection = random_without_replacement
        //selection = sequential_ascending
        )
    selection svStimNumber2 (
        values = 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32, 33, 34, 35, 36, 37, 38, 39, 40, 41, 42, 43, 44, 45, 46, 47, 48, 49, 50, 51, 52, 53, 54, 55, 56, 57, 58, 59, 60, 61, 62, 63, 64, 65, 66, 67, 68, 69, 70, 71, 72, 73, 74, 75, 76, 77, 78, 79 // svstimnumber is 0-based indexing, bc it's the index number you select from the image list
        
        // TODO: update when change stim. if new set of img, write into stimgroups.py
        selection = random_without_replacement
        //selection = sequential_ascending
        )	

}
group 'Task Variables' {
    var doStimTwo = (bool)(0) (persistant = 1)
    var doRandIsiTime = (bool)(0) (persistant = 1)
    var doRepeatStimOne = (bool)(0) (persistant = 1)
    var doRepeatStimTwo = (bool)(0) (persistant = 1)
    var doRandStimOne = (bool)(0) (persistant = 1)
    var doRandStimTwo = (bool)(0) (persistant = 1)
    var doSameStims = (bool)(0) (persistant = 1)
    var doStimOneOffChance = (bool)(0) (persistant = 1)
    var doRandSF = (bool)(0) (persistant = 1)
}
group 'Internal Variables' {
    var sync = 0
    var ntrials = 1
    var cItiStart = 0
    var cStimOneOn = 0
    var cStimOneOff = 0
    var cStimTwoOn = 0
    var cStimTwoOff = 0
    var tisiTimeMs = (float)(500)
    var tstimOne = (float)(0)
    var tstimTwo = (float)(0)
    var tisiTimeFrames = (float)(500)
    var titiTimeFrames = (float)(500)
    var tstimOnTimeFrames = (float)(500)
    var	tTempStim = 0
    var	tTempStim2 = 0
    var tDoGratingStim = 0
    var tGratingSpatialFreqCPD = 0
}

//
// Sounds
//


//
// Stimuli
//

stimulus_group images {
    // load image stimuli 
    range_replicator (
        from = 1 // always 1-based indexing, if meaningful img start from 1.png (and 0.png is a gray background)
        to = 6 // update when using new paradigm. value should be n_img. TODO: update when change stim
        step = 1
        variable = index
        ) {
        image_file image_${index} (
            path = 'Image/${index}.png'
            x_size = xSize
            y_size = ySize
            x_position = xPosition
            y_position = yPosition
            deferred = explicit
            )
        }
}
drifting_grating grating (
    direction = gratingDirectionDeg
    starting_phase = 0
    spatial_frequency = tGratingSpatialFreqCPD
    speed = 0
    grating_type = gratingType
    x_size = xSize
    x_position = xPosition
    y_position = yPosition
    alpha_multiplier = gratingContrast
    dest_blend_factor = zero
    autoplay = true
    )

// makes gaussian mask for non-masked stim images, by making a rectangle with a hole in the center
layer gray_surround { // live_queue_stimulus (gray_surround) after drawing image stim1
    rectangle (
        color = 0.5, 0.5, 0.5 // gray, same color as background
        x_size = xSize
        y_size = ySize
        x_position = xPosition
        y_position = yPosition
        )
    mask transparency_alpha_mask (
        mask = maskType
        std_dev = maskStd
        mean = maskMean
        edge_width = maskEdge
        x_size = xSize
        y_size = ySize
        x_position = xPosition
        y_position = yPosition
        inverted = true // inverted so that the hole is transparent, showing the stimulus image beneath; while the surrounding is opaque and blocks the image edges
        )
}

// create photodiode stimuli 

rectangle photoDiodeBlack (
    x_size = photoStimulusWidth
    y_size = photoStimulusHeight
    x_position = photoStimulusAzimuth
    y_position = photoStimulusElevation
    color = 0.0, 0.0, 0.0
    )
rectangle photoDiodeWhite (
    x_size = photoStimulusWidth
    y_size = photoStimulusHeight
    x_position = photoStimulusAzimuth
    y_position = photoStimulusElevation
    alpha_multiplier = 1
    color = 256.0, 256.0, 256.0
    )

//
// Filters
//


//
// Optimizers
//


//
// Protocols
//

protocol 'New Protocol' {
    start_device_io (LabJackU6)
    report ('**** First trial since experiment load ****')
    counter = 0
    ntrials = 0
    reset_selection (svStimNumber)
    tNStimAccepted = 0
    tNStim2Accepted = 0
    trial 'Trial 01' (nsamples = 2500) {
        task 'Trial Start' {
            state Initialization {
                // initializing before trial 
                report (Initializing)
                run_python_file ('stimGroups.py')
                sync = 1
                tisiTimeMs = isiTimeMs
                tstimOne = stimOne
                tstimTwo = stimTwo
                // do wheel speed 
                if (doWheelSpeed == 1 && ntrials < 1) {
                    doCerebellarStim = 0
                    DoWheelSpeed = doWheelSpeed
                    speedIntervalUS = speedIntervalMS*1000
                }
                if (doRandIsiTime) {
                    tisiTimeMs = randIsiTimeStart + disc_rand(0, randIsiTimeInterval - 1) * randIsiTimeStep
                }

               // choosing image or grating trial
               tempGrat = rand(0,1)
               if (tempGrat <= fractGrat) {
                tDoGratingStim = 1
                }
                if (tempGrat > fractGrat) {
                tDoGratingStim = 0
                }
               // setting images based on task variables 
                if (doRandStimOne) {
                    tTempStim = svStimNumber % size(stimList)

                report('tTempStim is $tTempStim')
	  	    tstimOne = tTempStim 
                }
                if (doRandStimTwo) {
                    tTempStim2 = svStimNumber2 % size(stimList)
	  	    tstimTwo = tTempStim2
                }
                if (doSameStims) {
                    tstimTwo = tstimOne
                }
                if (doStimOneOffChance && disc_rand(1, 100) <= stimOneOffChance) {
                    tstimOne = 0
                }
                // loading images 
                load_stimulus (images[tstimOne])
                wait (
                    duration = 0.1
                    duration_units = s
                    )
                load_stimulus (images[tstimTwo])
                wait (
                    duration = 0.1
                    duration_units = s
                    )

                if (doRandSF) {
                    tTempStim = svStimNumber % gratingSpatialFreqStepN
                    tGratingSpatialFreqCPD = gratingSpatialFreqCPD * pow(gratingSpatialFreqStepLog,tTempStim)
                    }
                if (!doRandSF) {
                    tGratingSpatialFreqCPD = gratingSpatialFreqCPD
                } 

                if (tDoGratingStim){
                    tstimOne = 0
                    tstimTwo = 0 
                    }     
                if (!tDoGratingStim){
                    tGratingSpatialFreqCPD = 0
                    }  

                titiTimeFrames = ceil((itiTimeMs/1000)*frameRateHz)
                tisiTimeFrames = ceil((tisiTimeMs/1000)*frameRateHz)
                tstimOnTimeFrames = ceil((stimOnTimeMs/1000)*frameRateHz)
                live_queue_stimulus (photoDiodeBlack)
                update_stimulus_display ()
                goto (Iti)
            }
            state Iti {
                report (Iti)
                cItiStart = counter
                goto (
                    target = StimOneOn
                    when = counter >= (cItiStart + titiTimeFrames) && ntrials < 1 && counter > 19
                    )
                goto (
                    target = StimOneOn
                    when = counter >= (cItiStart + titiTimeFrames) && ntrials > 0
                    )
            }
            state StimOneOn {
                ntrials = ntrials + 1
                if (!tDoGratingStim) {
                    queue_stimulus (images[tstimOne])
                    }
                if (tDoGratingStim) {
                    queue_stimulus (grating)
                }    
                if (maskType == 'gaussian') {
                    live_queue_stimulus (gray_surround) // draw masked rectangle after stim1 to be in the front
                }
                live_queue_stimulus (photoDiodeWhite)
                update_stimulus_display ()
                cStimOneOn = counter
                report (StimOneOn)
                goto (
                    target = StimOneOff
                    when = counter >= (cStimOneOn + tstimOnTimeFrames)
                    )
            }
            state StimOneOff {
                report (StimOneOff)
                dequeue_stimulus (images[tstimOne])
                dequeue_stimulus (grating)
                dequeue_stimulus (gray_surround)
                dequeue_stimulus (photoDiodeWhite)
                update_stimulus_display ()
                cStimOneOff = counter
                goto (
                    target = StimTwoOn
                    when = counter >= (cStimOneOff + tisiTimeFrames)
                    )
            }
            state StimTwoOn {
                if (doStimTwo) {
                    if (!tDoGratingStim) {
                        queue_stimulus (images[tstimTwo])
                        }
                    if (tDoGratingStim) {
                        queue_stimulus (grating)
                        }    
                    if (maskType == 'gaussian') {
                        live_queue_stimulus (gray_surround)
                    }
                    live_queue_stimulus (photoDiodeWhite)
                    update_stimulus_display ()
                    report (StimTwoOn)
                }
                cStimTwoOn = counter
                goto (
                    target = StimTwoOff
                    when = counter >= (cStimTwoOn + tstimOnTimeFrames)
                    )
            }
            state StimTwoOff {
                report (StimTwoOff)
                dequeue_stimulus (images[tstimTwo])
                dequeue_stimulus (grating)
                dequeue_stimulus (gray_surround)
                dequeue_stimulus (photoDiodeWhite)
                update_stimulus_display ()
                cStimTwoOff = counter
                unload_stimulus (images[tstimOne])
                unload_stimulus (images[tstimTwo])
                goto (
                    target = 'End Trial'
                    when = counter  >= (cStimTwoOff + 3)
                    )
            }
            state 'End Trial' {
                // if (doWheelSpeed == 1) {
                //    DoWheelSpeed = 0
                //}
                sync = 0
                // accept stim selection 
                accept_selections (svStimNumber)
                tNStimAccepted = tNStimAccepted + 1
                // update selection variable 
                if (tNStimAccepted >= numImages) { // when a round of pseudo rand stimlist is completed, reset the counter to 0 
                    reset_selection (svStimNumber)
                    tNStimAccepted = 0
                }
                if (tNStimAccepted < numImages) {
                    next_selection (svStimNumber)
                }
		// accept stim2 selection 
                accept_selections (svStimNumber2)
                tNStim2Accepted = tNStim2Accepted + 1
                // update selection variable 
                if (tNStim2Accepted >= numImages) { // when a round of pseudo rand stimlist is completed, reset the counter to 0 
                    reset_selection (svStimNumber2)
                    tNStim2Accepted = 0
                }
                if (tNStim2Accepted < numImages) {
                    next_selection (svStimNumber2)
                }
                yield ()
            }
        }
    }
}
