monkeyml version=1.0
io_devices "IO Devices"
  iodevice LabJackU6 "LabJackU6": pulse_duration=juice, pulse_on=juice, lever1=FIO1, counter2=counter2, quadrature=quadrature, trial_laser_powerMw=tTrialLaserPowerMw, optic_device=optic_device, strobed_digital_word=strobedDigitalWord, counter=counter, do2led=do2led, led_seq=led_seq, LED_duration=LED_durationMS, led1_status=led1_status, led2_status=led2_status
  iodevice fake_monkey "FakeMonkey": spike_rate=10
  iodevice serverside_conduit "Server-side Event Conduit": resource_name=server_conduit
variables "Variables"
  folder "Behavioral Control"
    variable integer "subjectNum": default_value=0, persistant=1, groups=ExptStruct
    variable integer "experimentXmlTrialId": default_value=15, persistant=1
    variable string "optic_device": default_value=led
    variable boolean "doContrastDetect": default_value=0, persistant=1, groups=Task Control
    variable boolean "doContrastDiscrim": default_value=1, persistant=1, groups=Task Control
    variable float "frameRateHz": default_value=30, persistant=1, groups=Task Control
    variable integer "stationaryPeriodMs": default_value=0, persistant=1, groups=Task Control
    variable integer "stationaryThreshold": default_value=0, persistant=1, groups=Task Control
    variable boolean "doRandStationaryPeriod": default_value=0, persistant=1, groups=Task Control
    variable integer "randStationaryPeriodMs": default_value=0, persistant=1, groups=Task Control
    variable integer "itiTimeMs": default_value=5000, persistant=1, groups=Task Control
    variable integer "delayTimeMs": default_value=5000, persistant=1, groups=Task Control
    variable integer "reactionTimeMs": default_value=10000, persistant=1, groups=Task Control
    variable integer "tooFastTimeMs": default_value=150, persistant=1, groups=Task Control
    variable integer "stimOnTimeMs": default_value=0, persistant=1, groups=Task Control
    variable boolean "invertDirection": default_value=0, persistant=1, groups=Task Control
    variable boolean "doOnlyMaxDiff": default_value=0, persistant=1, groups=Task Control
    variable boolean "doEasyStart": default_value=1, persistant=1, groups=Task Control
    variable integer "easyStartTrialNumber": default_value=20, persistant=1, groups=Task Control
    variable boolean "doFeedbackMotion": default_value=0, persistant=1, groups=Feedback Motion
    variable integer "gratingTargetEccentricity": default_value=0, persistant=1, groups=Feedback Motion
    variable float "feedbackMotionSensitivity": default_value=0, persistant=1, groups=Feedback Motion
    variable boolean "doBlocks": default_value=0, persistant=1, groups=Block Control
    variable integer "blockLeftTrs": default_value=0, persistant=1, groups=Block Control
    variable integer "blockRightTrs": default_value=0, persistant=1, groups=Block Control
    variable boolean "doNoGo": default_value=0, persistant=1, groups=NoGo
    variable integer "noGoTrPer80": default_value=0, persistant=1, groups=NoGo
    variable integer "block2NoGoTrPer80": default_value=0, persistant=1, groups=NoGo
    variable boolean "doCorrectiveTrials": default_value=0, persistant=1, groups=Corrective Trials
    variable integer "rewardTimeUs": default_value=100000, persistant=1, groups=Reward
    variable integer "doRewardGrating": default_value=0, persistant=1, groups=Reward
    variable integer "rewardGratingStartingPhaseDeg": default_value=0, persistant=1, groups=Reward
    variable boolean "doConsecCorrectReward": default_value=0, persistant=1, groups=Reward
    variable integer "consecCorrRewardInterval": default_value=20000, persistant=1, groups=Reward
    variable integer "maxConsecCorrects": default_value=0, persistant=1, groups=Reward
    variable boolean "doRewardStaircase": default_value=0, persistant=1, groups=Reward
    variable integer "rewardStaircaseWindowWidth": default_value=20, persistant=1, groups=Reward
    variable integer "rewardStaircaseMinReward": default_value=20000, persistant=1, groups=Reward
    variable integer "rewardStaircaseMaxReward": default_value=200000, persistant=1, groups=Reward
    variable boolean "doRewardBias": default_value=0, persistant=1, groups=Reward
    variable float "lowProbRewardScale": default_value=1, persistant=1, groups=Reward
    variable float "highProbRewardScale": default_value=1, persistant=1, groups=Reward
    variable integer "ignoreTimeoutMs": default_value=5000, groups=Time-Outs, persistant=1
    variable integer "incorrectTimeoutMs": default_value=2000, groups=Time-Outs, persistant=1
    variable integer "nConsecErrorsCauseTimeout": default_value=10, persistant=1, groups=Timeouts
    variable integer "consecErrorTimeoutS": default_value=120, persistant=1, groups=Timeouts
    variable float "doMarkovLR": default_value=1, persistant=1, groups=Markov/Bias
    variable boolean "doBiasStaircase": default_value=0, persistant=1, groups=Markov/Bias
    variable boolean "doRandProb": default_value=0, persistant=1, groups=Markov/Bias
    variable integer "RandProbTrialperBlock": default_value=10, persistant=1, groups=Markov/Bias
    variable integer "RandProbPreBlockTrials": default_value=0, persistant=1, groups=Markov/Bias
    variable list "ProbList": default_value=0.1, 0.5, 0.9, persistant=1, groups=Markov/Bias
    variable boolean "doLowProbFirst": default_value=0, persistant=1, groups=Markov/Bias
    variable float "stimProbAvgLeft": default_value=0.5, persistant=1, groups=Markov/Bias
    variable float "stimProbAvgSwitch": default_value=0.5, persistant=1, groups=Markov/Bias
    variable float "tMarkovOdds": default_value=0, persistant=0
    variable float "a": default_value=0.5, persistant=0
    variable float "b": default_value=0.5, persistant=0
    variable float "tLeftBias": default_value=0.5, persistant=0
    variable boolean "doTestRobot": default_value=0, persistant=1, groups=Test Robot
    variable boolean "doAllCorrects": default_value=0, persistant=1, groups=Test Robot
    variable float "robotLeftProb": default_value=0, persistant=1, groups=Test Robot
    variable float "robotGoLeft": default_value=0, persistant=0, groups=Test Robot
    variable integer "maxRobotReactTimeMs": default_value=0, persistant=1, groups=Test Robot
    variable boolean "doBlock2": default_value=0, persistant=1, groups=Block2
    variable integer "tBlock2TrialNumber": default_value=0, persistant=0
  folder "Stimuli"
    variable float "startSoundVolume": default_value=1, persistant=1, groups=Sounds
    variable float "goSoundVolume": default_value=0, persistant=1, groups=Sounds
    variable float "correctSoundVolume": default_value=1, persistant=1, groups=Sounds
    variable float "incorrectSoundVolume": default_value=1, persistant=1, groups=Sounds
    variable float "whiteNoiseSoundVolume": default_value=0, persistant=1, groups=Sounds
    variable float "stationaryPeriodSoundVolume": default_value=0, persistant=1, groups=Sounds
    variable boolean "doGaussianMask": default_value=1, persistant=1, groups=Visual Stimuli
    variable boolean "doEllipseMask": default_value=0, persistant=1, groups=Visual Stimuli
    variable string "mask": default_value=none, persistant=1, groups=Visual Stimuli
    variable float "gratingMaxContrast": default_value=0, persistant=1, groups=Visual Stimuli
    variable float "gratingContrastSPO": default_value=1, persistant=1, groups=Visual Stimuli
    variable float "gratingMaxDiff": default_value=0, persistant=1, groups=Visual Stimuli
    variable float "gratingContrastDiffSPO": default_value=1, persistant=1, groups=Visual Stimuli
    variable boolean "doZeroConTrials": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "zeroConTrPer80": default_value=0, persistant=1, groups=Visual Stimuli
    variable float "gratingMaxDiameterDeg": default_value=40, persistant=1, groups=Visual Stimuli
    variable float "gratingDiameterSPO": default_value=1, persistant=1, groups=Visual Stimuli
    variable float "gratingMaxDiameterDiff": default_value=0, persistant=1, groups=Visual Stimuli
    variable float "gratingDiameterDiffSPO": default_value=1, persistant=1, groups=Visual Stimuli
    variable boolean "doRandSize": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "nRandSize": default_value=1, persistant=1, groups=Visual Stimuli
    variable integer "gratingEccentricityDeg": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "gratingElevationDeg": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "gratingDirectionDeg": default_value=0, persistant=0, groups=Visual Stimuli
    variable float "gratingSpatialFreqCPD": default_value=0.04, persistant=1, groups=Visual Stimuli
    variable integer "gratingSpeedDPS": default_value=50, persistant=1, groups=Visual Stimuli
    variable integer "gratingStartingPhaseDeg": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "trPer80Level1": default_value=80, persistant=1, groups=Visual Stimuli
    variable integer "trPer80Level2": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "trPer80Level3": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "trPer80Level4": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "trPer80Level5": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "trPer80Level6": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "trPer80Level7": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "trPer80Level8": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "doLeftSeparateOdds": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "leftTrPer80Level1": default_value=80, persistant=1, groups=Visual Stimuli
    variable integer "leftTrPer80Level2": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "leftTrPer80Level3": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "leftTrPer80Level4": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "leftTrPer80Level5": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "leftTrPer80Level6": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "leftTrPer80Level7": default_value=0, persistant=1, groups=Visual Stimuli
    variable integer "leftTrPer80Level8": default_value=0, persistant=1, groups=Visual Stimuli
    variable boolean "Do2LED": default_value=0, persistant=1, groups=Alternating LED
    variable list "LED_sequence": default_value=1,1,1,2, persistant=1, groups=Alternating LED
  folder "LED Variables"
    variable boolean "doLaserStim": default_value=0, persistant=1, groups=Laser
    variable integer "laserPeakMaxMw": default_value=20, persistant=1, groups=Laser
    variable integer "laserPeakStepsPerOctave": default_value=2, persistant=1, groups=Laser
    variable integer "laserOffPowerMw": default_value=0, persistant=1, groups=Laser
    variable integer "laserTransitionRampUpDownMs": default_value=2, persistant=1, groups=Laser
    variable integer "laserTransitionDoExpRamp": default_value=0, persistant=1, groups=Laser
    variable float "laserBaselinePowerMw": default_value=0, persistant=1, groups=Laser
    <!-- 0: do not do baseline -->
    variable float "laserBaselinePostStimTimeMs": default_value=500, persistant=1, groups=Laser
    variable integer "laserDoLinearRamp": default_value=1, persistant=1, groups=Laser
    variable integer "laserRampLengthMs": default_value=100, persistant=1, groups=Laser
    variable integer "laserRampExtraConstantLengthMs": default_value=0, persistant=1, groups=Laser
    variable integer "laserRampDoExpRamp": default_value=0, persistant=1, groups=Laser
    variable integer "laserDoPulseTrain": default_value=0, persistant=1, groups=Laser
    variable integer "laserPulseLengthMs": default_value=5, persistant=1, groups=Laser
    variable integer "laserPulsePeriodMs": default_value=20, persistant=1, groups=Laser
    variable integer "laserTrainLengthMs": default_value=100, persistant=1, groups=Laser
    variable integer "laserTrainRandomNPulses": default_value=0, persistant=1, groups=Laser
    variable integer "laserTrainRandomType": default_value=0, persistant=1, groups=Laser
    variable float "trialLaserPowerMw": default_value=0, persistant=1, groups=Laser
    variable float "trialLaserOnTimeMs": default_value=0, persistant=1, groups=Laser
    variable float "trialLaserOffTimeMs": default_value=0, persistant=1, groups=Laser
    variable integer "doBlock2SeparateOdds": default_value=0, persistant=1, groups=Block2
    variable integer "block2TrPer80Level1": default_value=80, persistant=1, groups=Block2
    variable integer "block2TrPer80Level2": default_value=0, persistant=1, groups=Block2
    variable integer "block2TrPer80Level3": default_value=0, persistant=1, groups=Block2
    variable integer "block2TrPer80Level4": default_value=0, persistant=1, groups=Block2
    variable integer "block2TrPer80Level5": default_value=0, persistant=1, groups=Block2
    variable integer "block2TrPer80Level6": default_value=0, persistant=1, groups=Block2
    variable integer "block2TrPer80Level7": default_value=0, persistant=1, groups=Block2
    variable integer "block2TrPer80Level8": default_value=0, persistant=1, groups=Block2
    variable integer "block2DoTrialLaser": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserPowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserOnTimeMs": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserOffTimeMs": default_value=0, persistant=1, groups=Block2 Laser
    variable integer "block2DoRampLength": default_value=0, persistant=1, groups=Block2 Laser
    variable integer "block2RampLengthMs2": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RampLengthPowerMaxMw2": default_value=0, persistant=1, groups=Block2 Laser
    variable integer "block2DoRampVTrain": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainPowerMaxMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainStepsPerOctave": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtRampBaselinePowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainBaselinePowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable integer "doBlock2SecondLaser": default_value=0, persistant=1, groups=Block2 Laser
    variable float "tLaserPowerMw": default_value=0, persistant=0
    variable integer "tLaserDoLinearRamp": default_value=0, persistant=0
    variable integer "tLaserDoPulseTrain": default_value=0, persistant=0
    variable integer "tLaserRampLengthMs": default_value=0, persistant=0
    variable integer "tLaserPeakMaxMw": default_value=0, persistant=0
    variable float "tLaserBaselinePowerMw": default_value=0, persistant=0
    variable float "tLaserPeakStepsPerOctave": default_value=1, persistant=0
    variable float "tTrialLaserPowerMw": default_value=0, persistant=0
    variable float "tTrialLaserPowerMw_trigger": default_value=0, persistant=0
    variable float "tTrialLaserOnTimeMs": default_value=0, persistant=0
    variable float "tTrialLaserOffTimeMs": default_value=0, persistant=0
  folder "Task Status"
    variable boolean "stimulusOn": default_value=0
    variable integer "success": default_value=0
    variable integer "incorrect": default_value=0
    variable integer "ignore": default_value=0
    variable float "trialStartTimeMs": default_value=0
    variable float "stimTimestampMs": default_value=0, persistant=0
    variable float "actualHoldTimeMs": default_value=0, persistant=0
  folder "Online Display"
    variable integer "sync": default_value=0
  folder "Hardware variables"
    variable INTEGER "FIO1": default_value=0, scope=GLOBAL, editable=never, groups=Hardware
    variable integer "quadrature": default_value=0, scope=GLOBAL, editable=never, groups=Hardware
    variable integer "strobedDigitalWord": default_value=0, scope=GLOBAL, persistant=0
    variable integer "juice": scope=GLOBAL, default_value=0, groups=Reward
    variable integer "counter": default_value=0, persistant=0, groups=Hardware
    variable integer "counter2": default_value=0, persistant=0, groups=Hardware
    variable integer "sendLaserParams": scope=GLOBAL, default_value=0, persistant=0
    variable integer "sendSerialParams": default_value=0, persistant=0
    variable boolean "do2led": default_value=0, persistant=0
    variable float "LED_durationMS": default_value=0, persistant=0
    variable boolean "led1_status": default_value=0, persistant=0
    variable boolean "led2_status": default_value=0, persistant=0
    variable list "led_seq": default_value=1,1,1,2, persistant=0
  folder "Temporary Trial Variables"
    variable integer "tCounter2": default_value=0, persistant=0
    variable integer "ttCounter2": default_value=0, persistant=0
    variable integer "tQuadrature": default_value=0, persistant=0
    variable integer "tDecisionTimeMs": default_value=0, persistant=0
    variable boolean "tLastTrialWasLeft": default_value=0, persistant=0
    variable boolean "tLeftTrial": default_value=0, persistant=0
    variable boolean "tLeftResponse": default_value=0, persistant=0
    variable boolean "tRightResponse": default_value=0, persistant=0
    variable float "tStimProbAvgLeft": default_value=0.5, persistant=0
    variable boolean "isFirstTrial": default_value=0, persistant=0
    variable float "leftDecisionThreshold": default_value=0, persistant=0
    variable float "rightDecisionThreshold": default_value=0, persistant=0
    variable float "trackMotion": default_value=0, persistant=0
    variable float "dTrackMotion": default_value=0, persistant=0
    variable integer "tGratingEccentricityStart": default_value=0, persistant=0
    variable integer "tGratingEccentricityDeg": default_value=0, persistant=0
    variable integer "dGratingEccentricityDeg": default_value=0, persistant=0
    variable float "tGratingContrast": default_value=0, persistant=0
    variable float "dGratingContrast": default_value=0, persistant=0
    variable float "dGratingContrastDiff": default_value=1, persistant=0
    variable float "tGratingDiameterDeg": default_value=0, persistant=0
    variable float "dGratingDiameterDeg": default_value=0, persistant=0
    variable float "dGratingDiameterDiff": default_value=1, persistant=0
    variable float "tGratingDirectionDeg": default_value=0, persistant=0
    variable integer "tRewardTimeUs": default_value=0
    variable boolean "isNotTooFast": default_value=0, persistant=0
    variable boolean "stimIsOff": default_value=0, persistant=0
    variable boolean "stationaryReset": default_value=0, persistant=0
    variable boolean "isNoGo": default_value=0, persistant=0
    variable boolean "wasNoGo": default_value=0, persistant=0
    variable boolean "didNoGo": default_value=0, persistant=0
    variable boolean "inPreBlock": default_value=0, persistant=0
    variable float "qStimOn": default_value=0, persistant=0
    variable float "qTrialStart": default_value=0, persistant=0
    variable float "qStartReact": default_value=0, persistant=0
    variable integer "tTrialsDoneSinceStart": default_value=90, persistant=0
    variable boolean "tLastTrialIgnore": default_value=0, persistant=0
    variable integer "tTrialStartMWTimestampMs": default_value=90, persistant=0
    variable integer "tThisTrialStartTimeMs": default_value=90, persistant=0
    variable integer "tLastTrialStartTimeMs": default_value=90, persistant=0
    variable boolean "tLastTrialCorrect": default_value=0, persistant=0
    variable integer "tConsecCorrects": default_value=0
    variable integer "tConsecErrors": default_value=0
    variable integer "tNTrialsCompleted": default_value=0
    variable integer "tNBlockLeftTrsCompleted": default_value=0, persistant=0, groups=Block Control
    variable integer "tNBlockRightTrsCompleted": default_value=0, persistant=0, groups=Block Control
    variable float "tRobotReactTimeMs": default_value=0, persistant=0
    variable integer "tRandBlockNumber": default_value=0
    variable float "tStationaryPeriodMs": default_value=0
    <!-- frame conversion -->
    variable integer "nFramesStationary": default_value=0, persistant=0
    variable integer "nFramesIti": default_value=0, persistant=1
    variable integer "nFramesDelay": default_value=0, persistant=1
    variable integer "nFramesOn": default_value=0, persistant=1
    variable integer "nFramesTooFast": default_value=0, persistant=1
    variable integer "nFramesReact": default_value=0, persistant=1
    variable integer "nFramesIncorrectTimeout": default_value=0, persistant=1
    variable integer "nFramesIgnoreTimeout": default_value=0, persistant=1
    <!-- tracking counter -->
    variable integer "cItiStart": default_value=0, persistant=0
    variable integer "cStationaryStart": default_value=0, persistant=0
    variable integer "cTrialStart": default_value=0, persistant=0
    variable integer "cStimOn": default_value=0, persistant=0
    variable integer "cStimOff": default_value=0, persistant=0
    variable integer "cDecision": default_value=0, persistant=0
    variable integer "tRandProbIndex": default_value=0, persistant=0
    variable integer "tRandProbIndexLast": default_value=0, persistant=1
    variable integer "tTrPer80Level1": default_value=0, persistant=0
    variable integer "tTrPer80Level2": default_value=0, persistant=0
    variable integer "tTrPer80Level3": default_value=0, persistant=0
    variable integer "tTrPer80Level4": default_value=0, persistant=0
    variable integer "tTrPer80Level5": default_value=0, persistant=0
    variable integer "tTrPer80Level6": default_value=0, persistant=0
    variable integer "tTrPer80Level7": default_value=0, persistant=0
    variable integer "tTrPer80Level8": default_value=0, persistant=0
    variable integer "tLeftTrPer80Level1": default_value=0, persistant=0
    variable integer "tLeftTrPer80Level2": default_value=0, persistant=0
    variable integer "tLeftTrPer80Level3": default_value=0, persistant=0
    variable integer "tLeftTrPer80Level4": default_value=0, persistant=0
    variable integer "tLeftTrPer80Level5": default_value=0, persistant=0
    variable integer "tLeftTrPer80Level6": default_value=0, persistant=0
    variable integer "tLeftTrPer80Level7": default_value=0, persistant=0
    variable integer "tLeftTrPer80Level8": default_value=0, persistant=0
    <!-- Shadow Vars From Mark -->
    variable integer "rrStimulusNumber": scope=local, default_value=0, persistant=0
    variable integer "tStimulusNumber": default_value=0, persistant=0
    variable integer "tStimulusNumber2": default_value=0, persistant=0
    variable integer "tSvStimNumber": default_value=0, persistant=0
    variable integer "tSvStimNumber2": default_value=0, persistant=0
    variable integer "tTempStimOdds": default_value=0, persistant=0
    variable integer "tNStimAccepted": default_value=0, persistant=0
    variable integer "tNStimAccepted2": default_value=0, persistant=0
    variable selection "svStimNumber": values=0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79, selection=random_without_replacement, nsamples=80, sampling_method=samples
    variable selection "svStimNumber2": values=0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79, selection=random_without_replacement, nsamples=80, sampling_method=samples
sounds "Sounds"
  sound wav_file "startSound": path=wavs/1000Hz_pt3s.wav, amplitude=startSoundVolume
  sound wav_file "goSound": path=wavs/1000Hz_pt3s.wav, amplitude=goSoundVolume
  sound wav_file "correctSound": path=wavs/shortCorrect.wav, amplitude=correctSoundVolume
  sound wav_file "incorrectSound": path=wavs/incorrectMouse.wav, amplitude=incorrectSoundVolume
  sound wav_file "whiteNoiseSound": path=wavs/whitenoise2.wav, amplitude=whiteNoiseSoundVolume
  sound wav_file "stationaryPeriodSound": path=wavs/whitenoise_pt1s.wav, amplitude=stationaryPeriodSoundVolume
stimuli "Stimuli"
  stimulus blank_screen "background": color=0.5,0.5,0.5
  list_replicator "List of Masks": values=gaussian, ellipse, variable=mask
    stimulus drifting_grating "targetGrating_$mask": direction=0, starting_phase=gratingStartingPhaseDeg, spatial_frequency=gratingSpatialFreqCPD, speed=gratingSpeedDPS, grating_type=sinusoid, mask=$mask, std_dev=0.3, mean=0.1, x_size=tGratingDiameterDeg, y_size=tGratingDiameterDeg, x_position=tGratingEccentricityDeg, y_position=gratingElevationDeg, rotation=gratingDirectionDeg, alpha_multiplier=tGratingContrast
  list_replicator "List of Masks": values=gaussian, ellipse, variable=mask
    stimulus drifting_grating "distractorGrating_$mask": direction=0, starting_phase=gratingStartingPhaseDeg, spatial_frequency=gratingSpatialFreqCPD, speed=gratingSpeedDPS, grating_type=sinusoid, mask=$mask, std_dev=0.3, mean=0.1, x_size=dGratingDiameterDeg, y_size=dGratingDiameterDeg, x_position=dGratingEccentricityDeg, y_position=gratingElevationDeg, rotation=gratingDirectionDeg, alpha_multiplier=dGratingContrast
  stimulus drifting_grating "rewardGrating": direction=0, starting_phase=rewardGratingStartingPhaseDeg, spatial_frequency=.000000000001, speed=gratingSpeedDPS, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=30, y_size=30, x_position=0, y_position=0, rotation=gratingDirectionDeg, alpha_multiplier=tGratingContrast
experiment "Experiment"
  protocol "JuiceOnHoldProtocol": selection=sequential, nsamples=1, sampling_method=cycles
    action queue_stimulus: stimulus=background
    action start_device_IO "Start IO Device": device=LabJackU6
    <!-- init actions before running trials after any press of start -->
    action assignment "juice = 0": variable=juice, value=0
    action assignment "set counter to 0": variable=counter, value=0
    action assignment "set counter2 to 0": variable=counter2, value=0
    action assignment "set quadrature back to 0": variable=quadrature, value=0
    action assignment: variable=tConsecCorrects, value=0
    action assignment: variable=tConsecErrors, value=0
    action assignment: variable=tNTrialsCompleted, value=0
    action assignment: variable=tLastTrialWasLeft, value=0
    action assignment: variable=tNStimAccepted, value=0
    action assignment: variable=tNStimAccepted2, value=0
    action assignment: variable=isFirstTrial, value=1
    action assignment "Stationary untriggered": variable=stationaryReset, value=0
    action if: condition=success+ignore+incorrect == 0
      <!-- reset selection var -->
      action reset_selection: selection=svStimNumber
      action reset_selection: selection=svStimNumber2
      action assignment: variable=tNStimAccepted, value=0
      action assignment: variable=tNStimAccepted2, value=0
      action run_python_file "Load script": path=calcRandProb.py
    trial "Trial": interruptible=1, selection=sequential, nsamples=10000, sampling_method=cycles
      task_system "TS"
        task_system_state "InterTrialInterval"
          action report: message=**** In Inter-Trial Interval for $itiTimeMs ms ****
          action assignment "set quadrature back to 0": variable=quadrature, value=0
          action assignment "Sync Matlab": variable=sync, value=1
          action assignment: variable=stimulusOn, value=0
          action assignment "juice = 0": variable=juice, value=0
          action assignment "set isNotTooFast to 0": variable=isNotTooFast, value=0
          action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tLeftTrial, value=0
          action assignment: variable=cItiStart, value=counter
          action assignment: variable=led_seq, value=LED_sequence
          action assignment: variable=do2led, value=Do2LED
          action assignment: variable=LED_durationMS, value=round(1/frameRateHz*1000)
          action assignment: variable=tThisTrialStartTimeMs, value=now()/1000
          action assignment: variable=qTrialStart, value=quadrature
          action start_timer: timer=itiTimerMs, duration=itiTimeMs, duration_units=ms
          action if: condition=success+ignore+incorrect > 0
            action assignment: variable=isFirstTrial, value=0
          action if: condition=tLastTrialCorrect == 1
            action if: condition=doRewardGrating == 1
              action queue_stimulus "Queue Stimulus": stimulus=rewardGrating
              action play_dynamic_stimulus "start": stimulus=rewardGrating
              action update_stimulus_display "Update Display"
              action schedule: delay=125 ms, duration=1, repeats=1
                action dequeue_stimulus: stimulus=rewardGrating
                action update_stimulus_display "Update Display"
              action schedule: delay=250 ms, duration=1, repeats=1
                action queue_stimulus "Queue Stimulus": stimulus=rewardGrating
                action play_dynamic_stimulus "start": stimulus=rewardGrating
                action update_stimulus_display "Update Display"
              action schedule: delay=375 ms, duration=1, repeats=1
                action dequeue_stimulus: stimulus=rewardGrating
                action update_stimulus_display "Update Display"
                action report: message=RewardGrating Dequeued
              action schedule: delay=500 ms, duration=1, repeats=1
                action queue_stimulus "Queue Stimulus": stimulus=rewardGrating
                action play_dynamic_stimulus "start": stimulus=rewardGrating
                action update_stimulus_display "Update Display"
              action schedule: delay=625 ms, duration=1, repeats=1
                action dequeue_stimulus: stimulus=rewardGrating
                action update_stimulus_display "Update Display"
              action schedule: delay=750 ms, duration=1, repeats=1
                action queue_stimulus "Queue Stimulus": stimulus=rewardGrating
                action play_dynamic_stimulus "start": stimulus=rewardGrating
                action update_stimulus_display "Update Display"
              action schedule: delay=875 ms, duration=1, repeats=1
                action dequeue_stimulus: stimulus=rewardGrating
                action update_stimulus_display "Update Display"
                action report: message=RewardGrating Dequeued
          action if: condition=doRandStationaryPeriod
            action assignment: variable=tStationaryPeriodMs, value=stationaryPeriodMs + disc_rand(0,randStationaryPeriodMs)
          action if: condition=!doRandStationaryPeriod
            action assignment: variable=tStationaryPeriodMs, value=stationaryPeriodMs
          action assignment "Calculate nFramesOn": variable=nFramesOn, value=ceil((stimOnTimeMs/1000)*frameRateHz)
          action assignment "Calculate nFramesStationary": variable=nFramesStationary, value=ceil((tStationaryPeriodMs/1000)*frameRateHz)
          action assignment "Calculate nFramesDelay": variable=nFramesDelay, value=ceil((delayTimeMs/1000)*frameRateHz)
          action assignment "Calculate nFramesIti": variable=nFramesIti, value=ceil((itiTimeMs/1000)*frameRateHz)
          action assignment "Calculate nFramesTooFast": variable=nFramesTooFast, value=ceil((tooFastTimeMs/1000)*frameRateHz)
          action assignment "Calculate nFramesReact": variable=nFramesReact, value=ceil((reactionTimeMs/1000)*frameRateHz)
          action assignment "Calculate nFramesIncorrectTimeout": variable=nFramesIncorrectTimeout, value=ceil((incorrectTimeoutMs/1000)*frameRateHz)
          action assignment "Calculate nFramesIgnoreTimeout": variable=nFramesIgnoreTimeout, value=ceil((ignoreTimeoutMs/1000)*frameRateHz)
          action assignment: variable=tSvStimNumber, value=svStimNumber
          <!-- choose a value from selection var, 0-origin -->
          action assignment: variable=tSvStimNumber2, value=svStimNumber2
          action assignment: variable=tTempStimOdds, value=0
          <!-- this variable exists only for code clarity below -->
          <!-- exception for previous trial ignore to not give NoGo trial -->
          action if: condition=tSvStimNumber >= 80-noGoTrPer80  && doNoGo || doZeroConTrials && tLastTrialIgnore
            action assignment: variable=tSvStimNumber, value=disc_rand(0,79-noGoTrPer80)
          action if: condition=tSvStimNumber >= 80-noGoTrPer80  && doNoGo || doZeroConTrials && tNTrialsCompleted < 10
            action assignment: variable=tSvStimNumber, value=disc_rand(0,79-noGoTrPer80)
          action assert: condition=doZeroConTrials + doNoGo <= 1, stop_on_failure=1, message=Cannot do both NoGo and ZeroConTrials
          action if: condition=doRandProb == 1
            action run_python_string "set tStimProbAvgLeft": code=calc_tStimProbAvgLeft()
            action report: message=tStimProbAvgLeft is $tStimProbAvgLeft
          <!-- Calculate left/right according to bias staircase -->
          action if: condition=doBiasStaircase == 1 
            action assignment: variable=tStimProbAvgLeft, value=1 - tLeftBias
          <!-- If choosing L/R by markov based on left, switch, and last trial state. -->
          action if: condition=doMarkovLR
            <!-- Calculate left/right by  to bias staircase -->
            action if: condition=doBiasStaircase == 0 && doRandProb == 0
              action assignment: variable=tStimProbAvgLeft, value=stimProbAvgLeft
            action if: condition=tStimProbAvgLeft > 0 && tStimProbAvgLeft < 1
              action assignment: variable=tMarkovOdds, value=(1-tStimProbAvgLeft)/tStimProbAvgLeft
              action assignment: variable=b, value=stimProbAvgSwitch * (1+tMarkovOdds) / (1+(tMarkovOdds*tMarkovOdds)) 
              action assignment: variable=a, value=tMarkovOdds * b
              action if: condition=tLastTrialWasLeft == -1
                <!-- special case: no last trial / first trial -->
                action assignment: variable=tLeftTrial, value=rand(0,1) < tStimProbAvgLeft
              action if: condition=tLastTrialWasLeft == 1
                action assignment: variable=tLeftTrial, value=rand(0,1) < (1-a)
              action if: condition=tLastTrialWasLeft == 0
                action assignment: variable=tLeftTrial, value=rand(0,1) < b
            action if: condition=tStimProbAvgLeft == 0 
              action assignment: variable=tLeftTrial, value=0
            action if: condition=tStimProbAvgLeft == 1 
              action assignment: variable=tLeftTrial, value=1
          action if: condition=doBlocks==1 && doCorrectiveTrials == 0
            action if: condition=(tNBlockLeftTrsCompleted < blockLeftTrs) && tLastTrialWasLeft==1
              action assignment: variable=tLeftTrial, value=1
            action if: condition=(tNBlockRightTrsCompleted < blockRightTrs) && tLastTrialWasLeft==0
              action assignment: variable=tLeftTrial, value=0
            action if: condition=(tNBlockLeftTrsCompleted >= blockLeftTrs) && tLastTrialWasLeft==1
              action assignment: variable=tLeftTrial, value=0
              action assignment: variable=tNBlockRightTrsCompleted, value=0
            action if: condition=(tNBlockRightTrsCompleted >= blockRightTrs) && tLastTrialWasLeft==0
              action assignment: variable=tLeftTrial, value=1
              action assignment: variable=tNBlockLeftTrsCompleted, value=0
          action assignment: variable=tTrPer80Level1, value=trPer80Level1
          action assignment: variable=tTrPer80Level2, value=trPer80Level2
          action assignment: variable=tTrPer80Level3, value=trPer80Level3
          action assignment: variable=tTrPer80Level4, value=trPer80Level4
          action assignment: variable=tTrPer80Level5, value=trPer80Level5
          action assignment: variable=tTrPer80Level6, value=trPer80Level6
          action assignment: variable=tTrPer80Level7, value=trPer80Level7
          action assignment: variable=tTrPer80Level8, value=trPer80Level8
          action assignment: variable=tLeftTrPer80Level1, value=leftTrPer80Level1
          action assignment: variable=tLeftTrPer80Level2, value=leftTrPer80Level2
          action assignment: variable=tLeftTrPer80Level3, value=leftTrPer80Level3
          action assignment: variable=tLeftTrPer80Level4, value=leftTrPer80Level4
          action assignment: variable=tLeftTrPer80Level5, value=leftTrPer80Level5
          action assignment: variable=tLeftTrPer80Level6, value=leftTrPer80Level6
          action assignment: variable=tLeftTrPer80Level7, value=leftTrPer80Level7
          action assignment: variable=tLeftTrPer80Level8, value=leftTrPer80Level8
          <!-- Deal with changing tLeftProb when left odds are separate -->
          action if: condition=tStimProbAvgLeft != 0.5 && doLeftSeparateOdds
            action if: condition=trPer80Level1+trPer80Level2+trPer80Level3+trPer80Level4+trPer80Level5+trPer80Level6+trPer80Level7+trPer80Level8 ==  leftTrPer80Level1+leftTrPer80Level2+leftTrPer80Level3+leftTrPer80Level4+leftTrPer80Level5+leftTrPer80Level6+leftTrPer80Level7+leftTrPer80Level8
              action assignment: variable=tTrPer80Level1, value=(1-tStimProbAvgLeft) * (2 * trPer80Level1)
              action assignment: variable=tTrPer80Level2, value=(1-tStimProbAvgLeft) * (2 * trPer80Level2)
              action assignment: variable=tTrPer80Level3, value=(1-tStimProbAvgLeft) * (2 * trPer80Level3)
              action assignment: variable=tTrPer80Level4, value=(1-tStimProbAvgLeft) * (2 * trPer80Level4)
              action assignment: variable=tTrPer80Level5, value=(1-tStimProbAvgLeft) * (2 * trPer80Level5)
              action assignment: variable=tTrPer80Level6, value=(1-tStimProbAvgLeft) * (2 * trPer80Level6)
              action assignment: variable=tTrPer80Level7, value=(1-tStimProbAvgLeft) * (2 * trPer80Level7)
              action assignment: variable=tTrPer80Level8, value=(1-tStimProbAvgLeft) * (2 * trPer80Level8)
              action assignment: variable=tLeftTrPer80Level1, value=tStimProbAvgLeft * (2 * leftTrPer80Level1)
              action assignment: variable=tLeftTrPer80Level2, value=tStimProbAvgLeft * (2 * leftTrPer80Level2)
              action assignment: variable=tLeftTrPer80Level3, value=tStimProbAvgLeft * (2 * leftTrPer80Level3)
              action assignment: variable=tLeftTrPer80Level4, value=tStimProbAvgLeft * (2 * leftTrPer80Level4)
              action assignment: variable=tLeftTrPer80Level5, value=tStimProbAvgLeft * (2 * leftTrPer80Level5)
              action assignment: variable=tLeftTrPer80Level6, value=tStimProbAvgLeft * (2 * leftTrPer80Level6)
              action assignment: variable=tLeftTrPer80Level7, value=tStimProbAvgLeft * (2 * leftTrPer80Level7)
              action assignment: variable=tLeftTrPer80Level8, value=tStimProbAvgLeft * (2 * leftTrPer80Level8)
          <!-- level 1 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tTrPer80Level1))
            action assignment: variable=tStimulusNumber, value=0
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)tTrPer80Level1-1)/2))
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doMarkovLR && !doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=((tSvStimNumber-tTempStimOdds) % 2)
            action if: condition=doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=0
          action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tTrPer80Level1))
            action assignment: variable=tStimulusNumber2, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + tTrPer80Level1
          <!-- level 1: left sep odds on -->
          action if: condition=doLeftSeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tLeftTrPer80Level1))
              action assignment: variable=tStimulusNumber, value=0
              action assignment: variable=tLeftTrial, value=1
              action report: message=tLeftrial should be $tLeftrial
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tLeftTrPer80Level1))
              action assignment: variable=tStimulusNumber2, value=0
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + tLeftTrPer80Level1
          <!-- level 1: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level1))
              action assignment: variable=tStimulusNumber, value=0
              action assignment: variable=tBlock2TrialNumber, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+block2TrPer80Level1))
              action assignment: variable=tStimulusNumber2, value=0
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level1
          <!-- level 2 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tTrPer80Level2))
            action assignment: variable=tStimulusNumber, value=1
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)tTrPer80Level2-1)/2))
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doMarkovLR && !doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=((tSvStimNumber-tTempStimOdds) % 2)
            action if: condition=doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=0
          action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tTrPer80Level2))
            action assignment: variable=tStimulusNumber2, value=1
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + tTrPer80Level2
          <!-- level 2: left sep odds on -->
          action if: condition=doLeftSeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tLeftTrPer80Level2))
              action assignment: variable=tStimulusNumber, value=1
              action assignment: variable=tLeftTrial, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tLeftTrPer80Level2))
              action assignment: variable=tStimulusNumber2, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + tLeftTrPer80Level2
          <!-- level 2: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level2))
              action assignment: variable=tStimulusNumber, value=1
              action assignment: variable=tBlock2TrialNumber, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+block2TrPer80Level2))
              action assignment: variable=tStimulusNumber2, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level2
          <!-- level 3 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tTrPer80Level3))
            action assignment: variable=tStimulusNumber, value=2
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)tTrPer80Level3-1)/2))
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doMarkovLR && !doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=((tSvStimNumber-tTempStimOdds) % 2)
            action if: condition=doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=0
          action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tTrPer80Level3))
            action assignment: variable=tStimulusNumber2, value=2
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + tTrPer80Level3
          <!-- level 3: left sep odds on -->
          action if: condition=doLeftSeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tLeftTrPer80Level3))
              action assignment: variable=tStimulusNumber, value=2
              action assignment: variable=tLeftTrial, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tLeftTrPer80Level3))
              action assignment: variable=tStimulusNumber2, value=2
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + tLeftTrPer80Level3
          <!-- level 3: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level3))
              action assignment: variable=tStimulusNumber, value=2
              action assignment: variable=tBlock2TrialNumber, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+block2TrPer80Level3))
              action assignment: variable=tStimulusNumber2, value=2
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level3
          <!-- level 4 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tTrPer80Level4))
            action assignment: variable=tStimulusNumber, value=3
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)tTrPer80Level4-1)/2))
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doMarkovLR && !doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=((tSvStimNumber-tTempStimOdds) % 2)
            action if: condition=doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=0
          action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tTrPer80Level4))
            action assignment: variable=tStimulusNumber2, value=3
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + tTrPer80Level4
          <!-- level 4: left sep odds on -->
          action if: condition=doLeftSeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tLeftTrPer80Level4))
              action assignment: variable=tStimulusNumber, value=3
              action assignment: variable=tLeftTrial, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tLeftTrPer80Level4))
              action assignment: variable=tStimulusNumber2, value=3
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + tLeftTrPer80Level4
          <!-- level 4: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level4))
              action assignment: variable=tStimulusNumber, value=3
              action assignment: variable=tBlock2TrialNumber, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+block2TrPer80Level4))
              action assignment: variable=tStimulusNumber2, value=3
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level4
          <!-- level 5 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tTrPer80Level5))
            action assignment: variable=tStimulusNumber, value=4
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)tTrPer80Level5-1)/2))
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doMarkovLR && !doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=((tSvStimNumber-tTempStimOdds) % 2)
            action if: condition=doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=0
          action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tTrPer80Level5))
            action assignment: variable=tStimulusNumber2, value=4
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + tTrPer80Level5
          <!-- level 5: left sep odds on -->
          action if: condition=doLeftSeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tLeftTrPer80Level5))
              action assignment: variable=tStimulusNumber, value=4
              action assignment: variable=tLeftTrial, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tLeftTrPer80Level5))
              action assignment: variable=tStimulusNumber2, value=4
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + tLeftTrPer80Level5
          <!-- level 5: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level5))
              action assignment: variable=tStimulusNumber, value=4
              action assignment: variable=tBlock2TrialNumber, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+block2TrPer80Level5))
              action assignment: variable=tStimulusNumber2, value=4
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level5
          <!-- level 6 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tTrPer80Level6))
            action assignment: variable=tStimulusNumber, value=5
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)tTrPer80Level6-1)/2))
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doMarkovLR && !doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=((tSvStimNumber-tTempStimOdds) % 2)
            action if: condition=doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=0
          action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tTrPer80Level6))
            action assignment: variable=tStimulusNumber2, value=5
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + tTrPer80Level6
          <!-- level 6: left sep odds on -->
          action if: condition=doLeftSeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tLeftTrPer80Level6))
              action assignment: variable=tStimulusNumber, value=5
              action assignment: variable=tLeftTrial, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tLeftTrPer80Level6))
              action assignment: variable=tStimulusNumber2, value=5
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + tLeftTrPer80Level6
          <!-- level 6: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level6))
              action assignment: variable=tStimulusNumber, value=5
              action assignment: variable=tBlock2TrialNumber, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+block2TrPer80Level6))
              action assignment: variable=tStimulusNumber2, value=5
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level6
          <!-- level 7 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tTrPer80Level7))
            action assignment: variable=tStimulusNumber, value=6
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)tTrPer80Level7-1)/2))
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doMarkovLR && !doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=((tSvStimNumber-tTempStimOdds) % 2)
            action if: condition=doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=0
          action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tTrPer80Level7))
            action assignment: variable=tStimulusNumber2, value=6
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + tTrPer80Level7
          <!-- level 7: left sep odds on -->
          action if: condition=doLeftSeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tLeftTrPer80Level7))
              action assignment: variable=tStimulusNumber, value=6
              action assignment: variable=tLeftTrial, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tLeftTrPer80Level7))
              action assignment: variable=tStimulusNumber2, value=6
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + tLeftTrPer80Level7
          <!-- level 7: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level7))
              action assignment: variable=tStimulusNumber, value=6
              action assignment: variable=tBlock2TrialNumber, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+block2TrPer80Level7))
              action assignment: variable=tStimulusNumber2, value=6
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level7
          <!-- level 8 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tTrPer80Level8))
            action assignment: variable=tStimulusNumber, value=7
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)tTrPer80Level8-1)/2))
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doMarkovLR && !doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=((tSvStimNumber-tTempStimOdds) % 2)
            action if: condition=doLeftSeparateOdds
              action assignment: variable=tLeftTrial, value=0
          action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tTrPer80Level8))
            action assignment: variable=tStimulusNumber2, value=7
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + tTrPer80Level8
          <!-- level 8: left sep odds on -->
          action if: condition=doLeftSeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+tLeftTrPer80Level8))
              action assignment: variable=tStimulusNumber, value=7
              action assignment: variable=tLeftTrial, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+tLeftTrPer80Level8))
              action assignment: variable=tStimulusNumber2, value=7
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + tLeftTrPer80Level8
          <!-- level 8: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level8))
              action assignment: variable=tStimulusNumber, value=7
              action assignment: variable=tBlock2TrialNumber, value=1
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+block2TrPer80Level8))
              action assignment: variable=tStimulusNumber2, value=7
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level8
          <!-- Nogo level -->
          action if: condition=doNoGo
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+noGoTrPer80))
              action assignment: variable=tStimulusNumber, value=8
              action if: condition=doBlock2 && !doBlock2SeparateOdds
                action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)noGoTrPer80-1)/2))
              action if: condition=!doBlock2
                action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+noGoTrPer80))
              action assignment: variable=tStimulusNumber2, value=8
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + noGoTrPer80
            <!-- level 8: b2 sep odds on -->
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2NoGoTrPer80))
                action assignment: variable=tStimulusNumber, value=8
                action assignment: variable=tBlock2TrialNumber, value=1
                action assignment: variable=tLeftTrial, value=0
              action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+block2NoGoTrPer80))
                action assignment: variable=tStimulusNumber2, value=8
              action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2NoGoTrPer80
          action if: condition=doZeroConTrials
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+zeroConTrPer80))
              action assignment: variable=tStimulusNumber, value=8
              action if: condition=doBlock2 && !doBlock2SeparateOdds
                action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)zeroConTrPer80-1)/2))
              action if: condition=!doBlock2
                action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+zeroConTrPer80))
              action assignment: variable=tStimulusNumber2, value=8
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + zeroConTrPer80
            <!-- level 8: b2 sep odds on -->
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+zeroConTrPer80))
                action assignment: variable=tStimulusNumber, value=8
                action assignment: variable=tBlock2TrialNumber, value=1
                action assignment: variable=tLeftTrial, value=0
              action if: condition=tSvStimNumber2 >= tTempStimOdds && (tSvStimNumber2 < (tTempStimOdds+zeroConTrPer80))
                action assignment: variable=tStimulusNumber2, value=8
              action assignment: variable=tTempStimOdds, value=tTempStimOdds + zeroConTrPer80
          <!-- added preblock where all early trials are easy -->
          action if: condition=tNTrialsCompleted < easyStartTrialNumber && doEasyStart
            action assignment: variable=tStimulusNumber, value=0
            action assignment: variable=tStimulusNumber2, value=0
          action report: message=tLeftTrial is $tLeftTrial!!!!
          action if: condition=doBlock2 && !doBlock2SeparateOdds
            action assert: condition=trPer80Level1-(((int)trPer80Level1)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level2-(((int)trPer80Level2)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level3-(((int)trPer80Level3)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level4-(((int)trPer80Level4)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level5-(((int)trPer80Level5)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level6-(((int)trPer80Level6)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level7-(((int)trPer80Level7)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level8-(((int)trPer80Level8)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
          action report: message=tBlock2TrialNumber is $tBlock2TrialNumber
          action if: condition=inPreBlock
            action assignment: variable=tStimulusNumber, value=0
          action assignment: variable=tGratingContrast, value=gratingMaxContrast / (pow(2, 1.0*tStimulusNumber/gratingContrastSPO))
          action assignment: variable=dGratingContrastDiff, value=gratingMaxDiff / (pow(2, 1.0*tStimulusNumber2/gratingContrastDiffSPO)) + 1
          action if: condition=doOnlyMaxDiff
            action assignment: variable=dGratingContrastDiff, value=gratingMaxDiff
          action if: condition=doContrastDetect
            action assignment: variable=dGratingContrast, value=0
          action if: condition=!doContrastDetect
            action assignment: variable=dGratingContrast, value=tGratingContrast / dGratingContrastDiff
          action if: condition=!doRandSize
            action assignment: variable=tGratingDiameterDeg, value=gratingMaxDiameterDeg
            action assignment: variable=dGratingDiameterDeg, value=gratingMaxDiameterDeg
          action if: condition=doRandSize
            action assignment: variable=tGratingDiameterDeg, value=gratingMaxDiameterDeg / (pow(2, 1.0*disc_rand(0,nRandSize-1)/gratingDiameterSPO))
            action assignment: variable=dGratingDiameterDeg, value=gratingMaxDiameterDeg / (pow(2, 1.0*disc_rand(0,nRandSize-1)/gratingDiameterSPO))
          action if: condition=doNoGo && tStimulusNumber == 8
            action assignment: variable=isNoGo, value=1
            action report: message=This is a NoGo trial
            action assignment: variable=tGratingContrast, value=0
            action assignment: variable=dGratingContrast, value=0
            action assignment: variable=dGratingContrastDiff, value=1
            action assignment: variable=tLeftTrial, value=round(rand(0,1))
          action if: condition=doZeroConTrials && tStimulusNumber == 8
            action if: condition=doContrastDiscrim
              action assignment: variable=tGratingContrast, value=0
              action assignment: variable=dGratingContrast, value=0
              action assignment: variable=dGratingContrastDiff, value=.000001
            action assignment: variable=tLeftTrial, value=round(rand(0,1))
          action if: condition=tStimulusNumber < 8
            action assignment: variable=isNoGo, value=0
          action report: message=Target contrast this trial is $tGratingContrast
          action report: message=Distractor contrast this trial is $dGratingContrast
          action if: condition=(doCorrectiveTrials == 1) && (tConsecErrors > 0)
            action if: condition=wasNoGo
              action assignment: variable=isNoGo, value=1
            action if: condition=wasNoGo
              action assignment: variable=tLeftTrial, value=tLastTrialWasLeft
          action if: condition=doBlock2
            action assert: stop_on_failure=1, condition=(block2DoRampLength+block2DoRampVTrain+block2DoTrialLaser) == 1, message=must select exactly one of block2Do variables!
            action assignment: variable=tTrialLaserPowerMw_trigger, value=trialLaserPowerMw
            <!-- trial numbers assigned above in switch statement.  Note equal probability
                          - if more complicated odds wanted; add a set of block2 level odds -->
            <!-- ramp length for block 2 -->
            action if: condition=block2DoRampLength
              action assert: condition=doLaserStim == 1, stop_on_failure=1, message=doLaserStim must be 1 for block2DoRampLength == 1
              action assignment: variable=tLaserBaselinePowerMw, value=laserBaselinePowerMw
              action if: condition=tBlock2TrialNumber == 0
                action assignment: variable=tLaserRampLengthMs, value=laserRampLengthMs
                action assignment: variable=tLaserPeakMaxMw, value=laserPeakMaxMw
              action if: condition=tBlock2TrialNumber == 1
                action assignment: variable=tLaserRampLengthMs, value=block2RampLengthMs2
                action assignment: variable=tLaserPeakMaxMw, value=block2RampLengthPowerMaxMw2
            <!-- ramp v train for block 2 -->
            action if: condition=block2DoRampVTrain
              action assert: condition=doLaserStim == 1, stop_on_failure=1, message=doLaserStim must be 1 for block2DoRampLength == 1
              action assert: condition=laserDoLinearRamp+laserDoPulseTrain == 0, stop_on_failure=1, message=when block2 controls ramp v. train, set laserDoLinearRamp/PulseTrain both to 0
              action if: condition=tBlock2TrialNumber == 0
                <!-- ramp -->
                action assignment: variable=tLaserDoLinearRamp, value=1
                action assignment: variable=tLaserRampLengthMs, value=laserRampLengthMs
                action assignment: variable=tLaserDoPulseTrain, value=0
                action assignment: variable=tLaserPeakMaxMw, value=laserPeakMaxMw
                action assignment: variable=tLaserPeakStepsPerOctave, value=laserPeakStepsPerOctave
                action assignment: variable=tLaserBaselinePowerMw, value=block2RvtRampBaselinePowerMw
              action if: condition=tBlock2TrialNumber == 1
                <!-- train -->
                action assignment: variable=tLaserDoLinearRamp, value=0
                action assignment: variable=tLaserRampLengthMs, value=laserRampLengthMs
                action assignment: variable=tLaserDoPulseTrain, value=1
                action assignment: variable=tLaserPeakMaxMw, value=block2RvtTrainPowerMaxMw
                action assignment: variable=tLaserPeakStepsPerOctave, value=block2RvtTrainStepsPerOctave
                action assignment: variable=tLaserBaselinePowerMw, value=block2RvtTrainBaselinePowerMw
            action if: condition=block2DoTrialLaser
              action assert: condition=!doLaserStim, stop_on_failure=1, message=When using trialLaser, doLaserStim must be off
              action if: condition=tBlock2TrialNumber == 0
                <!-- off -->
                action assignment: variable=tTrialLaserPowerMw_trigger, value=trialLaserPowerMw
                action assignment: variable=tTrialLaserOnTimeMs, value=trialLaserOnTimeMs
                action assignment: variable=tTrialLaserOffTimeMs, value=trialLaserOffTimeMs
              action if: condition=tBlock2TrialNumber == 1
                <!-- on -->
                action assignment: variable=tTrialLaserPowerMw_trigger, value=block2TrialLaserPowerMw
                action assignment: variable=tTrialLaserOnTimeMs, value=block2TrialLaserOnTimeMs
                action assignment: variable=tTrialLaserOffTimeMs, value=block2TrialLaserOffTimeMs
          <!-- end doBlock2 -->
          <!-- calculate target threshold -->
          action if: condition=tLeftTrial == 0
            action assignment: variable=tGratingEccentricityDeg, value=gratingEccentricityDeg
            action assignment: variable=dGratingEccentricityDeg, value=0-gratingEccentricityDeg
            action assignment: variable=rightDecisionThreshold, value=gratingTargetEccentricity
            action assignment: variable=leftDecisionThreshold, value=tGratingEccentricityDeg+(tGratingEccentricityDeg-gratingTargetEccentricity)
          action if: condition=tLeftTrial == 1
            action assignment: variable=tGratingEccentricityDeg, value=0-gratingEccentricityDeg
            action assignment: variable=dGratingEccentricityDeg, value=gratingEccentricityDeg
            action assignment: variable=leftDecisionThreshold, value=gratingTargetEccentricity
            action assignment: variable=rightDecisionThreshold, value=tGratingEccentricityDeg+(tGratingEccentricityDeg-gratingTargetEccentricity)
          action assignment: variable=tGratingEccentricityStart, value=tGratingEccentricityDeg
          action if: condition=doLaserStim
            action assignment "Send laser params to controller": variable=sendLaserParams, value=1
            action assignment "Send laser params to controller": variable=sendLaserParams, value=0
          action if: condition=tTrialLaserPowerMw_trigger > 0
            action assignment "Send laser params to controller": variable=sendLaserParams, value=1
            action assignment "Send laser params to controller": variable=sendLaserParams, value=0
            action assert: condition=tLaserPowerMw == 0, stop_on_failure=1, message=bug: tLaserPowerMw and tTrialLaserPowerMw_trigger > 0
            action assert: stop_on_failure=1, condition=(tTrialLaserOnTimeMs == 0 && tTrialLaserOffTimeMs == 0) || (tTrialLaserOnTimeMs > 0 && tTrialLaserOffTimeMs > 0), message=For constant trial laser, set on and off time to 0.  Otherwise on/off time must both be set
          transition conditional "if first trial, counter = 20 and ITI over": condition=counter >= (cItiStart + nFramesIti) && isFirstTrial && counter > 19, target=WaitForInitiate
          transition conditional "if not first trial, counter still going and ITI over": condition=counter >= (cItiStart + nFramesIti) && !isFirstTrial, target=WaitForInitiate
          transition conditional "if not first trial, counter stopped": condition=!isFirstTrial && timerExpired(itiTimerMs) && counter == cDecision, target=ExitTask
        task_system_state "ExitTask"
          action assert: stop_on_failure=1, condition=counter > cDecision, message=Not receiving triggers from microscope
        task_system_state "WaitForInitiate"
          action if: condition=stationaryReset==1
            action play_sound: sound=stationaryPeriodSound
          action assignment "Log counter": variable=cStationaryStart, value=counter
          action assignment "tQuadrature zeroed": variable=tQuadrature, value=quadrature
          action assignment "Stationary triggered": variable=stationaryReset, value=1
          action report: message=**** In stationary period for $nFramesStationary frames
          transition conditional: condition=counter-cStationaryStart >= nFramesStationary, target=TrialStart
          transition conditional: condition=abs(quadrature-tQuadrature) > stationaryThreshold, target=WaitForInitiate
        task_system_state "TrialStart"
          action report: message=**** Trial Starting: playing tone and beginning delay
          action play_sound: sound=startSound
          action assignment "Log counter": variable=cTrialStart, value=counter
          action if: condition=doTestRobot && doAllCorrects==0
            action assignment "set robotGoLeft": variable=robotGoLeft, value=robotLeftProb >= rand(0,1)
            action assignment "set robotGoLeft": variable=tRobotReactTimeMs, value=rand(0,maxRobotReactTimeMs)
            action start_timer: timer=robotTimerMs, duration=tRobotReactTimeMs, duration_units=ms
          transition conditional: condition=counter-cTrialStart >= nFramesDelay, target=StimOn
        task_system_state "StimOn"
          action if: condition=tTrialLaserPowerMw_trigger > 0
            action assignment: variable=tTrialLaserPowerMw, value=tTrialLaserPowerMw_trigger
            action report: message=********* SENDING LASER TRIGGER *********
            action assignment "Encode LaserStimOn": variable=strobedDigitalWord, value=5
          action report: message=*****-=STIMULI ON=-*****
          action assignment: variable=stimulusOn, value=1
          action assignment "set stimIsOff to 0": variable=stimIsOff, value=0
          action assignment "Log counter": variable=cStimOn, value=counter
          action report: message=In Reaction Time for $nFramesReact frames 
          action start_timer: timer=reactionTimerMs, duration=reactionTimeMs, duration_units=ms
          action if: condition=doGaussianMask
            action queue_stimulus "Queue Stimulus": stimulus=distractorGrating_gaussian
            action play_dynamic_stimulus "start": stimulus=distractorGrating_gaussian
            action queue_stimulus "Queue Stimulus": stimulus=targetGrating_gaussian
            action play_dynamic_stimulus "start": stimulus=targetGrating_gaussian
          action if: condition=doEllipseMask
            action queue_stimulus "Queue Stimulus": stimulus=distractorGrating_ellipse
            action play_dynamic_stimulus "start": stimulus=distractorGrating_ellipse
            action queue_stimulus "Queue Stimulus": stimulus=targetGrating_ellipse
            action play_dynamic_stimulus "start": stimulus=targetGrating_ellipse
          action update_stimulus_display "Update Display"
          action assignment: variable=stimTimestampMs, value=now()/1000
          action assignment: variable=qStimOn, value=quadrature
          transition conditional: condition=counter-cStimOn >= nFramesOn, target=StimOff
          transition conditional: condition=counter-cStimOn >= nFramesTooFast, target=ZeroQuad
        task_system_state "StimOff"
          action assignment "tag stimOff": variable=stimIsOff, value=1
          action assignment "Log counter": variable=cStimOff, value=counter
          action dequeue_stimulus "Dequeue Stimulus": stimulus=distractorGrating_gaussian
          action dequeue_stimulus "Dequeue Stimulus": stimulus=targetGrating_gaussian
          action dequeue_stimulus "Dequeue Stimulus": stimulus=distractorGrating_ellipse
          action dequeue_stimulus "Dequeue Stimulus": stimulus=targetGrating_ellipse
          action update_stimulus_display "Update Display"
          transition conditional: condition=isNotTooFast, target=Reaction
          transition conditional: condition=!isNotTooFast && counter-cStimOn >= nFramesTooFast, target=ZeroQuad
        task_system_state "ZeroQuad"
          action assignment "tag tooFast": variable=isNotTooFast, value=1
          action assignment "tQuadrature zeroed": variable=tQuadrature, value=quadrature
          action assignment: variable=qStartReact, value=quadrature
          action play_sound: sound=goSound
          action report: message=**** Quad zeroed *****
          action assignment: variable=tTrialLaserPowerMw, value=0
          transition direct: target=Reaction
        task_system_state "Reaction"
          action if: condition=doTestRobot==0
            action assignment "track motion": variable=trackMotion, value=(feedbackMotionSensitivity*(quadrature-tQuadrature))+tGratingEccentricityStart
            action assignment "track motion": variable=dTrackMotion, value=(feedbackMotionSensitivity*(quadrature-tQuadrature))-tGratingEccentricityStart
          action if: condition=doTestRobot==1
            action assignment "track motion": variable=trackMotion, value=1000
          action if: condition=doFeedbackMotion==1
            action if: condition=(tLeftTrial && trackMotion <= gratingTargetEccentricity) || (tLeftTrial == 0 && trackMotion >= gratingTargetEccentricity)
              action assignment "Move stimulus": variable=tGratingEccentricityDeg, value=trackMotion
              action assignment "Move distractor stimulus": variable=dGratingEccentricityDeg, value=dTrackMotion
              action if: condition=doGaussianMask
                action queue_stimulus "Queue Stimulus": stimulus=targetGrating_gaussian
                action play_dynamic_stimulus "start": stimulus=targetGrating_gaussian
                action queue_stimulus "Queue Stimulus": stimulus=distractorGrating_gaussian
                action play_dynamic_stimulus "start": stimulus=distractorGrating_gaussian
              action if: condition=doEllipseMask
                action queue_stimulus "Queue Stimulus": stimulus=targetGrating_ellipse
                action play_dynamic_stimulus "start": stimulus=targetGrating_ellipse
                action queue_stimulus "Queue Stimulus": stimulus=distractorGrating_ellipse
                action play_dynamic_stimulus "start": stimulus=distractorGrating_ellipse
            action if: condition=(tLeftTrial && trackMotion >= gratingTargetEccentricity) || (tLeftTrial == 0 && trackMotion <= gratingTargetEccentricity)
              action assignment "Move stimulus": variable=tGratingEccentricityDeg, value=gratingTargetEccentricity
              action if: condition=doGaussianMask
                action queue_stimulus "Queue Stimulus": stimulus=targetGrating_gaussian
                action play_dynamic_stimulus "start": stimulus=targetGrating_gaussian
                action queue_stimulus "Queue Stimulus": stimulus=distractorGrating_gaussian
                action play_dynamic_stimulus "start": stimulus=distractorGrating_gaussian
              action if: condition=doEllipseMask
                action queue_stimulus "Queue Stimulus": stimulus=targetGrating_ellipse
                action play_dynamic_stimulus "start": stimulus=targetGrating_ellipse
                action queue_stimulus "Queue Stimulus": stimulus=distractorGrating_ellipse
                action play_dynamic_stimulus "start": stimulus=distractorGrating_ellipse
            action update_stimulus_display "Update Display"
          action if: condition=doTestRobot && doAllCorrects==0
            action assignment "set robotGoLeft": variable=robotGoLeft, value=robotLeftProb >= rand(0,1)
          transition conditional: condition=counter-cStimOn >= nFramesOn && !stimIsOff, target=StimOff
          transition conditional: condition=counter-cStimOn >= nFramesReact && !isNoGo, target=Ignore
          transition conditional: condition=counter-cStimOn >= nFramesReact && isNoGo, target=Reward
          transition conditional: condition=doTestRobot==0 && tLeftTrial==1 && invertDirection && trackMotion >= leftDecisionThreshold, target=Incorrect
          transition conditional: condition=doTestRobot==0 && tLeftTrial==0 && invertDirection && trackMotion <= rightDecisionThreshold, target=Incorrect
          transition conditional: condition=doTestRobot==0 && tLeftTrial==0 && !invertDirection && trackMotion >= leftDecisionThreshold, target=Incorrect
          transition conditional: condition=doTestRobot==0 && tLeftTrial==1 && !invertDirection && trackMotion <= rightDecisionThreshold, target=Incorrect
          transition conditional: condition=doTestRobot==0 && !isNoGo && tLeftTrial==0 && invertDirection && trackMotion >= leftDecisionThreshold, target=Reward
          transition conditional: condition=doTestRobot==0 && !isNoGo && tLeftTrial==1 && invertDirection && trackMotion <= rightDecisionThreshold, target=Reward
          transition conditional: condition=doTestRobot==0 && !isNoGo && tLeftTrial==1 && !invertDirection && trackMotion >= leftDecisionThreshold, target=Reward
          transition conditional: condition=doTestRobot==0 && !isNoGo && tLeftTrial==0 && !invertDirection && trackMotion <= rightDecisionThreshold, target=Reward
          transition conditional: condition=doTestRobot==0 && isNoGo && tLeftTrial==0 && invertDirection && trackMotion >= leftDecisionThreshold, target=Incorrect
          transition conditional: condition=doTestRobot==0 && isNoGo && tLeftTrial==1 && invertDirection && trackMotion <= rightDecisionThreshold, target=Incorrect
          transition conditional: condition=doTestRobot==0 && isNoGo && tLeftTrial==1 && !invertDirection && trackMotion >= leftDecisionThreshold, target=Incorrect
          transition conditional: condition=doTestRobot==0 && isNoGo && tLeftTrial==0 && !invertDirection && trackMotion <= rightDecisionThreshold, target=Incorrect
          transition conditional: condition=doTestRobot==1 && doAllCorrects==1, target=Reward
          transition conditional: condition=timerExpired(robotTimerMs) && doTestRobot==1 && doAllCorrects==0 && robotGoLeft == 0 && tLeftTrial==1, target=Incorrect
          transition conditional: condition=timerExpired(robotTimerMs) && doTestRobot==1 && doAllCorrects==0 && robotGoLeft == 1 && tLeftTrial==0, target=Incorrect
          transition conditional: condition=timerExpired(robotTimerMs) && doTestRobot==1 && !isNoGo && doAllCorrects==0 && robotGoLeft == 1 && tLeftTrial==1, target=Reward
          transition conditional: condition=timerExpired(robotTimerMs) && doTestRobot==1 && !isNoGo && doAllCorrects==0 && robotGoLeft == 0 && tLeftTrial==0, target=Reward
          transition conditional: condition=timerExpired(robotTimerMs) && doTestRobot==1 && isNoGo && doAllCorrects==0 && robotGoLeft == 1 && tLeftTrial==1, target=Incorrect
          transition conditional: condition=timerExpired(robotTimerMs) && doTestRobot==1 && isNoGo && doAllCorrects==0 && robotGoLeft == 0 && tLeftTrial==0, target=Incorrect
          transition direct: target=Reaction
        task_system_state "Reward"
          action assignment: variable=tTrialLaserPowerMw, value=0
          action if: condition=doFeedbackMotion==0
            action dequeue_stimulus: stimulus=targetGrating_gaussian
            action dequeue_stimulus: stimulus=distractorGrating_gaussian
            action dequeue_stimulus: stimulus=targetGrating_ellipse
            action dequeue_stimulus: stimulus=distractorGrating_ellipse
            action update_stimulus_display
          action if "stim is not already off": condition=!stimIsOff
            action assignment "Log counter": variable=cStimOff, value=counter
          action update_stimulus_display
          action play_sound: sound=correctSound
          action assignment: variable=tConsecCorrects, value=tConsecCorrects+1
          action assignment: variable=tDecisionTimeMs, value= (now()/1000) - stimTimestampMs
          action assignment "Log counter": variable=cDecision, value=counter
          action report "Report": message=Decision Time = $tDecisionTimeMs
          action report "Report Reward": full_name=ReportDigital, message=** Success!!! **
          <!-- update running variables -->
          action assignment "success++": variable=success, value=success+1
          action assignment: variable=tLastTrialCorrect, value=1
          action if: condition=doConsecCorrectReward==1
            action if: condition=tConsecCorrects < maxConsecCorrects
              action assignment: variable=tRewardTimeUs, value=tConsecCorrects*consecCorrRewardInterval
            action if: condition=tConsecCorrects >= maxConsecCorrects
              action assignment: variable=tRewardTimeUs, value=maxConsecCorrects*consecCorrRewardInterval
          action if: condition=isNoGo
            action assignment: variable=didNoGo, value=1
          action if: condition=!isNoGo
            action assignment: variable=didNoGo, value=0
          action if: condition=!didNoGo
            action assignment: variable=tConsecErrors, value=0
          action if: condition=didNoGo
            action assignment: variable=tConsecErrors, value=tConsecErrors
          action if: condition=doConsecCorrectReward==0
            action assignment: variable=tRewardTimeUs, value=rewardTimeUs
          action if: condition=doRewardBias
            action if: condition=stimProbAvgLeft < 0.5 && tLeftTrial || stimProbAvgLeft > 0.5 && !tLeftTrial
              action assignment: variable=tRewardTimeUs, value=rewardTimeUs*lowProbRewardScale
            action if: condition=stimProbAvgLeft < 0.5 && !tLeftTrial || stimProbAvgLeft > 0.5 && tLeftTrial
              action assignment: variable=tRewardTimeUs, value=rewardTimeUs*highProbRewardScale
          action assignment: variable=juice, value=tRewardTimeUs
          action start_timer: timer=postRewardTimerUs, duration=100000, duration_units=us
          action assignment: variable=tLastTrialIgnore, value=0
          <!-- accept stim selection -->
          action accept_selections: selection=svStimNumber
          action assignment: variable=tNStimAccepted, value=tNStimAccepted + 1
          <!-- update selection variable -->
          action if: condition=tNStimAccepted >= 80
            action reset_selection: selection=svStimNumber
            action assignment: variable=tNStimAccepted, value=0
            action report: message=Should be resetting selections,tNStimAccepted=$tNStimAccepted
          action if: condition=tNStimAccepted < 80
            action next_selection: selection=svStimNumber
            action report: message=Next selection,tNStimAccepted=$tNStimAccepted
          action accept_selections: selection=svStimNumber2
          action assignment: variable=tNStimAccepted2, value=tNStimAccepted2 + 1
          <!-- update selection variable -->
          action if: condition=tNStimAccepted2 >= 80
            action reset_selection: selection=svStimNumber2
            action assignment: variable=tNStimAccepted2, value=0
            action report: message=Should be resetting selections,tNStimAccepted2=$tNStimAccepted2
          action if: condition=tNStimAccepted2 < 80
            action next_selection: selection=svStimNumber2
            action report: message=Next selection,tNStimAccepted2=$tNStimAccepted2
          transition timer_expired: timer=postRewardTimerUs, target=EndTrial
        task_system_state "Incorrect"
          action assignment: variable=tTrialLaserPowerMw, value=0
          action if: condition=doFeedbackMotion==0
            action dequeue_stimulus: stimulus=targetGrating_gaussian
            action dequeue_stimulus: stimulus=distractorGrating_gaussian
            action dequeue_stimulus: stimulus=targetGrating_ellipse
            action dequeue_stimulus: stimulus=distractorGrating_ellipse
            action update_stimulus_display
          action if "stim is not already off": condition=!stimIsOff
            action assignment "Log counter": variable=cStimOff, value=counter
          action assignment "Log counter": variable=cDecision, value=counter
          action assignment: variable=tDecisionTimeMs, value= (now()/1000) - stimTimestampMs
          action assignment: variable=tLastTrialCorrect, value=0
          action report "Report Reward": full_name=ReportDigital, message=** Incorrect: Time-Out for $incorrectTimeoutMs **
          action update_stimulus_display
          action play_sound: sound=incorrectSound
          action play_sound: sound=whiteNoiseSound
          action start_timer: timer=incorrectTimeoutTimer, duration=incorrectTimeoutMs, duration_units=ms
          action assignment "Incorrects++": variable=incorrect, value=incorrect+1
          action assignment: variable=tConsecErrors, value=tConsecErrors+1
          action assignment: variable=tConsecCorrects, value=0
          action assignment: variable=didNoGo, value=0
          action assignment: variable=tLastTrialIgnore, value=0
          <!-- accept stim selection -->
          action accept_selections: selection=svStimNumber
          action if: condition=doCorrectiveTrials==0
            action assignment: variable=tNStimAccepted, value=tNStimAccepted + 1
          action accept_selections: selection=svStimNumber2
          action if: condition=doCorrectiveTrials==0
            action assignment: variable=tNStimAccepted2, value=tNStimAccepted2 + 1
          <!-- update selection variable -->
          action if: condition=(tNStimAccepted >= 80) && doCorrectiveTrials==0
            action reset_selection: selection=svStimNumber
            action assignment: variable=tNStimAccepted, value=0
            action report: message=Should be resetting selections,tNStimAccepted=$tNStimAccepted
          action if: condition=(tNStimAccepted < 80) && doCorrectiveTrials==0
            action next_selection: selection=svStimNumber
            action report: message=Next selection,tNStimAccepted=$tNStimAccepted
          action if: condition=(tNStimAccepted2 >= 80) && doCorrectiveTrials==0
            action reset_selection: selection=svStimNumber2
            action assignment: variable=tNStimAccepted2, value=0
            action report: message=Should be resetting selections,tNStimAccepted2=$tNStimAccepted2
          action if: condition=(tNStimAccepted2 < 80) && doCorrectiveTrials==0
            action next_selection: selection=svStimNumber2
            action report: message=Next selection,tNStimAccepted2=$tNStimAccepted2
          transition timer_expired: timer=incorrectTimeoutTimer, target=PossibleEndTimeout
        task_system_state "Ignore"
          action assignment: variable=tTrialLaserPowerMw, value=0
          action dequeue_stimulus: stimulus=targetGrating_gaussian
          action dequeue_stimulus: stimulus=distractorGrating_gaussian
          action dequeue_stimulus: stimulus=targetGrating_ellipse
          action dequeue_stimulus: stimulus=distractorGrating_ellipse
          action if "stim is not already off": condition=!stimIsOff
            action assignment "Log counter": variable=cStimOff, value=counter
          action assignment "Log counter": variable=cDecision, value=counter
          action assignment: variable=tDecisionTimeMs, value= (now()/1000) - stimTimestampMs
          action report "Report Ignore": full_name=ReportDigital, message=** Ignore: Time-Out for $ignoreTimeoutMs **
          action update_stimulus_display
          action assignment: variable=tLastTrialCorrect, value=0
          action play_sound: sound=incorrectSound
          action play_sound: sound=whiteNoiseSound
          action start_timer: timer=ignoreTimeoutTimer, duration=ignoreTimeoutMs, duration_units=ms
          action assignment "Ignore++": variable=ignore, value=ignore+1
          action assignment: variable=tConsecErrors, value=tConsecErrors+1
          action assignment: variable=tConsecCorrects, value=0
          action assignment: variable=didNoGo, value=1
          action assignment: variable=tLeftResponse, value=0
          action assignment: variable=tRightResponse, value=0
          action assignment: variable=tLastTrialIgnore, value=1
          <!-- accept stim selection -->
          action accept_selections: selection=svStimNumber
          action if: condition=doCorrectiveTrials==0
            action assignment: variable=tNStimAccepted, value=tNStimAccepted + 1
          action accept_selections: selection=svStimNumber2
          action if: condition=doCorrectiveTrials==0
            action assignment: variable=tNStimAccepted2, value=tNStimAccepted2 + 1
          <!-- update selection variable -->
          action if: condition=(tNStimAccepted >= 80) && doCorrectiveTrials==0
            action reset_selection: selection=svStimNumber
            action assignment: variable=tNStimAccepted, value=0
            action report: message=Should be resetting selections,tNStimAccepted=$tNStimAccepted
          action if: condition=(tNStimAccepted < 80) && doCorrectiveTrials==0
            action next_selection: selection=svStimNumber
            action report: message=Next selection,tNStimAccepted=$tNStimAccepted
          action if: condition=(tNStimAccepted2 >= 80) && doCorrectiveTrials==0
            action reset_selection: selection=svStimNumber2
            action assignment: variable=tNStimAccepted2, value=0
            action report: message=Should be resetting selections,tNStimAccepted2=$tNStimAccepted2
          action if: condition=(tNStimAccepted2 < 80) && doCorrectiveTrials==0
            action next_selection: selection=svStimNumber2
            action report: message=Next selection,tNStimAccepted2=$tNStimAccepted2
          transition timer_expired: timer=ignoreTimeoutTimer, target=PossibleEndTimeout
        task_system_state "PossibleEndTimeout"
          <!-- do timeout if too many recent errors:
                                  use a state rather than a wait action because states are interruptible -->
          action if: condition=tConsecErrors >= nConsecErrorsCauseTimeout
            action report: message=***!!*** $consecErrorTimeoutS s timeout after $tConsecErrors consecutive errors
            action start_timer: timer=consecErrorTimer, duration=consecErrorTimeoutS, duration_units=s
          transition conditional "- bypass timer checking if no timeout requested": condition=tConsecErrors < nConsecErrorsCauseTimeout, target=EndTrial
          transition timer_expired: target=EndTrial, timer=consecErrorTimer
        task_system_state "EndTrial"
          action assignment "Encode END": variable=strobedDigitalWord, value=85
          action dequeue_stimulus: stimulus=targetGrating_gaussian
          action dequeue_stimulus: stimulus=distractorGrating_gaussian
          action dequeue_stimulus: stimulus=targetGrating_ellipse
          action dequeue_stimulus: stimulus=distractorGrating_ellipse
          action update_stimulus_display
          action assignment "Encode END": variable=strobedDigitalWord, value=85
          action assignment: variable=tTrialLaserPowerMw, value=0
          action assignment: variable=tNTrialsCompleted, value=tNTrialsCompleted+1
          action assignment: variable=tLastTrialWasLeft, value=tLeftTrial
          action assignment: variable=wasNoGo, value=isNoGo
          action if: condition=trackMotion >= leftDecisionThreshold
            action if: condition=invertDirection
              action assignment: variable=tLeftResponse, value=0
              action assignment: variable=tRightResponse, value=1
            action if: condition=!invertDirection
              action assignment: variable=tLeftResponse, value=1
              action assignment: variable=tRightResponse, value=0
          action if: condition=trackMotion <= rightDecisionThreshold
            action if: condition=invertDirection
              action assignment: variable=tLeftResponse, value=1
              action assignment: variable=tRightResponse, value=0
            action if: condition=!invertDirection
              action assignment: variable=tLeftResponse, value=0
              action assignment: variable=tRightResponse, value=1
          action if: condition=doBlocks==1
            action if: condition=tLeftTrial==1
              action assignment: variable=tNBlockLeftTrsCompleted, value=tNBlockLeftTrsCompleted+1
            action if: condition=tLeftTrial==0
              action assignment: variable=tNBlockRightTrsCompleted, value=tNBlockRightTrsCompleted+1
          action assignment "End Matlab Sync": variable=sync, value=0
          transition yield "return to parent task system"
    action stop_device_IO "Stop IO Device": device=LabJackU6
