monkeyml version=1.0
io_devices "IO Devices"
  iodevice LabJackU6 "LabJackU6": pulse_duration=juice, pulse_on=juice, lever1=FIO1, lever1_solenoid=MIO0, counter=counter, quadrature=quadrature, laser_trigger=laserTrigger, trial_laser_powerMw=tTrialLaserPowerMw, optic_device=optic_device, strobed_digital_word=strobedDigitalWord, do_wheelspeed=DoWheelSpeed, ws_durationUS=speedIntervalUS, wheel_speed=wheelSpeed, doCB=doCerebellarStim
  iodevice fake_monkey "FakeMonkey": spike_rate=10
  iodevice serverside_conduit "Server-side Event Conduit": resource_name=server_conduit
variables "Variables"
  folder "Behavioral Control"
    variable integer "experimentXmlTrialId": default_value=8, persistant=1
    <!-- n.b. it is forcibly set each trial below -->
    variable integer "subjectNum": default_value=0, persistant=1, groups=Task Type
    variable string "optic_device": default_value=led
    variable boolean "doITIStim": default_value=0, persistant=1, groups=Task Type
    variable float "itiContrast": default_value=1, persistant=1, groups=Task Type
    variable boolean "doVisualStim": default_value=1, persistant=1, groups=Task Type
    variable boolean "doLaserStim": default_value=0, persistant=1, groups=Task Type
    variable boolean "doSpeedDetect": default_value=0, persistant=1, groups=Task Type
    variable boolean "doDirDetect": default_value=1, persistant=1, groups=Task Type
    variable boolean "doContrastDetect": default_value=1, persistant=1, groups=Task Type
    variable boolean "doBlock2": default_value=0, persistant=1, groups=Task Type
    variable boolean "doAuditoryStim": default_value=0, persistant=1, groups=Task Type
    variable boolean "doAuditoryDetect": default_value=0, persistant=1, groups=Task Type
    variable boolean "doTrialLaser": default_value=0, persistant=1, groups=Task Type
    variable boolean "doWheelSpeed": default_value=0, persistant=1, groups=Task Type
    variable boolean "doCerebellarStim": default_value=0, persistant=1, groups=Task Type
    variable boolean "doTraining": default_value=0, persistant=1, groups=Training
    variable integer "nTrialsAdjustRandom": default_value=20, persistant=1, groups=Training
    variable integer "nTrialsAdjustRT": default_value=160, persistant=1, groups=Training
    variable integer "evaluationWindow": default_value=40, persistant=1, groups=Training
    variable boolean "block2DoVisualStim": default_value=1, persistant=1, groups=Block2
    variable boolean "block2DoSpeedDetect": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoDirDetect": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoTrialLaser": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoAuditoryStim": default_value=1, persistant=1, groups=Block2
    variable boolean "block2DoAuditoryDetect": default_value=1, persistant=1, groups=Block2
    variable float "frameRateHz": default_value=15, persistant=1, groups=Trial Structure
    variable integer "itiTimeMs": default_value=5000, persistant=1, groups=Trial Structure
    variable integer "randReqHoldMaxMs": default_value=300, persistant=1, groups=Trial Structure
    variable integer "fixedReqHoldTimeMs": default_value=400, persistant=1, groups=Trial Structure
    variable integer "tooFastTimeMs": default_value=100, persistant=1, groups=Trial Structure
    variable integer "reactTimeMs": default_value=1000, persistant=1, groups=Trial Structure
    variable integer "doGeomHoldDist": default_value=0, persistant=1, groups=Trial Structure
    variable integer "geomHoldMeanMs": default_value=1, persistant=1, groups=Trial Structure
    variable integer "doExtendItiOnShortPrevTrial": default_value=0, persistant=1, groups=Trial Structure
    variable float "soundPressAmplitude": default_value=0, persistant=1, groups=Sounds
    variable float "soundIncorrectAmplitude": default_value=0, persistant=1, groups=Sounds
    variable float "soundRewardAmplitude": default_value=0, persistant=1, groups=Sounds
    variable float "soundBasePressAmplitude": default_value=0, persistant=1, groups=Sounds
    variable float "soundTargetAmplitude": default_value=0, persistant=1, groups=Sounds
    variable float "soundTargetStepsPerOctave": default_value=0, persistant=1, groups=Sounds
    variable boolean "doLeverSolenoidAllTrials": default_value=0, persistant=1, groups=Solenoid
    variable boolean "doLeverSolenoidOnMiss": default_value=0, persistant=1, groups=Solenoid
    variable boolean "doLeverSolenoidOnEarly": default_value=0, persistant=1, groups=Solenoid
    variable boolean "doSolenoidOnTimeout": default_value=0, persistant=1, groups=Solenoid
    variable integer "earlyTimeoutMs": default_value=200, persistant=1, groups=Timeouts
    variable integer "missedTimeoutMs": default_value=2000, persistant=1, groups=Timeouts
    variable integer "nConsecErrorsCauseTimeout": default_value=10, persistant=1, groups=Timeouts
    variable integer "consecErrorTimeoutS": default_value=120, persistant=1, groups=Timeouts
    variable float "speedIntervalMS": default_value=0, persistant=1, groups=Wheel Speed
    variable float "wheelSpeed": default_value=0, persistant=0, groups=Wheel Speed
    variable integer "postRewardMs": default_value=500, persistant=1, groups=Reward
    variable integer "rewardUs": default_value=20000, persistant=1, groups=Reward
    variable integer "interRewardIntervalMs": default_value=200, persistant=1, groups=Reward
    variable integer "rewardEveryNCorrect": default_value=0, persistant=1, groups=Reward
    variable integer "maxConsecCorrects": default_value=1, persistant=1, groups=Reward
  folder "Stimuli"
    variable float "baseDotContrast": default_value=1, persistant=1, groups=Stimulus Parameters
    variable float "baseDotSpeedDPS": default_value=2, persistant=1, groups=Stimulus Parameters
    variable float "baseDotCoherence": default_value=0, persistant=1, groups=Stimulus Parameters
    variable float "dotElevationDeg": default_value=0, persistant=1, groups=Stimulus Parameters
    variable float "dotAzimuthDeg": default_value=0, persistant=1, groups=Stimulus Parameters
    variable float "dotContrast": default_value=1, persistant=1, groups=Stimulus Parameters
    variable float "dotFieldSizeDeg": default_value=30, persistant=1, groups=Stimulus Parameters
    variable float "dotSizeDeg": default_value=.2, persistant=1, groups=Stimulus Parameters
    variable float "dotDensity": default_value=1, persistant=1, groups=Stimulus Parameters
    variable float "dotDirectionDeg": default_value=1, persistant=1, groups=Stimulus Parameters
    variable float "dotMaxCoherenceStep": default_value=1, persistant=1, groups=Stimulus Parameters
    variable float "dotCoherenceStepsPerOctave": default_value=2, persistant=1, groups=Stimulus Parameters
    variable float "dotMaxContrastStep": default_value=1, persistant=1, groups=Stimulus Parameters
    variable float "dotContrastStepsPerOctave": default_value=1, persistant=1, groups=Stimulus Parameters
    variable integer "doOriAndContrastInterleaved": default_value=0, persistant=1
    variable float "dotMaxSpeedStepDPS": default_value=5, persistant=1, groups=Stimulus Parameters
    variable float "dotSpeedStepsPerOctave": default_value=2, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level1": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level2": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level3": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level4": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level5": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level6": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level7": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level8": default_value=10, persistant=1, groups=Stimulus Parameters
    <!-- stimulus control parameters -->
    variable integer "laserPeakMaxMw": default_value=20, persistant=1, groups=Laser
    variable integer "laserPeakStepsPerOctave": default_value=2, persistant=1, groups=Laser
    variable integer "laserOffPowerMw": default_value=0, persistant=1, groups=Laser
    variable integer "laserTransitionRampUpDownMs": default_value=2, persistant=1, groups=Laser
    variable integer "laserTransitionDoExpRamp": default_value=0, persistant=1, groups=Laser
    variable float "laserBaselinePowerMw": default_value=0, persistant=1, groups=Laser
    <!-- 0: do not do baseline -->
    variable float "laserBaselinePostStimTimeMs": default_value=500, persistant=1, groups=Laser
    variable boolean "laserDoLinearRamp": default_value=1, persistant=1, groups=Laser
    variable integer "laserRampLengthMs": default_value=100, persistant=1, groups=Laser
    variable integer "laserRampExtraConstantLengthMs": default_value=0, persistant=1, groups=Laser
    variable integer "laserRampDoExpRamp": default_value=0, persistant=1, groups=Laser
    variable integer "laserDoPulseTrain": default_value=0, persistant=1, groups=Laser
    variable integer "laserPulseLengthMs": default_value=5, persistant=1, groups=Laser
    variable integer "laserPulsePeriodMs": default_value=20, persistant=1, groups=Laser
    variable integer "laserTrainLengthMs": default_value=100, persistant=1, groups=Laser
    variable integer "laserTrainRandomNPulses": default_value=0, persistant=1, groups=Laser
    variable integer "laserTrainRandomType": default_value=0, persistant=1, groups=Laser
    variable float "trialLaserPowerMw": default_value=0, persistant=1, groups=Laser
    variable float "trialLaserOnTimeMs": default_value=0, persistant=1, groups=Laser
    variable float "trialLaserOffTimeMs": default_value=0, persistant=1, groups=Laser
    variable float "forceMinStimStepTo": default_value=-1, persistant=1, groups=Laser
    <!-- block 2 control -->
    variable boolean "doBlock2SeparateOdds": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level1": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level2": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level3": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level4": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level5": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level6": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level7": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level8": default_value=0, persistant=1, groups=Block2 Stimulus
    variable boolean "doBlock2SeparateReward": default_value=0, persistant=1, groups=Block2 Reward
    variable integer "block2RewardUs": default_value=20000, persistant=1, groups=Block2 Reward
    variable boolean "doBlock2SecondLaser": default_value=0, persistant=1, groups=Block2 Laser
    variable boolean "block2DoRampLength": default_value=0, persistant=1, groups=Block2 Laser
    variable integer "block2RampLengthMs2": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RampLengthPowerMaxMw2": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2BaseDotContrast": default_value=1, persistant=1, groups=Block2 Stimulus Parameters
    variable float "block2BaseDotSpeedDPS": default_value=2, persistant=1, groups=Block2 Stimulus Parameters
    variable float "block2BaseDotCoherence": default_value=0, persistant=1, groups=Block2 Stimulus Parameters
    variable float "block2DotElevationDeg": default_value=0, persistant=1, groups=Block2 Stimulus Parameters
    variable float "block2DotAzimuthDeg": default_value=0, persistant=1, groups=Block2 Stimulus Parameters
    variable float "block2DotContrast": default_value=1, persistant=1, groups=Block2 Stimulus Parameters
    variable float "block2DotFieldSizeDeg": default_value=30, persistant=1, groups=Block2 Stimulus Parameters
    variable float "block2DotSizeDeg": default_value=.2, persistant=1, groups=Block2 Stimulus Parameters
    variable float "block2DotDensity": default_value=1, persistant=1, groups=Block2 Stimulus Parameters
    variable float "block2DotDirectionDeg": default_value=1, persistant=1, groups=Block2 Stimulus Parameters
    variable float "block2SoundTargetAmplitude": default_value=0, persistant=1, groups=Block2 Sounds
    variable float "block2SoundTargetStepsPerOctave": default_value=0, persistant=1, groups=Block2 Sounds
    variable float "block2DotMaxCoherenceStep": default_value=1, persistant=1, groups=Block2 Stimulus Parameters
    variable float "block2DotCoherenceStepsPerOctave": default_value=2, persistant=1, groups=Block2 Stimulus Parameters
    variable float "block2DotMaxSpeedStepDPS": default_value=5, persistant=1, groups=Block2 Stimulus Parameters
    variable float "block2DotSpeedStepsPerOctave": default_value=2, persistant=1, groups=Block2 Stimulus Parameters
    variable boolean "block2DoRampVTrain": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainPowerMaxMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainStepsPerOctave": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtRampBaselinePowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainBaselinePowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserPowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserOnTimeMs": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserOffTimeMs": default_value=0, persistant=1, groups=Block2 Laser
  folder "Fake Mouse"
    variable boolean "doLever": default_value=0, persistant=1, groups=Fake Mouse
    variable integer "fakeMouseMaxReactMs": default_value=5000, persistant=1, groups=Fake Mouse
    variable boolean "doFakeMouseSuccessOnly": default_value=0, persistant=1, groups=Fake Mouse
  folder "Task Status"
    variable integer "failure": default_value=0
    variable boolean "leverResult": default_value=0
    variable boolean "stimulusOn": default_value=0
    variable integer "success": default_value=0
    variable integer "ignore": default_value=0
    variable boolean "trialStart": default_value=0
    variable float "pressTimestampMs": default_value=0, persistant=0
    variable float "actualHoldTimeMs": default_value=0, persistant=0
    variable list "reactTimesMsTotal": default_value=0, persistant=0
    variable list "reactTimesMsCorrect": default_value=0, persistant=0
    variable integer "medianReactTimesMs": default_value=0, persistant=0
    variable integer "achievedTierRandom": default_value=0, persistant=0
    variable integer "achievedMaxRandom": default_value=0, persistant=0
    variable integer "mouseSpeed": default_value=0, persistant=0
    variable integer "mouseHolder": default_value=0, persistant=0
    variable float "targetCorrect": default_value=0, persistant=0
    variable float "reactToWindow": default_value=0, persistant=0
    variable float "reactToWindow_lastN": default_value=0, persistant=0
  folder "Online Display"
    variable integer "sync": default_value=0
  folder "Hardware variables"
    variable INTEGER "FIO1": default_value=0, scope=GLOBAL, editable=never
    variable boolean "MIO0": default_value=0, scope=GLOBAL, editable=never
    variable boolean "laserTrigger": default_value=0
    variable integer "strobedDigitalWord": default_value=0, scope=GLOBAL, persistant=0
    variable integer "juice": scope=GLOBAL, default_value=0, groups=Reward
    variable integer "sendLaserParams": scope=GLOBAL, default_value=0, persistant=0
    variable integer "sendSerialParams": default_value=0, persistant=0
    variable integer "counter": default_value=0, persistant=0
  folder "Internal Variables"
    variable boolean "isFirstTrial": default_value=0, persistant=0
    variable integer "tTrialStartMWTimestampMs": default_value=0, persistant=0
    variable integer "tTotalReqHoldTimeMs": default_value=0
    variable integer "tRandReqHoldTimeMs": default_value=0
    variable integer "tTotalRewardTimeUs": default_value=0
    variable integer "tFakeMouseReactMs": default_value=0
    variable integer "tFakeMouseReactFrames": default_value=0
    variable integer "tStartTrialWaitForPressTimeMs": default_value=0
    variable integer "consecCorrects": default_value=0
    variable integer "tConsecErrors": default_value=0, persistent=0
    variable integer "tConsecTimeoutStartTime": default_value=0, persistent=0
    variable integer "tNRewards": default_value=0
    variable integer "tInterRewardIntervalMs": default_value=0
    variable integer "tRewardAddPerMsHoldUs": default_value=0
    variable integer "tGotLongBonusThisTrial": default_value=0
    variable integer "tItiWaitTimeMs": default_value=0
    variable integer "tThisTrialStartTimeMs": default_value=0
    variable integer "tLastTrialStartTimeMs": default_value=0
    variable integer "lastActualHoldTimeMs": default_value=0
    variable integer "tempMs": default_value=0
    variable integer "tTempStimOdds": default_value=0, persistant=0
    variable integer "tStimulusNumber": default_value=1, persistant=0
    variable integer "tSvStimNumber": default_value=0, persistant=0
    variable float "tLaserPowerMw": default_value=0, persistant=0
    variable integer "tLaserDoLinearRamp": default_value=0, persistant=0
    variable integer "tLaserDoPulseTrain": default_value=0, persistant=0
    variable integer "tLaserRampLengthMs": default_value=0, persistant=0
    variable integer "tLaserPeakMaxMw": default_value=0, persistant=0
    variable float "tLaserBaselinePowerMw": default_value=0, persistant=0
    variable float "tBaseDotContrast": default_value=0, persistant=0
    variable float "tBaseDotSpeedDPS": default_value=0, persistant=0
    variable float "tBaseDotCoherence": default_value=0, persistant=0
    variable float "tDotSpeedDPS": default_value=0, persistant=0
    variable float "setDotSpeedDPS": default_value=0, persistant=0
    variable float "tDotContrast": default_value=0, persistant=0
    variable float "setDotContrast": default_value=0, persistant=0
    variable float "tSoundTargetStepsPerOctave": default_value=1, persistant=0
    variable float "tSoundMaxTargetAmplitude": default_value=0, persistant=0
    variable float "tSoundTargetAmplitude": default_value=0, persistant=0
    variable float "tSoundBasePressAmplitude": default_value=0, persistant=0
    variable float "tDotCoherence": default_value=0, persistant=0
    variable float "setDotCoherence": default_value=0, persistant=0
    variable float "tDotCoherenceStepsPerOctave": default_value=1, persistant=0
    variable float "tDotSpeedStepsPerOctave": default_value=1, persistant=0
    variable float "tDotMaxCoherenceStep": default_value=0, persistant=0
    variable float "tDotMaxSpeedStepDPS": default_value=0, persistant=0
    variable float "tLaserPeakStepsPerOctave": default_value=1, persistant=0
    variable float "tDotMaxContrastStep": default_value=0, persistant=0
    variable float "tDotContrastStepsPerOctave": default_value=1, persistant=0
    variable float "tDotElevationDeg": default_value=0, persistant=0
    variable float "tDotAzimuthDeg": default_value=0, persistant=0
    variable float "tDotFieldSizeDeg": default_value=30, persistant=0
    variable float "tDotSizeDeg": default_value=.2, persistant=0
    variable float "tDotDensity": default_value=1, persistant=0
    variable float "tDotDirectionDeg": default_value=1, persistant=0
    variable boolean "tDoVisualStim": default_value=0, persistant=0
    variable boolean "tDoSpeedDetect": default_value=0, persistant=0
    variable boolean "tDoDirDetect": default_value=0, persistant=0
    variable boolean "tDoContrastDetect": default_value=0, persistant=0
    variable boolean "tDoAuditoryStim": default_value=0, persistant=0
    variable boolean "tDoAuditoryDetect": default_value=0, persistant=0
    variable boolean "block2DoGratingAppearance": default_value=0, persistant=1
    variable float "tTrialLaserPowerMw": default_value=0, persistant=0
    variable float "tTrialLaserPowerMw_trigger": default_value=0, persistant=0
    variable float "tTrialLaserOnTimeMs": default_value=0, persistant=0
    variable float "tTrialLaserOffTimeMs": default_value=0, persistant=0
    variable integer "tBlock2TrialNumber": default_value=0, persistant=0
    variable integer "tLeverPressTimeMs": default_value=0, persistant=0
    variable integer "tLeverReleaseTimeMs": default_value=0, persistant=0
    variable integer "trials": default_value=1, persistant=0
    variable integer "tempNCorrect": default_value=0, persistent=0, persistant=0
    <!-- frame conversion -->
    variable integer "tItiWaitFrames": default_value=0, persistant=0
    variable integer "tTotalReqHoldFrames": default_value=0, persistant=0
    variable integer "nFramesTooFast": default_value=0, persistant=1
    variable integer "nFramesReact": default_value=0, persistant=1
    variable integer "nFramesEarlyTimeout": default_value=0, persistant=1
    variable integer "nFramesMissedTimeout": default_value=0, persistant=1
    <!-- counter variables -->
    variable integer "cItiStart": default_value=0, persistant=0
    variable integer "cLeverDown": default_value=0, persistant=0
    variable integer "cTargetOn": default_value=0, persistant=0
    variable integer "cLeverUp": default_value=0, persistant=0
    variable boolean "DoWheelSpeed": default_value=0, persistant=0
    variable float "speedIntervalUS": default_value=0, persistant=0
    variable integer "quadrature": default_value=0, persistant=0
    variable integer "tNStimAccepted": default_value=0, persistant=0
    variable selection "svStimNumber": values=0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79, selection=random_without_replacement, nsamples=80, sampling_method=samples
sounds "Sounds"
  sound wav_file "pressSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/louderFlatterPress.wav, amplitude=soundPressAmplitude
  sound wav_file "incorrectSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/incorrectMouse.wav, amplitude=soundIncorrectAmplitude
  sound wav_file "rewardSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/shortCorrect.wav, amplitude=soundRewardAmplitude
  sound wav_file "basePressSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/6000Hz_.2s.wav, amplitude=tSoundBasePressAmplitude
  sound wav_file "targetSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/10000Hz_.2s.wav, amplitude=tSoundTargetAmplitude
stimuli "Stimuli"
  stimulus blank_screen "background": color=0.5,0.5,0.5
  stimulus moving_dots "moving_dots": direction=tDotDirectionDeg, dot_density=tDotDensity, dot_size=tDotSizeDeg, coherence=setDotCoherence, speed=setDotSpeedDPS, field_radius=tDotFieldSizeDeg/2, field_center_x=tDotAzimuthDeg, field_center_y=tDotElevationDeg, alpha_multiplier=setDotContrast
experiment "Experiment"
  protocol "JuiceOnHoldProtocol": selection=sequential, nsamples=1, sampling_method=cycles
    <!-- init actions run only on first trial after loading experiment -->
    action assignment "reset counter": variable=counter, value=0
    action assignment "reset cLeverUp": variable=cLeverUp, value=0
    action if: condition=success+ignore+failure == 0
      action report: message=**** First trial since experiment load - initializing
      action assignment: variable=isFirstTrial, value=1
      action assignment: variable=tLastTrialStartTimeMs, value=-1
      action assignment: variable=tThisTrialStartTimeMs, value=-1
      action assignment: variable=lastActualHoldTimeMs, value=0
      <!-- reset selection var -->
      action reset_selection: selection=svStimNumber
      action assignment: variable=tNStimAccepted, value=0
    trial "Trial 01": nsamples=2500, sampling_method=cycles, selection=sequential
      task_system "TS"
        task_system_state "Initialization"
          action start_device_IO "Start IO Device": device=LabJackU6
          action assignment "Sync Matlab": variable=sync, value=1
          action if: condition=doTraining == 1
            action run_python_file "Load script": path=python_Training.py
          action if: condition=success+ignore+failure > 0
            action assignment: variable=isFirstTrial, value=0
          action assignment: variable=laserTrigger, value=0
          action queue_stimulus: stimulus=background
          action update_stimulus_display "-"
          action if: condition=doVisualStim
            action if: condition=doITIStim
              action assignment "set dot params": variable=setDotCoherence, value=baseDotCoherence
              action assignment "set dot params": variable=setDotSpeedDPS, value=baseDotSpeedDPS
              action assignment "set dot params": variable=setDotContrast, value=itiContrast
              action assignment "set dot params": variable=tDotDensity, value=dotDensity
              action assignment "set dot params": variable=tDotSizeDeg, value=dotSizeDeg
              action assignment "set dot params": variable=tDotFieldSizeDeg, value=dotFieldSizeDeg
              action assignment "set dot params": variable=tDotAzimuthDeg, value=dotAzimuthDeg
              action assignment "set dot params": variable=tDotElevationDeg, value=dotElevationDeg
              action assignment "set dot params": variable=tDotDirectionDeg, value=dotDirectionDeg
              action live_queue_stimulus "Queue Stimulus": stimulus=moving_dots
              action play_dynamic_stimulus "start": stimulus=moving_dots
              action update_stimulus_display "justincase"
          <!-- In this state, do all stimulus selection/tValue setting -->
          action report: message=Initializing Trial
          <!-- Reset t_____RemainingOn/Off to 0ms -->
          action assignment "Reset tLeverPressTimeMs": variable=tLeverPressTimeMs, value=0
          action assignment "Reset tLeverReleaseTimeMs": variable=tLeverReleaseTimeMs, value=0
          <!-- choose hold time this trial -->
          action if: condition=!doGeomHoldDist
            <!-- default, uniform -->
            action assignment: variable=tRandReqHoldTimeMs, value=rand(0,randReqHoldMaxMs)
          action if: condition=doGeomHoldDist
            action assignment: variable=tRandReqHoldTimeMs, value=geom_rand(1.0/geomHoldMeanMs, randReqHoldMaxMs)
          action assignment: variable=tTotalReqHoldTimeMs, value=fixedReqHoldTimeMs + tRandReqHoldTimeMs
          action assignment: variable=tTrialStartMWTimestampMs, value=now()/1000
          <!-- integer valued ms timestamp -->
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          <!-- Transmit the trial timestamp so strobed code sequences are unique -->
          action assert: condition=tTrialStartMWTimestampMs <= 2147483648, message=tTrialStartMWTimestampMs is too large - should happen only after several days of running!?, stop_on_failure=1
          <!-- prevent overflow outside 2**31ms ~ 10 days - I don't know how to get unsigned casts in the XML -->
          <!-- encode trialStartTimestamp in bytes: 4 bytes: millions of seconds, 1000s, s, ms -->
          action assignment "Encode TimestampStart": variable=strobedDigitalWord, value=200
          action assignment "Encode TimestampEnd": variable=strobedDigitalWord, value=201
          action assignment: variable=block2DoGratingAppearance, value=block2DoVisualStim
          action assignment "Set trialStart": variable=trialStart, value=1
          action assignment "juice = 0": variable=juice, value=0
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment: variable=laserTrigger, value=0
          action assignment: variable=lastActualHoldTimeMs, value=actualHoldTimeMs
          action assignment: variable=experimentXmlTrialId, value=8
          <!-- choose correct stimulus number based on odds; block2 tr number does not get assigned if ! doBlock2 -->
          action assignment: variable=tSvStimNumber, value=svStimNumber
          <!-- choose a value from selection var, 0-origin -->
          action assignment: variable=tTempStimOdds, value=0
          <!-- this variable exists only for code clarity below -->
          <!-- level 1 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level1))
            action assignment: variable=tStimulusNumber, value=0
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level1-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level1
          <!-- level 1b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level1))
              action assignment: variable=tStimulusNumber, value=0
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level1
          <!-- level 2 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level2))
            action assignment: variable=tStimulusNumber, value=1
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level2-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level2
          <!-- level 2b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level2))
              action assignment: variable=tStimulusNumber, value=1
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level2
          <!-- level3 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level3))
            action assignment: variable=tStimulusNumber, value=2
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level3-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level3
          <!-- level3b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level3))
              action assignment: variable=tStimulusNumber, value=2
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level3
          <!-- level4 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level4))
            action assignment: variable=tStimulusNumber, value=3
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level4-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level4
          <!-- level4b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level4))
              action assignment: variable=tStimulusNumber, value=3
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level4
          <!-- level5 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level5))
            action assignment: variable=tStimulusNumber, value=4
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level5-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level5
          <!-- level5b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level5))
              action assignment: variable=tStimulusNumber, value=4
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level5
          <!-- level6 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level6))
            action assignment: variable=tStimulusNumber, value=5
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level6-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level6
          <!-- level6b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level6))
              action assignment: variable=tStimulusNumber, value=5
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level6
          <!-- level7 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level7))
            action assignment: variable=tStimulusNumber, value=6
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level7-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level7
          <!-- level7b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level7))
              action assignment: variable=tStimulusNumber, value=6
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level7
          <!-- level8 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level8))
            action assignment: variable=tStimulusNumber, value=7
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level8-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level8
          <!-- level8b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level8))
              action assignment: variable=tStimulusNumber, value=7
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level8
          <!-- error checking -->
          action assert: stop_on_failure=1, condition=tTempStimOdds == 80, message=stim odds must sum to 80!  (sum now is $tTempStimOdds )
          <!-- stop_on_failure=0: allow slop so it can be changed while running -->
          action if: condition=doBlock2 && !doBlock2SeparateOdds
            action assert: condition=trPer80Level1-(((int)trPer80Level1)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level2-(((int)trPer80Level2)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level3-(((int)trPer80Level3)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level4-(((int)trPer80Level4)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level5-(((int)trPer80Level5)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level6-(((int)trPer80Level6)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level7-(((int)trPer80Level7)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level8-(((int)trPer80Level8)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
          action if: condition=!doBlock2
            action assignment: variable=setDotCoherence, value=baseDotCoherence
            action assignment: variable=setDotSpeedDPS, value=baseDotSpeedDPS
            action assignment: variable=tBaseDotCoherence, value=baseDotCoherence
            action assignment: variable=tBaseDotSpeedDPS, value=baseDotSpeedDPS
            action assignment: variable=tBaseDotContrast, value=baseDotContrast
            action assignment: variable=tDotMaxSpeedStepDPS, value=dotMaxSpeedStepDPS
            action assignment: variable=tDotSpeedStepsPerOctave, value=dotSpeedStepsPerOctave
            action assignment: variable=tDotMaxCoherenceStep, value=dotMaxCoherenceStep
            action assignment: variable=tDotCoherenceStepsPerOctave, value=dotCoherenceStepsPerOctave
            action assignment: variable=tDotDensity, value=dotDensity
            action assignment: variable=tDotSizeDeg, value=dotSizeDeg
            action assignment: variable=tDotFieldSizeDeg, value=dotFieldSizeDeg
            action assignment: variable=tDotAzimuthDeg, value=dotAzimuthDeg
            action assignment: variable=tDotElevationDeg, value=dotElevationDeg
            action assignment: variable=tDotDirectionDeg, value=dotDirectionDeg
            action assignment: variable=tDoVisualStim, value=doVisualStim
            action assignment: variable=tDoSpeedDetect, value=doSpeedDetect
            action assignment: variable=tDoDirDetect, value=doDirDetect
            action assignment: variable=tDoAuditoryStim, value=doAuditoryStim
            action assignment: variable=tDoAuditoryDetect, value=doAuditoryDetect
            action assignment: variable=tSoundMaxTargetAmplitude, value=soundTargetAmplitude
            action assignment: variable=tSoundTargetStepsPerOctave, value=soundTargetStepsPerOctave
            action assignment: variable=tLaserBaselinePowerMw, value=laserBaselinePowerMw
            action if: condition=doTrialLaser
              action assignment: variable=tTrialLaserPowerMw_trigger, value=trialLaserPowerMw
              action assignment: variable=tTrialLaserOnTimeMs, value=trialLaserOnTimeMs
              action assignment: variable=tTrialLaserOffTimeMs, value=trialLaserOffTimeMs
            action if: condition=!doTrialLaser
              action assignment: variable=tTrialLaserPowerMw, value=0
              action assignment: variable=tTrialLaserOnTimeMs, value=0
              action assignment: variable=tTrialLaserOffTimeMs, value=0
          <!-- Choose block 2 trial type -->
          <!-- <action type="assert" stop_on_failure="1"
                                condition="(block2DoVisualStim+block2DoRampLength+block2DoRampVTrain+block2DoTrialLaser) == 1"
                                message="must select exactly one of block2Do variables!"/> -->
          <!-- trial numbers assigned above in switch statement.  Note equal probability 
                             - if more complicated odds wanted; add a set of block2 level odds -->
          <!-- stimulus appearance for block 2 -->
          action if: condition=doBlock2
            action if: condition=block2DoVisualStim || block2DoAuditoryStim
              <!-- same for both types of block2 trials -->
              action assignment: variable=tTrialLaserPowerMw_trigger, value=trialLaserPowerMw
              action if: condition=tBlock2TrialNumber == 0
                action assignment: variable=setDotCoherence, value=baseDotCoherence
                action assignment: variable=setDotSpeedDPS, value=baseDotSpeedDPS
                action assignment: variable=tBaseDotCoherence, value=baseDotCoherence
                action assignment: variable=tBaseDotSpeedDPS, value=baseDotSpeedDPS
                action assignment: variable=tBaseDotContrast, value=baseDotContrast
                action assignment: variable=tDotMaxSpeedStepDPS, value=dotMaxSpeedStepDPS
                action assignment: variable=tDotSpeedStepsPerOctave, value=dotSpeedStepsPerOctave
                action assignment: variable=tDotMaxCoherenceStep, value=dotMaxCoherenceStep
                action assignment: variable=tDotCoherenceStepsPerOctave, value=dotCoherenceStepsPerOctave
                action assignment: variable=tDotDensity, value=dotDensity
                action assignment: variable=tDotSizeDeg, value=dotSizeDeg
                action assignment: variable=tDotFieldSizeDeg, value=dotFieldSizeDeg
                action assignment: variable=tDotAzimuthDeg, value=dotAzimuthDeg
                action assignment: variable=tDotElevationDeg, value=dotElevationDeg
                action assignment: variable=tDotDirectionDeg, value=dotDirectionDeg
                action assignment: variable=tDoVisualStim, value=doVisualStim
                action assignment: variable=tDoSpeedDetect, value=doSpeedDetect
                action assignment: variable=tDoDirDetect, value=doDirDetect
                action assignment: variable=tDoAuditoryStim, value=doAuditoryStim
                action assignment: variable=tDoAuditoryDetect, value=doAuditoryDetect
                action assignment: variable=tSoundMaxTargetAmplitude, value=soundTargetAmplitude
                action assignment: variable=tSoundTargetStepsPerOctave, value=soundTargetStepsPerOctave
              action if: condition=tBlock2TrialNumber == 1
                action assignment: variable=setDotCoherence, value=block2BaseDotCoherence
                action assignment: variable=setDotSpeedDPS, value=block2BaseDotSpeedDPS
                action assignment: variable=tBaseDotCoherence, value=block2BaseDotCoherence
                action assignment: variable=tBaseDotSpeedDPS, value=block2BaseDotSpeedDPS
                action assignment: variable=tBaseDotContrast, value=block2BaseDotContrast
                action assignment: variable=tDotMaxSpeedStepDPS, value=block2DotMaxSpeedStepDPS
                action assignment: variable=tDotSpeedStepsPerOctave, value=block2DotSpeedStepsPerOctave
                action assignment: variable=tDotMaxCoherenceStep, value=block2DotMaxCoherenceStep
                action assignment: variable=tDotCoherenceStepsPerOctave, value=block2DotCoherenceStepsPerOctave
                action assignment: variable=tDotDensity, value=block2DotDensity
                action assignment: variable=tDotSizeDeg, value=block2DotSizeDeg
                action assignment: variable=tDotFieldSizeDeg, value=block2DotFieldSizeDeg
                action assignment: variable=tDotAzimuthDeg, value=block2DotAzimuthDeg
                action assignment: variable=tDotElevationDeg, value=block2DotElevationDeg
                action assignment: variable=tDotDirectionDeg, value=block2DotDirectionDeg
                action assignment: variable=tDoVisualStim, value=block2DoVisualStim
                action assignment: variable=tDoSpeedDetect, value=block2DoSpeedDetect
                action assignment: variable=tDoDirDetect, value=block2DoDirDetect
                action assignment: variable=tDoAuditoryDetect, value=block2DoAuditoryDetect
                action assignment: variable=tDoAuditoryStim, value=block2DoAuditoryStim
                action assignment: variable=tSoundMaxTargetAmplitude, value=block2SoundTargetAmplitude
                action assignment: variable=tSoundTargetStepsPerOctave, value=block2SoundTargetStepsPerOctave
            action assignment: variable=tLaserDoLinearRamp, value=laserDoLinearRamp
            action assignment: variable=tLaserDoPulseTrain, value=laserDoPulseTrain
            action assignment: variable=tLaserBaselinePowerMw, value=laserBaselinePowerMw
          <!-- using trial laser for block 1 -->
          action if: condition=doTrialLaser
            action assignment: variable=tTrialLaserPowerMw, value=trialLaserPowerMw
            action assignment: variable=tTrialLaserOnTimeMs, value=trialLaserOnTimeMs
            action assignment: variable=tTrialLaserOffTimeMs, value=trialLaserOffTimeMs
          action if: condition=!doTrialLaser
            action assignment: variable=tTrialLaserPowerMw, value=0
            action assignment: variable=tTrialLaserOnTimeMs, value=0
            action assignment: variable=tTrialLaserOffTimeMs, value=0
          <!-- using trial laser for block 2 -->
          action if: condition=block2DoTrialLaser
            action assert: condition=!doLaserStim, stop_on_failure=1, message=When using trialLaser, doLaserStim must be off
            action if: condition=tBlock2TrialNumber == 0
              <!-- off -->
              action assignment: variable=tDotMaxSpeedStepDPS, value=dotMaxSpeedStepDPS
              action assignment: variable=tDotSpeedStepsPerOctave, value=dotSpeedStepsPerOctave
              action assignment: variable=tDotMaxCoherenceStep, value=dotMaxCoherenceStep
              action assignment: variable=tDotCoherenceStepsPerOctave, value=dotCoherenceStepsPerOctave
              action assignment: variable=tSoundMaxTargetAmplitude, value=soundTargetAmplitude
              action assignment: variable=tSoundTargetStepsPerOctave, value=soundTargetStepsPerOctave
              action if: condition=doTrialLaser
                action assignment: variable=tTrialLaserPowerMw, value=trialLaserPowerMw
                action assignment: variable=tTrialLaserOnTimeMs, value=trialLaserOnTimeMs
                action assignment: variable=tTrialLaserOffTimeMs, value=trialLaserOffTimeMs
              action if: condition=doTrialLaser == 0
                action assignment: variable=tTrialLaserPowerMw, value=0
                action assignment: variable=tTrialLaserOnTimeMs, value=0
                action assignment: variable=tTrialLaserOffTimeMs, value=0
            action if: condition=tBlock2TrialNumber == 1
              <!-- on -->
              action if: condition=optic_device == 'led' 
                action assignment: variable=tTrialLaserPowerMw_trigger, value=block2TrialLaserPowerMw
              action if: condition=optic_device != 'led' 
                action assignment: variable=tTrialLaserPowerMw, value=block2TrialLaserPowerMw
                action assignment: variable=tTrialLaserPowerMw_trigger, value=block2TrialLaserPowerMw
              action assignment: variable=tTrialLaserOnTimeMs, value=block2TrialLaserOnTimeMs
              action assignment: variable=tTrialLaserOffTimeMs, value=block2TrialLaserOffTimeMs
              action assignment: variable=tDotMaxSpeedStepDPS, value=block2DotMaxSpeedStepDPS
              action assignment: variable=tDotSpeedStepsPerOctave, value=block2DotSpeedStepsPerOctave
              action assignment: variable=tDotMaxCoherenceStep, value=block2DotMaxCoherenceStep
              action assignment: variable=tDotCoherenceStepsPerOctave, value=block2DotCoherenceStepsPerOctave
              action assignment: variable=tSoundMaxTargetAmplitude, value=block2SoundTargetAmplitude
              action assignment: variable=tSoundTargetStepsPerOctave, value=block2SoundTargetStepsPerOctave
            <!-- in both cases -->
            action assignment: variable=setDotCoherence, value=baseDotCoherence
            action assignment: variable=setDotSpeedDPS, value=baseDotSpeedDPS
            action assignment: variable=tBaseDotCoherence, value=baseDotCoherence
            action assignment: variable=tBaseDotSpeedDPS, value=baseDotSpeedDPS
            action assignment: variable=tBaseDotContrast, value=baseDotContrast
            action assignment: variable=tDotDensity, value=dotDensity
            action assignment: variable=tDotSizeDeg, value=dotSizeDeg
            action assignment: variable=tDotFieldSizeDeg, value=dotFieldSizeDeg
            action assignment: variable=tDotAzimuthDeg, value=dotAzimuthDeg
            action assignment: variable=tDotElevationDeg, value=dotElevationDeg
            action assignment: variable=tDotDirectionDeg, value=dotDirectionDeg
            action assignment: variable=tDoVisualStim, value=doVisualStim
            action assignment: variable=tDoSpeedDetect, value=doSpeedDetect
            action assignment: variable=tDoDirDetect, value=doDirDetect
            action assignment: variable=tDoAuditoryDetect, value=doAuditoryDetect
            action assignment: variable=tDoAuditoryStim, value=doAuditoryStim
          <!-- !doBlock2 error checking -->
          action assert: stop_on_failure=1, condition=!doLaserStim || (laserDoLinearRamp || laserDoPulseTrain), message=When doLaserStim, ramp or train must be set
          <!-- choose laser power -->
          action if: condition=doLaserStim
            action assignment: variable=tLaserPowerMw, value=tLaserPeakMaxMw / pow(2, 1.0*tStimulusNumber/tLaserPeakStepsPerOctave)
            <!-- adjust from baseline -->
            action if: condition=tLaserBaselinePowerMw > 0
              action assignment: variable=tLaserPowerMw, value=tLaserPowerMw + tLaserBaselinePowerMw
            action report: message=Laser power this trial is $tLaserPowerMw
            action assert: condition=tTrialLaserPowerMw_trigger == 0, stop_on_failure=1, message=bug: tLaserPowerMw and tTrialLaserPowerMw_trigger != 0
          action if: condition=!doLaserStim
            action assignment: variable=tLaserPowerMw, value=0
          <!-- choose vis stim ori/dir -->
          action if: condition=tDoVisualStim
            action if: condition=tDoDirDetect
              action assignment: variable=tDotCoherence, value=tBaseDotCoherence + (tDotMaxCoherenceStep / (pow(2, tStimulusNumber/tDotCoherenceStepsPerOctave)))
              action report: message=Direction this trial is $tDotDirectionDeg
              action if: condition=!tDoSpeedDetect
                action assignment: variable=tDotSpeedDPS, value=tBaseDotSpeedDPS
            action if: condition=tDoSpeedDetect
              action assignment: variable=tDotSpeedDPS, value=tBaseDotSpeedDPS + (tDotMaxSpeedStepDPS / (pow(2, 1.0*tStimulusNumber/tDotSpeedStepsPerOctave)))
              action report: message=Speed this trial is $tDotSpeedDPS
              action if: condition=!tDoDirDetect
                action assignment: variable=tDotCoherence, value=tBaseDotCoherence
            action if: condition=!tDoSpeedDetect && !tDoDirDetect
              action assignment: variable=tDotCoherence, value=tBaseDotCoherence
              action assignment: variable=tDotSpeedDPS, value=tBaseDotSpeedDPS
            action assignment: variable=tDotContrast, value=dotContrast
          action if: condition=tDoVisualStim == 0
            action assignment: variable=tBaseDotContrast, value=0
            action assignment: variable=tDotContrast, value=0
          action assert: condition=tDotContrast >= 0, stop_on_failure=1, message=No negative contrasts allowed
          <!-- choose auditory stim -->
          action if: condition=tDoAuditoryStim
            action assignment: variable=tSoundBasePressAmplitude, value=soundBasePressAmplitude
            action if: condition=tDoAuditoryDetect
              action assignment: variable=tSoundTargetAmplitude, value=tSoundMaxTargetAmplitude / (pow(2, tStimulusNumber/tSoundTargetStepsPerOctave))
            action if: condition=!tDoAuditoryDetect
              action assignment: variable=tSoundTargetAmplitude, value=0
          action if: condition=!tDoAuditoryStim
            action assignment: variable=tSoundBasePressAmplitude, value=0
            action assignment: variable=tSoundTargetAmplitude, value=0
          <!-- send laser params to controller -->
          action if: condition=doLaserStim
            action assignment "Send laser params to controller": variable=sendLaserParams, value=1
            action assignment "Send laser params to controller": variable=sendLaserParams, value=0
          <!-- lock down the min stimulus value to a fixed number if variable not negative -->
          <!-- initialize trial start/end times -->
          action if: condition=tThisTrialStartTimeMs == -1
            <!-- first trial, leave lasttime as -1 -->
            action assignment: variable=tLastTrialStartTimeMs, value=-1
          action if: condition=tThisTrialStartTimeMs != -1
            <!-- else -->
            <!-- later trials, copy this into last before setting this again below -->
            action assignment: variable=tLastTrialStartTimeMs, value=tThisTrialStartTimeMs
          action assignment: variable=tThisTrialStartTimeMs, value=now()/1000
          <!-- debug -->
          action report: message=tNStimAccepted == $tNStimAccepted, svStimN is $svStimNumber, tb2TrN is $tBlock2TrialNumber 
          <!-- compute ITI time -->
          <!-- initialize with a const value -->
          action assignment: variable=tItiWaitTimeMs, value=itiTimeMs
          <!-- if asked for, extend ITI based on previous hold and max stim time, also takes TOs and extra cycles into account -->
          action if: condition=doExtendItiOnShortPrevTrial == 1
            action assignment: variable=tempMs, value=(fixedReqHoldTimeMs+randReqHoldMaxMs)-lastActualHoldTimeMs
            action if: condition=tempMs > 0
              <!-- add to ITI -->
              action assignment "-": variable=tItiWaitTimeMs, value=itiTimeMs+tempMs
          <!-- convert to frames -->
          action assignment "Calculate tItiWaitFrames": variable=tItiWaitFrames, value=ceil((tItiWaitTimeMs/1000)*frameRateHz)
          action assignment "Calculate nFramesTooFast": variable=nFramesTooFast, value=ceil((tooFastTimeMs/1000)*frameRateHz)
          action assignment "Calculate nFramesReact": variable=nFramesReact, value=ceil((reactTimeMs/1000)*frameRateHz)
          action assignment "Calculate nFramesEarlyTimeout": variable=nFramesEarlyTimeout, value=ceil((earlyTimeoutMs/1000)*frameRateHz)
          action assignment "Calculate nFramesMissedTimeout": variable=nFramesMissedTimeout, value=ceil((missedTimeoutMs/1000)*frameRateHz)
          action assignment "Set total required hold frames": variable=tTotalReqHoldFrames, value=ceil((tTotalReqHoldTimeMs/1000)*frameRateHz)
          <!-- if trialLaser, send params to controller -->
          action if: condition=tTrialLaserPowerMw_trigger > 0
            action assignment "Send laser params to controller": variable=sendLaserParams, value=1
            action assignment "Send laser paramsto controller": variable=sendLaserParams, value=0
            action assert: condition=tLaserPowerMw == 0, stop_on_failure=1, message=bug: tLaserPowerMw and tTrialLaserPowerMw > 0
            action assert: stop_on_failure=1, condition=(tTrialLaserOnTimeMs == 0 && tTrialLaserOffTimeMs == 0) || (tTrialLaserOnTimeMs > 0 && tTrialLaserOffTimeMs > 0), message=For constant trial laser, set on and off time to 0.  Otherwise on/off time must both be set
          transition conditional "wait 1 frame": condition=counter >= (cLeverUp+1), target=InterTrialInterval
        task_system_state "InterTrialInterval"
          action assignment "Log counter": variable=cItiStart, value=counter
          action assignment "Clear stimulusOn": variable=stimulusOn, value=0
          action assignment "Encode ItiStart": variable=strobedDigitalWord, value=6
          action if: condition=doLeverSolenoidAllTrials
            <!-- Turn on solenoid for ITI only if doLS is true, not if doLSErrorsOnly -->
            action assignment "lever Solenoid on": variable=MIO0, value=1
            action assignment "Encode LeverSolenoidOn": variable=strobedDigitalWord, value=12
          action if: condition=!doLeverSolenoidAllTrials
            action assignment: variable=MIO0, value=0
            action assignment "Encode LeverSolenoidOff": variable=strobedDigitalWord, value=13
          action report: message=In ITI, waiting for $tItiWaitTimeMs ms, then waiting for press
          action if: condition=doWheelSpeed == 1
            action assignment: variable=doCerebellarStim, value=0
            action assignment: variable=DoWheelSpeed, value=doWheelSpeed
            action assignment: variable=speedIntervalUS, value=speedIntervalMS*1000
          transition conditional "if first trial, counter = 20 and ITI over": condition=counter >= (cItiStart + tItiWaitFrames) && isFirstTrial && counter > 19, target=StartTrial
          transition conditional "if not first trial, counter still going and ITI over": condition=counter >= (cItiStart + tItiWaitFrames) && !isFirstTrial && counter > cLeverUp, target=StartTrial
          transition conditional "if not first trial, counter stopped": condition=!isFirstTrial && counter == cLeverUp, target=ExitTask
        task_system_state "ExitTask"
          action assert: stop_on_failure=1, condition=counter > cLeverUp, message=Not receiving triggers from microscope
        task_system_state "StartTrial"
          action if "if doLeverSolenoid/ErrorsOnly": condition=doLeverSolenoidAllTrials || doLeverSolenoidOnMiss || doLeverSolenoidOnEarly
            <!-- Lower solenoid at beginning of trial for any solenoid -->
            action assignment "lever Solenoid off": variable=MIO0, value=0
            action assignment "Encode LeverSolenoidOff": variable=strobedDigitalWord, value=13
          action assignment: variable=tStartTrialWaitForPressTimeMs, value=now()/1000.0
          action assignment "Encode StartTrialWaitForPress": variable=strobedDigitalWord, value=7
          <!-- fake mouse calculations -->
          action if "if fakeMouse": condition=!doLever
            action assignment "Assign tFakeMouseReactMs": variable=tFakeMouseReactMs, value=rand(0, fakeMouseMaxReactMs)
          transition conditional "If Lever Down, Go To TrialStimOn": condition=doLever && FIO1 == 1, target=HoldLever
          transition conditional "If fakeMouse elapsed, go to TrialStimOn": condition=!doLever && ( (now()/1000.0)-tStartTrialWaitForPressTimeMs) > 100, target=HoldLever
          transition conditional "If waiting here too long (120s), go to TrialStimOn": condition=doLever && ( (now()/1000.0)-tStartTrialWaitForPressTimeMs) > 120*1000, target=HoldLever
        task_system_state "HoldLever"
          action play_sound "p": sound=pressSound
          action assignment "leverResult = 1": variable=leverResult, value=1
          action assignment "set pressTimestampMs": variable=pressTimestampMs, value=now()/1000
          action assignment "set pressTimestampMs": variable=tLeverPressTimeMs, value=now()/1000
          action assignment "Log counter": variable=cLeverDown, value=counter
          action assignment "Encode LeverPressStart": variable=strobedDigitalWord, value=3
          action if: condition=doVisualStim
            action if: condition=!doITIStim
              action assignment "set dot params": variable=setDotCoherence, value=tBaseDotCoherence
              action assignment "set dot params": variable=setDotSpeedDPS, value=tBaseDotSpeedDPS
              action assignment "set dot params": variable=setDotContrast, value=tBaseDotContrast
              action live_queue_stimulus "Queue Stimulus": stimulus=moving_dots
              action play_dynamic_stimulus "start": stimulus=moving_dots
              action update_stimulus_display "-"
            action if: condition=doITIStim
              action assignment "set dot params": variable=setDotContrast, value=tBaseDotContrast
              action update_stimulus_display "-"
            action if: condition=tDoAuditoryDetect
              action play_sound: sound=basePressSound
          <!-- turn on trial laser if requested -->
          action if: condition=tTrialLaserPowerMw_trigger > 0
            action if: condition=optic_device == 'led' 
              action assignment: variable=tTrialLaserPowerMw, value=tTrialLaserPowerMw_trigger
            action if: condition=optic_device != 'led' 
              action assignment: variable=laserTrigger, value=1
            action report: message=********* SENDING LASER TRIGGER *********
            action assignment "Encode LaserStimOn": variable=strobedDigitalWord, value=5
          <!-- fake mouse calculations -->
          action if "if fakeMouse": condition=!doLever
            action assignment "Assign tFakeMouseReactFrames": variable=tFakeMouseReactFrames, value=rand(0, ceil((fakeMouseMaxReactMs/1000)*frameRateHz))
            action if "if doFakeMouseSuccess": condition=doFakeMouseSuccessOnly
              action assignment "Assign tFakeMouseReactMs": variable=tFakeMouseReactFrames, value=tTotalReqHoldFrames + nFramesTooFast + ceil(0.1*frameRateHz)
          action if "if ! fakeMouse": condition=doLever
            action start_timer "Start fakeMouseTimer infinite": timer=fakeMouseTimer, duration=100000, duration_units=ms
          action report "Report LeverDown": full_name=ReportDigital, message=LeverDown (need to hold for $tTotalReqHoldTimeMs + tooFastTime ms)
          transition conditional "If Lever Up, Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1, target=EarlyRelease
          transition conditional "If Fake mouse frames elapsed, Go To EarlyRelease": condition=(counter >= (cLeverDown + tFakeMouseReactFrames)) && !doLever, target=EarlyRelease
          transition conditional "Target On": condition=counter >= (cLeverDown + tTotalReqHoldFrames), target=StimOn
        task_system_state "StimOn"
          action assignment "set dot params": variable=setDotCoherence, value=tDotCoherence
          action assignment "set dot params": variable=setDotSpeedDPS, value=tDotSpeedDPS
          action assignment "set dot params": variable=setDotContrast, value=tDotContrast
          action update_stimulus_display "-"
          action report: message=Stimulus On
          action assignment: variable=cTargetOn, value=counter
          action if: condition=tDoAuditoryDetect
            action play_sound: sound=targetSound
          transition conditional "If Lever Up, Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1, target=EarlyRelease
          transition conditional "If Fake mouse frames elapsed, Go To EarlyRelease": condition=(counter >= (cLeverDown + tFakeMouseReactFrames)) && !doLever, target=EarlyRelease
          transition conditional "If too fast frames elapsed, Go To React": condition=(counter >= (cTargetOn + nFramesTooFast)), target=React
        task_system_state "React"
          transition conditional "If Lever Up": condition=FIO1 == 0 && doLever == 1, target=Reward
          transition conditional "If Lever Up": condition=(counter >= (cLeverDown + tFakeMouseReactFrames)) && !doLever, target=Reward
          transition conditional "If react frames elapsed, Go To Missed": condition=(counter >= (cTargetOn + nFramesReact)), target=Missed
        task_system_state "EarlyRelease"
          action assignment: variable=cLeverUp, value=counter
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment "Set release time": variable=tLeverReleaseTimeMs, value=(now()/1000)
          action assignment "Encode LeverReleaseEarly": variable=strobedDigitalWord, value=8
          action assignment: variable=actualHoldTimeMs, value= (now()/1000) - tLeverPressTimeMs
          action if: condition=doTraining == 1
            action run_python_string "Add to reactTimesMsTotal": code=add_to_reactTimesTotal()
          action report "Report": message=actualHoldTimeMs = $actualHoldTimeMs
          action report "ReportEarlyRelease": full_name=ReportDigital, message=** Early Release (FIO1 = $FIO1 )
          action assignment "Turn off LED": variable=laserTrigger, value=0
          action if: condition=optic_device == 'led' 
            action assignment: variable=tTrialLaserPowerMw, value=0
          action if: condition=doITIStim == 0
            action dequeue_stimulus "Dequeue Stimulus": stimulus=moving_dots
            action update_stimulus_display "justincase"
          action if: condition=doITIStim == 1
            action assignment "set dot params": variable=setDotCoherence, value=baseDotCoherence
            action assignment "set dot params": variable=setDotSpeedDPS, value=baseDotSpeedDPS
            action assignment "set dot params": variable=setDotContrast, value=itiContrast
            action update_stimulus_display "justincase"
          <!-- update running variables -->
          action assignment "failure++": variable=failure, value=failure+1
          action assignment "consecCorrects = 0": variable=consecCorrects, value=0
          action assignment: variable=tConsecErrors, value=tConsecErrors+1
          action play_sound "Play incorrectSound": sound=incorrectSound
          <!-- reject stim selection -->
          action reject_selections: selection=svStimNumber
          action if "if doLeverSolenoid/Early": condition=doLeverSolenoidAllTrials || doLeverSolenoidOnEarly
            action assignment "lever Solenoid on": variable=MIO0, value=1
            action assignment "Encode LeverSolenoidOn": variable=strobedDigitalWord, value=12
          transition conditional "If Lever Up": condition=(counter >= (cLeverUp + nFramesEarlyTimeout)) , target=PossibleEndTimeout
        task_system_state "Missed"
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment: variable=cLeverUp, value=counter
          action assignment "Set release time": variable=tLeverReleaseTimeMs, value=(now()/1000)
          action assignment "Encode LeverNoReleaseMiss": variable=strobedDigitalWord, value=11
          action assignment: variable=actualHoldTimeMs, value= (now()/1000) - pressTimestampMs
          action if: condition=doTraining == 1
            action run_python_string "Add to reactTimesMsTotal": code=add_to_reactTimesTotal()
          action report "Report": message=actualHoldTimeMs = $actualHoldTimeMs
          action assignment "ignore++": variable=ignore, value=ignore + 1
          action assignment "consecCorrects = 0": variable=consecCorrects, value=0
          action assignment: variable=tConsecErrors, value=tConsecErrors+1
          action report "Report 4": full_name=ReportDigital, message=** Ignored react stimulus
          action play_sound "Play incorrectSound 2": sound=incorrectSound
          action assignment "Turn off LED": variable=laserTrigger, value=0
          action if: condition=optic_device == 'led' 
            action assignment: variable=tTrialLaserPowerMw, value=0
          action if: condition=doITIStim == 0
            action dequeue_stimulus "Dequeue Stimulus": stimulus=moving_dots
            action update_stimulus_display "justincase"
          action if: condition=doITIStim == 1
            action assignment "set dot params": variable=setDotCoherence, value=baseDotCoherence
            action assignment "set dot params": variable=setDotSpeedDPS, value=baseDotSpeedDPS
            action assignment "set dot params": variable=setDotContrast, value=itiContrast
          <!-- accept stim selection -->
          action accept_selections: selection=svStimNumber
          action assignment: variable=tNStimAccepted, value=tNStimAccepted + 1
          <!-- update selection variable -->
          action if: condition=tNStimAccepted >= 80
            action reset_selection: selection=svStimNumber
            action assignment: variable=tNStimAccepted, value=0
          action if: condition=tNStimAccepted < 80
            action next_selection: selection=svStimNumber
          action if "if doLeverSolenoid/ErrorsOnly": condition=doLeverSolenoidAllTrials || doLeverSolenoidOnMiss
            action assignment "lever Solenoid on": variable=MIO0, value=1
            action assignment "Encode LeverSolenoidOn": variable=strobedDigitalWord, value=12
          action start_timer "Start missedTimeoutTimer": timer=missedTimeoutTimer, duration=missedTimeoutMs, duration_units=ms
          transition conditional "If Lever Up": condition=(counter >= (cLeverUp + nFramesMissedTimeout)) , target=PossibleEndTimeout
        task_system_state "Reward"
          action assignment: variable=cLeverUp, value=counter
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment "Set release time": variable=tLeverReleaseTimeMs, value=(now()/1000)
          action assignment "Encode LeverReleaseCorrect": variable=strobedDigitalWord, value=9
          action assignment "Turn off LED": variable=laserTrigger, value=0
          action if: condition=optic_device == 'led' 
            action assignment: variable=tTrialLaserPowerMw, value=0
          action if: condition=doITIStim == 0
            action dequeue_stimulus "Dequeue Stimulus": stimulus=moving_dots
            action update_stimulus_display "justincase"
          action if: condition=doITIStim == 1
            action assignment "set dot params": variable=setDotCoherence, value=baseDotCoherence
            action assignment "set dot params": variable=setDotSpeedDPS, value=baseDotSpeedDPS
            action assignment "set dot params": variable=setDotContrast, value=itiContrast
          <!-- accept stim selection -->
          action accept_selections: selection=svStimNumber
          action assignment: variable=tNStimAccepted, value=tNStimAccepted + 1
          <!-- update selection variable -->
          action if: condition=tNStimAccepted >= 80
            action reset_selection: selection=svStimNumber
            action assignment: variable=tNStimAccepted, value=0
          action if: condition=tNStimAccepted < 80
            action next_selection: selection=svStimNumber
          action assignment: variable=actualHoldTimeMs, value= (now()/1000) - tLeverPressTimeMs
          action report "Report": message=actualHoldTimeMs = $actualHoldTimeMs
          action report "Report Reward": full_name=ReportDigital, message=** Success
          action if: condition=doTraining == 1
            action run_python_string "Add to reactTimesMsCorrect": code=add_to_reactTimesCorrect()
            action run_python_string "Add to reactTimesMsTotal": code=add_to_reactTimesTotal()
          <!-- update running variables -->
          action assignment "success++": variable=success, value=success+1
          action assignment: variable=tConsecErrors, value=0
          action assignment "Assign reward": variable=tTotalRewardTimeUs, value=rewardUs
          action assignment "summing corrects": variable=tempNCorrect, value=tempNCorrect+1
          <!-- assign reward size based on elapsed rand if rampdown == 0 -->
          action if: condition=doBlock2 == 1
            action if: condition=doBlock2SeparateReward == 0
              action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=rewardUs
            action if: condition=doBlock2SeparateReward == 1
              action if: condition=tBlock2TrialNumber == 0
                action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=rewardUs
              action if: condition=tBlock2TrialNumber == 1
                action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=block2RewardUs
          <!-- give reward on every N corrects -->
          action if: condition=tempNCorrect < rewardEveryNCorrect
            action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=0
          action if: condition=tempNCorrect == rewardEveryNCorrect
            action assignment "rezero tempNCorrect": variable=tempNCorrect, value=0
          <!-- scale based on consec corrects -->
          action if "if consecCorrects < max": condition=consecCorrects < maxConsecCorrects
            action assignment "consecCorrects++": variable=consecCorrects, value=consecCorrects+1
          action assignment "set tNRewards": variable=tNRewards, value=consecCorrects
          transition direct "Always Go to GiveReward": target=GiveReward
        task_system_state "GiveReward"
          action assignment "tNRewards--": variable=tNRewards, value=tNRewards-1
          transition conditional "if rewards remain, go to SingleReward (note must be -1)": condition=tNRewards > -1, target=SingleReward
          transition direct "Always Go to PRP": target=PostRewardPause
        task_system_state "PostRewardPause"
          action start_timer "StartTimer": timer=postRewardTimer, duration=postRewardMs, duration_units=ms
          transition timer_expired "Always Go to EndTrial": target=EndTrial, timer=postRewardTimer
        task_system_state "SingleReward"
          action assignment "interRewardInterval minimum to juiceTime": variable=tInterRewardIntervalMs, value=interRewardIntervalMs + ( tTotalRewardTimeUs / 1000 )
          action start_timer "Start interRewardIntervalTimer": timer=interRewardIntervalTimer, duration=tInterRewardIntervalMs, duration_units=ms
          action assignment "Encode Reward": variable=strobedDigitalWord, value=10
          action assignment: variable=juice, value=tTotalRewardTimeUs
          action play_sound "Play reward sound": sound=rewardSound
          action if: condition=tempNCorrect == 0
            action report "Report": message=juice = $juice
          action if: condition=tempNCorrect > 0
            action if: condition=tempNCorrect < rewardEveryNCorrect
              action report "Report": message=juice = $juice, $tempNCorrect correct: need $rewardEveryNCorrect
          transition timer_expired "If interRewardIntervalTimer expired, go to GiveReward": target=GiveReward, timer=interRewardIntervalTimer
        task_system_state "PossibleEndTimeout"
          <!-- do timeout if too many recent errors:
                           use a state rather than a wait action because states are interruptible -->
          action if: condition=tConsecErrors >= nConsecErrorsCauseTimeout
            action report: message=***!!*** $consecErrorTimeoutS s timeout after $tConsecErrors consecutive errors
            action start_timer: timer=consecErrorTimer, duration=consecErrorTimeoutS, duration_units=s
            action if: condition=doSolenoidOnTimeout==1
              action assignment "lever Solenoid on": variable=MIO0, value=1
          transition conditional "- bypass timer checking if no timeout requested": condition=tConsecErrors < nConsecErrorsCauseTimeout, target=EndTrial
          transition timer_expired: target=EndTrial, timer=consecErrorTimer
        task_system_state "EndTrial"
          action stop_device_IO "Stop IO Device": device=LabJackU6
          action assignment "Turn off LED": variable=laserTrigger, value=0
          action if: condition=optic_device == 'led' 
            action assignment: variable=tTrialLaserPowerMw, value=0
          action report: message=Trial Ended
          action assignment: variable=trials, value=trials+1
          action report: message=the trials is $trials
          action if: condition=doTraining == 1
            action report: message=the reactToWindow is $reactToWindow
            action if: condition=(int)(trials % nTrialsAdjustRandom) < 1
              action run_python_string "find median react time": code=find_median()
              action run_python_string "get targetCorrect": code=get_targetCorrect()
              action report: message=the median reactTimeMs is $medianReactTimesMs
              action report: message=The mouseSpeed of subject is $mouseSpeed
              action report: message=The mouseHolder of subject is $mouseHolder
            action if: condition=(int)(trials % nTrialsAdjustRT) < 1
              action run_python_string "update react time": code=updateReactTime()
              action report: message=the updated react time is $reactTimeMs
          action assignment: variable=isFirstTrial, value=0
          action assignment "End Matlab Sync": variable=sync, value=0
          transition yield "return to parent task system"
    action dequeue_stimulus: stimulus=moving_dots
    action update_stimulus_display "Update Stimulus"
