monkeyml version=1.0
io_devices "IO Devices"
  iodevice LabJackU6 "LabJackU6": pulse_duration=juice, pulse_on=juice, lever1=FIO1, lever1_solenoid=MIO0, quadrature=quadrature, trial_laser_powerMw=tTrialLaserPowerMw, laser_trigger=laserTrigger, optic_device=optic_device, strobed_digital_word=strobedDigitalWord, counter=counter, do2led=do2led, led_seq=led_seq, LED_duration=LED_durationMS, led1_status=led1_status, led2_status=led2_status, do_wheelspeed=DoWheelSpeed, ws_durationUS=speedIntervalUS, wheel_speed=wheelSpeed, doCB=doCerebellarStim
  iodevice fake_monkey "FakeMonkey": spike_rate=10
  iodevice serverside_conduit "Server-side Event Conduit": resource_name=server_conduit
variables "Variables"
  folder "Behavioral Control"
    variable integer "subjectNum": default_value=0, persistant=1, groups=ExptStruct
    variable integer "experimentXmlTrialId": default_value=90, persistant=1
    <!-- n.b. it is forcibly set each trial below -->
    variable string "optic_device": default_value=led
  folder "Stimuli"
    variable integer "stopAfterNTrials": default_value=90, persistant=1, groups=ExptStruct
    variable integer "nScansOn": default_value=200, persistant=1, groups=ExptStruct
    variable integer "nScansOff": default_value=200, persistant=1, groups=ExptStruct
    variable boolean "doMatrix": default_value=0, persistant=1, groups=ExptStruct
    variable boolean "doRand": default_value=0, persistant=1, groups=ExptStruct
    variable boolean "doLEDStim": default_value=0, persistant=1, groups=ExptStruct
    variable float "backgroundLuminance": default_value=0.5, persistant=1, groups=Background
    variable boolean "doBackgroundStim": default_value=0, persistant=1, groups=ExptStruct
    variable float "backgroundLuminanceStepLog": default_value=2, persistant=1, groups=Background
    variable float "backgroundLuminanceStepDir": default_value=1, persistant=1, groups=Background
    variable float "backgroundLuminanceStepN": default_value=6, persistant=1, groups=Background
    variable integer "nTotalImagingFrames": default_value=3600, persistant=1, groups=ImagingVars
    variable float "frameImagingRateMs": default_value=500, persistant=1, groups=ImagingVars
    variable integer "frameImagingExposureMs": default_value=450, persistant=1, groups=ImagingVars
    variable integer "frameImagingBinning": default_value=4, persistant=1, groups=ImagingVars
    variable boolean "doRetStim": default_value=0, persistant=1, groups=GratingExptStruct
    variable boolean "doConStim": default_value=0, persistant=1, groups=GratingExptStruct
    variable boolean "doDirStim": default_value=0, persistant=1, groups=GratingExptStruct
    variable boolean "doSFStim": default_value=0, persistant=1, groups=GratingExptStruct
    variable boolean "doTFStim": default_value=0, persistant=1, groups=GratingExptStruct
    variable boolean "doSizeStim": default_value=0, persistant=1, groups=GratingExptStruct
    variable boolean "doAnnulusStim": default_value=0, persistant=1, groups=GratingExptStruct
    variable boolean "doAnnulusSizeStim": default_value=0, persistant=1, groups=GratingExptStruct
    variable boolean "doPhaseStim": default_value=0, persistant=1, groups=GratingExptStruct
    variable boolean "doLoomStim": default_value=0, persistant=1, groups=GratingExptStruct
    variable boolean "doGaussianMask": default_value=1, persistant=1, groups=GratingExptStruct
    variable boolean "doEllipseMask": default_value=0, persistant=1, groups=GratingExptStruct
    variable boolean "doPhaseRev": default_value=0, persistant=1, groups=GratingExptStruct
    variable boolean "doMovingDots": default_value=0, persistant=1, groups=DotsExptStruct
    variable boolean "doDotsSpeedStim": default_value=0, persistant=1, groups=DotsExptStruct
    variable boolean "doDotsSizeStim": default_value=0, persistant=1, groups=DotsExptStruct
    variable boolean "doDotsCoherenceStim": default_value=0, persistant=1, groups=DotsExptStruct
    variable boolean "doDotsDirectionStim": default_value=0, persistant=1, groups=DotsExptStruct
    variable boolean "doDotsContrastStim": default_value=0, persistant=1, groups=DotsExptStruct
    variable boolean "doDotsDensityStim": default_value=0, persistant=1, groups=DotsExptStruct
    variable boolean "doRunFeedback": default_value=0, persistant=1, groups=DotsExptStruct
    variable boolean "runFeedbackGain": default_value=0, persistant=1, groups=DotsExptStruct
    variable float "baseGratingContrast": default_value=0, persistant=1, groups=GratingSpecs
    variable float "baseGratingDirectionDeg": default_value=0, persistant=1, groups=GratingSpecs
    variable float "baseGratingStartingPhaseDeg": default_value=0, persistant=1, groups=GratingSpecs
    variable string "target_mask": default_value=none, persistant=1, groups=GratingSpecs
    variable float "gratingElevationDeg": default_value=20, persistant=1, groups=GratingSpecs
    variable float "gratingElevationStepDeg": default_value=-20, persistant=1, groups=GratingSpecs
    variable float "gratingElevationStepN": default_value=3, persistant=1, groups=GratingSpecs
    variable float "gratingAzimuthDeg": default_value=-30, persistant=1, groups=GratingSpecs
    variable float "gratingAzimuthStepDeg": default_value=30, persistant=1, groups=GratingSpecs
    variable float "gratingAzimuthStepN": default_value=3, persistant=1, groups=GratingSpecs
    variable float "gratingContrast": default_value=1, persistant=1, groups=GratingSpecs
    variable float "gratingContrastStepLog": default_value=2, persistant=1, groups=GratingSpecs
    variable float "gratingContrastStepDir": default_value=1, persistant=1, groups=GratingSpecs
    variable float "gratingContrastStepN": default_value=6, persistant=1, groups=GratingSpecs
    variable float "gratingDirectionDeg": default_value=0, persistant=1, groups=GratingSpecs
    variable float "gratingDirectionStepDeg": default_value=30, persistant=1, groups=GratingSpecs
    variable float "gratingDirectionStepN": default_value=12, persistant=1, groups=GratingSpecs
    variable float "gratingSpatialFreqCPD": default_value=0.02, persistant=1, groups=GratingSpecs
    variable float "gratingSpatialFreqStepLog": default_value=2, persistant=1, groups=GratingSpecs
    variable float "gratingSpatialFreqStepDir": default_value=1, persistant=1, groups=GratingSpecs
    variable float "gratingSpatialFreqStepN": default_value=6, persistant=1, groups=GratingSpecs
    variable float "gratingTemporalFreqCPS": default_value=1, persistant=1, groups=GratingSpecs
    variable float "gratingTemporalFreqStepLog": default_value=2, persistant=1, groups=GratingSpecs
    variable float "gratingTemporalFreqStepDir": default_value=1, persistant=1, groups=GratingSpecs
    variable float "gratingTemporalFreqStepN": default_value=6, persistant=1, groups=GratingSpecs
    variable float "gratingDiameterDeg": default_value=40, persistant=1, groups=GratingSpecs
    variable float "gratingDiameterStepDeg": default_value=-5, persistant=1, groups=GratingSpecs
    variable float "gratingDiameterStepN": default_value=6, persistant=1, groups=GratingSpecs
    variable boolean "doSizeStepLog": default_value=0, persistant=1, groups=GratingSpecs
    variable float "gratingDiameterStepLog": default_value=2, persistant=1, groups=GratingSpecs
    variable float "gratingDiameterStepDir": default_value=1, persistant=1, groups=GratingSpecs
    variable float "gratingStartingPhaseDeg": default_value=0, persistant=1, groups=GratingSpecs
    variable float "gratingStartingPhaseStepDeg": default_value=45, persistant=1, groups=GratingSpecs
    variable float "gratingStartingPhaseStepN": default_value=8, persistant=1, groups=GratingSpecs
    variable float "nScansPhaseCyc": default_value=60, persistant=1, groups=GratingSpecs
    variable float "greymaskDiameterDeg": default_value=0, persistant=1, groups=GratingSpecs
    variable float "AnnulusgratingDiameterStepN": default_value=2, persistant=1, groups=GratingSpecs
    variable float "AnnulusgratingDiameterMinN": default_value=0, persistant=1, groups=GratingSpecs
    variable float "AnnulusgratingDiameterMaxN": default_value=0, persistant=1, groups=GratingSpecs
    variable float "loomSpeedDPS": default_value=5, persistant=1, groups=GratingSpecs
    variable float "maxLoomDiameterDeg": default_value=5, persistant=1, groups=GratingSpecs
    variable float "loomSpeedStepLog": default_value=2, persistant=1, groups=GratingSpecs
    variable float "loomSpeedStepDir": default_value=1, persistant=1, groups=GratingSpecs
    variable float "loomSpeedStepN": default_value=5, persistant=1, groups=GratingSpecs
    variable float "LEDPowerMw": default_value=0, persistant=1, groups=LEDSpecs
    variable float "LEDPowerStepMw": default_value=0.01, persistant=1, groups=LEDSpecs
    variable float "LEDPowerStepN": default_value=2, persistant=1, groups=LEDSpecs
    variable float "LaserPowerMw": default_value=0, persistant=1, groups=LaserSpecs
    variable float "baseDotContrast": default_value=0, persistant=1, groups=DotSpecs
    variable float "baseDotSpeedDPS": default_value=0, persistant=1, groups=DotSpecs
    variable float "baseDotDirectionDeg": default_value=0, persistant=1, groups=DotSpecs
    variable float "baseDotCoherence": default_value=0, persistant=1, groups=DotSpecs
    variable float "baseDotSizeDeg": default_value=.5, persistant=1, groups=DotSpecs
    variable float "baseDotDensity": default_value=.5, persistant=1, groups=DotSpecs
    variable float "dotElevationDeg": default_value=0, persistant=1, groups=DotSpecs
    variable float "dotAzimuthDeg": default_value=0, persistant=1, groups=DotSpecs
    variable float "dotFieldSizeDeg": default_value=30, persistant=1, groups=DotSpecs
    variable float "dotDensity": default_value=1, persistant=1, groups=DotSpecs
    variable float "dotDensityStep": default_value=30, persistant=1, groups=DotSpecs
    variable float "dotDensityStepN": default_value=12, persistant=1, groups=DotSpecs
    variable float "dotContrast": default_value=1, persistant=1, groups=DotSpecs
    variable float "dotContrastStepLog": default_value=2, persistant=1, groups=DotSpecs
    variable float "dotContrastStepDir": default_value=-1, persistant=1, groups=DotSpecs
    variable float "dotContrastStepN": default_value=5, persistant=1, groups=DotSpecs
    variable float "dotCoherence": default_value=1, persistant=1, groups=DotSpecs
    variable float "dotCoherenceStepLog": default_value=2, persistant=1, groups=DotSpecs
    variable float "dotCoherenceStepDir": default_value=-1, persistant=1, groups=DotSpecs
    variable float "dotCoherenceStepN": default_value=5, persistant=1, groups=DotSpecs
    variable float "dotDirectionDeg": default_value=0, persistant=1, groups=DotSpecs
    variable float "dotDirectionStepDeg": default_value=30, persistant=1, groups=DotSpecs
    variable float "dotDirectionStepN": default_value=12, persistant=1, groups=DotSpecs
    variable float "dotSizeDeg": default_value=.5, persistant=1, groups=DotSpecs
    variable float "dotSizeStepDeg": default_value=2, persistant=1, groups=DotSpecs
    variable float "dotSizeStepN": default_value=4, persistant=1, groups=DotSpecs
    variable float "dotSpeedDPS": default_value=5, persistant=1, groups=DotSpecs
    variable float "dotSpeedStepLog": default_value=2, persistant=1, groups=DotSpecs
    variable float "dotSpeedStepDir": default_value=1, persistant=1, groups=DotSpecs
    variable float "dotSpeedStepN": default_value=5, persistant=1, groups=DotSpecs
    variable boolean "doPhotodiode": default_value=0, persistant=1, groups=Photodiode Variables
    variable float "photoStimulusContrast": default_value=0, persistant=1, groups=Photodiode Variables
    variable integer "photoStimulusAzimuth": default_value=0, persistant=1, groups=Photodiode Variables
    variable integer "photoStimulusElevation": default_value=0, persistant=1, groups=Photodiode Variables
    variable integer "photoStimulusWidth": default_value=0, persistant=1, groups=Photodiode Variables
    variable integer "photoStimulusHeight": default_value=0, persistant=1, groups=Photodiode Variables
    variable float "photoMaskSpatialFreq": default_value=0, persistant=1, groups=Photodiode Variables
    variable boolean "Do2LED": default_value=0, persistant=1, groups=Alternating LED
    variable list "LED_sequence": default_value=1,1,1,2, persistant=1, groups=Alternating LED
    variable integer "LED_DurationMS": default_value=33, persistant=1, groups=Alternating LED
  folder "Task Status"
    variable boolean "stimulusOn": default_value=0
    variable boolean "trialStart": default_value=0
  folder "Online Display"
    variable integer "sync": default_value=0
  folder "Hardware variables"
    variable INTEGER "FIO1": default_value=0, scope=GLOBAL, editable=never, groups=Hardware
    variable boolean "MIO0": default_value=0, scope=GLOBAL, editable=never, groups=Hardware
    variable boolean "laserTrigger": default_value=0, scope=GLOBAL, groups=Hardware
    variable integer "strobedDigitalWord": default_value=0, scope=GLOBAL, persistant=0
    variable integer "juice": scope=GLOBAL, default_value=0, groups=Hardware
    variable integer "counter": default_value=0, persistant=0, groups=Hardware
    variable integer "quadrature": default_value=0, persistant=0, groups=Hardware
    variable boolean "do2led": default_value=0, persistant=0, groups=Hardware
    variable float "LED_durationMS": default_value=0, persistant=0, groups=Hardware
    variable boolean "led1_status": default_value=0, persistant=0, groups=Hardware
    variable boolean "led2_status": default_value=0, persistant=0, groups=Hardware
    variable list "led_seq": default_value=1,1,1,2, persistant=0, groups=Hardware
    variable integer "sendLaserParams": scope=GLOBAL, default_value=0, persistant=0
    variable integer "sendSerialParams": default_value=0, persistant=0
  folder "Internal Variables" \
    variable integer "tTempStim": default_value=0, persistant=0
    variable boolean "doWheelSpeed": default_value=0, persistant=1, groups=Wheel
    variable boolean "doCerebellarStim": default_value=0, persistant=1, groups=Wheel
    variable float "speedIntervalMS": default_value=0, persistant=1, groups=Wheel
    variable float "wheelSpeed": default_value=0, persistant=0, groups=Wheel
    variable integer "tQuadrature": default_value=0, persistant=0
    variable integer "runFeedbackCounter": default_value=0, persistant=0
    variable integer "tTrialsDoneSinceStart": default_value=90, persistant=1
    variable integer "tTrialStartMWTimestampMs": default_value=90, persistant=1
    variable integer "tThisTrialStartTimeMs": default_value=90, persistant=1
    variable integer "tLastTrialStartTimeMs": default_value=90, persistant=1
    variable integer "rrStimulusNumber": scope=local, default_value=0, persistant=0
    variable integer "tStimulusNumber": default_value=0, persistant=0
    variable float "tBackgroundLuminance": default_value=0, persistant=0
    variable float "tempBackgroundLuminance": default_value=0, persistant=0
    variable float "tBaseGratingDiameterDeg": default_value=0, persistant=0
    variable float "tBaseGratingDirectionDeg": default_value=0, persistant=0
    variable float "tBaseGratingContrast": default_value=0, persistant=0
    variable float "tGratingDirectionDeg": default_value=0, persistant=0
    variable float "tGratingContrast": default_value=0, persistant=0
    variable float "tGratingElevationDeg": default_value=0, persistant=0
    variable float "tGratingAzimuthDeg": default_value=0, persistant=0
    variable float "tGratingDiameterDeg": default_value=0, persistant=0
    variable float "tAnnulusGratingDiameterDeg": default_value=0, persistant=0
    variable float "tGreymaskDiameterDeg": default_value=0, persistant=0
    variable float "tGratingSpatialFreqCPD": default_value=1, persistant=0
    variable float "tGratingTemporalFreqCPS": default_value=0, persistant=0
    variable float "tGratingSpeedDPS": default_value=0, persistant=0
    variable float "tGratingStartingPhaseDeg": default_value=0, persistant=0
    variable float "setGratingStartingPhaseDeg": default_value=0, persistant=0
    variable float "tGratingLoomSpeedDPS": default_value=0, persistant=0
    variable float "tTrialLaserPowerMw": default_value=0, persistant=0
    variable float "tTrialLaserPowerMw_trigger": default_value=0, persistant=0
    variable integer "phaseCount": default_value=0, persistant=0
    variable float "tDotDirectionDeg": default_value=0, persistant=0
    variable float "tDotContrast": default_value=0, persistant=0
    variable float "tDotElevationDeg": default_value=0, persistant=0
    variable float "tDotAzimuthDeg": default_value=0, persistant=0
    variable float "tDotFieldSizeDeg": default_value=30, persistant=0
    variable float "tDotSizeDeg": default_value=.1, persistant=0
    variable float "tDotDensity": default_value=1, persistant=0
    variable float "tDotSpeedDPS": default_value=0, persistant=0
    variable float "tDotCoherence": default_value=1, persistant=0
    variable float "setDotSpeedDPS": default_value=0, persistant=0
    variable float "setDotDirectionDeg": default_value=90, persistant=0
    variable float "setDotContrast": default_value=0, persistant=0
    variable float "setDotSizeDeg": default_value=0, persistant=0
    variable float "setDotCoherence": default_value=0, persistant=0
    variable float "setDotDensity": default_value=1, persistant=0
    variable integer "targetStimOnMs": default_value=0, persistant=0
    variable integer "tNStimAccepted": default_value=0, persistant=0
    variable integer "frameCountN": default_value=0, persistant=0
    variable boolean "DoWheelSpeed": default_value=0, persistant=0
    variable float "speedIntervalUS": default_value=0, persistant=0
    variable selection "svRandStimNumber": values=0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79,80,81,82,83,84,85,86,87,88,89, selection=random_without_replacement, nsamples=90, sampling_method=samples
    variable selection "svSeqStimNumber": values=0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79,80,81,82,83,84,85,86,87,88,89, selection=sequential_ascending, nsamples=90, sampling_method=samples
sounds "Sounds"
stimuli "Stimuli"
  stimulus blank_screen "background": color=tempBackgroundLuminance,tempBackgroundLuminance,tempBackgroundLuminance
  stimulus drifting_grating "base_grating": direction=0, autoplay=YES, starting_phase=baseGratingStartingPhaseDeg, spatial_frequency=tGratingSpatialFreqCPD, speed=tGratingSpeedDPS, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=tBaseGratingDiameterDeg, y_size=tBaseGratingDiameterDeg, x_position=tGratingAzimuthDeg, y_position=tGratingElevationDeg, rotation=tBaseGratingDirectionDeg, alpha_multiplier=tBaseGratingContrast
  stimulus circle "inner_mask": color=tempBackgroundLuminance,tempBackgroundLuminance,tempBackgroundLuminance, x_size=tGreymaskDiameterDeg, y_size=tGreymaskDiameterDeg, x_position=tGratingAzimuthDeg, y_position=tGratingElevationDeg, rotation=0, alpha_multiplier=1.0
  stimulus drifting_grating "target_grating_annulus": direction=0, autoplay=YES, starting_phase=tGratingStartingPhaseDeg, spatial_frequency=tGratingSpatialFreqCPD, speed=tGratingSpeedDPS, grating_type=sinusoid, mask=ellipse, std_dev=0.3, mean=0.1, x_size=tAnnulusGratingDiameterDeg, y_size=tAnnulusGratingDiameterDeg, x_position=tGratingAzimuthDeg, y_position=tGratingElevationDeg, rotation=tGratingDirectionDeg, alpha_multiplier=tGratingContrast
  list_replicator "List of Masks": values=gaussian, ellipse, variable=target_mask
    stimulus drifting_grating "target_grating_$target_mask": direction=0, autoplay=YES, starting_phase=setGratingStartingPhaseDeg, spatial_frequency=tGratingSpatialFreqCPD, speed=tGratingSpeedDPS, grating_type=sinusoid, mask=$target_mask, std_dev=0.3, mean=0.1, x_size=tGratingDiameterDeg, y_size=tGratingDiameterDeg, x_position=tGratingAzimuthDeg, y_position=tGratingElevationDeg, rotation=tGratingDirectionDeg, alpha_multiplier=tGratingContrast
  stimulus moving_dots "moving_dots": direction=setDotDirectionDeg, autoplay=YES, dot_density=setDotDensity, dot_size=setDotSizeDeg, coherence=setDotCoherence, speed=setDotSpeedDPS, field_radius=tDotFieldSizeDeg/2, field_center_x=tDotAzimuthDeg, field_center_y=tDotElevationDeg, alpha_multiplier=setDotContrast
  stimulus drifting_grating "photoDiodeGrating": direction=0, autoplay=YES, starting_phase=0, spatial_frequency=.000000000001, speed=0, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=photoStimulusWidth, y_size=photoStimulusHeight, x_position=photoStimulusAzimuth, y_position=photoStimulusElevation, rotation=0, alpha_multiplier=photoStimulusContrast
  stimulus drifting_grating "photoDiodeMask": direction=0, autoplay=YES, starting_phase=180, spatial_frequency=photoMaskSpatialFreq, speed=0, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=photoStimulusWidth, y_size=photoStimulusHeight, x_position=photoStimulusAzimuth, y_position=photoStimulusElevation, rotation=0, alpha_multiplier=1
experiment "Experiment"
  protocol "JuiceOnHoldProtocol": selection=sequential, nsamples=1, sampling_method=cycles
    action assignment: variable=tempBackgroundLuminance, value=backgroundLuminance
    action queue_stimulus: stimulus=background
    action start_device_IO "Start IO Device": device=LabJackU6
    <!-- init actions before running trials after any press of start -->
    action assignment: variable=tTrialsDoneSinceStart, value=0
    action assignment "juice = 0": variable=juice, value=0
    action assignment "set counter to 0": variable=counter, value=0
    action assignment "set quadrature to 0": variable=quadrature, value=0
    action assignment: variable=led_seq, value=LED_sequence
    action assignment: variable=do2led, value=Do2LED
    action assignment: variable=LED_durationMS, value=LED_DurationMS
    trial "Trial": interruptible=1, selection=sequential, nsamples=1, sampling_method=cycles
      trial "New List": nsamples=9999, sampling_method=samples, selection=random_without_replacement
        <!-- <range_replicator tag="New Replicator" from="0" to="89" step="1" variable="rrStimulusNumber"> -->
        task_system "TS"
          task_system_state "Inter Stimulus Interval"
            <!-- reset selection var -->
            action if: condition=tTrialsDoneSinceStart == 0
              action reset_selection: selection=svRandStimNumber
              action reset_selection: selection=svSeqStimNumber
              action assignment: variable=tNStimAccepted, value=0
            action if: condition=doWheelSpeed == 1
              action assignment: variable=doCerebellarStim, value=0
              action assignment: variable=DoWheelSpeed, value=doWheelSpeed
              action assignment: variable=speedIntervalUS, value=speedIntervalMS*1000
            action assignment "set tQuadrature to quadrature": variable=tQuadrature, value=quadrature
            action assignment: variable=setDotSpeedDPS, value=baseDotSpeedDPS
            action assignment: variable=setDotDirectionDeg, value=baseDotDirectionDeg
            action assignment: variable=setDotContrast, value=baseDotContrast
            action assignment: variable=setDotCoherence, value=baseDotCoherence
            action assignment: variable=setDotSizeDeg, value=baseDotSizeDeg
            action assignment: variable=setDotDensity, value=baseDotDensity
            action assignment: variable=tDotFieldSizeDeg, value=dotFieldSizeDeg
            action assignment: variable=tDotAzimuthDeg, value=dotAzimuthDeg
            action assignment: variable=tDotElevationDeg, value=dotElevationDeg
            action assignment: variable=tBaseGratingDiameterDeg, value=gratingDiameterDeg
            action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg
            action assignment: variable=tGreymaskDiameterDeg, value=greymaskDiameterDeg
            action assignment: variable=tBaseGratingContrast, value=baseGratingContrast
            action assignment: variable=tBaseGratingDirectionDeg, value=baseGratingDirectionDeg
            action if: condition=doMovingDots != 1
              action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
            action if: condition=doMovingDots == 1
              action live_queue_stimulus "Queue Stimulus": stimulus=moving_dots
            action if: condition=doPhotodiode
              action live_queue_stimulus "Queue Stimulus": stimulus=photoDiodeMask
            action update_stimulus_display "-"
            <!-- if we have done enough trials, abort this trial - before any encodes/sync are done -->
            action if: condition=stopAfterNTrials > 0 && tTrialsDoneSinceStart > stopAfterNTrials
              action report: message=** Stopping after completing $stopAfterNTrials trials
              action stop_experiment
            action assignment: variable=tTrialStartMWTimestampMs, value=now()/1000
            <!-- integer valued ms timestamp -->
            action assignment "Encode START": variable=strobedDigitalWord, value=170
            action assignment "Encode START": variable=strobedDigitalWord, value=170
            action assignment "Encode START": variable=strobedDigitalWord, value=170
            <!-- Transmit the trial timestamp so strobed code sequences are unique -->
            action assert: condition=tTrialStartMWTimestampMs <= 2147483648, message=tTrialStartMWTimestampMs is too large - should happen only after several days of running!?, stop_on_failure=1
            <!-- prevent overflow outside 2**31ms ~ 10 days - I don't know how to get unsigned casts in the XML -->
            <!-- encode trialStartTimestamp in bytes: 4 bytes: millions of seconds, 1000s, s, ms -->
            action assignment "Encode TimestampStart": variable=strobedDigitalWord, value=200
            action assignment "Encode TimestampEnd": variable=strobedDigitalWord, value=201
            action assignment "Sync Matlab": variable=sync, value=1
            action assignment "Set trialStart": variable=trialStart, value=1
            action assignment "juice = 0": variable=juice, value=0
            action assignment "-": variable=laserTrigger, value=0
            <!-- choose correct stimulus number based on odds; block2 tr number does not get assigned if ! doBlock2 -->
            action if: condition=doRand == 1
              action assignment: variable=tStimulusNumber, value=svRandStimNumber
            action if: condition=doRand == 0
              action assignment: variable=tStimulusNumber, value=svSeqStimNumber
            <!-- set background luminance -->
            <!-- Select luminance -->
            action if: condition=doBackgroundStim == 1
              action assignment: variable=tTempStim, value=tStimulusNumber % backgroundLuminanceStepN
              action assignment: variable=tBackgroundLuminance, value=backgroundLuminance + (backgroundLuminanceStepLog*tTempStim)
              action report: message=Luminance is $tBackgroundLuminance
              action queue_stimulus: stimulus=background
              action send_stimulus_to_back "Send stimulus to back": stimulus=background
              action update_stimulus_display "Update Stimulus"
            action if: condition=doBackgroundStim == 0
              action assignment: variable=tBackgroundLuminance, value=backgroundLuminance
            <!-- Select retinotopy position; choose a value from selection var, 0-origin -->
            action if: condition=doRetStim
              <!-- Select direction with Retinotopy -->
              action if: condition=doDirStim
                action assignment: variable=tTempStim, value=tStimulusNumber % (gratingElevationStepN * gratingAzimuthStepN * gratingDirectionStepN)
                action if: condition=tTempStim < (gratingAzimuthStepN * gratingDirectionStepN)
                  action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
                  action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg + (gratingAzimuthStepDeg * floor(tTempStim/gratingDirectionStepN))
                  action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg + (gratingDirectionStepDeg * (tTempStim % gratingDirectionStepN))
                  action report: message=Azimuth is $tGratingAzimuthDeg ; Elevation is $tGratingElevationDeg ; Direction is $tGratingDirectionDeg
                action if: condition=tTempStim >= (gratingAzimuthStepN * gratingDirectionStepN)
                  action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg + (gratingElevationStepDeg * (floor((tTempStim % (gratingAzimuthStepN * gratingDirectionStepN *gratingElevationStepN)) / (gratingAzimuthStepN * gratingDirectionStepN))))
                  action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg + (gratingAzimuthStepDeg * floor(((tTempStim) % (gratingAzimuthStepN * gratingDirectionStepN))/gratingDirectionStepN))
                  action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg + (gratingDirectionStepDeg * (tTempStim % gratingDirectionStepN))
                  action report: message=Azimuth is $tGratingAzimuthDeg ; Elevation is $tGratingElevationDeg ;  $tGratingDirectionDeg
              action if: condition=!doDirStim
                action assignment: variable=tTempStim, value=tStimulusNumber % (gratingElevationStepN * gratingAzimuthStepN)
                action if: condition=tTempStim < gratingAzimuthStepN
                  action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg + (gratingAzimuthStepDeg * (tTempStim))
                  action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
                  action report: message=Azimuth is $tGratingAzimuthDeg ; Elevation is $tGratingElevationDeg
                action if: condition=tTempStim >= gratingAzimuthStepN
                  action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg+ (gratingAzimuthStepDeg * ((tTempStim) % gratingAzimuthStepN))
                  action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg+ (gratingElevationStepDeg * (floor(tTempStim / gratingAzimuthStepN)))
                  action report: message=Azimuth is $tGratingAzimuthDeg ; Elevation is $tGratingElevationDeg
              <!-- set to only have two possible phases- otherwise not enough stimulus conditions for ret -->
              action if: condition=doPhaseStim
                action assignment: variable=tTempStim, value=rand(0,1) > 0.5
                action assignment: variable=tGratingStartingPhaseDeg, value=gratingStartingPhaseDeg + (gratingStartingPhaseStepDeg * (tTempStim % gratingStartingPhaseStepN))
                action report: message=Azimuth is $tGratingAzimuthDeg ; Elevation is $tGratingElevationDeg ;  $tGratingStartingPhaseDeg
              action if: condition=doSFStim && doConStim
                action assignment: variable=tTempStim, value=tStimulusNumber % (gratingElevationStepN * gratingAzimuthStepN * gratingContrastStepN * gratingSpatialFreqStepN)
                action if: condition=tTempStim < (gratingAzimuthStepN * gratingContrastStepN)
                  action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
                  action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
                  action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg + (gratingAzimuthStepDeg * floor(tTempStim/gratingContrastStepN))
                  action assignment: variable=tGratingContrast, value=gratingContrast * pow(gratingContrastStepLog, gratingContrastStepDir*(tTempStim % gratingContrastStepN))
                  action report: message=Azimuth is $tGratingAzimuthDeg ; Elevation is $tGratingElevationDeg ; Con is $tGratingContrast ; SF is tGratingSpatialFreqCPD
                action if: condition=tTempStim >= (gratingAzimuthStepN * gratingContrastStepN) && tTempStim < (gratingAzimuthStepN * gratingContrastStepN * gratingSpatialFreqStepN)
                  action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
                  action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD *pow(gratingSpatialFreqStepLog,gratingSpatialFreqStepDir*(floor(tTempStim / (gratingAzimuthStepN * gratingContrastStepN))))
                  action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg + (gratingAzimuthStepDeg * floor(((tTempStim) % (gratingAzimuthStepN * gratingContrastStepN))/gratingContrastStepN))
                  action assignment: variable=tGratingContrast, value=gratingContrast * pow(gratingContrastStepLog,gratingContrastStepDir*(tTempStim % gratingContrastStepN))
                  action report: message=Azimuth is $tGratingAzimuthDeg ; Elevation is $tGratingElevationDeg ; Con is $tGratingContrast ; SF is tGratingSpatialFreqCPD
                action if: condition=tTempStim >= (gratingAzimuthStepN * gratingContrastStepN * gratingSpatialFreqStepN)
                  action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg + (gratingElevationStepDeg * (floor(tTempStim % (gratingAzimuthStepN * gratingContrastStepN * gratingSpatialFreqStepN *gratingElevationStepN)) / (gratingAzimuthStepN * gratingContrastStepN * gratingSpatialFreqStepN)))
                  action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD * pow(gratingSpatialFreqStepLog,gratingSpatialFreqStepDir*(floor(tTempStim % (gratingAzimuthStepN * gratingContrastStepN * gratingSpatialFreqStepN))/ (gratingAzimuthStepN * gratingContrastStepN)))
                  action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg + (gratingAzimuthStepDeg * floor(((tTempStim) % (gratingAzimuthStepN * gratingContrastStepN * gratingSpatialFreqStepN))/gratingContrastStepN))
                  action assignment: variable=tGratingContrast, value=gratingContrast * pow(gratingContrastStepLog,gratingContrastStepDir*(tTempStim % gratingContrastStepN))
                  action report: message=Azimuth is $tGratingAzimuthDeg ; Elevation is $tGratingElevationDeg ; Con is $tGratingContrast ; SF is tGratingSpatialFreqCPD
              <!-- <action type="if" condition="!doSFStim &amp;&amp; !doConStim">
                                          <action type="assignment" variable="tTempStim" value= "tStimulusNumber % (gratingElevationStepN * gratingAzimuthStepN)"/>    
                                          <action type="if" condition="tTempStim &lt; gratingAzimuthStepN">
                                           <action type="assignment" variable="tGratingAzimuthDeg" value= "gratingAzimuthDeg + (gratingAzimuthStepDeg * (tTempStim))"/>
                                           <action type="assignment" variable="tGratingElevationDeg" value= "gratingElevationDeg"/>
                                           <action type="report" message="Azimuth is $tGratingAzimuthDeg ; Elevation is $tGratingElevationDeg"/>
                                         </action>
                                         <action type="if" condition="tTempStim &gt;= gratingAzimuthStepN">
                                           <action type="assignment" variable="tGratingAzimuthDeg" value= "gratingAzimuthDeg+ (gratingAzimuthStepDeg * ((tTempStim) % gratingAzimuthStepN))"/>
                                           <action type="assignment" variable="tGratingElevationDeg" value= "gratingElevationDeg+ (gratingElevationStepDeg * (floor(tTempStim / gratingAzimuthStepN)))"/>
                                           <action type="report" message="Azimuth is $tGratingAzimuthDeg ; Elevation is $tGratingElevationDeg"/>
                                         </action>
                                       </action> -->
            action if: condition=doRetStim == 0
              action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
              action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
            <!-- Select features if not in matrix mode -->
            action if: condition=doMatrix == 0
              <!-- Select size -->
              action if: condition=doSizeStim = 1
                action assignment: variable=tTempStim, value=tStimulusNumber % gratingDiameterStepN
                action if: condition=doSizeStepLog = 0
                  action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg + (gratingDiameterStepDeg * (tTempStim))
                action if: condition=doSizeStepLog = 1
                  action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg * (pow(gratingDiameterStepLog,(gratingDiameterStepDir*(tTempStim))))
                action report: message=Diameter is $tGratingDiameterDeg
              action if: condition=doAnnulusSizeStim == 1
                action assignment: variable=tTempStim, value=tStimulusNumber % AnnulusgratingDiameterStepN
                action assignment: variable=tAnnulusGratingDiameterDeg, value=AnnulusgratingDiameterMinN * tGreymaskDiameterDeg + ((AnnulusgratingDiameterMaxN - AnnulusgratingDiameterMinN) * tGreymaskDiameterDeg/(AnnulusgratingDiameterStepN-1)*(tTempStim))
                action report: message=Annulus Diameter is $tAnnulusGratingDiameterDeg
              action if: condition=doSizeStim == 0
                action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg
              <!-- Select spatial frequency -->
              action if: condition=doSFStim == 1 && !doConStim
                action assignment: variable=tTempStim, value=tStimulusNumber % gratingSpatialFreqStepN
                action if: condition=doRetStim = 1
                  action assignment: variable=tTempStim, value=floor((tStimulusNumber % (gratingElevationStepN * gratingAzimuthStepN * gratingSpatialFreqStepN))/(gratingElevationStepN * gratingAzimuthStepN))
                action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD * (pow(gratingSpatialFreqStepLog,(gratingSpatialFreqStepDir*(tTempStim))))
                action report: message=Spatial Frequency is $tGratingSpatialFreqCPD
              action if: condition=doSFStim == 0
                action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
              <!-- Select temporal frequency -->
              action if: condition=doTFStim = 1
                action assignment: variable=tTempStim, value=tStimulusNumber % gratingTemporalFreqStepN
                <!-- Select temporal frequency with Retinotopy -->
                action if: condition=doRetStim = 1
                  action assignment: variable=tTempStim, value=floor((tStimulusNumber % (gratingElevationStepN * gratingAzimuthStepN * gratingTemporalFreqStepN))/(gratingElevationStepN * gratingAzimuthStepN))
                action assignment: variable=tGratingTemporalFreqCPS, value=gratingTemporalFreqCPS * (pow(gratingTemporalFreqStepLog,(gratingTemporalFreqStepDir*(tTempStim))))
                action report: message=Temporal Frequency is $tGratingTemporalFreqCPS
              action if: condition=doTFStim == 0
                action assignment: variable=tGratingTemporalFreqCPS, value=gratingTemporalFreqCPS
              <!-- Select direction -->
              action if: condition=(doDirStim == 1) && !doMatrix && doRetStim == 0
                action assignment: variable=tTempStim, value=tStimulusNumber % gratingDirectionStepN
                action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg + (gratingDirectionStepDeg * (tTempStim))
                action report: message=Direction is $tGratingDirectionDeg
              action if: condition=doDirStim == 0
                action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg
              <!-- Select contrast -->
              action if: condition=!doMatrix && !doRetStim && doConStim == 1
                action assignment: variable=tTempStim, value=tStimulusNumber % gratingContrastStepN
                action assignment: variable=tGratingContrast, value=gratingContrast * (pow(gratingContrastStepLog,(gratingContrastStepDir*(tTempStim))))
                action report: message=Contrast is $tGratingContrast
              action if: condition=doConStim == 0
                action assignment: variable=tGratingContrast, value=gratingContrast
              <!-- do Phase -->
              action if: condition=!doMatrix && doPhaseStim = 1 && !doRetStim 
                action assignment: variable=tTempStim, value=tStimulusNumber % gratingStartingPhaseStepN
                action assignment: variable=tGratingStartingPhaseDeg, value=gratingStartingPhaseDeg + (gratingStartingPhaseStepDeg * (tTempStim))
                action report: message=Starting phase is $tGratingStartingPhaseDeg
              action if: condition=doPhaseStim == 0
                action assignment: variable=tGratingStartingPhaseDeg, value=gratingStartingPhaseDeg
              action if: condition=!doMatrix && doLoomStim == 1
                action assignment: variable=tTempStim, value=tStimulusNumber % loomSpeedStepN
                action assignment: variable=tGratingLoomSpeedDPS, value=loomSpeedDPS * (pow(loomSpeedStepLog,(loomSpeedStepDir*(tTempStim))))
                action report: message=Speed is $tGratingLoomSpeedDPS
              action if: condition=doLoomStim == 0
                action assignment: variable=tGratingLoomSpeedDPS, value=loomSpeedDPS
              <!-- Select speed- for moving dots only -->
              action if: condition=!doMatrix && doDotsSpeedStim == 1
                action assignment: variable=tTempStim, value=tStimulusNumber % dotSpeedStepN
                action assignment: variable=tDotSpeedDPS, value=dotSpeedDPS * (pow(dotSpeedStepLog,(dotSpeedStepDir*(tTempStim))))
                action report: message=Speed is $tDotSpeedDPS
              action if: condition=doDotsSpeedStim == 0
                action assignment: variable=tDotSpeedDPS, value=dotSpeedDPS
              action if: condition=doDotsDirectionStim = 1
                action assignment: variable=tTempStim, value=tStimulusNumber % dotDirectionStepN
                action assignment: variable=tDotDirectionDeg, value=dotDirectionDeg + (dotDirectionStepDeg * (tTempStim))
                action report: message=Direction is $tDotDirectionDeg
              action if: condition=doDotsDirectionStim = 0
                action assignment: variable=tDotDirectionDeg, value=dotDirectionDeg
              <!-- Select contrast- for moving dots only -->
              action if: condition=!doMatrix && doDotsContrastStim == 1
                action assignment: variable=tTempStim, value=tStimulusNumber % dotContrastStepN
                action assignment: variable=tDotContrast, value=dotContrast * (pow(dotContrastStepLog,(dotContrastStepDir*(tTempStim))))
                action report: message=Contrast is $tDotContrast
              action if: condition=doDotsContrastStim == 0
                action assignment: variable=tDotContrast, value=dotContrast
              <!-- Select coherence- for moving dots only -->
              action if: condition=!doMatrix && doDotsCoherenceStim == 1
                action assignment: variable=tTempStim, value=tStimulusNumber % dotCoherenceStepN
                action assignment: variable=tDotCoherence, value=dotCoherence * (pow(dotCoherenceStepLog,(dotCoherenceStepDir*(tTempStim))))
                action report: message=Coherence is $tDotCoherence
              action if: condition=doDotsCoherenceStim == 0
                action assignment: variable=tDotCoherence, value=dotCoherence
              <!-- Select direction- for moving dots only -->
              action if: condition=!doMatrix && doDotsDirectionStim == 1
                action assignment: variable=tTempStim, value=tStimulusNumber % dotDirectionStepN
                action assignment: variable=tDotDirectionDeg, value=dotDirectionDeg + (dotDirectionStepDeg *(tTempStim))
                action report: message=Size is $tDotDirectionDeg
              action if: condition=doDotsDirectionStim == 0
                action assignment: variable=tDotDirectionDeg, value=dotDirectionDeg
              <!-- Select size- for moving dots only -->
              action if: condition=!doMatrix && doDotsSizeStim == 1
                action assignment: variable=tTempStim, value=tStimulusNumber % dotSizeStepN
                action assignment: variable=tDotSizeDeg, value=dotSizeDeg + (dotSizeStepDeg *(tTempStim))
                action report: message=Size is $tDotSizeDeg
              action if: condition=doDotsSizeStim == 0
                action assignment: variable=tDotSizeDeg, value=dotSizeDeg
              <!-- Select density- for moving dots only -->
              action if: condition=!doMatrix && doDotsDensityStim == 1
                action assignment: variable=tTempStim, value=tStimulusNumber % dotDensityStepN
                action assignment: variable=tDotDensity, value=dotDensity + (dotDensityStep *(tTempStim))
                action report: message=Size is $tDotDensity
              action if: condition=doDotsDensityStim == 0
                action assignment: variable=tDotDensity, value=dotDensity
              <!-- Select LED power -->
              action if: condition=!doMatrix && doLEDStim == 1
                action assignment: variable=tTempStim, value=tStimulusNumber % LEDPowerStepN
                action assignment: variable=tTrialLaserPowerMw_trigger, value=LEDPowerMw + (LEDPowerStepMw * (tTempStim))
                action report: message=LED Power is $tTrialLaserPowerMw_trigger
              action if: condition=doLEDStim == 0
                action assignment: variable=tTrialLaserPowerMw_trigger, value=LEDPowerMw
            action if: condition=LaserPowerMw > 0 && optic_device != 'led'
              action assignment: variable=tTrialLaserPowerMw, value=LaserPowerMw
            <!-- Select features if IN matrix mode -->
            action if: condition=doMatrix = 1
              <!-- Make SFxTF Matrix -->
              action if: condition=(doTFStim == 1) && (doSFStim == 1)
                action assignment: variable=tTempStim, value=tStimulusNumber % (gratingSpatialFreqStepN * gratingTemporalFreqStepN)
                action if: condition=tTempStim < gratingSpatialFreqStepN
                  action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD *(pow(gratingSpatialFreqStepLog,(gratingSpatialFreqStepDir*tTempStim)))
                  action assignment: variable=tGratingTemporalFreqCPS, value=gratingTemporalFreqCPS
                  action report: message=SF is $tGratingSpatialFreqCPD ; TF is $tGratingTemporalFreqCPS
                action if: condition=tTempStim >= gratingSpatialFreqStepN
                  action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD * (pow(gratingSpatialFreqStepLog, (gratingSpatialFreqStepDir*(tTempStim % gratingSpatialFreqStepN))))
                  action assignment: variable=tGratingTemporalFreqCPS, value=gratingTemporalFreqCPS * (pow(gratingTemporalFreqStepLog, (gratingTemporalFreqStepDir*(floor(tTempStim / gratingSpatialFreqStepN)))))
                  action report: message=SF is $tGratingSpatialFreqCPD ; TF is $tGratingTemporalFreqCPS
                action assignment: variable=tGratingContrast, value=gratingContrast
                action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg
                action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg
                action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
                action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
              <!-- Make SF x Dir Matrix -->
              action if: condition=(doDirStim == 1) && (doSFStim) == 1
                action assignment: variable=tTempStim, value=tStimulusNumber % (gratingSpatialFreqStepN * gratingDirectionStepN)
                action if: condition=tTempStim < gratingSpatialFreqStepN
                  action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD * (pow(gratingSpatialFreqStepLog, (gratingSpatialFreqStepDir*(tTempStim))))
                  action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg
                  action report: message=SF is $tGratingSpatialFreqCPD ; Direction is $tGratingDirectionDeg
                action if: condition=tTempStim >= gratingSpatialFreqStepN
                  action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD * (pow(gratingSpatialFreqStepLog, (gratingSpatialFreqStepDir*((tTempStim) % gratingSpatialFreqStepN))))
                  action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg + (gratingDirectionStepDeg * (floor(tTempStim / gratingSpatialFreqStepN)))
                  action report: message=SF is $tGratingSpatialFreqCPD ; Direction is $tGratingDirectionDeg
                action assignment: variable=tGratingContrast, value=gratingContrast
                action assignment: variable=tGratingTemporalFreqCPS, value=gratingTemporalFreqCPS
                action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg
                action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
                action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
              <!-- Make Dir X Phase -->
              action if: condition=(doDirStim == 1) && (doPhaseStim == 1)
                action if: condition=tStimulusNumber < (gratingDirectionStepN * gratingStartingPhaseStepN)
                  action assignment: variable=tTempStim, value=tStimulusNumber
                action if: condition=tStimulusNumber >= (gratingDirectionStepN * gratingStartingPhaseStepN)
                  action assignment: variable=tTempStim, value=tStimulusNumber % (gratingDirectionStepN * gratingStartingPhaseStepN)
                action if: condition=tTempStim < gratingStartingPhaseStepN
                  action assignment: variable=tGratingStartingPhaseDeg, value=gratingStartingPhaseDeg + (gratingStartingPhaseStepDeg * (tTempStim))
                  action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg
                  action report: message=SP is $tGratingStartingPhaseDeg ; Direction is $tGratingDirectionDeg
                action if: condition=tTempStim >= gratingStartingPhaseStepN
                  action assignment: variable=tGratingStartingPhaseDeg, value=gratingStartingPhaseDeg + (gratingStartingPhaseStepDeg * ((tTempStim % gratingStartingPhaseStepN)))
                  action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg + (gratingDirectionStepDeg * (floor(tTempStim / gratingStartingPhaseStepN)))
                  action report: message=SP is $tGratingStartingPhaseDeg; Direction is $tGratingDirectionDeg
                action assignment: variable=tGratingContrast, value=gratingContrast
                action assignment: variable=tGratingTemporalFreqCPS, value=gratingTemporalFreqCPS
                action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg
                action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
                action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
                action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
              <!-- Make Size x Direction Matrix -->
              action if: condition=(doSizeStim == 1) && (doDirStim == 1)
                action assignment: variable=tTempStim, value=tStimulusNumber % (gratingDirectionStepN * gratingDiameterStepN)
                action if: condition=tTempStim < gratingDirectionStepN
                  action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg + (gratingDirectionStepDeg * (tTempStim))
                  action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg
                  action report: message=Direction is $tGratingDirectionDeg ; Size is $tGratingDiameterDeg
                action if: condition=tTempStim >= gratingDirectionStepN
                  action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg + (gratingDirectionStepDeg * (tTempStim % gratingDirectionStepN))
                  action if: condition=doSizeStepLog = 1
                    action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg * (pow(gratingDiameterStepLog, (gratingDiameterStepDir*(floor(tTempStim / gratingDirectionStepN)))))
                  action if: condition=doSizeStepLog = 0
                    action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg + (gratingDiameterStepDeg * (floor(tTempStim / gratingDirectionStepN)))
                  action report: message=Direction is $tGratingDirectionDeg ; Size is $tGratingDiameterDeg
                action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
                action if: condition=doConStim != 1
                  action assignment: variable=tGratingContrast, value=gratingContrast
                action assignment: variable=tGratingTemporalFreqCPS, value=gratingTemporalFreqCPS
                action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
                action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
              <!-- Make Dir x Contrast Matrix -->
              action if: condition=(doDirStim == 1) && (doConStim == 1)
                action assignment: variable=tTempStim, value=tStimulusNumber % (gratingContrastStepN * gratingDirectionStepN)
                action if: condition=tTempStim < gratingContrastStepN
                  action assignment: variable=tGratingContrast, value=gratingContrast *(pow(gratingContrastStepLog,(gratingContrastStepDir*tTempStim)))
                  action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg
                  action report: message=Contrast is $tGratingContrast ; Direction is $tGratingDirectionDeg
                action if: condition=tTempStim >= gratingContrastStepN
                  action assignment: variable=tGratingContrast, value=gratingContrast * (pow(gratingContrastStepLog, (gratingContrastStepDir*(tTempStim % gratingContrastStepN))))
                  action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg + (gratingDirectionStepDeg * (floor(tTempStim / gratingContrastStepN)))
                  action report: message=Contrast is $tGratingContrast ; Direction is $tGratingDirectionDeg
                action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
                action if: condition=doSizeStim != 1
                  action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg
                action assignment: variable=tGratingTemporalFreqCPS, value=gratingTemporalFreqCPS
                action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
                action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
              <!-- Make Size x Contrast Matrix -->
              action if: condition=(doSizeStim == 1) && (doConStim == 1)
                action assignment: variable=tTempStim, value=tStimulusNumber % (gratingContrastStepN * gratingDiameterStepN)
                action if: condition=tTempStim < gratingContrastStepN
                  action assignment: variable=tGratingContrast, value=gratingContrast *(pow(gratingContrastStepLog,(gratingContrastStepDir*tTempStim)))
                  action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg
                  action report: message=Contrast is $tGratingContrast ; Size is $tGratingDiameterDeg
                action if: condition=tTempStim >= gratingContrastStepN
                  action assignment: variable=tGratingContrast, value=gratingContrast * (pow(gratingContrastStepLog, (gratingContrastStepDir*(tTempStim % gratingContrastStepN))))
                  action if: condition=doSizeStepLog = 1
                    action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg * (pow(gratingDiameterStepLog, (gratingDiameterStepDir*(floor(tTempStim / gratingContrastStepN)))))
                  action if: condition=doSizeStepLog = 0
                    action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg + (gratingDiameterStepDeg * (floor(tTempStim / gratingContrastStepN)))
                  action report: message=Contrast is $tGratingContrast ; Size is $tGratingDiameterDeg
                action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
                action if: condition=doDirStim !=1
                  action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg
                action assignment: variable=tGratingTemporalFreqCPS, value=gratingTemporalFreqCPS
                action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
                action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
              <!-- Make LEDpower x Dir Matrix -->
              action if: condition=(doDirStim == 1) && (doLEDStim == 1)
                action assignment: variable=tTempStim, value=tStimulusNumber % (LEDPowerStepN * gratingDirectionStepN)
                action if: condition=tTempStim < LEDPowerStepN
                  action assignment: variable=tTrialLaserPowerMw_trigger, value=LEDPowerMw + (LEDPowerStepMw * (tTempStim))
                  action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg
                  action report: message=LED Power is $tTrialLaserPowerMw_trigger ; Direction is $tGratingDirectionDeg
                action if: condition=tTempStim >= LEDPowerStepN
                  action assignment: variable=tTrialLaserPowerMw_trigger, value=LEDPowerMw + (LEDPowerStepMw * ((tTempStim) % LEDPowerStepN))
                  action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg + (gratingDirectionStepDeg * (floor(tTempStim / LEDPowerStepN)))
                  action report: message=LED Power is $tTrialLaserPowerMw_trigger ; Direction is $tGratingDirectionDeg
                action assignment: variable=tGratingContrast, value=gratingContrast
                action assignment: variable=tGratingTemporalFreqCPS, value=gratingTemporalFreqCPS
                action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
                action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg
                action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
                action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
              <!-- Make LEDpower x Size Matrix -->
              action if: condition=(doSizeStim == 1) && (doLEDStim == 1)
                action assignment: variable=tTempStim, value=tStimulusNumber % (LEDPowerStepN * gratingDiameterStepN)
                action if: condition=tTempStim < LEDPowerStepN
                  action assignment: variable=tTrialLaserPowerMw_trigger, value=LEDPowerMw + (LEDPowerStepMw * (tTempStim))
                  action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg
                  action report: message=LED Power is $tTrialLaserPowerMw_trigger ; Diameter is $tGratingDiameterDeg
                action if: condition=tTempStim >= LEDPowerStepN
                  action assignment: variable=tTrialLaserPowerMw_trigger, value=LEDPowerMw + (LEDPowerStepMw * ((tTempStim) % LEDPowerStepN))
                  action assignment: variable=tGratingDiameterDeg, value=gratingDiameterDeg + (gratingDiameterStepDeg * (floor(tTempStim / LEDPowerStepN)))
                  action report: message=LED Power is $tTrialLaserPowerMw_trigger ; Diameter is $tGratingDiameterDeg
                action assignment: variable=tGratingContrast, value=gratingContrast
                action assignment: variable=tGratingTemporalFreqCPS, value=gratingTemporalFreqCPS
                action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
                action assignment: variable=tGratingDirectionDeg, value=gratingDirectionDeg
                action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
                action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
              <!-- check for errors in feature combos 
              	      		<action type="if" condition= "(doTFStim+doSFStim+doDirStim+doConStim+doSizeStim+(doRetStim*2)) &gt; 2">
              	      			<action type="assert" condition= "1 = 1" message="Too many stim features selected for matrix mode"
                                stop_on_failure="1"/>
                               </action>
                               <action type="if" condition= "(doTFStim+doSFStim+doDirStim+doConStim+doSizeStim+(doRetStim*2)) &lt; 2">
              	      			<action type="assert" condition= "1 = 1" message="Too few stim features selected for matrix mode"
                                stop_on_failure="1"/>
                               </action>
              	      		<action type="if" condition= "((doTFStim+doSFStim) &lt; 2) &amp;&amp; ((doDirStim+doSFStim) &lt; 2)">
                                <action type="assert" condition= "1 = 1" message="Code not written to do matrix for these features"
                                stop_on_failure="1"/>
                              </action> -->
            <!-- check for tGratingContrast>1 -->
            action if: condition=tGratingContrast>1
              action assignment: variable=tGratingContrast, value=1
            <!-- convert TF/SF to speed -->
            action if: condition=doMovingDots != 1 && doLoomStim != 1
              action assignment: variable=tGratingSpeedDPS, value=tGratingTemporalFreqCPS / tGratingSpatialFreqCPD
              action report: message=Speed is $tGratingSpeedDPS
            action if: condition=tTrialLaserPowerMw_trigger > 0 && optic_device != 'led'
              action assignment: variable=tTrialLaserPowerMw_trigger, value=LaserPowerMw
            <!-- Zero the LED port -->
            action assignment: variable=laserTrigger, value=0
            action if: condition=optic_device == 'led'
              action assignment: variable=tTrialLaserPowerMw, value=0
            action if: condition=tTrialLaserPowerMw_trigger > 0
              action assignment "Send laser params to controller": variable=sendLaserParams, value=1
              action assignment "Send laser params to controller": variable=sendLaserParams, value=0
            <!-- initialize trial start/end times -->
            action if: condition=tThisTrialStartTimeMs == -1
              <!-- first trial, leave lasttime as -1 -->
              action assignment: variable=tLastTrialStartTimeMs, value=-1
            action if: condition=tThisTrialStartTimeMs != -1
              <!-- else -->
              <!-- later trials, copy this into last before setting this again below -->
              action assignment: variable=tLastTrialStartTimeMs, value=tThisTrialStartTimeMs
            action assignment: variable=tThisTrialStartTimeMs, value=now()/1000
            action assignment "Clear stimulusOn": variable=stimulusOn, value=0
            action assignment "Encode InterStimIntervalStart": variable=strobedDigitalWord, value=6
            action report: message=In InterStimInterval, waiting for $nScansOff frames
            transition conditional "If nScansOff, move to StimOn": condition=counter >= ((nScansOff+nScansOn) * tTrialsDoneSinceStart) + nScansOff, target=StimOn
          task_system_state "StimOn"
            action assignment: variable=setGratingStartingPhaseDeg, value=tGratingStartingPhaseDeg
            action assignment: variable=tempBackgroundLuminance, value=tBackgroundLuminance
            action if: condition=doPhotodiode
              action live_queue_stimulus "Queue Stimulus": stimulus=photoDiodeGrating
              action dequeue_stimulus "Dequeue Stimulus": stimulus=photoDiodeMask
            action if: condition=doMovingDots != 1
              action dequeue_stimulus "Dequeue Stimulus": stimulus=base_grating
              action if: condition=doAnnulusStim == 0
                action if: condition=doGaussianMask == 1
                  action queue_stimulus "Queue Stimulus": stimulus=target_grating_gaussian
                action if: condition=doEllipseMask == 1
                  action queue_stimulus "Queue Stimulus": stimulus=target_grating_ellipse
              action if: condition=doAnnulusStim == 1
                action if: condition=doEllipseMask == 1
                  action queue_stimulus "Queue Stimulus": stimulus=target_grating_annulus
                  action queue_stimulus "Queue Stimulus": stimulus=inner_mask
                  action queue_stimulus "Queue Stimulus": stimulus=target_grating_ellipse
            <!-- update display, finalize variables -->
            action update_stimulus_display "Update Display"
            action assignment: variable=MIO0, value=1
            action report: message=Visual Stim ON, presenting for $nScansOn scans.
            action report: message=Laser trial and power is $tTrialLaserPowerMw_trigger
            action if: condition=tTrialLaserPowerMw_trigger > 0
              action report: message=Laser trial and power is $tTrialLaserPowerMw_trigger
              action if: condition=tTrialsDoneSinceStart > 10
                action assignment: variable=laserTrigger, value=1
              action if: condition=optic_device == 'led'
                action assignment: variable=laserTrigger, value=1
                action assignment: variable=tTrialLaserPowerMw, value=tTrialLaserPowerMw_trigger
            action assignment "reset tQuadrature to quadrature": variable=tQuadrature, value=quadrature
            action if: condition=doMovingDots == 1
              action assignment "reset contrast": variable=setDotContrast, value=tDotContrast
              action if: condition=doDotsSpeedStim == 1
                action assignment "reset speed": variable=setDotSpeedDPS, value=tDotSpeedDPS
              action if: condition=doDirStim == 1
                action assignment "reset direction": variable=setDotDirectionDeg, value=tDotDirectionDeg
              action if: condition=doDotsSizeStim == 1
                action assignment "reset size": variable=setDotSizeDeg, value=tDotSizeDeg
              action if: condition=doDotsCoherenceStim == 1
                action assignment "reset size": variable=setDotCoherence, value=tDotCoherence
              action if: condition=doDotsDensityStim == 1
                action assignment "reset size": variable=setDotDensity, value=tDotDensity
            action assignment "Encode VisStimOn": variable=strobedDigitalWord, value=4
            action if: condition=counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)
              action assignment "reset tQuadrature to quadrature": variable=tQuadrature, value=quadrature
            action assignment "reset phaseCount": variable=phaseCount, value=counter
            action start_timer "Start refresh timer": timer=refreshTimer, duration=300, duration_units=ms
            <!-- Can't actually jave a system state for timer 1, but it would be here -->
            transition conditional "If nScansON, move to EndTrial": condition=counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart), target=EndTrial
            transition conditional "If doLooming go to loom state": condition=timerExpired(refreshTimer) && doLoomStim, target=LoomState
            transition conditional "If doRunFeedback go to run feedback state": condition=timerExpired(refreshTimer) && doRunFeedback, target=RunFeedback
            transition conditional "If doPhaseRev go to Phase rev": condition=counter-phaseCount >= nScansPhaseCyc && doPhaseRev, target=PhaseRev
          task_system_state "PhaseRev"
            action assignment "reset phaseCount": variable=phaseCount, value=counter
            action assignment "reverse Phase": variable=tGratingStartingPhaseDeg, value=tGratingStartingPhaseDeg+180
            action assignment "reverse Phase": variable=setGratingStartingPhaseDeg, value=tGratingStartingPhaseDeg
            action queue_stimulus "Queue Stimulus": stimulus=target_grating_gaussian
            action update_stimulus_display "Update Display"
            action report: message=Phase reverse- phase is $setGratingStartingPhaseDeg
            <!-- <action type="report" message="Diameter is $tGratingDiameterDeg"/> -->
            transition conditional "If nScansON, move to EndTrial": condition=counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart), target=EndTrial
            transition conditional "time to reverse phase": condition=counter-phaseCount >= nScansPhaseCyc, target=PhaseRev
          task_system_state "LoomState"
            action start_timer "Start refresh timer": timer=refreshTimer, duration=30, duration_units=ms
            action assignment "set new stimulus size": variable=tGratingDiameterDeg, value=tGratingDiameterDeg + tGratingLoomSpeedDPS*.03
            action if: condition=doAnnulusStim == 0
              action if: condition=doGaussianMask == 1
                action queue_stimulus "Queue Stimulus": stimulus=target_grating_gaussian
              action if: condition=doEllipseMask == 1
                action queue_stimulus "Queue Stimulus": stimulus=target_grating_ellipse
            action if: condition=doAnnulusStim == 1
              action if: condition=doEllipseMask == 1
                action queue_stimulus "Queue Stimulus": stimulus=target_grating_annulus
                action queue_stimulus "Queue Stimulus": stimulus=inner_mask
                action queue_stimulus "Queue Stimulus": stimulus=target_grating_ellipse
            action update_stimulus_display "Update Display"
            <!-- <action type="report" message="Diameter is $tGratingDiameterDeg"/> -->
            transition conditional "If nScansON, move to EndTrial": condition=counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart), target=EndTrial
            transition conditional "If timer expired and not yet max size, recycle": condition=timerExpired(refreshTimer) && tGratingDiameterDeg < maxLoomDiameterDeg, target=LoomState
          task_system_state "RunFeedback"
            action start_timer "Start refresh timer": timer=refreshTimer, duration=300, duration_units=ms
            action assignment "Log Speed of previous Interval": variable=runFeedbackCounter, value=quadrature - tQuadrature
            action assignment "set new stimulus speed": variable=setDotSpeedDPS, value=runFeedbackCounter * runFeedbackGain
            action update_stimulus_display "Update Display"
            action report: message=setDotSpeedDPS is $setDotSpeedDPS
            action assignment "reset tQuadrature to quadrature": variable=tQuadrature, value=quadrature
            transition conditional "If nScansON, move to EndTrial": condition=counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart), target=EndTrial
            transition conditional "If timer expired, recycle": condition=timerExpired(refreshTimer), target=RunFeedback
          task_system_state "EndTrial"
            action if: condition=doPhotodiode
              action dequeue_stimulus "dequeue Stimulus": stimulus=photoDiodeGrating
              action live_queue_stimulus "Queue Stimulus": stimulus=photoDiodeMask
            action if: condition=doMovingDots != 1
              action if: condition=doAnnulusStim == 0
                action if: condition=doGaussianMask == 1
                  action dequeue_stimulus "Dequeue Stimulus 0": stimulus=target_grating_gaussian
                action if: condition=doEllipseMask == 1
                  action dequeue_stimulus "Dequeue Stimulus 0": stimulus=target_grating_ellipse
              action if: condition=doAnnulusStim == 1
                action if: condition=doEllipseMask == 1
                  action dequeue_stimulus "Deueue Stimulus": stimulus=target_grating_annulus
                  action dequeue_stimulus "Dequeue Stimulus": stimulus=inner_mask
                  action dequeue_stimulus "Dequeue Stimulus": stimulus=target_grating_ellipse
              action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
              action update_stimulus_display "Update Stimulus"
            action assignment: variable=MIO0, value=0
            <!-- Must use next selection and reset selection here to move through rand/seq -->
            action if: condition=doRand == 0 && tNStimAccepted < 89
              action next_selection: selection=svSeqStimNumber
              action assignment: variable=tNStimAccepted, value=tNStimAccepted + 1
            action if: condition=doRand == 0 && tNStimAccepted >= 89
              action reset_selection: selection=svSeqStimNumber
              action assignment: variable=tNStimAccepted, value=0
            action if: condition=doRand == 1 && tNStimAccepted < 89
              action next_selection: selection=svRandStimNumber
              action assignment: variable=tNStimAccepted, value=tNStimAccepted + 1
            action if: condition=doRand == 1 && tNStimAccepted >= 89
              action reset_selection: selection=svRandStimNumber
              action assignment: variable=tNStimAccepted, value=0
            action if: condition=optic_device == 'led'
              action assignment: variable=tTrialLaserPowerMw, value=0
            action assignment: variable=laserTrigger, value=0
            action assignment "End Matlab Sync": variable=sync, value=0
            action assignment "Encode END": variable=strobedDigitalWord, value=85
            action assignment "Encode END": variable=strobedDigitalWord, value=85
            action assignment "Encode END": variable=strobedDigitalWord, value=85
            <!-- trigger serial param dump to cyberkinetics -->
            action assignment "Send serial params": variable=sendSerialParams, value=1
            action assignment "Send serial params": variable=sendSerialParams, value=0
            action assignment: variable=tTrialsDoneSinceStart, value=tTrialsDoneSinceStart+1
            transition yield "return to parent task system"
    action stop_device_IO "Stop IO Device": device=LabJackU6
