<?xml version="1.0"?>
<monkeyml version="1.0">
  <io_devices tag="IO Devices">
    <iodevice tag="LabJackU6" priority="" type="LabJackU6" 
              pulse_duration="juice" pulse_on="juice" 
              lever1="FIO1"
              lever1_solenoid="lever_solenoid"
              quadrature="quadrature"
              laser_trigger="laserTrigger"
              optic_device="optic_device"
              strobed_digital_word="strobedDigitalWord"
              counter="counter" 
              Qbin_timeUS="binTimeUS"
              running_criteria="running_Bincriteria"
              Qbin_size="binSize"
              start_CB="startStimulus"
              start_CB_running="MouseIsRunning"
              Qpulse_criteria="pulse_criteria"
              doCB="docerebellarStim"
              checkrun="checkRunState"
              do_wheelspeed="DoWheelspeed"
              ws_durationUS="speedIntervalUS"
              wheel_speed="wheelSpeed"/>
    <iodevice tag="FakeMonkey" priority="" type="fake_monkey" id="" alt="" spike_rate="10"/>
    <iodevice type="serverside_conduit" tag="Server-side Event Conduit" resource_name="server_conduit"/>
  </io_devices>
  <variables tag="Variables">
    <folder tag="Behavioral Control">
      <variable tag="subjectNum" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="experimentXmlTrialId" scope="global" logging="when_changed" default_value="512" type="integer" persistant="1"/> <!-- n.b. it is forcibly set each trial below -->
      <variable tag="optic_device" scope="global" logging="when_changed" default_value="led" type="string" persistant="0"/>
    </folder>
    <folder tag="StimulusSpecs">
      <variable tag="stopAfterNTrials" scope="local" logging="when_changed" default_value="90" type="integer" persistant="1"/>      
      <variable tag="tactileStimulusDurationUs" scope="global" logging="when_changed" default_value="100000" type="integer" persistant="1"/>
      <variable tag="solenoidStimulusDurationMs" scope="global" logging="when_changed" default_value="5000" type="integer" persistant="1"/>
      <variable tag="soundDurationMs" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1"/>
      <variable tag="postSoundPauseDurationMs" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1"/>
      <variable tag="itiIntervalMs" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1"/>
      <variable tag="checkMovementMs" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1"/>
      <variable tag="DoVisualStimRand" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1"/>
      <variable tag="VStimTotalMS" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="MaxVSDurationMS" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="MinVSDurationMS" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="MaxVSDelayMS" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="DoSoundStim" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1"/>
      <variable tag="DoTactileStim" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1"/>
      <variable tag="DoSolenoid" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1"/>
      <variable tag="DoCerebellarStim" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="DoVisualStim_running" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="DoCerebellarStim_training" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1"/>
      
    </folder>
    <folder tag="MovingDot">
      <variable tag="DoMovingDot" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1"/>
      <variable tag="DoMotionReverse" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1"/>
      <variable tag="MovingDotDurationMS" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="MaxReverseDelayMS" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"/>
      <variable tag="MinReverseDelayMS" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="ReverseDurationMS" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="DotDirectionDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="DotDensity" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="DotSizeDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="setDotCoherence" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="DotSpeedBaseline" scope="global" logging="when_changed" default_value="1" type="float" persistant="1"/>
      <variable tag="DotSpeedScale" scope="global" logging="when_changed" default_value="1" type="float" persistant="1"/>
      <variable tag="DotFieldRadius" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="Dot_x" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="Dot_y" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="setDotContrast" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
    </folder>

    <folder tag="WheelSpeed">
      <variable tag="DoWheelspeed" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1"/>
      <variable tag="speedIntervalUS" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
    </folder>

    <folder tag="NFrames">
      <variable tag="itiNFrames" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="postSoundPauseNFrames" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="TStimNFrames" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="checkNFrames" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="VSDelayNFrames" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="VSOnNFrames" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="VSOffNFrames" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="MovingDotTotalNFrames" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="ReverseDelayNFrames" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="ReverseNFrames" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
    </folder>
    <folder tag="ImagingVars">
      <variable tag="frameImagingDurationMs" scope="global" logging="when_changed" default_value="500" type="float" persistant="1"/>
    </folder>
    <folder tag="RunningCriteria">
      <variable tag="BinSize" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"/>
      <variable tag="requiredRunningBins" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="BinTimeUS" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"/>
      <variable tag="requiredPulseperBin" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
    </folder>
    <folder tag="Task Status">
      <variable tag="soundstimulusOn" scope="global" logging="when_changed" default_value="0" type="boolean"/>
      <variable tag="trialStart" scope="global" logging="when_changed" default_value="0" type="boolean"/>
    </folder>
    <folder tag="Online Display">
      <variable tag="sync" scope="global" logging="when_changed" default_value="0" type="integer"/>
    </folder>
    <folder tag="Hardware variables">
      <variable tag="FIO1" full_name="FIO1" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
      <variable tag="lever_solenoid" default_value="0" scope="GLOBAL" type="boolean" logging="when_changed" persistant="0"/>
      <variable tag="laserTrigger" full_name="laserTrigger" default_value="0" scope="GLOBAL" type="boolean" logging="when_changed" persistant="0"/>
      <variable tag="strobedDigitalWord" full_name="strobedDigitalWord" default_value="0" scope="GLOBAL" type="integer" logging="when_changed" persistant="0"/>
      <variable tag="juice" full_name="juice" scope="GLOBAL" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="counter" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="quadrature" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="binSize" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="running_Bincriteria" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="binTimeUS" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="startStimulus" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="0"/>
      <variable tag="MouseIsRunning" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="0"/>
      <variable tag="docerebellarStim" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="0"/>
      <variable tag="pulse_criteria" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="checkRunState" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="0"/>
      <variable tag="wheelSpeed" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
    </folder>
    <folder tag="Internal Variables">
      <variable tag="tCounter" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tTactileStimulusDurationUs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tTactileStimTurnedOn" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tTrialsDoneSinceStart" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tTrialStartMWTimestampMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tThisTrialStartTimeMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tLastTrialStartTimeMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="frameCountN" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tVisualStimOnMS" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tVisualStimOffMS" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tVisualStimDelayMS" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tVisualStimTurnedOnMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tVisualStimTurnedOffMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tResistanceStartMS" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tReverseVStimTimeMs" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tReverseDelayMS" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tDotDirectionDeg" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
    </folder>
  </variables>
  <sounds tag="Sounds">
    <sound tag="sound100ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-100ms.wav"/>
    <sound tag="sound200ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-200ms.wav"/>
    <sound tag="sound300ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-300ms.wav"/>
    <sound tag="sound400ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-400ms.wav"/>
    <sound tag="sound500ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-500ms.wav"/>
    <sound tag="sound600ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-600ms.wav"/>
    <sound tag="sound700ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-700ms.wav"/>
    <sound tag="sound800ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-800ms.wav"/>
    <sound tag="sound900ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-900ms.wav"/>
    <sound tag="sound1000ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-1000ms.wav"/>
  </sounds>
  <stimuli tag="Stimuli">
    <stimulus type="circle" tag="Ellipse" color="1,1,1" x_size="35" y_size="35" x_position="0" y_position="0" rotation="0" alpha_multiplier="1"></stimulus>"
    <stimulus type="blank_screen" tag="background" color="0,0,0"></stimulus>
    <stimulus type="moving_dots" tag="moving_dots"  direction="tDotDirectionDeg"
              dot_density="DotDensity" dot_size="DotSizeDeg" coherence="setDotCoherence" 
              speed="wheelSpeed*DotSpeedScale+DotSpeedBaseline" field_radius="DotFieldRadius" 
              field_center_x="Dot_x" field_center_y="Dot_y" 
              alpha_multiplier="setDotContrast"></stimulus>              
  </stimuli>    
  <experiment tag="Experiment" full_name="">
    <protocol tag="JuiceOnHoldProtocol" full_name="" selection="sequential" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
      <action type="queue_stimulus" stimulus="background"></action>
      <action type="update_stimulus_display"></action>
      
      <action type="assignment" tag="juice = 0" variable="juice" value="0"></action>
      <action type="assignment" tag="set counter to 0" variable="counter" value="0"></action>
      <action type="assignment" tag="set quadrature to 0" variable="quadrature" value="0"></action>
      <action type="assignment" variable="tTrialsDoneSinceStart" value="0"></action>

      <!-- init actions before running trials after any press of start-->
      <action tag="Start IO Device" type="start_device_IO" device="LabJackU6"></action>

      <trial tag="Trial 01" nsamples="2500" sampling_method="cycles" selection="sequential">
     
      <!--<range_replicator tag="New Replicator" from="0" to="89" step="1" variable="rrStimulusNumber"> -->
    <task_system tag="TS" full_name="TS" description="" interruptible="YES">
      <task_system_state tag="Inter Stimulus Interval" interruptible="YES">
          <action_marker _unmoveable="1" tag="Actions"></action_marker>
          
          <action type="assignment" tag="Sync Matlab" variable="sync" value="1"></action>
          
          <action type="assignment" variable="tReverseDelayMS" value="disc_rand(MinReverseDelayMS,MaxReverseDelayMS)"/>
      
          <action type="assignment" tag="Calculate nFramesITI" variable="itiNFrames" value="ceil(itiIntervalMs/frameImagingDurationMs)"/>
          <action type="assignment" tag="Calculate nFramesPostSound" variable="postSoundPauseNFrames" value="ceil(postSoundPauseDurationMs/frameImagingDurationMs)"/>
          <action type="if" condition="DoSolenoid == 0">
            <action type="assignment" tag="Calculate nFramesTStim" variable="TStimNFrames" value="ceil(tactileStimulusDurationUs/1000/frameImagingDurationMs)"/>
          </action>
          <action type="if" condition="DoSolenoid == 1">
            <action type="assignment" tag="Calculate nFramesTStim" variable="TStimNFrames" value="ceil(solenoidStimulusDurationMs/frameImagingDurationMs)"/>
          </action>

          <action type="assignment" tag="Calculate nFramesCheck" variable="checkNFrames" value="ceil(checkMovementMs/frameImagingDurationMs)"/>
          <action type="assignment" tag="Calculate nFramesReverseDelay" variable="ReverseDelayNFrames" value="ceil(tReverseDelayMS/frameImagingDurationMs)"/>
          <action type="assignment" tag="Calculate nFramesReverse" variable="ReverseNFrames" value="ceil(ReverseDurationMS/frameImagingDurationMs)"/>
          <action type="assignment" tag="Calculate nFramesMovingDotReverse" variable="MovingDotTotalNFrames" value="ceil(MovingDotDurationMS/frameImagingDurationMs)"/>

          <action type="assignment" variable="tVisualStimOnMS" value="disc_rand(MinVSDurationMS, MaxVSDurationMS)"></action>
          <action type="assignment" variable="tVisualStimDelayMS" value="disc_rand(0, MaxVSDelayMS)"></action>
          <action type="assignment" variable="tVisualStimOffMS" value="VStimTotalMS-tVisualStimOnMS-tVisualStimDelayMS"></action>
          <action type="assignment" tag="Calculate nFramesVSDelay" variable="VSDelayNFrames" value="ceil(tVisualStimDelayMS/frameImagingDurationMs)"/>
          <action type="assignment" tag="Calculate nFramesVSOn" variable="VSOnNFrames" value="ceil(tVisualStimOnMS/frameImagingDurationMs)"/>
          <action type="assignment" tag="Calculate nFramesVSOff" variable="VSOffNFrames" value="floor((tVisualStimOffMS)/frameImagingDurationMs)"/>

          <action type="assignment" variable="binSize" value="BinSize"/>
          <action type="assignment" variable="running_Bincriteria" value="requiredRunningBins"/>
          <action type="assignment" variable="binTimeUS" value="BinTimeUS"/>
          <action type="assignment" variable="pulse_criteria" value="requiredPulseperBin"/>
          <action type="assignment" variable="docerebellarStim" value="DoCerebellarStim"/>

          <action type="assignment" variable="tDotDirectionDeg" value="DotDirectionDeg"/>

          <!-- if we have done enough trials, abort this trial - before any encodes/sync are done -->
          <action type="if" condition="stopAfterNTrials > 0 &amp;&amp; tTrialsDoneSinceStart > stopAfterNTrials">
              <action type="report" message="** Stopping after completing $stopAfterNTrials trials"></action>
              <action type="stop_experiment"></action>  
          </action>

          <action type="assignment" variable="tTrialStartMWTimestampMs" value="now()/1000"></action>  <!-- integer valued ms timestamp -->
          <action type="if" condition="tTrialsDoneSinceStart == 0">
            <action type="assignment" variable="tCounter" value="0"></action>
            <action type="assignment" variable="counter" value="0"></action>
          </action>
          <action type="if" condition="tTrialsDoneSinceStart != 0">
            <action type="assignment" variable="tCounter" value="counter"></action>
          </action>

          <action type="assignment" tag="Encode START" variable="strobedDigitalWord" value="170"></action>
          <action type="assignment" tag="Encode START" variable="strobedDigitalWord" value="170"></action>
          <action type="assignment" tag="Encode START" variable="strobedDigitalWord" value="170"></action>

          <!--Transmit the trial timestamp so strobed code sequences are unique -->
          <action type="assert" condition="tTrialStartMWTimestampMs &lt;= 2147483648" 
                  message="tTrialStartMWTimestampMs is too large - should happen only after several days of running!?"
                  stop_on_failure="1"/>  
          <!-- prevent overflow outside 2**31ms ~ 10 days - I don't know how to get unsigned casts in the XML -->
          <!-- encode trialStartTimestamp in bytes: 4 bytes: millions of seconds, 1000s, s, ms -->
          <action type="assignment" tag="Encode TimestampStart" variable="strobedDigitalWord" value="200"/>
          <action type="assignment" tag="Encode TimestampEnd" variable="strobedDigitalWord" value="201"/>

          
          <action type="assignment" tag="Set trialStart" variable="trialStart" value="1"></action>
          <action type="assignment" tag="juice = 0" variable="juice" value="0"></action>
          <action type="assignment" tag="tStimTimeUs Set" variable="tTactileStimulusDurationUs" value="tactileStimulusDurationUs"/>
          <action type="assignment" tag="-" variable="laserTrigger" value="0"></action>

          <action type="assert" condition="soundDurationMs == 100 || soundDurationMs == 200 || soundDurationMs == 300 || soundDurationMs == 400 || soundDurationMs == 500 || soundDurationMs == 600 || soundDurationMs == 700 || soundDurationMs == 800 || soundDurationMs == 900 || soundDurationMs == 1000" message="*******SoundDurationMs must be a multiple of 100 between 100ms and 1000ms!!!*******" stop_on_failure="1"/>  

      	
          <!-- initialize trial start/end times -->
          <action type="if" condition="tThisTrialStartTimeMs == -1">  
              <!--first trial, leave lasttime as -1 -->
              <action type="assignment" variable="tLastTrialStartTimeMs" value="-1"></action>
          </action>
          <action type="if" condition="tThisTrialStartTimeMs != -1">  <!--else-->
              <!--later trials, copy this into last before setting this again below -->
              <action type="assignment" variable="tLastTrialStartTimeMs" value="tThisTrialStartTimeMs"></action>
          </action>
          <action type="assignment" variable="tThisTrialStartTimeMs" value="now()/1000"></action>
          
          <action type="assignment" tag="Clear stimulusOn" variable="soundstimulusOn" value="0"></action>
          <action type="assignment" tag="Encode InterStimIntervalStart" variable="strobedDigitalWord" value="6"></action>

          <action type="report" message="In Inter-Trial Interval, waiting..."></action>
          <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
          
          <transition type="conditional" tag="If $itiNFrames is scanned,, move to CheckCriteria" condition="counter-tCounter >= itiNFrames &amp;&amp; DoCerebellarStim == 1 &amp;&amp; DoMotionReverse == 0" target="CheckCriteria" ></transition>
          <transition type="conditional" tag="If doTraining for running, move to CheckCriteria" condition="counter-tCounter > itiNFrames &amp;&amp; DoCerebellarStim_training == 1" target="CheckCriteria" ></transition>
          <transition type="conditional" tag="If $itiNFrames is scanned,, move to PlaySound" condition="counter-tCounter >= itiNFrames &amp;&amp; DoSoundStim == 1" target="PlaySound" ></transition>

          <transition type="conditional" tag="If $itiNFrames is scanned,, move to VisualStimDelay" condition="counter-tCounter >= itiNFrames &amp;&amp; DoVisualStimRand == 1" target="VisualStimDelay" ></transition>
          <transition type="conditional" tag="If $itiNFrames is scanned,, move to VisualStimDelay" condition="counter-tCounter >= itiNFrames &amp;&amp; DoCerebellarStim == 1 &amp;&amp; DoMotionReverse == 1" target="VSandRunning" ></transition>
      </task_system_state>

      <task_system_state tag="VisualStimDelay" interruptible="YES">
          <action_marker _unmoveable="1" tag="Actions"></action_marker>
          <action type="assignment" variable="tCounter" value="counter"></action>
          <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
          <transition type="conditional" tag="If $VSDelayNFrames is scanned,, move to VisualStimOn" condition="counter-tCounter >= VSDelayNFrames" target="VisualStimOn" ></transition>
      </task_system_state>

      <task_system_state tag="VisualStimOn" interruptible="YES">
          <action_marker _unmoveable="1" tag="Actions"></action_marker>
          <action type="assignment" variable="tCounter" value="counter"></action>
          <action type="if" condition="DoMovingDot == 0">
            <action tag="Queue Stimulus" type="live_queue_stimulus" stimulus="Ellipse"></action>
            <action type="update_stimulus_display"></action>
          </action>
          <action type="if" condition="DoMovingDot == 1">
            <action tag="Queue Stimulus" type="live_queue_stimulus" stimulus="moving_dots"></action>    
            <action type="play_dynamic_stimulus" stimulus="moving_dots" tag="start"></action>
            <action type="update_stimulus_display"></action>
          </action>
          <action type="assignment" variable="tVisualStimTurnedOnMs" value="now()/1000"></action>
          <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
          <transition type="conditional" tag="If $VSOnNFrames is scanned,, move to VisualStimOff" condition="counter-tCounter >= VSOnNFrames" target="VisualStimOff" ></transition>
      </task_system_state>

      <task_system_state tag="VisualStimOff" interruptible="YES">
          <action_marker _unmoveable="1" tag="Actions"></action_marker>
          <action type="assignment" variable="tCounter" value="counter"></action>
          <action tag="Dequeue Stimulus" type="dequeue_stimulus" stimulus="Ellipse"></action>
          <action tag="Dequeue Stimulus" type="dequeue_stimulus" stimulus="moving_dots"></action>
          <action type="update_stimulus_display"></action>
          <action type="assignment" variable="tVisualStimTurnedOffMs" value="now()/1000"></action>
          <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
          <transition type="conditional" tag="If $VSOffNFrames is scanned,, move to EndTrial" condition="counter-tCounter >= VSOffNFrames" target="EndTrial" ></transition>
      </task_system_state>

      <task_system_state tag="VSandRunning" interruptible="YES">
          <action_marker _unmoveable="1" tag="Actions"></action_marker>
          <action type="assignment" variable="tCounter" value="counter"></action>
          
          <action tag="Queue Stimulus" type="live_queue_stimulus" stimulus="moving_dots"></action>    
          <action type="play_dynamic_stimulus" stimulus="moving_dots" tag="start"></action>
          <action type="update_stimulus_display"></action>
          
          <action type="assignment" variable="checkRunState" value="1"></action>
          <action type="assignment" variable="tVisualStimTurnedOnMs" value="now()/1000"></action>
          <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
          <transition type="conditional" tag="if passing criteria, move to SecondCheck" condition="MouseIsRunning == 1" target="SecondCheck"></transition>
          <transition type="conditional" tag="If $VSOnNFrames is scanned,, move to EndTrial" condition="counter-tCounter >= MovingDotTotalNFrames" target="EndTrial" ></transition>
      </task_system_state>

      <task_system_state tag="SecondCheck" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>
            <action type="assignment" variable="checkRunState" value="0"></action>
            <action type="assignment" variable="binTimeUS" value="tReverseDelayMS*1000/BinSize"/>
            <action type="assignment" variable="pulse_criteria" value="(binTimeUS/BinTimeUS)*requiredPulseperBin"></action>
            <action type="assignment" variable="tCounter" value="counter"></action>
            <action type="assignment" variable="checkRunState" value="1"></action>
            <action type="assignment" variable="MouseIsRunning" value="0"/>
            <action type="report" message="***To SecondCheck ***"/>
            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="conditional" tag="if passing criteria, move to SendStim" condition="MouseIsRunning == 1" target="ReverseVStim"></transition>
            <transition type="conditional" tag="If $ReverseDelayNFrames, move to EndTrial" condition="(counter - tCounter) >= ReverseDelayNFrames" target="EndTrial" ></transition>
      </task_system_state>

      <task_system_state tag="ReverseVStim" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>
            <action type="assignment" variable="tCounter" value="counter"></action>
            <action type="assignment" variable="tDotDirectionDeg" value="tDotDirectionDeg+180"></action>
            <action type="assignment" variable="tReverseVStimTimeMs" value="now()/1000"></action>
            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="conditional" tag="If $ReverseNFrames, move to EndTrial" condition="(counter - tCounter) >= ReverseNFrames" target="EndTrial" ></transition>
      </task_system_state>

      <task_system_state tag="PlaySound" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>
            <action type="assignment" variable="tCounter" value="counter"></action>

            <action type="report" message="*** Playing Tone Now"/>

            <!-- Debugging sound below: delete before committing -->
            <action type="if" condition="soundDurationMs == 100">
              <action type="play_sound" sound="sound100ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 200">
              <action type="play_sound" sound="sound200ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 300">
              <action type="play_sound" sound="sound300ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 400">
              <action type="play_sound" sound="sound400ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 500">
              <action type="play_sound" sound="sound500ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 600">
              <action type="play_sound" sound="sound600ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 700">
              <action type="play_sound" sound="sound700ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 800">
              <action type="play_sound" sound="sound800ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 900">
              <action type="play_sound" sound="sound900ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 1000">
              <action type="play_sound" sound="sound1000ms"/>
            </action>
            
            <action type="assignment" tag="Turn stimulusOn" variable="soundstimulusOn" value="1"></action>

            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="conditional" tag="If $postSoundPauseNFrames is scanned, move to EndTrial" condition="counter-tCounter >= postSoundPauseNFrames" target="SendStim" ></transition> 
      </task_system_state>

      <task_system_state tag="CheckCriteria" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>
            <action type="assignment" variable="tCounter" value="counter"></action>
            <action type="assignment" variable="checkRunState" value="1"></action>

            <action type="report" message="checking running/still criteria for nFrames"/>
            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            
            <action type="if" condition="DoMovingDot == 1 &amp;&amp; DoCerebellarStim_training == 1">
                  <action tag="Queue Stimulus" type="live_queue_stimulus" stimulus="moving_dots"></action>    
                  <action type="play_dynamic_stimulus" stimulus="moving_dots" tag="start"></action>
                  <action type="update_stimulus_display"></action>
            </action>

            <transition type="conditional" tag="if passing criteria, move to SendStim" condition="startStimulus = 1 &amp;&amp; DoCerebellarStim_training = 0" target="SendStim"></transition>
            
            <transition type="conditional" tag="If $
              , move to EndTrial" condition="(counter - tCounter) >= checkNFrames" target="EndTrial" ></transition>
      </task_system_state>

      <task_system_state tag="SendStim" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>
            <action type="assignment" variable="tCounter" value="counter"></action>
              <action type="if" condition="DoTactileStim == 1">
                <action type="report" message="*** Sending Tactile Stimulus -- Staying in Post-Stim State for $TStimNFrames scans."></action>
                <action type="assignment" variable="tTactileStimTurnedOn" value="now()/1000"/>
                <action type="assignment" variable="juice" value="tTactileStimulusDurationUs"/>
              </action>

              <action type="if" condition="DoVisualStim_running == 1">
                <action type="if" condition="DoMovingDot == 0">
                  <action tag="Queue Stimulus" type="live_queue_stimulus" stimulus="Ellipse"></action>
                  <action type="update_stimulus_display"></action>
                </action>
                <action type="if" condition="DoMovingDot == 1">
                  <action tag="Queue Stimulus" type="live_queue_stimulus" stimulus="moving_dots"></action>    
                  <action type="play_dynamic_stimulus" stimulus="moving_dots" tag="start"></action>
                  <action type="update_stimulus_display"></action>
                </action>
              </action> 
              <action type="if" condition="MouseIsRunning == 1 &amp;&amp; DoSolenoid == 1">
                <action type="assignment" variable="lever_solenoid" value="1"/>
                <action type="assignment" variable="tResistanceStartMS" value="now()/1000"/>
              </action>
            <!-- Can't actually jave a system state for timer 1, but it would be here-->
            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="conditional" tag="If $TStimNFrames, move to EndTrial" condition="(counter - tCounter) >= TStimNFrames" target="EndTrial" ></transition>
      </task_system_state>
                    
      <task_system_state tag="EndTrial" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>
            <action type="assignment" variable="laserTrigger" value="0"></action> <!-- disable trigger no matter if it went high or not -->
            <action type="assignment" variable="checkRunState" value="0"></action>
            <action type="assignment" variable="startStimulus" value="0"/>
            <action type="assignment" variable="MouseIsRunning" value="0"/>

            <action tag="Dequeue Stimulus" type="dequeue_stimulus" stimulus="Ellipse"></action>
            <!--<action tag="Dequeue Stimulus" type="dequeue_stimulus" stimulus="moving_dots"></action> -->
            <action type="update_stimulus_display"></action>
            
            <action type="if" condition="DoSolenoid == 1">
                <action type="assignment" variable="lever_solenoid" value="0"/>
            </action>
            <action type="assignment" variable="tDotDirectionDeg" value="0"/>
            <action type="assignment" tag="Encode END" variable="strobedDigitalWord" value="85"></action>
            <action type="assignment" tag="Encode END" variable="strobedDigitalWord" value="85"></action>
            <action type="assignment" tag="Encode END" variable="strobedDigitalWord" value="85"></action>
            <action type="assignment" variable="tTrialsDoneSinceStart" value="tTrialsDoneSinceStart+1"/>
            <action type="report" message="*** Trial Ends *** tTrialsDoneSinceStart =$tTrialsDoneSinceStart"></action>
            <action type="assignment" tag="Set trialStart" variable="trialStart" value="0"></action>
            <action type="assignment" tag="End Matlab Sync" variable="sync" value="0"></action>
            
            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="yield" tag="return to parent task system"></transition>
        </task_system_state> 
        </task_system>
        
      </trial>
      <action tag="Stop IO Device" type="stop_device_IO" device="LabJackU6"></action>
    </protocol>
  </experiment>
</monkeyml>

