<?xml version="1.0"?>
<monkeyml version="1.0">
  <io_devices tag="IO Devices">
    <iodevice tag="LabJackU6" priority="" type="LabJackU6" 
              pulse_duration="juice" pulse_on="juice" 
              lever1="FIO1" lever2="" 
              lever1_solenoid="FIO2"
              lever2_solenoid=""
              laser_trigger="laserTriggerFIO"
              strobed_digital_word="strobedDigitalWord"/>
    <iodevice tag="FakeMonkey" priority="" type="fake_monkey" id="" alt="" spike_rate="10"/>
    <iodevice type="serverside_conduit" tag="Server-side Event Conduit" resource_name="server_conduit"/>
  </io_devices>
  <variables tag="Variables">
    <folder tag="Behavioral Control">
      <!-- New Variables at the Top -->
      <variable tag="itiTimeMs" scope="global" logging="when_changed" default_value="750" type="integer" persistant="1" groups="Variables"/>
      <variable tag="stimOnTimeMs" scope="global" logging="when_changed" default_value="750" type="integer" persistant="1" groups="Variables"/>
      <variable tag="stimOffTimeMs" scope="global" logging="when_changed" default_value="750" type="integer" persistant="1" groups="Variables"/>
      <variable tag="trials" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="Variables"/>
      <variable tag="tITIClock" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="Variables"/>
      <variable tag="tTimeRemainingOnMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="Variables"/>
      <variable tag="tTimeRemainingOffMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="Variables"/>

      <variable tag="subjectNum" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="experimentXmlTrialId" scope="global" logging="when_changed" default_value="8" type="integer" persistant="1"/> <!-- n.b. it is forcibly set each trial below -->
      <variable tag="doLeverSolenoidAllTrials" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="doLeverSolenoidOnMiss" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="doLeverSolenoidOnEarly" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="tooFastTimeMs" scope="global" logging="when_changed" default_value="100" type="integer" persistant="1"/>
      <variable tag="randReqHoldMaxMs" scope="global" logging="when_changed" default_value="300" type="integer" persistant="1"/>
      <variable tag="fixedReqHoldTimeMs" scope="global" logging="when_changed" default_value="400" type="integer" persistant="1"/>
      <variable tag="doGeomHoldDist" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>        
      <variable tag="geomHoldMeanMs" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"/>        
      <variable tag="reactTimeMs" scope="global" logging="when_changed" default_value="1000" type="integer" persistant="1"/>
      <variable tag="earlyTimeoutMs" scope="global" logging="when_changed" default_value="200" type="integer" persistant="1"/>
      <variable tag="missedTimeoutMs" scope="global" logging="when_changed" default_value="2000" type="integer" persistant="1"/>
      <variable tag="itiExtraRandTimeMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="doExtendItiOnShortPrevTrial" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="postRewardMs" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1"/>
      <variable tag="minRewardUs" scope="global" logging="when_changed" default_value="20000" type="integer" persistant="1"/>
      <variable tag="maxRewardUs" scope="global" logging="when_changed" default_value="20000" type="integer" persistant="1"/>
      <variable tag="interRewardIntervalMs" scope="global" logging="when_changed" default_value="200" type="integer" persistant="1"/>
      <variable tag="maxConsecCorrects" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"/>
      <variable tag="nConsecErrorsCauseTimeout" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1"/>
      <variable tag="consecErrorTimeoutS" scope="global" logging="when_changed" default_value="120" type="integer" persistant="1"/>
      <variable tag="doLongBonus" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="longBonusExtraHoldTimeMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="longBonusExtraRewardUs" scope="global" logging="when_changed" default_value="120000" type="integer" persistant="1"/>
    </folder>
    <folder tag="Stimuli">
      <variable tag="baseGratingDirectionDeg" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="baseGratingContrast" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="gratingElevationDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="gratingAzimuthDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="gratingHeightDeg" scope="global" logging="when_changed" default_value="200" type="integer" persistant="1"/>
      <variable tag="gratingWidthDeg" scope="global" logging="when_changed" default_value="200" type="integer" persistant="1"/>
      <variable tag="gratingSpatialFreqCPD" scope="global" logging="when_changed" default_value="0.05" type="float" persistant="1"/>
      <variable tag="gratingSpeedDPS" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="gratingDurationMs" scope="global" logging="when_changed" default_value="800" type="integer" persistant="1"/>
      <variable tag="gratingStartingPhaseDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>

      <variable tag="doVisualStim" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"/>
      <variable tag="doLaserStim" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="doOriDetect" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="doContrastDetect" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"/>

      <variable tag="soundPressAmplitude" scope="global" logging="when_changed" default_value="1" type="float" persistant="1"/>
      <variable tag="soundTrialStartAmplitude" scope="global" logging="when_changed" default_value="1" type="float" persistant="1"/>

      <variable tag="trPer80Level1" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1"/>
      <variable tag="trPer80Level2" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1"/>
      <variable tag="trPer80Level3" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1"/>
      <variable tag="trPer80Level4" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1"/>
      <variable tag="trPer80Level5" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1"/>
      <variable tag="trPer80Level6" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1"/>
      <variable tag="trPer80Level7" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1"/>
      <variable tag="trPer80Level8" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1"/>

      <!-- block 2 control -->
      <variable tag="doBlock2" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>

      <variable tag="doBlock2SeparateOdds" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2TrPer80Level1" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2TrPer80Level2" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2TrPer80Level3" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2TrPer80Level4" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2TrPer80Level5" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2TrPer80Level6" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2TrPer80Level7" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2TrPer80Level8" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      
      <variable tag="doBlock2SeparateReward" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2MinRewardUs" scope="global" logging="when_changed" default_value="20000" type="integer" persistant="1"/>
      <variable tag="block2MaxRewardUs" scope="global" logging="when_changed" default_value="20000" type="integer" persistant="1"/>

      <variable tag="doBlock2SecondLaser" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/> 

      <variable tag="block2DoRampLength" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2RampLengthMs2" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2RampLengthPowerMaxMw2" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>

      <variable tag="block2DoGratingAppearance" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2GratingElevationDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2GratingAzimuthDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2GratingHeightDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2GratingWidthDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2GratingSpatialFreqCPD" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2GratingSpeedDPS" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2GratingDurationMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2BaseGratingContrast" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2BaseGratingDirectionDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2GratingMaxContrastStep" scope="global" logging="when_changed" default_value="1" type="float" persistant="1"/>
      <variable tag="block2GratingContrastStepsPerOctave" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2GratingMaxDirectionStepDeg" scope="global" logging="when_changed" default_value="10" type="float" persistant="1"/>
      <variable tag="block2GratingDirectionStepsPerOctave" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>

      <variable tag="block2DoRampVTrain" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2RvtTrainPowerMaxMw" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2RvtTrainStepsPerOctave" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2RvtRampBaselinePowerMw" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2RvtTrainBaselinePowerMw" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>

      <variable tag="block2DoTrialLaser" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="block2TrialLaserPowerMw" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2TrialLaserOnTimeMs" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2TrialLaserOffTimeMs" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2TrialLaserGratingMaxContrastStep" scope="global" logging="when_changed" default_value="1" type="float" persistant="1"/>
      <variable tag="block2TrialLaserGratingContrastStepsPerOctave" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="block2TrialLaserGratingMaxDirectionStepDeg" scope="global" logging="when_changed" default_value="10" type="float" persistant="1"/>
      <variable tag="block2TrialLaserGratingDirectionStepsPerOctave" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>

      <!-- stimulus control parameters -->
      <variable tag="gratingMaxContrastStep" scope="global" logging="when_changed" default_value="1" type="float" persistant="1"/>
      <variable tag="gratingContrastStepsPerOctave" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="gratingMaxDirectionStepDeg" scope="global" logging="when_changed" default_value="10" type="float" persistant="1"/>
      <variable tag="gratingDirectionStepsPerOctave" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>

      <variable tag="laserPeakMaxMw" scope="global" logging="when_changed" default_value="20" type="integer" persistant="1"/>
      <variable tag="laserPeakStepsPerOctave" scope="global" logging="when_changed" default_value="2" type="integer" persistant="1"/>
      <variable tag="laserOffPowerMw" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="laserTransitionRampUpDownMs" scope="global" logging="when_changed" default_value="2" type="integer" persistant="1"/>
      <variable tag="laserTransitionDoExpRamp" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="laserBaselinePowerMw" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>  <!-- 0: do not do baseline -->
      <variable tag="laserBaselinePostStimTimeMs" scope="global" logging="when_changed" default_value="500" type="float" persistant="1"/> 

      <variable tag="laserDoLinearRamp" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"/>
      <variable tag="laserRampLengthMs" scope="global" logging="when_changed" default_value="100" type="integer" persistant="1"/>
      <variable tag="laserRampExtraConstantLengthMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="laserRampDoExpRamp" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>

      <variable tag="laserDoPulseTrain" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="laserPulseLengthMs" scope="global" logging="when_changed" default_value="5" type="integer" persistant="1"/>
      <variable tag="laserPulsePeriodMs" scope="global" logging="when_changed" default_value="20" type="integer" persistant="1"/>
      <variable tag="laserTrainLengthMs" scope="global" logging="when_changed" default_value="100" type="integer" persistant="1"/>
      <variable tag="laserTrainRandomNPulses" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/>
      <variable tag="laserTrainRandomType" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"/> 

      <variable tag="trialLaserPowerMw" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="trialLaserOnTimeMs" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>
      <variable tag="trialLaserOffTimeMs" scope="global" logging="when_changed" default_value="0" type="float" persistant="1"/>

      <variable tag="forceMinStimStepTo" scope="global" logging="when_changed" default_value="-1" type="float" persistant="1"/>
    </folder>
    <folder tag="Fake Mouse">
      <variable tag="doLever" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1"/>
      <variable tag="fakeMouseMaxPressMs" scope="global" logging="when_changed" default_value="300" type="integer" persistant="1"/>
      <variable tag="fakeMouseMaxReactMs" scope="global" logging="when_changed" default_value="5000" type="integer" persistant="1"/>
    </folder>
    <folder tag="Task Status">
      <variable tag="failure" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="leverResult" scope="global" logging="when_changed" default_value="0" type="boolean"/>
      <variable tag="stimulusOn" scope="global" logging="when_changed" default_value="0" type="boolean"/>
      <variable tag="success" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="ignore" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="trialStart" scope="global" logging="when_changed" default_value="0" type="boolean"/>
      <variable tag="pressTimestampMs" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="actualHoldTimeMs" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
    </folder>
    <folder tag="Online Display">
      <variable tag="sync" scope="global" logging="when_changed" default_value="0" type="integer"/>
    </folder>
    <folder tag="Hardware variables">
      <variable tag="FIO1" full_name="FIO1" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
      <variable tag="FIO2" full_name="FIO2" default_value="0" scope="GLOBAL" type="boolean" editable="never" logging="when_changed"/>
      <variable tag="laserTriggerFIO" full_name="laserTriggerFIO" default_value="0" scope="GLOBAL" type="boolean" logging="when_changed" persistant="0"/>
      <variable tag="strobedDigitalWord" full_name="strobedDigitalWord" default_value="0" scope="GLOBAL" type="integer" logging="when_changed" persistant="0"/>
      <variable tag="juice" full_name="juice" scope="GLOBAL" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="sendLaserParams" full_name="sendLaserParams" scope="GLOBAL" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="sendSerialParams" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
    </folder>
    <folder tag="Internal Variables">
      <variable tag="tTrialStartMWTimestampMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tTotalReqHoldTimeMs" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tTotalRewardTimeUs" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tRandReqHoldTimeMs" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tFakeMouseReactMs" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tFakeMousePressMs" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tStartTrialWaitForPressTimeMs" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="consecCorrects" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tConsecErrors" scope="global" logging="when_changed" default_value="0" persistent="0" type="integer"/>
      <variable tag="tConsecTimeoutStartTime" scope="global" logging="when_changed" default_value="0" persistent="0" type="integer"/>
      <variable tag="tNRewards" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tInterRewardIntervalMs" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tRewardAddPerMsHoldUs" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tGotLongBonusThisTrial" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tStimTurnedOn" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tItiWaitTimeMs" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tThisTrialStartTimeMs" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tLastTrialStartTimeMs" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="lastActualHoldTimeMs" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tempMs" scope="global" logging="when_changed" default_value="0" type="integer"/>
      <variable tag="tTempStimOdds" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tStimulusNumber" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tSvStimNumber" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tLaserPowerMw" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tLaserDoLinearRamp" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tLaserDoPulseTrain" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tLaserRampLengthMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tLaserPeakMaxMw" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tLaserBaselinePowerMw" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tBaseGratingContrast" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tBaseGratingDirectionDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingMaxContrastStep" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingContrastStepsPerOctave" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingMaxDirectionStepDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingDirectionStepsPerOctave" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tLaserPeakStepsPerOctave" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>

      <variable tag="tGratingDirectionDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingContrast" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingElevationDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingAzimuthDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingHeightDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingWidthDeg" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingSpatialFreqCPD" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingSpeedDPS" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tGratingDurationMs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>

      <variable tag="tTrialLaserPowerMw" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tTrialLaserOnTimeMs" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tTrialLaserOffTimeMs" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"/>
      <variable tag="tBlock2TrialNumber" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>

      <variable tag="tNStimAccepted" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable type="selection" tag="svStimNumber" values="0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79" 
                selection="random_without_replacement" nsamples="80" sampling_method="samples"/>
    </folder>
  </variables>
  <sounds tag="Sounds">
    <sound tag="louderPressSound" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/louderFlatterPress.wav" amplitude="soundPressAmplitude"></sound>
  </sounds>
  <stimuli tag="Stimuli">
    <stimulus type="blank_screen" tag="background" color="0.5,0.5,0.5"></stimulus>
    <stimulus type="drifting_grating" tag="base_grating"  direction="0"
              starting_phase="0" 
              spatial_frequency="0.25" 
              speed="0" 
              grating_type="sinusoid" mask="gaussian" std_dev="0.3" mean="0.1" 
              x_size="30" y_size="30" 
              x_position="0" y_position="0" 
              rotation="0" 
              alpha_multiplier="1.0"></stimulus>
    <stimulus type="drifting_grating" tag="target_grating"  direction="0" 
              starting_phase="0" 
              spatial_frequency="0.25" 
              speed="0" 
              grating_type="sinusoid" mask="gaussian" std_dev="0.3" mean="0.1" 
              x_size="30" y_size="30" 
              x_position="0" y_position="0" 
              rotation="90" 
              alpha_multiplier="1.0"></stimulus>
  </stimuli>    
  <experiment tag="Experiment" full_name="">
    <protocol tag="JuiceOnHoldProtocol" full_name="" selection="sequential" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
      <action tag="Start IO Device" type="start_device_IO" device="LabJackU6"></action>
      <trial tag="Trial 01" nsamples="10000" sampling_method="cycles" selection="sequential">
        <task_system tag="TS" full_name="TS" interruptable="YES" description="" interruptible="YES" _error="Task Systems must contain >=1 transition that yields to parent">
          <task_system_state tag="Initialization" interruptible="YES">
            <action type="queue_stimulus" stimulus="background"></action>
            <action type="update_stimulus_display" tag="-"></action>
            <!-- In this state, do all stimulus selection/tValue setting -->
            <action type="assignment" tag="Set tITIClock to ITITime" variable="tITIClock" value="itiTimeMs"/>
            <action type="report" message="Initializing Trial"/>
            <!-- Reset tTimeRemainingOn/Off to 0ms -->
            <action type="assignment" tag="Set tRemainingTimeOn to nil" variable="tTimeRemainingOnMs" value="0"/>
            <action type="assignment" tag="Set tRemainingTimeOff to nil" variable="tTimeRemainingOffMs" value="0"/>

            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="direct" tag="" target="InterTrialIntervalStimulusOn"></transition>
          </task_system_state>

          <task_system_state tag="InterTrialIntervalStimulusOn" interruptible="YES">
            <action tag="Queue Stimulus" type="live_queue_stimulus" stimulus="base_grating"></action> 
            <action type="play_dynamic_stimulus" stimulus="base_grating" tag="StimOn"></action>
            <action type="update_stimulus_display" tag="justincase"></action>
            <action type="report" message="Stimulus On - ITI"/>

            <!-- Case if time remaining in ITI is less than stimOnTimeMs -->
            <action type="if" tag="" condition="tITIClock &lt; stimOnTimeMs">
              <action type="assignment" tag="" variable="tTimeRemainingOnMs" value="stimOnTimeMs - tITIClock"/>
              <action type="start_timer" timer="stimOnTimer" duration="9999999" timebase="" duration_units="ms" />
              <action type="start_timer" timer="transitionOnTimer" duration="tITIClock" timebase="" duration_units="ms" />
              <action type="start_timer" timer="transitionOffTimer" duration="9999999" timebase="" duration_units="ms" />
            </action>

            <!-- Case if time remaining in ITI is equal to stimOnTimeMs -->
            <action type="if" tag="" condition="tITIClock == stimOnTimeMs">
              <action type="start_timer" timer="stimOnTimer" duration="9999999" timebase="" duration_units="ms" />
              <action type="start_timer" timer="transitionOnTimer" duration="9999999" timebase="" duration_units="ms" />
              <action type="start_timer" timer="transitionOffTimer" duration="stimOnTimeMs" timebase="" duration_units="ms" />
            </action>

             <!-- Do tITIClock subtraction at the end of the task state -->
            <action type="if" tag="" condition="tITIClock &gt; stimOnTimeMs">
              <action type="assignment" variable="tITIClock" value="tITIClock - stimOnTimeMs"/>
              <action type="start_timer" timer="stimOnTimer" duration="stimOnTimeMs" timebase="" duration_units="ms" />
              <action type="start_timer" timer="transitionOnTimer" duration="9999999" timebase="" duration_units="ms" />
              <action type="start_timer" timer="transitionOffTimer" duration="9999999" timebase="" duration_units="ms" />
            </action>

            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="timer_expired" tag="Dequeue Visual Stimulus" target="InterTrialIntervalStimulusOff" timer="stimOnTimer"></transition>
            <transition type="timer_expired" tag="WaitForLeverStimulusOn" target="WaitForLeverStimulusOn" timer="transitionOnTimer"></transition>
            <transition type="timer_expired" tag="WaitForLeverStimulusOff" target="WaitForLeverStimulusOff" timer="transitionOffTimer"></transition>
          </task_system_state>

          <task_system_state tag="InterTrialIntervalStimulusOff" interruptble="YES">
            <action tag="Dequeue ITI Stimulus" type="dequeue_stimulus" stimulus="base_grating"></action>
            <action type="update_stimulus_display" tag="justincase"></action>
            <action type="report" message="Stimulus Off - ITI"/>

            <!-- Case if time remaining in ITI is less than stimOnTimeMs -->
            <action type="if" tag="" condition="tITIClock &lt; stimOffTimeMs">
              <action type="assignment" tag="" variable="tTimeRemainingOffMs" value="stimOffTimeMs - tITIClock"/>
              <action type="start_timer" timer="stimOffTimer" duration="9999999" timebase="" duration_units="ms" />
              <action type="start_timer" timer="transitionOnTimer" duration="9999999" timebase="" duration_units="ms" />
              <action type="start_timer" timer="transitionOffTimer" duration="tITIClock" timebase="" duration_units="ms" />
            </action>

            <!-- Case if time remaining in ITI is equal to stimOnTimeMs -->
            <action type="if" tag="" condition="tITIClock == stimOffTimeMs">
              <action type="start_timer" timer="stimOffTimer" duration="9999999" timebase="" duration_units="ms" />
              <action type="start_timer" timer="transitionOnTimer" duration="stimOffTimeMs" timebase="" duration_units="ms" />
              <action type="start_timer" timer="transitionOffTimer" duration="9999999" timebase="" duration_units="ms" />
            </action>

             <!-- Do tITIClock subtraction at the end of the task state -->
            <action type="if" tag="" condition="tITIClock &gt; stimOffTimeMs">
              <action type="assignment" variable="tITIClock" value="tITIClock - stimOffTimeMs"/>
              <action type="start_timer" timer="stimOffTimer" duration="stimOffTimeMs" timebase="" duration_units="ms" />
              <action type="start_timer" timer="transitionOnTimer" duration="9999999" timebase="" duration_units="ms" />
              <action type="start_timer" timer="transitionOffTimer" duration="9999999" timebase="" duration_units="ms" />
            </action>

            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="timer_expired" tag="Queue Visual Stimulus" target="InterTrialIntervalStimulusOn" timer="stimOffTimer"></transition>
            <transition type="timer_expired" tag="WaitForLeverStimulusOff" target="WaitForLeverStimulusOff" timer="transitionOffTimer"></transition>
            <transition type="timer_expired" tag="WaitForLeverStimulusOn" target="WaitForLeverStimulusOn" timer="transitionOnTimer"></transition>
          </task_system_state>

          <task_system_state tag="WaitForLeverStimulusOn" interruptble="YES">
            <action tag="Queue Stimulus" type="live_queue_stimulus" stimulus="base_grating"></action> 
            <action type="play_dynamic_stimulus" stimulus="base_grating" tag="StimOn"></action>
            <action type="update_stimulus_display" tag="justincase"></action>
            <action type="report" message="Stimulus On - WaitingForPress $tTimeRemainingOnMs"/>

            <!-- Turn on stimulus for timeOn - tITITime -->
            <action type="if" condition="tTimeRemainingOnMs &gt; 0">
              <action type="start_timer" timer="stimOnTimer" duration="tTimeRemainingOnMs" timebase="" duration_units="ms"/>
            </action>
            <action type="if" condition="tTimeRemainingOnMs &lt;= 0">
              <action type="start_timer" timer="stimOnTimer" duration="stimOnTimeMs" timebase="" duration_units="ms"/>
            </action>

            <!-- Make sure this assignment is done last -->
            <action type="assignment" variable="tTimeRemainingOnMs" value="0"/>
            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="timer_expired" tag="Dequeue Visual Stimulus" target="WaitForLeverStimulusOff" timer="stimOnTimer"></transition>
            <transition type="conditional" tag="Move to Trial with Lever Down" condition=" FIO1 == 1" target="StartTrial"></transition>
          </task_system_state>

          <task_system_state tag="WaitForLeverStimulusOff" interruptble="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>
            <action tag="Dequeue ITI Stimulus" type="dequeue_stimulus" stimulus="base_grating"></action>
            <action type="play_dynamic_stimulus" stimulus="base_grating" tag="StimOn"></action>
            <action type="update_stimulus_display" tag="justincase"></action>
            <action type="report" message="Stimulus Off - WaitingForPress $tTimeRemainingOffMs"/>

            <!-- Turn on stimulus for timeOn - tITITime -->
            <action type="if" condition="tTimeRemainingOffMs &gt; 0">
              <action type="start_timer" timer="stimOffTimer" duration="tTimeRemainingOffMs" timebase="" duration_units="ms"/>
            </action>
            <action type="if" condition="tTimeRemainingOffMs &lt;= 0">
              <action type="start_timer" timer="stimOffTimer" duration="stimOffTimeMs" timebase="" duration_units="ms"/>
            </action>

            <!-- Make sure this assignment is done last -->
            <action type="assignment" variable="tTimeRemainingOffMs" value="0"/>

            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="timer_expired" tag="Queue Visual Stimulus" target="WaitForLeverStimulusOn" timer="stimOffTimer"></transition>
            <transition type="conditional" tag="Move to Trial with Lever Down" condition=" FIO1 == 1" target="StartTrial"></transition>
          </task_system_state>

          <task_system_state tag="StartTrial" interruptble="YES">
            <action type="start_timer" timer="trialTimer" duration="5000" timebase="" duration_units="ms"/>
            <action type="assignment" variable="trials" value="trials+1" />
            <action type="report" message="Trial Started --  waiting 5000ms"/>

            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="timer_expired" tag="Queue Visual Stimulus" target="EndTrial" timer="trialTimer"></transition>
          </task_system_state>

          <task_system_state tag="EndTrial" interruptble="YES">
            <action type="report" message="Trial Ended --  waiting 5000ms"/>

            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="yield" tag="return to parent task system"></transition>
          </task_system_state>

        </task_system>
      </trial>
      <action type="dequeue_stimulus" stimulus="base_grating"></action>
      <action tag="Update Stimulus" type="update_stimulus_display"></action>
    </protocol>
  </experiment>
</monkeyml>