monkeyml version=1.0
io_devices "IO Devices"
  iodevice LabJackU6 "LabJackU6": pulse_duration=juice, pulse_on=juice, lever1=FIO1, lever1_solenoid=FIO2, laser_trigger=laserTriggerFIO, strobed_digital_word=strobedDigitalWord, counter=counter
  iodevice fake_monkey "FakeMonkey": spike_rate=10
  iodevice serverside_conduit "Server-side Event Conduit": resource_name=server_conduit
variables "Variables"
  folder "Behavioral Control"
    variable integer "experimentXmlTrialId": default_value=8, persistant=1
    <!-- n.b. it is forcibly set each trial below -->
    variable integer "subjectNum": default_value=0, persistant=1, groups=Task Type
    variable boolean "doConstantStimulus": default_value=0, persistant=1, groups=Task Type
    variable boolean "doVisualStim": default_value=1, persistant=1, groups=Task Type
    variable boolean "doLaserStim": default_value=0, persistant=1, groups=Task Type
    variable boolean "doOriDetect": default_value=0, persistant=1, groups=Task Type
    variable boolean "doContrastDetect": default_value=1, persistant=1, groups=Task Type
    variable boolean "doBlock2": default_value=0, persistant=1, groups=Task Type
    variable boolean "doAuditoryStim": default_value=0, persistant=1, groups=Task Type
    variable boolean "doAuditoryDetect": default_value=0, persistant=1, groups=Task Type
    variable boolean "block2DoVisualStim": default_value=1, persistant=1, groups=Block2
    variable boolean "block2DoOriDetect": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoContrastDetect": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoAuditoryStim": default_value=1, persistant=1, groups=Block2
    variable boolean "block2DoAuditoryDetect": default_value=1, persistant=1, groups=Block2
    variable float "frameRateHz": default_value=30, persistant=1, groups=Trial Structure
    variable float "itiTimeMs": default_value=5000, persistant=1, groups=Trial Structure
    variable float "nFramesOn": default_value=3, persistant=1, groups=Trial Structure
    variable float "minFramesOff": default_value=3, persistant=1, groups=Trial Structure
    variable float "maxFramesOff": default_value=20, persistant=1, groups=Trial Structure
    variable integer "minCyclesOn": default_value=1, persistant=1, groups=Trial Structure
    variable integer "maxCyclesOn": default_value=2, persistant=1, groups=Trial Structure
    variable float "tooFastTimeMs": default_value=100, persistant=1, groups=Trial Structure
    variable float "reactTimeMs": default_value=1000, persistant=1, groups=Trial Structure
    variable integer "doExtendItiOnShortPrevTrial": default_value=0, persistant=1, groups=Trial Structure
    variable boolean "doLongCatchTrial": default_value=0, persistant=1, groups=Trial Structure
    variable float "soundPressAmplitude": default_value=0, persistant=1, groups=Sounds
    variable float "soundBaseAmplitude": default_value=0, persistant=1, groups=Sounds
    variable float "soundTargetAmplitude": default_value=0, persistant=1, groups=Sounds
    variable float "soundIncorrectAmplitude": default_value=0, persistant=1, groups=Sounds
    variable float "soundRewardAmplitude": default_value=0, persistant=1, groups=Sounds
    variable boolean "doLeverSolenoidAllTrials": default_value=0, persistant=1, groups=Solenoid
    variable boolean "doLeverSolenoidOnMiss": default_value=0, persistant=1, groups=Solenoid
    variable boolean "doLeverSolenoidOnEarly": default_value=0, persistant=1, groups=Solenoid
    variable integer "earlyTimeoutMs": default_value=200, persistant=1, groups=Timeouts
    variable integer "missedTimeoutMs": default_value=2000, persistant=1, groups=Timeouts
    variable integer "nConsecErrorsCauseTimeout": default_value=10, persistant=1, groups=Timeouts
    variable integer "consecErrorTimeoutS": default_value=120, persistant=1, groups=Timeouts
    variable integer "postRewardMs": default_value=500, persistant=1, groups=Reward
    variable integer "rewardUs": default_value=20000, persistant=1, groups=Reward
    variable integer "interRewardIntervalMs": default_value=200, persistant=1, groups=Reward
    variable integer "rewardEveryNCorrect": default_value=0, persistant=1, groups=Reward
    variable integer "maxConsecCorrects": default_value=1, persistant=1, groups=Reward
  folder "Stimuli"
    variable integer "baseGratingDirectionDeg": default_value=0, persistant=1, groups=Stimulus Parameters
    variable integer "baseGratingContrast": default_value=0, persistant=1, groups=Stimulus Parameters
    variable float "gratingElevationDeg": default_value=0, persistant=1, groups=Stimulus Parameters
    variable float "gratingAzimuthDeg": default_value=0, persistant=1, groups=Stimulus Parameters
    variable integer "gratingHeightDeg": default_value=200, persistant=1, groups=Stimulus Parameters
    variable integer "gratingWidthDeg": default_value=200, persistant=1, groups=Stimulus Parameters
    variable float "gratingSpatialFreqCPD": default_value=0.05, persistant=1, groups=Stimulus Parameters
    variable integer "gratingSpeedDPS": default_value=0, persistant=1, groups=Stimulus Parameters
    variable float "gratingStartingPhaseDeg": default_value=0, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level1": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level2": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level3": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level4": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level5": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level6": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level7": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level8": default_value=10, persistant=1, groups=Stimulus Parameters
    <!-- stimulus control parameters -->
    variable float "gratingMaxContrastStep": default_value=1, persistant=1, groups=Stimulus Parameters
    variable float "gratingContrastStepsPerOctave": default_value=0, persistant=1, groups=Stimulus Parameters
    variable float "gratingMaxDirectionStepDeg": default_value=10, persistant=1, groups=Stimulus Parameters
    variable float "gratingDirectionStepsPerOctave": default_value=0, persistant=1, groups=Stimulus Parameters
    variable integer "laserPeakMaxMw": default_value=20, persistant=1, groups=Laser
    variable integer "laserPeakStepsPerOctave": default_value=2, persistant=1, groups=Laser
    variable integer "laserOffPowerMw": default_value=0, persistant=1, groups=Laser
    variable integer "laserTransitionRampUpDownMs": default_value=2, persistant=1, groups=Laser
    variable integer "laserTransitionDoExpRamp": default_value=0, persistant=1, groups=Laser
    variable float "laserBaselinePowerMw": default_value=0, persistant=1, groups=Laser
    <!-- 0: do not do baseline -->
    variable float "laserBaselinePostStimTimeMs": default_value=500, persistant=1, groups=Laser
    variable boolean "laserDoLinearRamp": default_value=1, persistant=1, groups=Laser
    variable integer "laserRampLengthMs": default_value=100, persistant=1, groups=Laser
    variable integer "laserRampExtraConstantLengthMs": default_value=0, persistant=1, groups=Laser
    variable integer "laserRampDoExpRamp": default_value=0, persistant=1, groups=Laser
    variable integer "laserDoPulseTrain": default_value=0, persistant=1, groups=Laser
    variable integer "laserPulseLengthMs": default_value=5, persistant=1, groups=Laser
    variable integer "laserPulsePeriodMs": default_value=20, persistant=1, groups=Laser
    variable integer "laserTrainLengthMs": default_value=100, persistant=1, groups=Laser
    variable integer "laserTrainRandomNPulses": default_value=0, persistant=1, groups=Laser
    variable integer "laserTrainRandomType": default_value=0, persistant=1, groups=Laser
    variable float "trialLaserPowerMw": default_value=0, persistant=1, groups=Laser
    variable float "trialLaserOnTimeMs": default_value=0, persistant=1, groups=Laser
    variable float "trialLaserOffTimeMs": default_value=0, persistant=1, groups=Laser
    variable float "forceMinStimStepTo": default_value=-1, persistant=1, groups=Laser
    <!-- block 2 control -->
    variable boolean "doBlock2SeparateOdds": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level1": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level2": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level3": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level4": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level5": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level6": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level7": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level8": default_value=0, persistant=1, groups=Block2 Stimulus
    variable boolean "doBlock2SeparateReward": default_value=0, persistant=1, groups=Block2 Reward
    variable integer "block2RewardUs": default_value=20000, persistant=1, groups=Block2 Reward
    variable boolean "doBlock2SecondLaser": default_value=0, persistant=1, groups=Block2 Laser
    variable boolean "block2DoRampLength": default_value=0, persistant=1, groups=Block2 Laser
    variable integer "block2RampLengthMs2": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RampLengthPowerMaxMw2": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2GratingElevationDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingAzimuthDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingHeightDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingWidthDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingSpatialFreqCPD": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingSpeedDPS": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2BaseGratingContrast": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2BaseGratingDirectionDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingMaxContrastStep": default_value=1, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingContrastStepsPerOctave": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingMaxDirectionStepDeg": default_value=10, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingDirectionStepsPerOctave": default_value=0, persistant=1, groups=Block2 Stimulus
    variable boolean "block2DoRampVTrain": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainPowerMaxMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainStepsPerOctave": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtRampBaselinePowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainBaselinePowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable boolean "block2DoTrialLaser": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserPowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserOnTimeMs": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserOffTimeMs": default_value=0, persistant=1, groups=Block2 Laser
  folder "Fake Mouse"
    variable boolean "doLever": default_value=0, persistant=1, groups=Fake Mouse
    variable boolean "doFakeMouseSuccessOnly": default_value=0, persistant=1, groups=Fake Mouse
    variable integer "fakeMouseMaxReactMs": default_value=5000, persistant=1, groups=Fake Mouse
  folder "Task Status"
    variable integer "failure": default_value=0
    variable boolean "leverResult": default_value=0
    variable boolean "stimulusOn": default_value=0
    variable integer "success": default_value=0
    variable integer "ignore": default_value=0
    variable boolean "trialStart": default_value=0
    variable float "pressTimestampMs": default_value=0, persistant=0
    variable float "actualHoldTimeMs": default_value=0, persistant=0
  folder "Online Display"
    variable integer "sync": default_value=0
  folder "Hardware variables"
    variable INTEGER "FIO1": default_value=0, scope=GLOBAL, editable=never
    variable boolean "FIO2": default_value=0, scope=GLOBAL, editable=never
    variable boolean "laserTriggerFIO": default_value=0, scope=GLOBAL, persistant=0
    variable integer "strobedDigitalWord": default_value=0, scope=GLOBAL, persistant=0
    variable integer "juice": scope=GLOBAL, default_value=0
    variable integer "sendLaserParams": scope=GLOBAL, default_value=0, persistant=0
    variable integer "sendSerialParams": default_value=0, persistant=0
    variable integer "counter": default_value=0, persistant=0
  folder "Internal Variables"
    variable integer "tTrialStartMWTimestampMs": default_value=0, persistant=0
    variable integer "tTotalRewardTimeUs": default_value=0
    variable integer "tFakeMouseReactFrames": default_value=0
    variable integer "tStartTrialWaitForPressTimeMs": default_value=0
    variable integer "consecCorrects": default_value=0
    variable integer "tConsecErrors": default_value=0, persistent=0
    variable integer "tConsecTimeoutStartTime": default_value=0, persistent=0
    variable integer "tNRewards": default_value=0
    variable integer "tInterRewardIntervalMs": default_value=0
    variable integer "tRewardAddPerMsHoldUs": default_value=0
    variable integer "tGotLongBonusThisTrial": default_value=0
    variable integer "tItiWaitTimeMs": default_value=0
    variable integer "tThisTrialStartTimeMs": default_value=0
    variable integer "tLastTrialStartTimeMs": default_value=0
    variable integer "lastActualHoldTimeMs": default_value=0
    variable integer "tempMs": default_value=0
    variable integer "tTempStimOdds": default_value=0, persistant=0
    variable integer "tStimulusNumber": default_value=0, persistant=0
    variable integer "tSvStimNumber": default_value=0, persistant=0
    variable float "tLaserPowerMw": default_value=0, persistant=0
    variable integer "tLaserDoLinearRamp": default_value=0, persistant=0
    variable integer "tLaserDoPulseTrain": default_value=0, persistant=0
    variable integer "tLaserRampLengthMs": default_value=0, persistant=0
    variable integer "tLaserPeakMaxMw": default_value=0, persistant=0
    variable float "tLaserBaselinePowerMw": default_value=0, persistant=0
    variable float "tBaseGratingContrast": default_value=0, persistant=0
    variable float "tBaseGratingDirectionDeg": default_value=0, persistant=0
    variable float "tGratingMaxContrastStep": default_value=0, persistant=0
    variable float "tGratingContrastStepsPerOctave": default_value=0, persistant=0
    variable float "tGratingMaxDirectionStepDeg": default_value=0, persistant=0
    variable float "tGratingDirectionStepsPerOctave": default_value=0, persistant=0
    variable float "tLaserPeakStepsPerOctave": default_value=0, persistant=0
    variable float "tGratingDirectionDeg": default_value=0, persistant=0
    variable float "tGratingContrast": default_value=0, persistant=0
    variable float "tGratingElevationDeg": default_value=0, persistant=0
    variable float "tGratingAzimuthDeg": default_value=0, persistant=0
    variable float "tGratingHeightDeg": default_value=0, persistant=0
    variable float "tGratingWidthDeg": default_value=0, persistant=0
    variable float "tGratingSpatialFreqCPD": default_value=0, persistant=0
    variable float "tGratingSpeedDPS": default_value=0, persistant=0
    variable float "tSoundBaseAmplitude": default_value=0, persistant=0
    variable float "tSoundTargetAmplitude": default_value=0, persistant=0
    variable boolean "tDoVisualStim": default_value=0, persistant=0
    variable boolean "tDoAuditoryStim": default_value=0, persistant=0
    variable boolean "tDoAuditoryDetect": default_value=0, persistant=0
    variable boolean "tDoContrastDetect": default_value=0, persistant=0
    variable boolean "tDoOriDetect": default_value=0, persistant=0
    variable boolean "block2DoGratingAppearance": default_value=0, persistant=1
    variable float "tTrialLaserPowerMw": default_value=0, persistant=0
    variable float "tTrialLaserOnTimeMs": default_value=0, persistant=0
    variable float "tTrialLaserOffTimeMs": default_value=0, persistant=0
    variable integer "tBlock2TrialNumber": default_value=0, persistant=0
    variable integer "tLeverPressTimeMs": default_value=0, persistant=0
    variable integer "tLeverReleaseTimeMs": default_value=0, persistant=0
    variable integer "trials": default_value=1, persistant=0
    variable integer "nCyclesOn": default_value=0, persistant=0
    variable integer "tvCyclesOn": default_value=0, persistant=0
    variable integer "taCyclesOn": default_value=0, persistant=0
    variable integer "vCyclesOn": default_value=0, persistant=0
    variable integer "aCyclesOn": default_value=0, persistant=0
    variable integer "stimTag": default_value=0, persistant=0
    variable integer "targetStimOnMs": default_value=0, persistant=0
    variable integer "tStimTurnedOn": default_value=0, persistant=0
    variable integer "tStimOnMs": default_value=0, persistant=0
    variable integer "tStimOffMs": default_value=0, persistant=0
    variable integer "tempNCorrect": default_value=0, persistant=0
    variable integer "startReactState": default_value=0, persistant=0
    variable integer "isTooFast": default_value=1, persistant=0
    variable integer "isEndState": default_value=0, persistant=0
    variable boolean "isCatchTrial": default_value=0, persistant=0
    variable boolean "isFirstTrial": default_value=0, persistant=0
    variable integer "tFramesAuditoryDelay": default_value=0, persistant=0
    <!-- frame conversion -->
    variable integer "tItiWaitFrames": default_value=0, persistant=0
    variable integer "tVisualFramesOff": default_value=0, persistant=0
    variable integer "tAuditoryFramesOff": default_value=0, persistant=0
    variable integer "nFramesTooFast": default_value=0, persistant=1
    variable integer "nFramesReact": default_value=0, persistant=1
    variable integer "nFramesEarlyTimeout": default_value=0, persistant=1
    variable integer "nFramesMissedTimeout": default_value=0, persistant=1
    <!-- counter variables -->
    variable integer "cItiStart": default_value=0, persistant=0
    variable integer "cVisualStimOn": default_value=0, persistant=0
    variable integer "cAuditoryStimOn": default_value=0, persistant=0
    variable integer "cStimOff": default_value=0, persistant=0
    variable integer "cLeverDown": default_value=0, persistant=0
    variable integer "cFirstStim": default_value=0, persistant=0
    variable integer "cTargetOn": default_value=0, persistant=0
    variable integer "cEndOff": default_value=0, persistant=0
    variable integer "cLeverUp": default_value=0, persistant=0
    variable integer "tNStimAccepted": default_value=0, persistant=0
    variable selection "svStimNumber": values=0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79, selection=random_without_replacement, nsamples=80, sampling_method=samples
sounds "Sounds"
  sound wav_file "pressSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/louderFlatterPress.wav, amplitude=soundPressAmplitude
  sound wav_file "baseSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/6000Hz_.2s.wav, amplitude=tSoundBaseAmplitude
  sound wav_file "targetSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/10000Hz_.2s.wav, amplitude=tSoundTargetAmplitude
  sound wav_file "incorrectSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/incorrectMouse.wav, amplitude=soundIncorrectAmplitude
  sound wav_file "rewardSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/shortCorrect.wav, amplitude=soundRewardAmplitude
stimuli "Stimuli"
  stimulus blank_screen "background": color=0.5,0.5,0.5
  stimulus drifting_grating "base_grating": direction=0, starting_phase=gratingStartingPhaseDeg, spatial_frequency=tGratingSpatialFreqCPD, speed=tGratingSpeedDPS, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=tGratingWidthDeg, y_size=tGratingHeightDeg, x_position=tGratingAzimuthDeg, y_position=tGratingElevationDeg, rotation=tBaseGratingDirectionDeg, alpha_multiplier=tBaseGratingContrast
  stimulus drifting_Grating "target_grating": direction=0, starting_phase=gratingStartingPhaseDeg, spatial_frequency=tGratingSpatialFreqCPD, speed=tGratingSpeedDPS, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=tGratingWidthDeg, y_size=tGratingHeightDeg, x_position=tGratingAzimuthDeg, y_position=tGratingElevationDeg, rotation=tGratingDirectionDeg, alpha_multiplier=tGratingContrast
experiment "Experiment"
  protocol "JuiceOnHoldProtocol": selection=sequential, nsamples=1, sampling_method=cycles
    <!-- init actions run only on first trial after loading experiment -->
    action queue_stimulus: stimulus=background
    action update_stimulus_display "-"
    action start_device_IO "Start IO Device": device=LabJackU6
    action assignment "reset counter": variable=counter, value=0
    action assignment "reset cLeverUp": variable=cLeverUp, value=0
    action if: condition=success+ignore+failure == 0
      action report: message=**** First trial since experiment load - initializing
      action assignment: variable=tLastTrialStartTimeMs, value=-1
      action assignment: variable=tThisTrialStartTimeMs, value=-1
      action assignment: variable=lastActualHoldTimeMs, value=0
      action assignment: variable=isFirstTrial, value=1
      <!-- reset selection var -->
      action reset_selection: selection=svStimNumber
      action assignment: variable=tNStimAccepted, value=0
    trial "Trial 01": nsamples=10000, sampling_method=cycles, selection=sequential
      task_system "TS": interruptable=YES
        task_system_state "Initialization" -
          action if: condition=success+ignore+failure > 0
            action assignment: variable=isFirstTrial, value=0
          action assignment "Sync Matlab": variable=sync, value=1
          <!-- In this state, do all stimulus selection/tValue setting -->
          action report: message=Initializing Trial
          <!-- Reset t_____RemainingOn/Off to 0ms -->
          action assignment "Reset tLeverPressTimeMs": variable=tLeverPressTimeMs, value=0
          action assignment "Reset tLeverReleaseTimeMs": variable=tLeverReleaseTimeMs, value=0
          action assignment "Reset tStimTurnedOn": variable=tStimTurnedOn, value=0
          action assignment "Reset target StimOn": variable=targetStimOnMs, value=0
          action assignment "Reset tStimOn": variable=tStimOnMs, value=0
          action assignment "Reset tvCyclesOn": variable=tvCyclesOn, value=0
          action assignment "Reset taCyclesOn": variable=taCyclesOn, value=0
          action assignment "Reset vCyclesOn": variable=vCyclesOn, value=0
          action assignment "Reset aCyclesOn": variable=aCyclesOn, value=0
          action assignment "Reset too fast time over": variable=isTooFast, value=1
          action assignment "Reset End state": variable=isEndState, value=0
          action assignment "Reset Catch trial": variable=isCatchTrial, value=0
          action assignment "Set aCyclesOn between min and maxCyclesOn": variable=aCyclesOn, value=(int)rand(minCyclesOn, (maxCyclesOn+1))
          action assignment "Set vCyclesOn between min and maxCyclesOn": variable=vCyclesOn, value=(int)rand(minCyclesOn, (maxCyclesOn+1))
          action assignment "Calculate nFramesTooFast": variable=nFramesTooFast, value=ceil((tooFastTimeMs/1000)*frameRateHz)
          action assignment "Calculate nFramesReact": variable=nFramesReact, value=ceil((reactTimeMs/1000)*frameRateHz)
          action assignment "Calculate nFramesEarlyTimeout": variable=nFramesEarlyTimeout, value=ceil((earlyTimeoutMs/1000)*frameRateHz)
          action assignment "Calculate nFramesMissedTimeout": variable=nFramesMissedTimeout, value=ceil((missedTimeoutMs/1000)*frameRateHz)
          action assignment: variable=tTrialStartMWTimestampMs, value=now()/1000
          <!-- integer valued ms timestamp -->
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          <!-- Transmit the trial timestamp so strobed code sequences are unique -->
          action assert: condition=tTrialStartMWTimestampMs <= 2147483648, message=tTrialStartMWTimestampMs is too large - should happen only after several days of running!?, stop_on_failure=1
          <!-- prevent overflow outside 2**31ms ~ 10 days - I don't know how to get unsigned casts in the XML -->
          <!-- encode trialStartTimestamp in bytes: 4 bytes: millions of seconds, 1000s, s, ms -->
          action assignment "Encode TimestampStart": variable=strobedDigitalWord, value=200
          action assignment: variable=strobedDigitalWord, value=tTrialStartMWTimestampMs/1000/1000000
          <!-- mega s -->
          action assignment: variable=strobedDigitalWord, value=(tTrialStartMWTimestampMs- (tTrialStartMWTimestampMs/1000000000)*1000000000) /1000000
          <!-- mega to kilo s -->
          action assignment: variable=strobedDigitalWord, value=(tTrialStartMWTimestampMs- (tTrialStartMWTimestampMs/1000000)*1000000) /1000
          <!-- 0-999s -->
          action assignment: variable=strobedDigitalWord, value=(tTrialStartMWTimestampMs - (tTrialStartMWTimestampMs/1000)*1000)
          <!-- ms -->
          action assignment "Encode TimestampEnd": variable=strobedDigitalWord, value=201
          action assignment: variable=block2DoGratingAppearance, value=block2DoVisualStim
          action assignment "Set trialStart": variable=trialStart, value=1
          action assignment "juice = 0": variable=juice, value=0
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment: variable=laserTriggerFIO, value=0
          action assignment: variable=lastActualHoldTimeMs, value=actualHoldTimeMs
          action assignment: variable=experimentXmlTrialId, value=8
          <!-- choose correct stimulus number based on odds; block2 tr number does not get assigned if ! doBlock2 -->
          action assignment: variable=tSvStimNumber, value=svStimNumber
          <!-- choose a value from selection var, 0-origin -->
          action assignment: variable=tTempStimOdds, value=0
          <!-- this variable exists only for code clarity below -->
          <!-- level 1 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level1))
            action assignment: variable=tStimulusNumber, value=0
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level1-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level1
          <!-- level 1b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level1))
              action assignment: variable=tStimulusNumber, value=0
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level1
          <!-- level 2 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level2))
            action assignment: variable=tStimulusNumber, value=1
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level2-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level2
          <!-- level 2b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level2))
              action assignment: variable=tStimulusNumber, value=1
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level2
          <!-- level3 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level3))
            action assignment: variable=tStimulusNumber, value=2
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level3-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level3
          <!-- level3b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level3))
              action assignment: variable=tStimulusNumber, value=2
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level3
          <!-- level4 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level4))
            action assignment: variable=tStimulusNumber, value=3
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level4-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level4
          <!-- level4b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level4))
              action assignment: variable=tStimulusNumber, value=3
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level4
          <!-- level5 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level5))
            action assignment: variable=tStimulusNumber, value=4
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level5-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level5
          <!-- level5b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level5))
              action assignment: variable=tStimulusNumber, value=4
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level5
          <!-- level6 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level6))
            action assignment: variable=tStimulusNumber, value=5
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level6-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level6
          <!-- level6b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level6))
              action assignment: variable=tStimulusNumber, value=5
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level6
          <!-- level7 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level7))
            action assignment: variable=tStimulusNumber, value=6
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level7-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level7
          <!-- level7b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level7))
              action assignment: variable=tStimulusNumber, value=6
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level7
          <!-- level8 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level8))
            action assignment: variable=tStimulusNumber, value=7
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level8-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
            action if: condition=!doBlock2
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level8
          <!-- level8b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level8))
              action assignment: variable=tStimulusNumber, value=7
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level8
          <!-- error checking -->
          action assert: stop_on_failure=1, condition=tTempStimOdds == 80, message=stim odds must sum to 80!  (sum now is $tTempStimOdds )
          <!-- stop_on_failure=0: allow slop so it can be changed while running -->
          action if: condition=doBlock2 && !doBlock2SeparateOdds
            action assert: condition=trPer80Level1-(((int)trPer80Level1)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level2-(((int)trPer80Level2)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level3-(((int)trPer80Level3)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level4-(((int)trPer80Level4)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level5-(((int)trPer80Level5)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level6-(((int)trPer80Level6)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level7-(((int)trPer80Level7)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level8-(((int)trPer80Level8)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
          action if: condition=!doBlock2
            action assignment: variable=tBaseGratingDirectionDeg, value=baseGratingDirectionDeg
            action assignment: variable=tBaseGratingContrast, value=baseGratingContrast
            action assignment: variable=tGratingMaxContrastStep, value=gratingMaxContrastStep
            action assignment: variable=tGratingContrastStepsPerOctave, value=gratingContrastStepsPerOctave
            action assignment: variable=tGratingMaxDirectionStepDeg, value=gratingMaxDirectionStepDeg
            action assignment: variable=tGratingDirectionStepsPerOctave, value=gratingDirectionStepsPerOctave
            action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
            action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
            action assignment: variable=tGratingHeightDeg, value=gratingHeightDeg
            action assignment: variable=tGratingWidthDeg, value=gratingWidthDeg
            action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
            action assignment: variable=tGratingSpeedDPS, value=gratingSpeedDPS
            action assignment: variable=tDoVisualStim, value=doVisualStim
            action assignment: variable=tDoOriDetect, value=doOriDetect
            action assignment: variable=tDoContrastDetect, value=doContrastDetect
            action assignment: variable=tDoAuditoryStim, value=doAuditoryStim
            action assignment: variable=tDoAuditoryDetect, value=doAuditoryDetect
            action assignment: variable=tLaserDoLinearRamp, value=laserDoLinearRamp
            action assignment: variable=tLaserDoPulseTrain, value=laserDoPulseTrain
            action assignment: variable=tLaserBaselinePowerMw, value=laserBaselinePowerMw
            action assignment: variable=tTrialLaserPowerMw, value=trialLaserPowerMw
            action assignment: variable=tTrialLaserOnTimeMs, value=trialLaserOnTimeMs
            action assignment: variable=tTrialLaserOffTimeMs, value=trialLaserOffTimeMs
          <!-- Choose block 2 trial type -->
          <!-- <action type="assert" stop_on_failure="1"
                                condition="(block2DoVisualStim+block2DoRampLength+block2DoRampVTrain+block2DoTrialLaser) == 1"
                                message="must select exactly one of block2Do variables!"/> -->
          <!-- trial numbers assigned above in switch statement.  Note equal probability 
                             - if more complicated odds wanted; add a set of block2 level odds -->
          <!-- grating appearance for block 2 -->
          action if: condition=doBlock2
            action if -->: condition=block2DoVisualStim
              action assert: condition=doVisualStim == 1, stop_on_failure=1, message=doVisualStim must be 1 for block2DoVisualStim == 1
              <!-- same for both types of block2 trials -->
              action assignment: variable=tTrialLaserPowerMw, value=trialLaserPowerMw
              action if: condition=tBlock2TrialNumber == 0
                action assignment: variable=tBaseGratingDirectionDeg, value=baseGratingDirectionDeg
                action assignment: variable=tBaseGratingContrast, value=baseGratingContrast
                action assignment: variable=tGratingMaxContrastStep, value=gratingMaxContrastStep
                action assignment: variable=tGratingContrastStepsPerOctave, value=gratingContrastStepsPerOctave
                action assignment: variable=tGratingMaxDirectionStepDeg, value=gratingMaxDirectionStepDeg
                action assignment: variable=tGratingDirectionStepsPerOctave, value=gratingDirectionStepsPerOctave
                action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
                action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
                action assignment: variable=tGratingHeightDeg, value=gratingHeightDeg
                action assignment: variable=tGratingWidthDeg, value=gratingWidthDeg
                action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
                action assignment: variable=tGratingSpeedDPS, value=gratingSpeedDPS
                action assignment: variable=tDoVisualStim, value=doVisualStim
                action assignment: variable=tDoOriDetect, value=doOriDetect
                action assignment: variable=tDoContrastDetect, value=doContrastDetect
                action assignment: variable=tDoAuditoryStim, value=doAuditoryStim
                action assignment: variable=tDoAuditoryDetect, value=doAuditoryDetect
              action if: condition=tBlock2TrialNumber == 1
                action assignment: variable=tBaseGratingDirectionDeg, value=block2BaseGratingDirectionDeg
                action assignment: variable=tBaseGratingContrast, value=block2BaseGratingContrast
                action assignment: variable=tGratingMaxContrastStep, value=block2GratingMaxContrastStep
                action assignment: variable=tGratingContrastStepsPerOctave, value=block2GratingContrastStepsPerOctave
                action assignment: variable=tGratingMaxDirectionStepDeg, value=block2GratingMaxDirectionStepDeg
                action assignment: variable=tGratingDirectionStepsPerOctave, value=block2GratingDirectionStepsPerOctave
                action assignment: variable=tGratingElevationDeg, value=block2GratingElevationDeg
                action assignment: variable=tGratingAzimuthDeg, value=block2GratingAzimuthDeg
                action assignment: variable=tGratingHeightDeg, value=block2GratingHeightDeg
                action assignment: variable=tGratingWidthDeg, value=block2GratingWidthDeg
                action assignment: variable=tGratingSpatialFreqCPD, value=block2GratingSpatialFreqCPD
                action assignment: variable=tGratingSpeedDPS, value=block2GratingSpeedDPS
                action assignment: variable=tDoVisualStim, value=block2DoVisualStim
                action assignment: variable=tDoOriDetect, value=block2DoOriDetect
                action assignment: variable=tDoContrastDetect, value=block2DoContrastDetect
                action assignment: variable=tDoAuditoryDetect, value=block2DoAuditoryDetect
                action assignment: variable=tDoAuditoryStim, value=block2DoAuditoryStim
              action assignment: variable=tLaserDoLinearRamp, value=laserDoLinearRamp
              action assignment: variable=tLaserDoPulseTrain, value=laserDoPulseTrain
              action assignment: variable=tLaserBaselinePowerMw, value=laserBaselinePowerMw
              action assignment: variable=tTrialLaserPowerMw, value=trialLaserPowerMw
              action assignment: variable=tTrialLaserOnTimeMs, value=trialLaserOnTimeMs
              action assignment: variable=tTrialLaserOffTimeMs, value=trialLaserOffTimeMs
            <!-- using trial laser for block 2 -->
            action if: condition=block2DoTrialLaser
              action assert: condition=!doLaserStim, stop_on_failure=1, message=When using trialLaser, doLaserStim must be off
              action if: condition=tBlock2TrialNumber == 0
                <!-- off -->
                action assignment: variable=tTrialLaserPowerMw, value=trialLaserPowerMw
                action assignment: variable=tTrialLaserOnTimeMs, value=trialLaserOnTimeMs
                action assignment: variable=tTrialLaserOffTimeMs, value=trialLaserOffTimeMs
                action assignment: variable=tGratingMaxContrastStep, value=gratingMaxContrastStep
                action assignment: variable=tGratingContrastStepsPerOctave, value=gratingContrastStepsPerOctave
                action assignment: variable=tGratingMaxDirectionStepDeg, value=gratingMaxDirectionStepDeg
                action assignment: variable=tGratingDirectionStepsPerOctave, value=gratingDirectionStepsPerOctave
                action assignment: variable=tBaseGratingDirectionDeg, value=baseGratingDirectionDeg
                action assignment: variable=tBaseGratingContrast, value=baseGratingContrast
                action assignment: variable=tDoVisualStim, value=doVisualStim
                action assignment: variable=tDoOriDetect, value=doOriDetect
                action assignment: variable=tDoContrastDetect, value=doContrastDetect
                action assignment: variable=tDoAuditoryDetect, value=doAuditoryDetect
                action assignment: variable=tDoAuditoryStim, value=doAuditoryStim
              action if: condition=tBlock2TrialNumber == 1
                <!-- on -->
                action assignment: variable=tTrialLaserPowerMw, value=block2TrialLaserPowerMw
                action assignment: variable=tTrialLaserOnTimeMs, value=block2TrialLaserOnTimeMs
                action assignment: variable=tTrialLaserOffTimeMs, value=block2TrialLaserOffTimeMs
                action assignment: variable=tGratingMaxContrastStep, value=block2GratingMaxContrastStep
                action assignment: variable=tGratingContrastStepsPerOctave, value=block2GratingContrastStepsPerOctave
                action assignment: variable=tGratingMaxDirectionStepDeg, value=block2GratingMaxDirectionStepDeg
                action assignment: variable=tGratingDirectionStepsPerOctave, value=block2GratingDirectionStepsPerOctave
                action assignment: variable=tBaseGratingDirectionDeg, value=block2BaseGratingDirectionDeg
                action assignment: variable=tBaseGratingContrast, value=block2BaseGratingContrast
                action assignment: variable=tDoVisualStim, value=block2DoVisualStim
                action assignment: variable=tDoOriDetect, value=block2DoOriDetect
                action assignment: variable=tDoContrastDetect, value=block2DoContrastDetect
                action assignment: variable=tDoAuditoryDetect, value=block2DoAuditoryDetect
                action assignment: variable=tDoAuditoryStim, value=block2DoAuditoryStim
              <!-- in both cases -->
              action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
              action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
              action assignment: variable=tGratingHeightDeg, value=gratingHeightDeg
              action assignment: variable=tGratingWidthDeg, value=gratingWidthDeg
              action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
              action assignment: variable=tGratingSpeedDPS, value=gratingSpeedDPS
          <!-- !doBlock2 error checking -->
          action assert: stop_on_failure=1, condition=!doLaserStim || (laserDoLinearRamp || laserDoPulseTrain), message=When doLaserStim, ramp or train must be set
          <!-- choose laser power -->
          action if: condition=doLaserStim
            action assignment: variable=tLaserPowerMw, value=tLaserPeakMaxMw / pow(2, 1.0*tStimulusNumber/tLaserPeakStepsPerOctave)
            <!-- adjust from baseline -->
            action if: condition=tLaserBaselinePowerMw > 0
              action assignment: variable=tLaserPowerMw, value=tLaserPowerMw + tLaserBaselinePowerMw
            action report: message=Laser power this trial is $tLaserPowerMw
            action assert: condition=tTrialLaserPowerMw == 0, stop_on_failure=1, message=bug: tLaserPowerMw and tTrialLaserPowerMw != 0
          action if: condition=!doLaserStim
            action assignment: variable=tLaserPowerMw, value=0
          <!-- choose vis stim ori/dir -->
          action if: condition=tDoVisualStim
            action if: condition=tDoOriDetect
              action assignment: variable=tGratingDirectionDeg, value=tBaseGratingDirectionDeg + (tGratingMaxDirectionStepDeg / (pow(2, tStimulusNumber/tGratingDirectionStepsPerOctave)))
              action assignment: variable=tGratingContrast, value=tBaseGratingContrast
              action assignment: variable=nCyclesOn, value=vCyclesOn
              action assignment: variable=aCyclesOn, value=1000
            action if: condition=tDoContrastDetect
              action assignment: variable=tGratingContrast, value=tBaseGratingContrast + (tGratingMaxContrastStep / (pow(2, 1.0*tStimulusNumber/tGratingContrastStepsPerOctave)))
              action assignment: variable=tGratingDirectionDeg, value=tBaseGratingDirectionDeg
              action assignment: variable=nCyclesOn, value=vCyclesOn
              action assignment: variable=aCyclesOn, value=1000
            action if: condition=!tDoContrastDetect && !tDoOriDetect
              action assignment: variable=tGratingContrast, value=tBaseGratingContrast
              action assignment: variable=tGratingDirectionDeg, value=tBaseGratingDirectionDeg
          action if: condition=tDoVisualStim == 0
            action assignment: variable=tBaseGratingContrast, value=0
            action assignment: variable=tGratingContrast, value=0
          action assert: condition=tGratingContrast >= 0, stop_on_failure=1, message=No negative contrasts allowed
          action assert: condition=abs(tBaseGratingDirectionDeg-tGratingDirectionDeg) <= 360, stop_on_failure=1, message=Maximum direction step is 360 degrees
          <!-- choose auditory stim -->
          action if: condition=tDoAuditoryStim
            action assignment: variable=tSoundBaseAmplitude, value=soundBaseAmplitude
            action if: condition=tDoAuditoryDetect
              action assignment: variable=tSoundTargetAmplitude, value=soundTargetAmplitude
              action assignment: variable=nCyclesOn, value=aCyclesOn
              action assignment: variable=vCyclesOn, value=1000
            action if: condition=!tDoAuditoryDetect
              action assignment: variable=tSoundTargetAmplitude, value=0
          action if: condition=!tDoAuditoryStim
            action assignment: variable=tSoundBaseAmplitude, value=0
            action assignment: variable=tSoundTargetAmplitude, value=0
          <!-- send laser params to controller -->
          action if: condition=doLaserStim
            action assignment "Send laser params to controller": variable=sendLaserParams, value=1
            action assignment "Send laser params to controller": variable=sendLaserParams, value=0
          <!-- lock down the min stimulus value to a fixed number if variable not negative -->
          <!-- initialize trial start/end times -->
          action if: condition=tThisTrialStartTimeMs == -1
            <!-- first trial, leave lasttime as -1 -->
            action assignment: variable=tLastTrialStartTimeMs, value=-1
          action if: condition=tThisTrialStartTimeMs != -1
            <!-- else -->
            <!-- later trials, copy this into last before setting this again below -->
            action assignment: variable=tLastTrialStartTimeMs, value=tThisTrialStartTimeMs
          action assignment: variable=tThisTrialStartTimeMs, value=now()/1000
          <!-- debug -->
          action report: message=tNStimAccepted == $tNStimAccepted, svStimN is $svStimNumber, tb2TrN is $tBlock2TrialNumber 
          <!-- compute ITI time -->
          <!-- initialize with a const value -->
          action assignment: variable=tItiWaitTimeMs, value=itiTimeMs
          <!-- if asked for, extend ITI based on previous hold and max stim time, also takes TOs and extra cycles into account -->
          action if: condition=!isFirstTrial
            action if: condition=doExtendItiOnShortPrevTrial == 1
              action assignment: variable=tempMs, value=((maxCyclesOn*(nFramesOn+((minFramesOff+maxFramesOff)/2)))/frameRateHz)-lastActualHoldTimeMs
          action if: condition=isFirstTrial
            action assignment: variable=tempMs, value=0
          action if: condition=tempMs >= 0
            <!-- add to ITI -->
            action assignment "-": variable=tItiWaitTimeMs, value=itiTimeMs+tempMs
          action assignment: variable=tItiWaitFrames, value=ceil((tItiWaitTimeMs/1000)*frameRateHz)
          <!-- if trialLaser, send params to controller -->
          action if: condition=tTrialLaserPowerMw > 0
            action assignment "Send laser params to controller": variable=sendLaserParams, value=1
            action assignment "Send laser paramsto controller": variable=sendLaserParams, value=0
            action assert: condition=tLaserPowerMw == 0, stop_on_failure=1, message=bug: tLaserPowerMw and tTrialLaserPowerMw > 0
            action assert: stop_on_failure=1, condition=(tTrialLaserOnTimeMs == 0 && tTrialLaserOffTimeMs == 0) || (tTrialLaserOnTimeMs > 0 && tTrialLaserOffTimeMs > 0), message=For constant trial laser, set on and off time to 0.  Otherwise on/off time must both be set
          action report: message=cLeverUp is $cLeverUp, counter is $counter, First trial is $isFirstTrial
          transition conditional "if first trial and counter = 20": condition=isFirstTrial && counter > 19, target=InterTrialInterval
          transition conditional "if not first trial, counter still going": condition=!isFirstTrial && counter > cLeverUp, target=InterTrialInterval
          transition conditional "if not first trial, counter stopped": condition=!isFirstTrial && counter == cLeverUp, target=ExitTask
        task_system_state "ExitTask"
          action assert: stop_on_failure=1, condition=counter > cLeverUp, message=Not receiving triggers from microscope
        task_system_state "InterTrialInterval"
          action assignment "Log counter": variable=cItiStart, value=counter
          action assignment "Clear stimulusOn": variable=stimulusOn, value=0
          action assignment "Encode ItiStart": variable=strobedDigitalWord, value=6
          action if: condition=doLeverSolenoidAllTrials
            <!-- Turn on solenoid for ITI only if doLS is true, not if doLSErrorsOnly -->
            action assignment "lever Solenoid on": variable=FIO2, value=1
            action assignment "Encode LeverSolenoidOn": variable=strobedDigitalWord, value=12
          action if: condition=!doLeverSolenoidAllTrials
            action assignment: variable=FIO2, value=0
            action assignment "Encode LeverSolenoidOff": variable=strobedDigitalWord, value=13
          action report: message=In ITI, waiting $tItiWaitFrames, then wait for press
          transition conditional "WaitForLeverPress": condition=counter >= (cItiStart + tItiWaitFrames), target=WaitForLeverPress
        task_system_state "WaitForLeverPress"
          action report: message=ITI done, waiting for press
          action if "if doLeverSolenoid/ErrorsOnly": condition=doLeverSolenoidAllTrials || doLeverSolenoidOnMiss || doLeverSolenoidOnEarly
            <!-- Lower solenoid at beginning of trial for any solenoid -->
            action assignment "lever Solenoid off": variable=FIO2, value=0
            action assignment "Encode LeverSolenoidOff": variable=strobedDigitalWord, value=13
          action assignment: variable=tStartTrialWaitForPressTimeMs, value=now()/1000.0
          action assignment "Encode StartTrialWaitForPress": variable=strobedDigitalWord, value=7
          <!-- fake mouse calculations -->
          action if "if fakeMouse": condition=!doLever
            action assignment "Assign tFakeMouseReactFrames": variable=tFakeMouseReactFrames, value=rand(0, ceil((fakeMouseMaxReactMs/1000)*frameRateHz))
            action if "if doFakeMouseSuccess": condition=doFakeMouseSuccessOnly
              action assignment "Assign tFakeMouseReactMs": variable=tFakeMouseReactFrames, value=nCyclesOn*(nFramesOn+maxFramesOff)
          transition conditional "If Lever Down, Go To TrialStimOn": condition=doLever && FIO1 == 1, target=StartTrial
          transition conditional "If fakeMouse elapsed, go to TrialStimOn": condition=!doLever && ( (now()/1000.0)-tStartTrialWaitForPressTimeMs) > 100, target=StartTrial
          transition conditional "If waiting here too long (120s), go to TrialStimOn": condition=doLever && ( (now()/1000.0)-tStartTrialWaitForPressTimeMs) > 120*1000, target=StartTrial
        task_system_state "StartTrial"
          action report: message=In press pause
          action assignment "Log counter": variable=cLeverDown, value=counter
          transition conditional "Wait for next frame": condition=counter >= (cLeverDown + 1) , target=TrialStimOn
        task_system_state "TrialStimOn": interruptble=YES
          action assignment: variable=cFirstStim, value=counter
          action assignment "leverResult = 1": variable=leverResult, value=1
          action play_sound: sound=pressSound
          action assignment: variable=tLeverPressTimeMs, value=now()/1000
          action assignment: variable=stimTag, value=1
          action assignment: variable=tStimOnMs, value=now()/1000
          action assignment: variable=tvCyclesOn, value=tvCyclesOn + 1
          action assignment: variable=taCyclesOn, value=taCyclesOn + 1
          action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
          action play_dynamic_stimulus "StimOn": stimulus=base_grating
          action update_stimulus_display "justincase"
          action report: message=Lever Down - Trial Started - Stim On $tvCyclesOn of $nCyclesOn
          action assignment: variable=cVisualStimOn, value=counter
          action play_sound: sound=baseSound
          action assignment: variable=cAuditoryStimOn, value=counter
          action assignment: variable=tAuditoryFramesOff, value=(int)rand(minFramesOff, maxFramesOff)
          action assignment: variable=tVisualFramesOff, value=(int)rand(minFramesOff, maxFramesOff)
          transition conditional "If Lever Up, Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1, target=EarlyRelease
          transition conditional "If Fake mouse frames elapsed, Go To EarlyRelease": condition=(counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever, target=EarlyRelease
          transition conditional "Dequeue Visual Stimulus": condition=counter >= cFirstStim + nFramesOn, target=TrialStimOff
        task_system_state "TrialStimOff": interruptble=YES
          action if: condition=stimTag
            action assignment: variable=cStimOff, value=counter
            action report: message=Lever Down - Trial Started - Stim Off
            action assignment: variable=stimTag, value=0
          action if: condition=!doConstantStimulus
            action dequeue_stimulus "Dequeue Stimulus": stimulus=base_grating
            action update_stimulus_display "justincase"
          action assignment: variable=tStimOffMs, value=(now()/1000)
          transition conditional "If Lever Up, Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1, target=EarlyRelease
          transition conditional "If Fake mouse frames elapsed, Go To EarlyRelease": condition=(counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever, target=EarlyRelease
          transition conditional "Queue base visual stimulus": condition=(tvCyclesOn < vCyclesOn) && counter  >= cStimOff + tVisualFramesOff, target=VisualStimOn
          transition conditional "Queue target visual stimulus": condition=(tvCyclesOn >= vCyclesOn) && counter  >= cStimOff + tVisualFramesOff, target=VisualTargetOn
          transition conditional "Queue base sound": condition=(taCyclesOn < aCyclesOn) && counter >= cAuditoryStimOn + tAuditoryFramesOff, target=AuditoryStimOn
          transition conditional "Queue target sound": condition=(taCyclesOn >= aCyclesOn) && counter >= cAuditoryStimOn + tAuditoryFramesOff, target=AuditoryTargetOn
        task_system_state "VisualStimOn": interruptble=YES
          action assignment: variable=cVisualStimOn, value=counter
          action assignment: variable=stimTag, value=1
          action assignment: variable=tStimOnMs, value=now()/1000
          action assignment: variable=tvCyclesOn, value=tvCyclesOn + 1
          action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
          action play_dynamic_stimulus "StimOn": stimulus=base_grating
          action update_stimulus_display "justincase"
          action if: condition=tDoOriDetect || tDoContrastDetect
            action report: message=Lever Down - Trial Started - Stim On $tvCyclesOn of $nCyclesOn
          action assignment: variable=tVisualFramesOff, value=(int)rand(minFramesOff, maxFramesOff)
          transition conditional "If Lever Up, Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1, target=EarlyRelease
          transition conditional "If Fake mouse frames elapsed, Go To EarlyRelease": condition=(counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever, target=EarlyRelease
          transition conditional "Dequeue Visual Stimulus": condition=stimTag == 1 && counter >= cVisualStimOn + nFramesOn, target=TrialStimOff
          transition conditional "Queue base sound": condition=(taCyclesOn < aCyclesOn) && counter >= cAuditoryStimOn + tAuditoryFramesOff, target=AuditoryStimOn
          transition conditional "Queue target sound": condition=tDoAuditoryDetect && (taCyclesOn >= aCyclesOn) && counter >= cAuditoryStimOn + tAuditoryFramesOff, target=AuditoryTargetOn
        task_system_state "AuditoryStimOn": interruptble=YES
          action assignment: variable=cAuditoryStimOn, value=counter
          action assignment: variable=taCyclesOn, value=taCyclesOn+1
          action play_sound: sound=baseSound
          action if: condition=tDoAuditoryDetect
            action report: message=Lever Down - Trial Started - Stim On $taCyclesOn of $nCyclesOn
          action assignment: variable=tAuditoryFramesOff, value=(int)rand(minFramesOff, maxFramesOff)
          transition conditional "If Lever Up, Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1, target=EarlyRelease
          transition conditional "If Fake mouse frames elapsed, Go To EarlyRelease": condition=(counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever, target=EarlyRelease
          transition conditional "Dequeue Visual Stimulus": condition=stimTag == 1 && counter >= cVisualStimOn + nFramesOn, target=TrialStimOff
          transition conditional "Queue Base Visual Stimulus": condition=stimTag == 0 && (tvCyclesOn < vCyclesOn) && counter  >= cStimOff + tVisualFramesOff, target=VisualStimOn
          transition conditional "Queue Target Visual Stimulus": condition=tDoOriDetect || tDoContrastDetect && stimTag == 0 && (tvCyclesOn >= vCyclesOn) && counter  >= cStimOff + tVisualFramesOff, target=VisualTargetOn
          transition conditional "Queue base sound": condition=(taCyclesOn < aCyclesOn) && counter >= cAuditoryStimOn + tAuditoryFramesOff, target=AuditoryStimOn
          transition conditional "Queue target sound": condition=tDoAuditoryDetect && (taCyclesOn >= aCyclesOn) && counter >= cAuditoryStimOn + tAuditoryFramesOff, target=AuditoryTargetOn
        task_system_state "VisualTargetOn": interruptble=YES
          action assignment: variable=cVisualStimOn, value=counter
          action assignment: variable=cTargetOn, value=counter
          action assignment: variable=stimTag, value=2
          action assignment "set Stim on time": variable=tStimOnMs, value=now()/1000
          action assignment "set Target Stim on time": variable=targetStimOnMs, value=now()/1000
          action report: message=Grating Contrast is $tGratingContrast
          action report: message=Grating Orientation is $tGratingDirectionDeg
          <!-- Must dequeue stimulus in the doConstantStimulus case -->
          action if: condition=doConstantStimulus==1
            action dequeue_stimulus "Dequeue Stimulus": stimulus=base_grating
            action play_dynamic_stimulus "StimOff": stimulus=base_grating
            action update_stimulus_display "justincase"
          action if: condition=(doLongCatchTrial==1) && (nCyclesOn==maxCyclesOn)
            action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
            action play_dynamic_stimulus "StimOn": stimulus=base_grating
            action assignment: variable=isCatchTrial, value=1
            action report: message=Base Stim On for $nFramesOn frames
          action if: condition=(doLongCatchTrial==0)
            action live_queue_stimulus "Queue Stimulus": stimulus=target_grating
            action play_dynamic_stimulus "StimOn": stimulus=target_grating
            action report: message=Target Stim On for $nFramesOn frames
          action if: condition=(doLongCatchTrial==1) && (nCyclesOn < maxCyclesOn)
            action live_queue_stimulus "Queue Stimulus": stimulus=target_grating
            action play_dynamic_stimulus "StimOn": stimulus=target_grating
            action report: message=Target Stim On for $nFramesOn frames
          action update_stimulus_display "justincase"
          action report: message=Catch is $isCatchTrial
          action assignment: variable=tStimTurnedOn, value=1
          action assignment: variable=tVisualFramesOff, value=(int)rand(minFramesOff, maxFramesOff)
          transition conditional "If Lever Up, Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1, target=EarlyRelease
          transition conditional "If Fake mouse frames elapsed, Go To EarlyRelease": condition=(counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever, target=EarlyRelease
          transition conditional "if nFramesTooFast elapsed, go to React": condition=isTooFast && (counter >= (cTargetOn + nFramesTooFast)), target=React
          transition conditional "Dequeue Visual Stimulus": condition=counter >= cTargetOn + nFramesOn, target=EndTrialStimOff
          transition conditional "Queue base sound": condition=counter >= cAuditoryStimOn + tAuditoryFramesOff, target=EndTrialAuditoryStim
        task_system_state "AuditoryTargetOn": interruptble=YES
          action assignment: variable=cAuditoryStimOn, value=counter
          action assignment: variable=cTargetOn, value=counter
          action if: condition=(doLongCatchTrial==1) && (nCyclesOn==maxCyclesOn)
            action play_sound: sound=baseSound
            action assignment: variable=isCatchTrial, value=1
            action report: message=Base Stim On
          action if: condition=(doLongCatchTrial==0)
            action if: condition=tDoAuditoryDetect
              action play_sound: sound=targetSound
              action report: message=Target Stim On
          action if: condition=(doLongCatchTrial==1) && (nCyclesOn < maxCyclesOn)
            action if: condition=tDoAuditoryDetect
              action play_sound: sound=targetSound
              action report: message=Target Stim On
          action assignment: variable=tAuditoryFramesOff, value=(int)rand(minFramesOff, maxFramesOff)
          transition conditional "If Lever Up, and too fast Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1 && isTooFast == 1, target=EarlyRelease
          transition conditional "If fake mouse frames elapsed, and too fast Go To EarlyRelease": condition=(counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever && isTooFast == 1, target=EarlyRelease
          transition conditional "If Lever Up, and too fast expired Go To Reward": condition=(isCatchTrial==0) && FIO1 == 0 && doLever == 1 && isTooFast == 0, target=Reward
          transition conditional "If fake mouse frames elapsed, and too fast expired Go To Reward": condition=(isCatchTrial==0) && (counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever && isTooFast == 0, target=Reward
          transition conditional "If Lever Up and catch trial, and too fast expired Go To EarlyRelease": condition=(isCatchTrial==1) && FIO1 == 0 && doLever == 1 && isTooFast == 0, target=EarlyRelease
          transition conditional "If fake mouse frames elapsed, and catch trial, and too fast expired Go To EarlyRelease": condition=(isCatchTrial==1) && (counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever && isTooFast == 0, target=EarlyRelease
          transition conditional "if tooFastTimer expired, go to React": condition=(isTooFast==1) && (counter >= (cTargetOn + nFramesTooFast)), target=React
          transition conditional "Go to Reward": condition=(isCatchTrial==1) && (counter >= (cTargetOn + nFramesReact)), target=Reward
          transition conditional "Go to Missed": condition=(isCatchTrial==0) && (counter >= (cTargetOn + nFramesReact)), target=Missed
          transition conditional "Dequeue Base Visual Stimulus": condition=stimTag == 1 && counter >= (cVisualStimOn + nFramesOn), target=EndTrialStimOff
          transition conditional "Queue Visual Stimulus": condition=stimTag == 0 && (counter >= (cStimOff + tVisualFramesOff)), target=EndTrialVisualStim
          transition conditional "Queue Auditory Stimulus": condition=(counter >= (cAuditoryStimOn + tAuditoryFramesOff)), target=EndTrialAuditoryStim
        task_system_state "React"
          action assignment "set too fast time over": variable=isTooFast, value=0
          action report "Report": message=in react window
          transition conditional "If Lever Up": condition=(isCatchTrial==0) && FIO1 == 0 && doLever == 1, target=Reward
          transition conditional "If Lever Up": condition=(isCatchTrial==0) && !doLever && (counter >= (cFirstStim + tFakeMouseReactFrames)), target=Reward
          transition conditional "If Lever Up": condition=(isCatchTrial==1) && FIO1 == 0 && doLever == 1, target=EarlyRelease
          transition conditional "If Lever Up": condition=(isCatchTrial==1) && !doLever && (counter >= (cFirstStim + tFakeMouseReactFrames)), target=EarlyRelease
          transition conditional "If doFakeMouseSuccessOnly": condition=!doLever && doFakeMouseSuccessOnly, target=Reward
          transition conditional "Go to Reward": condition=(isCatchTrial==1) && (counter >= (cTargetOn + nFramesReact)), target=Reward
          transition conditional "Go to Missed": condition=(isCatchTrial==0) && (counter >= (cTargetOn + nFramesReact)), target=Missed
          transition conditional "Dequeue Visual Stimulus": condition=counter >= (cVisualStimOn + nFramesOn), target=EndTrialStimOff
          transition conditional "Queue Visual Stimulus": condition=stimTag == 0 && !isEndState && counter >= (cStimOff + tVisualFramesOff), target=EndTrialVisualStim
          transition conditional "Queue Visual Stimulus": condition=stimTag == 0 && isEndState && counter >= (cEndOff + tVisualFramesOff), target=EndTrialVisualStim
          transition conditional "Queue Auditory Stimulus": condition=counter >= (cAuditoryStimOn + tAuditoryFramesOff), target=EndTrialAuditoryStim
        task_system_state "EarlyRelease"
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment "Set release time": variable=tLeverReleaseTimeMs, value=(now()/1000)
          action assignment: variable=cLeverUp, value=counter
          action assignment "Encode LeverReleaseEarly": variable=strobedDigitalWord, value=8
          action assignment: variable=actualHoldTimeMs, value= (now()/1000) - tLeverPressTimeMs
          action report "Report": message=actualHoldTimeMs = $actualHoldTimeMs
          action report "ReportEarlyRelease": full_name=ReportDigital, message=** Early Release (FIO1 = $FIO1 )
          action dequeue_stimulus "Dequeue Stimulus": stimulus=base_grating
          action update_stimulus_display "justincase"
          action dequeue_stimulus "Dequeue Stimulus": stimulus=target_grating
          action update_stimulus_display "justincase"
          <!-- update running variables -->
          action assignment "failure++": variable=failure, value=failure+1
          action assignment "consecCorrects = 0": variable=consecCorrects, value=0
          action assignment: variable=tConsecErrors, value=tConsecErrors+1
          action play_sound "Play incorrectSound": sound=incorrectSound
          <!-- reject stim selection -->
          action reject_selections: selection=svStimNumber
          action if "if doLeverSolenoid/Early": condition=doLeverSolenoidAllTrials || doLeverSolenoidOnEarly
            action assignment "lever Solenoid on": variable=FIO2, value=1
            action assignment "Encode LeverSolenoidOn": variable=strobedDigitalWord, value=12
          transition conditional "Early timeout elapsed": condition=counter >= (cLeverUp + nFramesEarlyTimeout), target=EndTrial
        task_system_state "Missed"
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment "Set release time": variable=tLeverReleaseTimeMs, value=(now()/1000)
          action assignment: variable=cLeverUp, value=counter
          action assignment "Encode LeverNoReleaseMiss": variable=strobedDigitalWord, value=11
          action assignment: variable=actualHoldTimeMs, value= (now()/1000) - tLeverPressTimeMs
          action report "Report": message=actualHoldTimeMs = $actualHoldTimeMs
          action assignment "ignore++": variable=ignore, value=ignore + 1
          action assignment "consecCorrects = 0": variable=consecCorrects, value=0
          action assignment: variable=tConsecErrors, value=tConsecErrors+1
          action report "Report 4": full_name=ReportDigital, message=** Ignored react stimulus
          action play_sound "Play incorrectSound 2": sound=incorrectSound
          action dequeue_stimulus "Dequeue Stimulus": stimulus=base_grating
          action update_stimulus_display "justincase"
          action dequeue_stimulus "Dequeue Stimulus": stimulus=target_grating
          action update_stimulus_display "justincase"
          <!-- accept stim selection -->
          action accept_selections: selection=svStimNumber
          action assignment: variable=tNStimAccepted, value=tNStimAccepted + 1
          <!-- update selection variable -->
          action if: condition=tNStimAccepted >= 80
            action reset_selection: selection=svStimNumber
            action assignment: variable=tNStimAccepted, value=0
          action if: condition=tNStimAccepted < 80
            action next_selection: selection=svStimNumber
          action if "if doLeverSolenoid/ErrorsOnly": condition=doLeverSolenoidAllTrials || doLeverSolenoidOnMiss
            action assignment "lever Solenoid on": variable=FIO2, value=1
            action assignment "Encode LeverSolenoidOn": variable=strobedDigitalWord, value=12
          transition conditional "Missed timeout elapsed": condition=counter >= (cLeverUp + nFramesMissedTimeout), target=EndTrial
        task_system_state "Reward"
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment "Set release time": variable=tLeverReleaseTimeMs, value=(now()/1000)
          action assignment "Encode LeverReleaseCorrect": variable=strobedDigitalWord, value=9
          action assignment: variable=cLeverUp, value=counter
          action dequeue_stimulus "Dequeue Stimulus": stimulus=base_grating
          action update_stimulus_display "justincase"
          action dequeue_stimulus "Dequeue Stimulus": stimulus=target_grating
          action update_stimulus_display "justincase"
          <!-- accept stim selection -->
          action accept_selections: selection=svStimNumber
          action assignment: variable=tNStimAccepted, value=tNStimAccepted + 1
          <!-- update selection variable -->
          action if: condition=tNStimAccepted >= 80
            action reset_selection: selection=svStimNumber
            action assignment: variable=tNStimAccepted, value=0
          action if: condition=tNStimAccepted < 80
            action next_selection: selection=svStimNumber
          action assignment: variable=actualHoldTimeMs, value= (now()/1000) - tLeverPressTimeMs
          action report "Report": message=actualHoldTimeMs = $actualHoldTimeMs
          action report "Report Reward": full_name=ReportDigital, message=** Success
          <!-- update running variables -->
          action assignment "success++": variable=success, value=success+1
          action assignment: variable=tConsecErrors, value=0
          action assignment "Assign reward": variable=tTotalRewardTimeUs, value=rewardUs
          action assignment "summing corrects": variable=tempNCorrect, value=tempNCorrect+1
          <!-- assign reward size based on elapsed rand if rampdown == 0 -->
          action if: condition=doBlock2 == 1
            action if: condition=doBlock2SeparateReward == 0
              action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=rewardUs
            action if: condition=doBlock2SeparateReward == 1
              action if: condition=tBlock2TrialNumber == 0
                action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=rewardUs
              action if: condition=tBlock2TrialNumber == 1
                action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=block2RewardUs
          <!-- give reward on every N corrects -->
          action if: condition=tempNCorrect < rewardEveryNCorrect
            action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=0
          action if: condition=tempNCorrect == rewardEveryNCorrect
            action assignment "rezero tempNCorrect": variable=tempNCorrect, value=0
          <!-- scale based on consec corrects -->
          action if "if consecCorrects < max": condition=consecCorrects < maxConsecCorrects
            action assignment "consecCorrects++": variable=consecCorrects, value=consecCorrects+1
          action assignment "set tNRewards": variable=tNRewards, value=consecCorrects
          transition direct "Always Go to GiveReward": target=GiveReward
        task_system_state "GiveReward"
          action assignment "tNRewards--": variable=tNRewards, value=tNRewards-1
          transition conditional "if rewards remain, go to SingleReward (note must be -1)": condition=tNRewards > -1, target=SingleReward
          transition direct "Always Go to PRP": target=PostRewardPause
        task_system_state "PostRewardPause"
          action start_timer "StartTimer": timer=postRewardTimer, duration=postRewardMs, duration_units=ms
          transition direct "Always Go to EndTrial": target=EndTrial
        task_system_state "SingleReward"
          action assignment "interRewardInterval minimum to juiceTime": variable=tInterRewardIntervalMs, value=interRewardIntervalMs + ( tTotalRewardTimeUs / 1000 )
          action start_timer "Start interRewardIntervalTimer": timer=interRewardIntervalTimer, duration=tInterRewardIntervalMs, duration_units=ms
          action assignment "Encode Reward": variable=strobedDigitalWord, value=10
          action assignment: variable=juice, value=tTotalRewardTimeUs
          action play_sound "Play reward sound": sound=rewardSound
          action if: condition=tempNCorrect == 0
            action report "Report": message=juice = $juice
          action if: condition=tempNCorrect > 0
            action if: condition=tempNCorrect < rewardEveryNCorrect
              action report "Report": message=juice = $juice, $tempNCorrect correct: need $rewardEveryNCorrect
          transition timer_expired "If interRewardIntervalTimer expired, go to GiveReward": target=GiveReward, timer=interRewardIntervalTimer
        task_system_state "EndTrialVisualStim": interruptble=YES
          action assignment: variable=cVisualStimOn, value=counter
          action if: condition=!doConstantStimulus
            action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
            action play_dynamic_stimulus "StimOn": stimulus=base_grating
            action update_stimulus_display "justincase"
          action report: message=End of Trial - Stim On
          action assignment: variable=stimTag, value=1
          action assignment "in End state": variable=isEndState, value=1
          action assignment: variable=tVisualFramesOff, value=(int)rand(minFramesOff, maxFramesOff)
          transition conditional "If Lever Up, and too fast Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1 && isTooFast == 1, target=EarlyRelease
          transition conditional "If fake mouse timer expired, and too fast Go To EarlyRelease": condition=(counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever && isTooFast == 1, target=EarlyRelease
          transition conditional "If Lever Up, and too fast expired Go To Reward": condition=(isCatchTrial==0) && FIO1 == 0 && doLever == 1 && isTooFast == 0, target=Reward
          transition conditional "If fake mouse timer expired, and too fast expired Go To Reward": condition=(isCatchTrial==0) && (counter >= (cFirstStim + tFakeMouseReactFrames))&& !doLever && isTooFast == 0, target=Reward
          transition conditional "If Lever Up and catch trial, and too fast expired Go To EarlyRelease": condition=(isCatchTrial==1) && FIO1 == 0 && doLever == 1 && isTooFast == 0, target=EarlyRelease
          transition conditional "If fake mouse timer expired, and catch trial, and too fast expired Go To EarlyRelease": condition=(isCatchTrial==1) && (counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever && isTooFast == 0, target=EarlyRelease
          transition conditional "Dequeue Visual Stimulus": condition=(counter >= (cVisualStimOn + nFramesOn)), target=EndTrialStimOff
          transition conditional "if tooFastTimer expired, go to React": condition=(isTooFast==1) && (counter >= (cTargetOn + nFramesTooFast)), target=React
          transition conditional "Go to Reward": condition=(isCatchTrial==1) && (counter >= (cTargetOn + nFramesReact)), target=Reward
          transition conditional "Go to Missed": condition=(isCatchTrial==0) && (counter >= (cTargetOn + nFramesReact)), target=Missed
          transition conditional "Queue Auditory Stimulus": condition=counter >= (cAuditoryStimOn + tAuditoryFramesOff), target=EndTrialAuditoryStim
        task_system_state "EndTrialAuditoryStim": interruptble=YES
          action play_sound: sound=baseSound
          action assignment: variable=cAuditoryStimOn, value=counter
          action assignment: variable=tAuditoryFramesOff, value=(int)rand(minFramesOff, maxFramesOff)
          action assignment "in End state": variable=isEndState, value=1
          transition conditional "If Lever Up, and too fast Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1 && isTooFast == 1, target=EarlyRelease
          transition conditional "If fake mouse timer expired, and too fast Go To EarlyRelease": condition=(counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever && isTooFast == 1, target=EarlyRelease
          transition conditional "If Lever Up, and too fast expired Go To Reward": condition=(isCatchTrial==0) && FIO1 == 0 && doLever == 1 && isTooFast == 0, target=Reward
          transition conditional "If fake mouse timer expired, and too fast expired Go To Reward": condition=(isCatchTrial==0) && (counter >= (cFirstStim + tFakeMouseReactFrames))&& !doLever && isTooFast == 0, target=Reward
          transition conditional "If Lever Up and catch trial, and too fast expired Go To EarlyRelease": condition=(isCatchTrial==1) && FIO1 == 0 && doLever == 1 && isTooFast == 0, target=EarlyRelease
          transition conditional "If fake mouse timer expired, and catch trial, and too fast expired Go To EarlyRelease": condition=(isCatchTrial==1) && (counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever && isTooFast == 0, target=EarlyRelease
          transition conditional "Dequeue Visual Stimulus": condition=(stimTag > 0 && counter >= (cVisualStimOn + nFramesOn)), target=EndTrialStimOff
          transition conditional "Queue Visual Stimulus": condition=stimTag == 0 && (counter >= (cEndOff + tVisualFramesOff)), target=EndTrialVisualStim
          transition conditional "if tooFastTimer expired, go to React": condition=(isTooFast==1) && (counter >= (cTargetOn + nFramesTooFast)), target=React
          transition conditional "Go to Reward": condition=(isCatchTrial==1) && (counter >= (cTargetOn + nFramesReact)), target=Reward
          transition conditional "Go to Missed": condition=(isCatchTrial==0) && (counter >= (cTargetOn + nFramesReact)), target=Missed
          transition conditional "Queue Auditory Stimulus": condition=counter >= (cAuditoryStimOn + tAuditoryFramesOff), target=EndTrialAuditoryStim
        task_system_state "EndTrialStimOff": interruptble=YES
          action assignment: variable=cEndOff, value=counter
          action if: condition=!doConstantStimulus
            action dequeue_stimulus "Dequeue Stimulus": stimulus=base_grating
            action update_stimulus_display "justincase"
            action dequeue_stimulus "Dequeue Stimulus": stimulus=target_grating
            action update_stimulus_display "justincase"
            action report: message=End of Trial - Stim Off
          action assignment: variable=stimTag, value=0
          action assignment "in End state": variable=isEndState, value=1
          transition conditional "If Lever Up, and too fast Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1 && isTooFast == 1, target=EarlyRelease
          transition conditional "If fake mouse frames elapsed, and too fast Go To EarlyRelease": condition=(counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever && isTooFast == 1, target=EarlyRelease
          transition conditional "If Lever Up, and too fast expired Go To Reward": condition=(isCatchTrial==0) && FIO1 == 0 && doLever == 1 && isTooFast == 0, target=Reward
          transition conditional "If fake mouse frames elapsed, and too fast expired Go To Reward": condition=(isCatchTrial==0) && (counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever && isTooFast == 0, target=Reward
          transition conditional "If Lever Up and catch trial, and too fast expired Go To EarlyRelease": condition=(isCatchTrial==1) && FIO1 == 0 && doLever == 1 && isTooFast == 0, target=EarlyRelease
          transition conditional "If fake mouse frames elapsed, and catch trial, and too fast expired Go To EarlyRelease": condition=(isCatchTrial==1) && (counter >= (cFirstStim + tFakeMouseReactFrames)) && !doLever && isTooFast == 0, target=EarlyRelease
          transition conditional "Queue Visual Stimulus": condition=(counter >= (cEndOff + tVisualFramesOff)), target=EndTrialVisualStim
          transition conditional "Queue Auditory Stimulus": condition=counter >= (cAuditoryStimOn + tAuditoryFramesOff), target=EndTrialAuditoryStim
          transition conditional "if tooFastTimer expired, go to React": condition=(isTooFast==1) && (counter >= (cTargetOn + nFramesTooFast)), target=React
          transition conditional "Go to Reward": condition=(isCatchTrial==1) && (counter >= (cTargetOn + nFramesReact)), target=Reward
          transition conditional "Go to Missed": condition=(isCatchTrial==0) && (counter >= (cTargetOn + nFramesReact)), target=Missed
        task_system_state "EndTrial": interruptble=YES
          action report: message=Trial Ended
          action assignment: variable=trials, value=trials+1
          action assignment "End Matlab Sync": variable=sync, value=0
          transition yield "return to parent task system"
    action stop_device_IO "Stop IO Device": device=LabJackU6
    action dequeue_stimulus: stimulus=base_grating
    action update_stimulus_display "Update Stimulus"
