<?xml version="1.0"?>
<monkeyml version="1.0">
  <io_devices tag="IO Devices">
    <iodevice tag="LabJackU6" priority="" type="LabJackU6" 
      pulse_duration="juice" pulse_on="juice" 
      lever1="FIO1" 
      lever1_solenoid="MIO0"
      counter2="counter2"
      trial_laser_powerMw="tTrialLaserPowerMw"
      laser_trigger="laserTrigger"
      optic_device="optic_device"
      strobed_digital_word="strobedDigitalWord"
      counter="counter"
      do2led="do2led" led_seq="led_seq" LED_duration="LED_durationMS" led1_status="led1_status" led2_status="led2_status"/>
      <iodevice tag="FakeMonkey" priority="" type="fake_monkey" id="" alt="" spike_rate="10"/>
      <iodevice type="serverside_conduit" tag="Server-side Event Conduit" resource_name="server_conduit"/>
    </io_devices>
    <variables tag="Variables">
      <folder tag="Behavioral Control">
        <variable tag="subjectNum" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="ExptStruct"/>
        <variable tag="experimentXmlTrialId" scope="global" logging="when_changed" default_value="90" type="integer" persistant="1"/> <!-- n.b. it is forcibly set each trial below -->
        <variable tag="optic_device" scope="global" logging="when_changed" default_value="led" type="string"></variable>
      </folder>
      <folder tag="Stimuli">
        <variable tag="nScansOn" scope="global" logging="when_changed" default_value="200" type="integer" persistant="1" groups="ExptStruct"/>
        <variable tag="nScansOff" scope="global" logging="when_changed" default_value="200" type="integer" persistant="1" groups="ExptStruct"/>
      </folder>
      <folder tag="Task Status">
        <variable tag="stimulusOn" scope="global" logging="when_changed" default_value="0" type="boolean"/>
        <variable tag="trialStart" scope="global" logging="when_changed" default_value="0" type="boolean"/>
      </folder>
      <folder tag="Online Display">
        <variable tag="sync" scope="global" logging="when_changed" default_value="0" type="integer"/>
      </folder>
      <folder tag="Hardware variables">
        <variable tag="FIO1" full_name="FIO1" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed" groups="Hardware"/>
        <variable tag="MIO0" full_name="MIO0" default_value="0" scope="GLOBAL" type="boolean" editable="never" logging="when_changed" groups="Hardware"/>
        <variable tag="laserTrigger" full_name="laserTrigger" default_value="0" scope="GLOBAL" type="boolean" logging="when_changed" groups="Hardware"/>
        <variable tag="strobedDigitalWord" full_name="strobedDigitalWord" default_value="0" scope="GLOBAL" type="integer" logging="when_changed" persistant="0"/>
        <variable tag="juice" full_name="juice" scope="GLOBAL" logging="when_changed" default_value="0" type="integer" groups="Hardware"/>
        <variable tag="counter" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"></variable>
      </folder>
      <folder tag="Internal Variables">
        <variable tag="tTrialStartMWTimestampMs" scope="global" logging="when_changed" default_value="90" type="integer" persistant="0"/>
        <variable tag="tTrialsDoneSinceStart" scope="global" logging="when_changed" default_value="90" type="integer" persistant="0"/>
        <variable tag="tThisTrialStartTimeMs" scope="global" logging="when_changed" default_value="90" type="integer" persistant="0"/>
        <variable tag="tLastTrialStartTimeMs" scope="global" logging="when_changed" default_value="90" type="integer" persistant="0"/>

      </folder>
    </variables>
    <sounds tag="Sounds">
    </sounds>
    <stimuli tag="Stimuli">
        <stimulus type="blank_screen" tag="background" color="0.5,0.5,0.5"></stimulus>
        <stimulus type="drifting_grating" tag="grating"  direction="0" starting_phase="0"
          spatial_frequency="0.01" 
          speed="0" 
          grating_type="sinusoid" mask="gaussian" std_dev="0.3" mean="0.1" 
          x_size="100" y_size="100" 
          x_position="0" y_position="0" 
          rotation="0" 
          alpha_multiplier="1"></stimulus>                
    </stimuli>    
              <experiment tag="Experiment" full_name="">
                <protocol tag="JuiceOnHoldProtocol" full_name="" selection="sequential" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
                  <action type="queue_stimulus" stimulus="background"></action>

                  <action tag="Start IO Device" type="start_device_IO" device="LabJackU6"></action>
                  <!-- init actions before running trials after any press of start-->

                  <action type="assignment" variable="tTrialsDoneSinceStart" value="0"></action>
                  <action type="assignment" tag="set counter to 0" variable="counter" value="0"></action>

                  <trial tag="Trial" full_name="Trial" description="" interruptible="1" selection="sequential" nsamples="1" sampling_method="cycles">
                    <trial tag="New List" nsamples="9999" sampling_method="samples" selection="random_without_replacement">
                      <!--<range_replicator tag="New Replicator" from="0" to="89" step="1" variable="rrStimulusNumber"> -->
                      <task_system tag="TS" full_name="TS" description="" interruptible="YES" >
                        <task_system_state tag="Inter Stimulus Interval" interruptible="YES">
                          <action_marker _unmoveable="1" tag="Actions"></action_marker>
                           
                        <action type="assignment" variable="tTrialStartMWTimestampMs" value="now()/1000"></action>  <!-- integer valued ms timestamp -->

                        <action type="assignment" tag="Encode START" variable="strobedDigitalWord" value="170"></action>
                        <action type="assignment" tag="Encode START" variable="strobedDigitalWord" value="170"></action>
                        <action type="assignment" tag="Encode START" variable="strobedDigitalWord" value="170"></action>

                        <!--Transmit the trial timestamp so strobed code sequences are unique -->
                        <action type="assert" condition="tTrialStartMWTimestampMs &lt;= 2147483648" 
                          message="tTrialStartMWTimestampMs is too large - should happen only after several days of running!?"
                          stop_on_failure="1"/>  
                          <!-- prevent overflow outside 2**31ms ~ 10 days - I don't know how to get unsigned casts in the XML -->
                          <!-- encode trialStartTimestamp in bytes: 4 bytes: millions of seconds, 1000s, s, ms -->
                          <action type="assignment" tag="Encode TimestampStart" variable="strobedDigitalWord" value="200"/>
                          
                          <action type="assignment" tag="Encode TimestampEnd" variable="strobedDigitalWord" value="201"/>

                          <action type="assignment" tag="Sync Matlab" variable="sync" value="1"></action>
                          <action type="assignment" tag="Set trialStart" variable="trialStart" value="1"></action>

              <!-- initialize trial start/end times -->
              <action type="if" condition="tThisTrialStartTimeMs == -1">  
                <!--first trial, leave lasttime as -1 -->
                <action type="assignment" variable="tLastTrialStartTimeMs" value="-1"></action>
              </action>
              <action type="if" condition="tThisTrialStartTimeMs != -1">  <!--else-->
                <!--later trials, copy this into last before setting this again below -->
                <action type="assignment" variable="tLastTrialStartTimeMs" value="tThisTrialStartTimeMs"></action>
              </action>
              <action type="assignment" variable="tThisTrialStartTimeMs" value="now()/1000"></action>
              <action type="assignment" tag="Clear stimulusOn" variable="stimulusOn" value="0"></action>
              <action type="assignment" tag="Encode InterStimIntervalStart" variable="strobedDigitalWord" value="6"></action> 

              <action type="report" message="In InterStimInterval, waiting for $nScansOff frames"></action>          
              <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
              <transition type="conditional" tag="If nScansOff, move to StimOn" condition="counter >= ((nScansOff+nScansOn) * tTrialsDoneSinceStart) + nScansOff" target="StimOn"></transition>
            </task_system_state>

            <task_system_state tag="StimOn" interruptible="YES">
              <action_marker _unmoveable="1" tag="Actions"></action_marker>

                <action tag="Queue Stimulus" type="queue_stimulus" stimulus="target_grating"></action>
                <action type="play_dynamic_stimulus" stimulus="target_grating_gaussian" tag="start"></action>
              <action tag="Update Display" type="update_stimulus_display"></action>
              <action type="report" message="Visual Stim ON, presenting for $nScansOn scans."></action>
            

            <action type="assignment" tag="Encode VisStimOn" variable="strobedDigitalWord" value="4"></action>
            
            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="conditional" tag="If nScansON, move to EndTrial" condition="counter >= (nScansOff+nScansOn) * (1+tTrialsDoneSinceStart)" target="EndTrial" ></transition>
          </task_system_state>

          <task_system_state tag="EndTrial" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>

              <action tag="Dequeue Stimulus 0" type="dequeue_stimulus" stimulus="target_grating"></action>
              <action tag="Update Stimulus" type="update_stimulus_display"></action>
            
            <action type="assignment" tag="End Matlab Sync" variable="sync" value="0"></action>
            

            <action type="assignment" tag="Encode END" variable="strobedDigitalWord" value="85"></action>
            <action type="assignment" tag="Encode END" variable="strobedDigitalWord" value="85"></action>
            <action type="assignment" tag="Encode END" variable="strobedDigitalWord" value="85"></action>

            <!-- trigger serial param dump to cyberkinetics -->
            <action type="assignment" tag="Send serial params" variable="sendSerialParams" value="1"></action>
            <action type="assignment" tag="Send serial params" variable="sendSerialParams" value="0"></action>
            
            <action type="assignment" variable="tTrialsDoneSinceStart" value="tTrialsDoneSinceStart+1"/>

            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="yield" tag="return to parent task system"></transition>
          </task_system_state>
          
        </task_system>
      </trial>
    </trial>
    <action tag="Stop IO Device" type="stop_device_IO" device="LabJackU6"></action>
  </protocol>
</experiment>
</monkeyml>

