<?xml version="1.0"?>
<monkeyml version="1.0">
  <io_devices tag="IO Devices">
    <iodevice tag="LabJackU6" priority="" type="LabJackU6" 
              pulse_duration="juice" pulse_on="juice" 
              lever1="FIO1"
              lever1_solenoid="MIO0"
              counter2="counter2"
              laser_trigger="laserTrigger"
              optic_device="optic_device"
              strobed_digital_word="strobedDigitalWord"
              counter="counter"/>
    <iodevice tag="FakeMonkey" priority="" type="fake_monkey" id="" alt="" spike_rate="10"/>
    <iodevice type="serverside_conduit" tag="Server-side Event Conduit" resource_name="server_conduit"/>
  </io_devices>
  <variables tag="Variables">
    <folder tag="Behavioral Control">
      <variable tag="optic_device" scope="global" logging="when_changed" default_value="led" type="string"/>
    </folder>
    <folder tag="Stimuli">
      <variable tag="nScansBetweenStim" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1" groups="ExptStruct"/>
      <variable tag="stimulusDurationUs" scope="global" logging="when_changed" default_value="100000" type="integer" persistant="1" groups="ExptStruct"/>
      <variable tag="nPuffTrials" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1" groups="ExptStruct"/>
      <variable tag="nNoPuffTrials" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1" groups="ExptStruct"/>
      <variable tag="tPuffTrials" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="ExptStruct"/>
      <variable tag="tNoPuffTrials" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="ExptStruct"/>
      <variable tag="tTrialsDone" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="ExptStruct"/>
      <variable tag="stopAfterNTrials" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="ExptStruct"/>
      <variable tag="tCounter" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="ExptStruct"/>
      <variable tag="tIsAPuffTrial" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="ExptStruct"/>    
    </folder>
    <folder tag="Task Status">
    </folder>
    <folder tag="Online Display">
      <variable tag="sync" scope="global" logging="when_changed" default_value="0" type="integer"/>
    </folder>
    <folder tag="Hardware variables">
      <variable tag="FIO1" full_name="FIO1" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed" groups="Hardware"/>
      <variable tag="MIO0" full_name="MIO0" default_value="0" scope="GLOBAL" type="boolean" editable="never" logging="when_changed" groups="Hardware"/>
      <variable tag="laserTrigger" full_name="laserTrigger" default_value="0" scope="GLOBAL" type="boolean" logging="when_changed" persistant="0"/>
      <variable tag="strobedDigitalWord" full_name="strobedDigitalWord" default_value="0" scope="GLOBAL" type="integer" logging="when_changed" persistant="0"/>
      <variable tag="juice" full_name="juice" scope="GLOBAL" logging="when_changed" default_value="0" type="integer" groups="Hardware"/>
      <variable tag="counter" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="Hardware"></variable>
      <variable tag="counter2" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="Hardware"></variable>
      <variable tag="sendLaserParams" full_name="sendLaserParams" scope="GLOBAL" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="sendSerialParams" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
    </folder>
    <folder tag="Internal Variables">     
    </folder>
  </variables>
  <sounds tag="Sounds">
  </sounds>
  <stimuli tag="Stimuli">
    <stimulus type="blank_screen" tag="background" color="0.5,0.5,0.5"></stimulus>       
  </stimuli>    
  <experiment tag="Experiment" full_name="">
    <protocol tag="JuiceOnHoldProtocol" full_name="" selection="sequential" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
      <action type="queue_stimulus" stimulus="background"></action>
      <action tag="Start IO Device" type="start_device_IO" device="LabJackU6"></action>
      <!-- Initialization actions evaluated before  any press of start-->
      <action type="assignment" variable="tTrialsDone" value="0"></action>
      <action type="assignment" variable="tPuffTrials" value="0"></action>
      <action type="assignment" variable="tNoPuffTrials" value="0"></action>
      <action type="assignment" variable="tCounter" value="0"></action>
      <action type="assignment" variable="juice" value="0"></action>
        
      <trial tag="Trial" full_name="Trial" description="" interruptible="1" selection="sequential" nsamples="1" sampling_method="cycles">
      <trial tag="New List" nsamples="99999999" sampling_method="samples" selection="random_without_replacement">
      <!--<range_replicator tag="New Replicator" from="0" to="89" step="1" variable="rrStimulusNumber"> -->
      <task_system tag="TS" full_name="TS" interruptable="YES" description="" interruptible="YES" _error="Task Systems must contain >=1 transition that yields to parent">

      <task_system_state tag="Inter Stimulus Timer" interruptible="YES">
          <action_marker _unmoveable="1" tag="Actions"></action_marker>
          <action type="assignment" variable="juice" value="0"></action>
          <action type="assignment" variable="stopAfterNTrials" value="nNoPuffTrials+nPuffTrials"></action>
           <action type="report" message="In Inter-Stimulus Interval, waiting for $nScansBetweenStim frames"></action>
           <action type="assignment" variable="tCounter" value="counter"></action>
           <action type="if" condition="tNoPuffTrials &lt; nNoPuffTrials">
            <action type="assignment" variable="tIsAPuffTrial" value="0" />
            <action type="assignment" variable="tNoPuffTrials" value="tNoPuffTrials+1"/>
           </action>

           <action type="if" condition="tNoPuffTrials &gt;= nNoPuffTrials">
            <action type="assignment" variable="tIsAPuffTrial" value="1" />
            <action type="assignment" variable="tPuffTrials" value="tPuffTrials+1"/>
           </action>


          <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
          <transition type="conditional" tag="If nScansBetweenStim has been exceeded, move to SendStim" condition="counter-tCounter >= nScansBetweenStim" target="SendStim" ></transition>
      </task_system_state>

      <task_system_state tag="SendStim" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>
            <action type="if" condition="tIsAPuffTrial==1">
              <action type="assignment" variable="juice" value="stimulusDurationUs"/>
              <action type="start_timer" tag="" timer="tactileClock" timebase="" duration="stimulusDurationUs" duration_units="us"></action>
              <action type="report" message="*** Tactile Stimulus Sent ***"></action> 
            </action>

            <action type="if" condition="tIsAPuffTrial==0">
              <action type="start_timer" tag="" timer="tactileClock" timebase="" duration="1" duration_units="us"></action>
              <action type="report" message="*** No Tactile Stimulus Sent ***"></action> 
            </action>

            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="timer_expired" timer="tactileClock" target="EndTrial"/> 
      </task_system_state>
                    
      <task_system_state tag="EndTrial" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>
    
            <action type="assignment" variable="tTrialsDone" value="tTrialsDone+1"/>
            <action type="report" message="Finished Trial $tTrialsDone"></action>
            <action type="if" condition="tTrialsDone &gt;= stopAfterNTrials ">
              <action type="report" message="** Stopping now **"></action>
              <action type="stop_experiment"></action>  
            </action>
              
            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="yield" tag="return to parent task system"></transition>
        </task_system_state> 
        </task_system>
      </trial>
      </trial>
      <action tag="Stop IO Device" type="stop_device_IO" device="LabJackU6"></action>
    </protocol>
  </experiment>
</monkeyml>

