monkeyml version=1.0
io_devices "IO Devices"
  iodevice LabJackU6 "LabJackU6": pulse_duration=juice, pulse_on=juice, lever1=FIO1, lever1_solenoid=MIO0, laser_trigger=laserTrigger, optic_device=optic_device, strobed_digital_word=strobedDigitalWord, do_wheelspeed=DoWheelSpeed, ws_durationUS=speedIntervalUS, wheel_speed=wheelSpeed, doCB=doCerebellarStim, trial_laser_powerMw=tTrialLaserPowerMw, quadrature=quadrature
  iodevice fake_monkey "FakeMonkey": spike_rate=10
  iodevice serverside_conduit "Server-side Event Conduit": resource_name=server_conduit
variables "Variables"
  folder "Behavioral Control"
    variable integer "experimentXmlTrialId": default_value=8, persistant=1
    <!-- n.b. it is forcibly set each trial below -->
    variable string "optic_device": default_value=led
    variable integer "subjectNum": default_value=0, persistant=1, groups=Task Type
    variable boolean "doMatrix": default_value=0, persistant=1, groups=Task Type
    variable boolean "doRandISITime": default_value=0, persistant=1, groups=Task Type
    variable boolean "doRandStimOnTime": default_value=0, persistant=1, groups=Task Type
    variable boolean "doRandCon": default_value=0, persistant=1, groups=Task Type
    variable boolean "doRandDir": default_value=0, persistant=1, groups=Task Type
    variable boolean "doRandPos": default_value=0, persistant=1, groups=Task Type
    variable boolean "doRandDiameter": default_value=0, persistant=1, groups=Task Type
    variable boolean "doLogSize": default_value=0, persistant=1, groups=Task Type
    variable float "logSizeN": default_value=1, persistant=1, groups=Task Type
    variable boolean "doRandSF": default_value=0, persistant=1, groups=Task Type
    variable boolean "doRandTF": default_value=0, persistant=1, groups=Task Type
    variable boolean "doRandPhase": default_value=0, persistant=1, groups=Task Type
    variable boolean "doRandSoundAmp": default_value=0, persistant=1, groups=Task Type
    variable boolean "doWheelSpeed": default_value=0, persistant=1, groups=Task Type
    variable boolean "doMask": default_value=0, persistant=1, groups=Mask
    variable float "fractMaskTrials": default_value=0, persistant=1, groups=Mask
    variable boolean "doRandMaskCon": default_value=0, persistant=1, groups=Mask
    variable boolean "doRandMaskDir": default_value=0, persistant=1, groups=Mask
    variable boolean "doBlock2": default_value=0, persistant=1, groups=Block2
    variable boolean "doBlock2SeparateOdds": default_value=0, persistant=1, groups=Block2
    variable float "block2TrPer80": default_value=40, persistant=1, groups=Block2
    variable boolean "block2MatchB1VisStim": default_value=1, persistant=1, groups=Block2
    variable boolean "block2MatchB1AudStim": default_value=1, persistant=1, groups=Block2
    variable boolean "block2DoMatrix": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoRandISITime": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoRandStimOnTime": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoRandCon": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoRandDir": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoRandMaskDir": default_value=0, persistant=1, groups=Mask
    variable boolean "block2DoRandMaskCon": default_value=0, persistant=1, groups=Mask
    variable boolean "block2DoRandPos": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoRandDiameter": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoRandSF": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoRandTF": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoRandPhase": default_value=0, persistant=1, groups=Block2
    variable boolean "block2DoRandSoundAmp": default_value=0, persistant=1, groups=Block2
    variable float "block2ISITimeMs": default_value=250, persistant=1, groups=Block2 Trial Structure
    variable float "block2ISITimeN": default_value=5, persistant=1, groups=Block2 Trial Structure
    variable float "block2ISITimeStepLog": default_value=2, persistant=1, groups=Block2 Trial Structure
    variable float "itiTimeMs": default_value=5000, persistant=1, groups=Trial Structure
    variable integer "doExtendItiOnShortPrevTrial": default_value=0, persistant=1, groups=Trial Structure
    variable float "isiTimeMs": default_value=250, persistant=1, groups=Trial Structure
    variable float "isiTimeN": default_value=5, persistant=1, groups=Trial Structure
    variable float "isiTimeStepLog": default_value=2, persistant=1, groups=Trial Structure
    variable float "speedIntervalMS": default_value=0, persistant=1, groups=Wheel Speed
    variable float "wheelSpeed": default_value=0, persistant=0, groups=Wheel Speed
    variable boolean "sendElectrophysSync": default_value=1, persistant=1, groups=Ephys
    variable boolean "sendPClampSync": default_value=1, persistant=1, groups=Ephys
  folder "Stimuli"
    variable boolean "stimOneDoVisualStim": default_value=1, persistant=1, groups=Stimulus One Parameters
    variable boolean "stimOneDoAuditoryStim": default_value=1, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingOnTimeMs": default_value=500, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingOnTimeStepN": default_value=5, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingOnTimeStepLog": default_value=2, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingContrast": default_value=1, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingContrastStepN": default_value=5, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingContrastStepLog": default_value=2, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingContrastSPO": default_value=1, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingDirectionDeg": default_value=0, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingDirectionStepN": default_value=12, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingDirectionStepDeg": default_value=30, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingElevationDeg": default_value=0, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingElevationStepN": default_value=12, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingElevationStepDeg": default_value=30, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingAzimuthDeg": default_value=0, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingAzimuthStepN": default_value=12, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingAzimuthStepDeg": default_value=30, persistant=1, groups=Stimulus One Parameters
    variable integer "stimOneGratingDiameterDeg": default_value=200, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingDiameterStepN": default_value=5, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingDiameterStepLog": default_value=2, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingDiameterSPO": default_value=1, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingSpatialFreqCPD": default_value=0.05, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingSpatialFreqStepN": default_value=5, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingSpatialFreqStepLog": default_value=2, persistant=1, groups=Stimulus One Parameters
    variable integer "stimOneGratingTemporalFreqCPS": default_value=0, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingTemporalFreqStepN": default_value=5, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingTemporalFreqStepLog": default_value=2, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingPhaseDeg": default_value=0, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingPhaseStepN": default_value=5, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneGratingPhaseStepDeg": default_value=2, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneSoundAmplitude": default_value=0, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneSoundAmplitudeStepN": default_value=5, persistant=1, groups=Stimulus One Parameters
    variable float "stimOneSoundAmplitudeStepLog": default_value=2, persistant=1, groups=Stimulus One Parameters
    variable float "maskOneGratingContrast": default_value=0, persistant=1, groups=Mask One Parameters
    variable float "maskOneGratingContrastStepN": default_value=5, persistant=1, groups=Mask One Parameters
    variable float "maskOneGratingContrastStepLog": default_value=2, persistant=1, groups=Mask One Parameters
    variable float "maskOneGratingDirectionDeg": default_value=0, persistant=1, groups=Mask One Parameters
    variable float "maskOneGratingDirectionStepN": default_value=12, persistant=1, groups=Mask One Parameters
    variable float "maskOneGratingDirectionStepDeg": default_value=30, persistant=1, groups=Mask One Parameters
    variable boolean "matchStimOneParameters": default_value=1, persistant=1, groups=Stimulus Two Parameters
    variable boolean "stimTwoDoVisualStim": default_value=1, persistant=1, groups=Stimulus Two Parameters
    variable boolean "stimTwoDoAuditoryStim": default_value=0, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingOnTimeMs": default_value=500, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingOnTimeStepN": default_value=5, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingOnTimeStepLog": default_value=2, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingContrast": default_value=1, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingContrastStepN": default_value=5, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingContrastStepLog": default_value=2, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingDirectionDeg": default_value=0, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingDirectionStepN": default_value=12, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingDirectionStepDeg": default_value=30, persistant=1, groups=Stimulus Two Parameters
    variable float "maskTwoGratingContrast": default_value=0, persistant=1, groups=Mask Two Parameters
    variable float "maskTwoGratingContrastStepN": default_value=5, persistant=1, groups=Mask Two Parameters
    variable float "maskTwoGratingContrastStepLog": default_value=2, persistant=1, groups=Mask Two Parameters
    variable float "maskTwoGratingDirectionDeg": default_value=0, persistant=1, groups=Mask Two Parameters
    variable float "maskTwoGratingDirectionStepN": default_value=12, persistant=1, groups=Mask Two Parameters
    variable float "maskTwoGratingDirectionStepDeg": default_value=30, persistant=1, groups=Mask Two Parameters
    variable float "stimTwoGratingElevationDeg": default_value=0, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingElevationStepN": default_value=12, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingElevationStepDeg": default_value=30, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingAzimuthDeg": default_value=0, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingAzimuthStepN": default_value=12, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingAzimuthStepDeg": default_value=30, persistant=1, groups=Stimulus Two Parameters
    variable integer "stimTwoGratingDiameterDeg": default_value=200, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingDiameterStepN": default_value=5, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingDiameterStepLog": default_value=2, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingSpatialFreqCPD": default_value=0.05, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingSpatialFreqStepN": default_value=5, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingSpatialFreqStepLog": default_value=2, persistant=1, groups=Stimulus Two Parameters
    variable integer "stimTwoGratingTemporalFreqCPS": default_value=0, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingTemporalFreqStepN": default_value=5, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingTemporalFreqStepLog": default_value=2, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingPhaseDeg": default_value=0, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingPhaseStepN": default_value=5, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoGratingPhaseStepDeg": default_value=2, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoSoundAmplitude": default_value=0, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoSoundAmplitudeStepN": default_value=5, persistant=1, groups=Stimulus Two Parameters
    variable float "stimTwoSoundAmplitudeStepLog": default_value=2, persistant=1, groups=Stimulus Two Parameters
    <!-- stimulus control parameters -->
    <!-- block 2 control -->
    variable boolean "block2DoTrialLaser": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserPowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserOnTimeMs": default_value=0, persistant=1, groups=Block2 Laser
    variable boolean "block2StimOneLaserOnly": default_value=0, persistant=1, groups=Block2 Laser
    variable boolean "doLaserDelayOn": default_value=0, persistant=1, groups=Block2 Laser
    variable float "laserDelayTimeMs": default_value=0, persistant=1, groups=Block2 Laser
    variable float "laserStepPerOctave": default_value=2, persistant=1, groups=Block2 Laser
    variable float "laserStepN": default_value=1, persistant=1, groups=Block2 Laser
    variable boolean "doLaserStimSteps": default_value=0, persistant=1, groups=Block2 Laser
    variable boolean "block2DoPreStimLaser": default_value=0, persistant=1, groups=Block2 Laser
    variable boolean "block2DoLaserVisStim": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2PreStimLaserOnTimeMs": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserOffTimeMs": default_value=0, persistant=1, groups=Block2 Laser
    variable boolean "laserOn": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2StimOneDoVisualStim": default_value=500, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneDoAuditoryStim": default_value=500, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingOnTimeMs": default_value=500, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingOnTimeStepN": default_value=5, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingOnTimeStepLog": default_value=2, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingContrast": default_value=1, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingContrastStepN": default_value=5, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingContrastStepLog": default_value=2, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingDirectionDeg": default_value=0, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingDirectionStepN": default_value=12, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingDirectionStepDeg": default_value=30, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2MaskOneGratingContrast": default_value=0, persistant=1, groups=Block 2 Mask Parameters
    variable float "block2MaskOneGratingContrastStepN": default_value=5, persistant=1, groups=Block 2 Mask Parameters
    variable float "block2MaskOneGratingContrastStepLog": default_value=2, persistant=1, groups=Block 2 Mask Parameters
    variable float "block2MaskOneGratingDirectionDeg": default_value=0, persistant=1, groups=Block 2 Mask Parameters
    variable float "block2MaskOneGratingDirectionStepN": default_value=12, persistant=1, groups=Block 2 Mask Parameters
    variable float "block2MaskOneGratingDirectionStepDeg": default_value=30, persistant=1, groups=Block 2 Mask Parameters
    variable float "block2StimOneGratingElevationDeg": default_value=0, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingElevationStepN": default_value=12, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingElevationStepDeg": default_value=30, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingAzimuthDeg": default_value=0, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingAzimuthStepN": default_value=12, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingAzimuthStepDeg": default_value=30, persistant=1, groups=Block 2 Stimulus One Parameters
    variable integer "block2StimOneGratingDiameterDeg": default_value=200, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingDiameterStepN": default_value=5, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingDiameterStepLog": default_value=2, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingSpatialFreqCPD": default_value=0.05, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingSpatialFreqStepN": default_value=5, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingSpatialFreqStepLog": default_value=2, persistant=1, groups=Block 2 Stimulus One Parameters
    variable integer "block2StimOneGratingTemporalFreqCPS": default_value=0, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingTemporalFreqStepN": default_value=5, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingTemporalFreqStepLog": default_value=2, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingPhaseDeg": default_value=0, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingPhaseStepN": default_value=5, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneGratingPhaseStepDeg": default_value=2, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneSoundAmplitude": default_value=0, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneSoundAmplitudeStepN": default_value=5, persistant=1, groups=Block 2 Stimulus One Parameters
    variable float "block2StimOneSoundAmplitudeStepLog": default_value=2, persistant=1, groups=Block 2 Stimulus One Parameters
    variable boolean "block2MatchStimOneParameters": default_value=0, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoDoVisualStim": default_value=500, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoDoAuditoryStim": default_value=500, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingOnTimeMs": default_value=500, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingOnTimeStepN": default_value=5, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingOnTimeStepLog": default_value=2, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingContrast": default_value=1, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingContrastStepN": default_value=5, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingContrastStepLog": default_value=2, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingDirectionDeg": default_value=0, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingDirectionStepN": default_value=12, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingDirectionStepDeg": default_value=30, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2MaskTwoGratingContrast": default_value=0, persistant=1, groups=Block 2 Mask Parameters
    variable float "block2MaskTwoGratingContrastStepN": default_value=5, persistant=1, groups=Block 2 Mask Parameters
    variable float "block2MaskTwoGratingContrastStepLog": default_value=2, persistant=1, groups=Block 2 Mask Parameters
    variable float "block2MaskTwoGratingDirectionDeg": default_value=0, persistant=1, groups=Block 2 Mask Parameters
    variable float "block2MaskTwoGratingDirectionStepN": default_value=12, persistant=1, groups=Block 2 Mask Parameters
    variable float "block2MaskTwoGratingDirectionStepDeg": default_value=30, persistant=1, groups=Block 2 Mask Parameters
    variable float "block2StimTwoGratingElevationDeg": default_value=0, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingElevationStepN": default_value=12, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingElevationStepDeg": default_value=30, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingAzimuthDeg": default_value=0, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingAzimuthStepN": default_value=12, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingAzimuthStepDeg": default_value=30, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable integer "block2StimTwoGratingDiameterDeg": default_value=200, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingDiameterStepN": default_value=5, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingDiameterStepLog": default_value=2, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingSpatialFreqCPD": default_value=0.05, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingSpatialFreqStepN": default_value=5, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingSpatialFreqStepLog": default_value=2, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable integer "block2StimTwoGratingTemporalFreqCPS": default_value=0, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingTemporalFreqStepN": default_value=5, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingTemporalFreqStepLog": default_value=2, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingPhaseDeg": default_value=0, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingPhaseStepN": default_value=5, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoGratingPhaseStepDeg": default_value=2, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoSoundAmplitude": default_value=0, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoSoundAmplitudeStepN": default_value=5, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable float "block2StimTwoSoundAmplitudeStepLog": default_value=2, persistant=1, groups=Block 2 Stimulus Two Parameters
    variable boolean "doPhotodiode": default_value=0, persistant=1, groups=Photodiode Variables
    variable float "photoStimulusContrast": default_value=0, persistant=1, groups=Photodiode Variables
    variable integer "photoStimulusAzimuth": default_value=0, persistant=1, groups=Photodiode Variables
    variable integer "photoStimulusElevation": default_value=0, persistant=1, groups=Photodiode Variables
    variable integer "photoStimulusWidth": default_value=0, persistant=1, groups=Photodiode Variables
    variable integer "photoStimulusHeight": default_value=0, persistant=1, groups=Photodiode Variables
    variable float "photoMaskSpatialFreq": default_value=0, persistant=1, groups=Photodiode Variables
  folder "Task Status"
    variable boolean "trialStart": default_value=0
  folder "Online Display"
    variable integer "sync": default_value=0
  folder "Hardware variables"
    variable INTEGER "FIO1": default_value=0, scope=GLOBAL, editable=never
    variable boolean "MIO0": default_value=0, scope=GLOBAL, editable=never
    variable boolean "laserTrigger": default_value=0, scope=GLOBAL, persistant=0
    variable integer "strobedDigitalWord": default_value=0, scope=GLOBAL, persistant=0
    variable integer "juice": scope=GLOBAL, default_value=0
    variable integer "sendLaserParams": scope=GLOBAL, default_value=0, persistant=0
    variable integer "sendSerialParams": default_value=0, persistant=0
    variable integer "quadrature": default_value=0, persistant=0
  folder "Internal Variables"
    variable integer "ntrials": default_value=0, persistant=0
    variable integer "tTrialStartMWTimestampMs": default_value=0, persistant=0
    variable integer "tItiWaitTimeMs": default_value=0
    variable integer "tThisTrialStartTimeMs": default_value=0
    variable integer "tLastTrialStartTimeMs": default_value=0
    variable integer "lastTrialTimeMs": default_value=0
    variable integer "tempMs": default_value=0
    variable integer "tTrialLaserDelay": default_value=0
    variable integer "tTempStim1": default_value=0, persistant=0
    variable integer "tTempStim2": default_value=0, persistant=0
    variable integer "tTempMask1": default_value=0, persistant=0
    variable integer "tTempMask2": default_value=0, persistant=0
    variable integer "multVal": default_value=4, persistant=0
    variable integer "tStimulusNumber": default_value=0, persistant=0
    variable integer "tStimulusNumber2": default_value=0, persistant=0
    variable integer "tMaskNumber": default_value=0, persistant=0
    variable integer "tMaskNumber2": default_value=0, persistant=0
    variable boolean "tDoMatrix": default_value=0, persistant=0
    variable boolean "tDoRandISITime": default_value=0, persistant=0
    variable boolean "tDoRandStimOnTime": default_value=0, persistant=0
    variable boolean "tDoRandCon": default_value=0, persistant=0
    variable integer "tDoMask": default_value=0, persistant=0
    variable boolean "tDoRandMaskCon": default_value=0, persistant=0
    variable boolean "tDoRandDir": default_value=0, persistant=0
    variable boolean "tDoRandMaskDir": default_value=0, persistant=0
    variable boolean "tDoRandPos": default_value=0, persistant=0
    variable boolean "tDoRandDiameter": default_value=0, persistant=0
    variable boolean "tDoRandSF": default_value=0, persistant=0
    variable boolean "tDoRandTF": default_value=0, persistant=0
    variable boolean "tDoRandPhase": default_value=0, persistant=0
    variable boolean "tDoRandSoundAmp": default_value=0, persistant=0
    variable integer "tStimOneGratingOnTimeMs": default_value=0, persistant=0
    variable integer "tStimTwoGratingOnTimeMs": default_value=0, persistant=0
    variable integer "tISITimeMs": default_value=0, persistant=0
    variable integer "tItiTimeMs": default_value=0, persistant=0
    variable integer "maxStimOnTime": default_value=0, persistant=0
    variable integer "maxISITime": default_value=0, persistant=0
    variable float "tStimOneGratingDirectionDeg": default_value=0, persistant=0
    variable float "tMaskOneGratingDirectionDeg": default_value=0, persistant=0
    variable float "tStimOneGratingContrast": default_value=0, persistant=0
    variable float "tMaskOneGratingContrast": default_value=0, persistant=0
    variable float "tStimOneGratingElevationDeg": default_value=0, persistant=0
    variable float "tStimOneGratingAzimuthDeg": default_value=0, persistant=0
    variable float "tStimOneGratingDiameterDeg": default_value=0, persistant=0
    variable float "tStimOneGratingSpatialFreqCPD": default_value=1, persistant=0
    variable float "tStimOneGratingTemporalFreqCPS": default_value=0, persistant=0
    variable float "tStimOneGratingPhaseDeg": default_value=0, persistant=0
    variable float "tStimOneSoundAmplitude": default_value=0, persistant=0
    variable float "tStimTwoGratingDirectionDeg": default_value=0, persistant=0
    variable float "tMaskTwoGratingDirectionDeg": default_value=0, persistant=0
    variable float "tStimTwoGratingContrast": default_value=0, persistant=0
    variable float "tMaskTwoGratingContrast": default_value=0, persistant=0
    variable float "tStimTwoGratingElevationDeg": default_value=0, persistant=0
    variable float "tStimTwoGratingAzimuthDeg": default_value=0, persistant=0
    variable float "tStimTwoGratingDiameterDeg": default_value=0, persistant=0
    variable float "tStimTwoGratingSpatialFreqCPD": default_value=1, persistant=0
    variable float "tStimTwoGratingTemporalFreqCPS": default_value=0, persistant=0
    variable float "tStimTwoGratingPhaseDeg": default_value=0, persistant=0
    variable float "tStimTwoSoundAmplitude": default_value=0, persistant=0
    variable boolean "tStimOneDoVisualStim": default_value=0, persistant=0
    variable boolean "tStimOneDoAuditoryStim": default_value=0, persistant=0
    variable boolean "tStimTwoDoVisualStim": default_value=0, persistant=0
    variable boolean "tStimTwoDoAuditoryStim": default_value=0, persistant=0
    variable float "tTrialLaserPowerMw": default_value=0, persistant=0
    variable float "tTrialLaserPowerMw_save": default_value=0, persistant=0
    variable float "tTrialLaserOnTimeMs": default_value=0, persistant=0
    variable float "tTrialLaserOffTimeMs": default_value=0, persistant=0
    variable integer "tBlock2TrialNumber": default_value=0, persistant=0
    variable integer "tBlock2LaserVisTrialNumber": default_value=0, persistant=0
    variable integer "laserDuration": default_value=0, persistant=0
    variable integer "laserDurationMS": default_value=0, persistant=1
    variable integer "tBlock2TrialLaserPowerMw": default_value=0, persistant=0
    variable integer "tBlock2TrialLaserOnTimeMs": default_value=0, persistant=0
    variable integer "tBlock2TrialLaserOffTimeMs": default_value=0, persistant=0
    variable boolean "isFirstTrial": default_value=0, persistant=0
    variable boolean "doCerebellarStim": default_value=0, persistant=0
    variable boolean "DoWheelSpeed": default_value=0, persistant=0
    variable boolean "speedIntervalUS": default_value=0, persistant=0
    variable integer "mwStimOneOnMs": default_value=0, persistant=0
    variable integer "mwStimOneOffMs": default_value=0, persistant=0
    variable integer "mwStimTwoOnMs": default_value=0, persistant=0
    variable integer "mwStimTwoOffMs": default_value=0, persistant=0
    variable integer "predictOutputUs": default_value=0, persistant=0
    variable integer "tNStimAccepted": default_value=0, persistant=0
    variable integer "tNStimAccepted2": default_value=0, persistant=0
    variable integer "tNMaskAccepted": default_value=0, persistant=0
    variable integer "tNMaskAccepted2": default_value=0, persistant=0
    variable selection "svStimNumber": values=0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79, selection=random_without_replacement, nsamples=80, sampling_method=samples
    variable selection "svStimNumber2": values=0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79, selection=random_without_replacement, nsamples=80, sampling_method=samples
    variable selection "svMaskNumber": values=0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79, selection=random_without_replacement, nsamples=80, sampling_method=samples
    variable selection "svMaskNumber2": values=0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79, selection=random_without_replacement, nsamples=80, sampling_method=samples
sounds "Sounds"
  sound wav_file "stimOneSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/10000Hz_.2s.wav, amplitude=tStimOneSoundAmplitude
  sound wav_file "stimTwoSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/10000Hz_.2s.wav, amplitude=tStimTwoSoundAmplitude
stimuli "Stimuli"
  stimulus blank_screen "background": color=0.5,0.5,0.5
  stimulus drifting_grating "stimOne": direction=0, starting_phase=tStimOneGratingPhaseDeg, spatial_frequency=tStimOneGratingSpatialFreqCPD, speed=tStimOneGratingTemporalFreqCPS/tStimOneGratingSpatialFreqCPD, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=tStimOneGratingDiameterDeg, y_size=tStimOneGratingDiameterDeg, x_position=tStimOneGratingAzimuthDeg, y_position=tStimOneGratingElevationDeg, rotation=tStimOneGratingDirectionDeg, alpha_multiplier=tStimOneGratingContrast
  stimulus drifting_grating "stimTwo": direction=0, starting_phase=tStimTwoGratingPhaseDeg, spatial_frequency=tStimTwoGratingSpatialFreqCPD, speed=tStimTwoGratingTemporalFreqCPS/tStimTwoGratingSpatialFreqCPD, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=tStimTwoGratingDiameterDeg, y_size=tStimTwoGratingDiameterDeg, x_position=tStimTwoGratingAzimuthDeg, y_position=tStimTwoGratingElevationDeg, rotation=tStimTwoGratingDirectionDeg, alpha_multiplier=tStimTwoGratingContrast
  stimulus drifting_grating "maskOne": direction=0, starting_phase=tStimOneGratingPhaseDeg, spatial_frequency=tStimOneGratingSpatialFreqCPD, speed=tStimOneGratingTemporalFreqCPS/tStimOneGratingSpatialFreqCPD, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=tStimOneGratingDiameterDeg, y_size=tStimOneGratingDiameterDeg, x_position=tStimOneGratingAzimuthDeg, y_position=tStimOneGratingElevationDeg, rotation=tMaskOneGratingDirectionDeg, alpha_multiplier=tMaskOneGratingContrast
  stimulus drifting_grating "maskTwo": direction=0, starting_phase=tStimTwoGratingPhaseDeg, spatial_frequency=tStimTwoGratingSpatialFreqCPD, speed=tStimTwoGratingTemporalFreqCPS/tStimTwoGratingSpatialFreqCPD, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=tStimTwoGratingDiameterDeg, y_size=tStimTwoGratingDiameterDeg, x_position=tStimTwoGratingAzimuthDeg, y_position=tStimTwoGratingElevationDeg, rotation=tMaskTwoGratingDirectionDeg, alpha_multiplier=tMaskTwoGratingContrast
  stimulus drifting_grating "photoDiodeGrating": direction=0, starting_phase=0, spatial_frequency=.000000000001, speed=0, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=photoStimulusWidth, y_size=photoStimulusHeight, x_position=photoStimulusAzimuth, y_position=photoStimulusElevation, rotation=0, alpha_multiplier=photoStimulusContrast
  stimulus drifting_grating "photoDiodeMask": direction=0, starting_phase=1, spatial_frequency=photoMaskSpatialFreq, speed=0, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=photoStimulusWidth, y_size=photoStimulusHeight, x_position=photoStimulusAzimuth, y_position=photoStimulusElevation, rotation=0, alpha_multiplier=1
experiment "Experiment"
  protocol "JuiceOnHoldProtocol": selection=sequential, nsamples=1, sampling_method=cycles
    <!-- init actions run only on first trial after loading experiment -->
    action queue_stimulus: stimulus=background
    action update_stimulus_display "-"
    action start_device_IO "Start IO Device": device=LabJackU6
    action if: condition=ntrials == 0
      action report: message=**** First trial since experiment load - initializing
      action assignment: variable=tLastTrialStartTimeMs, value=-1
      action assignment: variable=tThisTrialStartTimeMs, value=-1
      action assignment: variable=lastTrialTimeMs, value=0
      action assignment: variable=isFirstTrial, value=1
      <!-- reset selection var -->
      action reset_selection: selection=svStimNumber
      action reset_selection: selection=svStimNumber2
      action assignment: variable=tNStimAccepted, value=0
      action assignment: variable=tNStimAccepted2, value=0
      action reset_selection: selection=svMaskNumber
      action reset_selection: selection=svMaskNumber2
      action assignment: variable=tNMaskAccepted, value=0
      action assignment: variable=tNMaskAccepted2, value=0
    trial "Trial 01": nsamples=2500, sampling_method=cycles, selection=sequential
      task_system "TS"
        task_system_state "Initialization"
          action if: condition=ntrials > 0
            action assignment: variable=isFirstTrial, value=0
          action assignment "Sync Matlab": variable=sync, value=1
          <!-- In this state, do all stimulus selection/tValue setting -->
          action report: message=Initializing Trial
          action if: condition=doPhotodiode
            action live_queue_stimulus "Queue Stimulus": stimulus=photoDiodeMask
            action play_dynamic_stimulus "StimOn": stimulus=photoDiodeMask
            action update_stimulus_display "justincase"
          <!-- Reset t_____RemainingOn/Off to 0ms -->
          action assignment "Reset total extra ITI time": variable=tempMs, value=0
          action assignment: variable=tTrialStartMWTimestampMs, value=now()/1000
          <!-- integer valued ms timestamp -->
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          <!-- Transmit the trial timestamp so strobed code sequences are unique -->
          action assert: condition=tTrialStartMWTimestampMs <= 2147483648, message=tTrialStartMWTimestampMs is too large - should happen only after several days of running!?, stop_on_failure=1
          <!-- prevent overflow outside 2**31ms ~ 10 days - I don't know how to get unsigned casts in the XML -->
          <!-- encode trialStartTimestamp in bytes: 4 bytes: millions of seconds, 1000s, s, ms -->
          action assignment "Encode TimestampStart": variable=strobedDigitalWord, value=200
          action assignment "Encode TimestampEnd": variable=strobedDigitalWord, value=201
          action assignment "Set trialStart": variable=trialStart, value=1
          action assignment: variable=experimentXmlTrialId, value=8
          <!-- choose correct stimulus number based on odds; block2 tr number does not get assigned if ! doBlock2 -->
          action assignment: variable=tStimulusNumber, value=svStimNumber
          <!-- choose a value from selection var, 0-origin -->
          action assignment: variable=tStimulusNumber2, value=svStimNumber2
          <!-- choose a value from selection var, 0-origin -->
          action assignment: variable=tMaskNumber, value=svMaskNumber
          <!-- choose a value from selection var, 0-origin -->
          action assignment: variable=tMaskNumber2, value=svMaskNumber2
          <!-- choose a value from selection var, 0-origin -->
          action if: condition=sendPClampSync
            action assignment: variable=MIO0, value=1
          action assignment: variable=laserTrigger, value=0
          action if: condition=optic_device == 'led' 
            action assignment: variable=tTrialLaserPowerMw, value=0
          action if: condition=doBlock2
            action if: condition=!doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=tStimulusNumber <= 40
            action if: condition=doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=tStimulusNumber <= block2TrPer80
            action if: condition=block2DoLaserVisStim
              action assignment: variable=tBlock2LaserVisTrialNumber, value=1
            action if: condition=!block2DoLaserVisStim
              action assignment: variable=tBlock2LaserVisTrialNumber, value=0
          action if: condition=!doBlock2
            action assignment: variable=tBlock2TrialNumber, value=0
          action report: message=tBlock2TrialNumber is $tBlock2TrialNumber
          <!-- set default variables -->
          action assignment: variable=tISITimeMs, value=isiTimeMs
          action assignment: variable=tStimOneDoVisualStim, value=stimOneDoVisualStim
          action assignment: variable=tStimOneDoAuditoryStim, value=stimOneDoAuditoryStim
          action assignment: variable=tStimOneGratingOnTimeMs, value=stimOneGratingOnTimeMs
          action assignment: variable=tStimOneGratingDirectionDeg, value=stimOneGratingDirectionDeg
          action assignment: variable=tStimOneGratingContrast, value=stimOneGratingContrast
          action assignment: variable=tStimOneSoundAmplitude, value=stimOneSoundAmplitude
          action assignment: variable=tStimOneGratingElevationDeg, value=stimOneGratingElevationDeg
          action assignment: variable=tStimOneGratingAzimuthDeg, value=stimOneGratingAzimuthDeg
          action assignment: variable=tStimOneGratingDiameterDeg, value=stimOneGratingDiameterDeg
          action assignment: variable=tStimOneGratingSpatialFreqCPD, value=stimOneGratingSpatialFreqCPD
          action assignment: variable=tMaskOneGratingDirectionDeg, value=maskOneGratingDirectionDeg
          action assignment: variable=tMaskOneGratingContrast, value=maskOneGratingContrast
          action assignment: variable=tStimOneGratingTemporalFreqCPS, value=stimOneGratingTemporalFreqCPS
          action assignment: variable=tStimOneGratingPhaseDeg, value=stimOneGratingPhaseDeg
          action assignment: variable=tStimTwoDoVisualStim, value=stimTwoDoVisualStim
          action assignment: variable=tStimTwoDoAuditoryStim, value=stimTwoDoAuditoryStim
          action assignment: variable=tDoMatrix, value=doMatrix
          action assignment: variable=tDoRandISITime, value=doRandISITime
          action assignment: variable=tDoRandStimOnTime, value=doRandStimOnTime
          action assignment: variable=tDoRandCon, value=doRandCon
          action assignment: variable=tDoRandDir, value=doRandDir
          action assignment: variable=tDoRandMaskCon, value=doRandMaskCon
          action assignment: variable=tDoRandMaskDir, value=doRandMaskDir
          action assignment: variable=tDoRandPos, value=doRandPos
          action assignment: variable=tDoRandDiameter, value=doRandDiameter
          action assignment: variable=tDoRandSF, value=doRandSF
          action assignment: variable=tDoRandTF, value=doRandTF
          action assignment: variable=tDoRandPhase, value=doRandPhase
          action assignment: variable=tDoRandSoundAmp, value=doRandSoundAmp
          action if: condition=matchStimOneParameters
            action assignment: variable=tStimTwoGratingOnTimeMs, value=stimOneGratingOnTimeMs
            action assignment: variable=tStimTwoGratingDirectionDeg, value=stimOneGratingDirectionDeg
            action assignment: variable=tStimTwoGratingContrast, value=stimOneGratingContrast
            action assignment: variable=tStimTwoSoundAmplitude, value=stimOneSoundAmplitude
            action assignment: variable=tStimTwoGratingElevationDeg, value=stimOneGratingElevationDeg
            action assignment: variable=tStimTwoGratingAzimuthDeg, value=stimOneGratingAzimuthDeg
            action assignment: variable=tStimTwoGratingDiameterDeg, value=stimOneGratingDiameterDeg
            action assignment: variable=tStimTwoGratingSpatialFreqCPD, value=stimOneGratingSpatialFreqCPD
            action assignment: variable=tStimTwoGratingTemporalFreqCPS, value=stimOneGratingTemporalFreqCPS
            action assignment: variable=tStimTwoGratingPhaseDeg, value=stimOneGratingPhaseDeg
            action assignment: variable=tMaskTwoGratingDirectionDeg, value=maskOneGratingDirectionDeg
            action assignment: variable=tMaskTwoGratingContrast, value=maskOneGratingContrast
          action if: condition=!matchStimOneParameters
            action assignment: variable=tStimTwoGratingOnTimeMs, value=stimTwoGratingOnTimeMs
            action assignment: variable=tStimTwoGratingDirectionDeg, value=stimTwoGratingDirectionDeg
            action assignment: variable=tStimTwoGratingContrast, value=stimTwoGratingContrast
            action assignment: variable=tStimTwoSoundAmplitude, value=stimTwoSoundAmplitude
            action assignment: variable=tStimTwoGratingElevationDeg, value=stimTwoGratingElevationDeg
            action assignment: variable=tStimTwoGratingAzimuthDeg, value=stimTwoGratingAzimuthDeg
            action assignment: variable=tStimTwoGratingDiameterDeg, value=stimTwoGratingDiameterDeg
            action assignment: variable=tStimTwoGratingSpatialFreqCPD, value=stimTwoGratingSpatialFreqCPD
            action assignment: variable=tStimTwoGratingTemporalFreqCPS, value=stimTwoGratingTemporalFreqCPS
            action assignment: variable=tStimTwoGratingPhaseDeg, value=stimTwoGratingPhaseDeg
            action assignment: variable=tMaskTwoGratingDirectionDeg, value=maskTwoGratingDirectionDeg
            action assignment: variable=tMaskTwoGratingContrast, value=maskTwoGratingContrast
          action if: condition=doBlock2
            action if: condition=tBlock2TrialNumber
              action if: condition=!block2MatchB1VisStim
                action assignment: variable=tDoMatrix, value=block2DoMatrix
                action assignment: variable=tDoRandISITime, value=block2DoRandISITime
                action assignment: variable=tDoRandStimOnTime, value=block2DoRandStimOnTime
                action assignment: variable=tDoRandCon, value=block2DoRandCon
                action assignment: variable=tDoRandDir, value=block2DoRandDir
                action assignment: variable=tDoRandMaskCon, value=block2DoRandMaskCon
                action assignment: variable=tDoRandMaskDir, value=block2DoRandMaskDir
                action assignment: variable=tDoRandPos, value=block2DoRandPos
                action assignment: variable=tDoRandDiameter, value=block2DoRandDiameter
                action assignment: variable=tDoRandSF, value=block2DoRandSF
                action assignment: variable=tDoRandTF, value=block2DoRandTF
                action assignment: variable=tDoRandPhase, value=block2DoRandPhase
                action assignment: variable=tISITimeMs, value=block2ISITimeMs
                action assignment: variable=tStimOneDoVisualStim, value=block2StimOneDoVisualStim
                action assignment: variable=tStimTwoDoVisualStim, value=block2StimTwoDoVisualStim
                action assignment: variable=tStimOneGratingOnTimeMs, value=block2StimOneGratingOnTimeMs
                action assignment: variable=tStimOneGratingDirectionDeg, value=block2StimOneGratingDirectionDeg
                action assignment: variable=tStimOneGratingContrast, value=block2StimOneGratingContrast
                action assignment: variable=tStimOneGratingElevationDeg, value=block2StimOneGratingElevationDeg
                action assignment: variable=tStimOneGratingAzimuthDeg, value=block2StimOneGratingAzimuthDeg
                action assignment: variable=tStimOneGratingDiameterDeg, value=block2StimOneGratingDiameterDeg
                action assignment: variable=tStimOneGratingSpatialFreqCPD, value=block2StimOneGratingSpatialFreqCPD
                action assignment: variable=tStimOneGratingTemporalFreqCPS, value=block2StimOneGratingTemporalFreqCPS
                action assignment: variable=tStimOneGratingPhaseDeg, value=block2StimOneGratingPhaseDeg
                action assignment: variable=tMaskOneGratingDirectionDeg, value=block2MaskOneGratingDirectionDeg
                action assignment: variable=tMaskOneGratingContrast, value=block2MaskOneGratingContrast
                action if: condition=block2MatchStimOneParameters
                  action assignment: variable=tStimTwoGratingDirectionDeg, value=block2StimOneGratingDirectionDeg
                  action assignment: variable=tStimTwoGratingContrast, value=block2StimOneGratingContrast
                  action assignment: variable=tStimTwoGratingElevationDeg, value=block2StimOneGratingElevationDeg
                  action assignment: variable=tStimTwoGratingAzimuthDeg, value=block2StimOneGratingAzimuthDeg
                  action assignment: variable=tStimTwoGratingDiameterDeg, value=block2StimOneGratingDiameterDeg
                  action assignment: variable=tStimTwoGratingSpatialFreqCPD, value=block2StimOneGratingSpatialFreqCPD
                  action assignment: variable=tStimTwoGratingTemporalFreqCPS, value=block2StimOneGratingTemporalFreqCPS
                  action assignment: variable=tStimTwoGratingPhaseDeg, value=block2StimOneGratingPhaseDeg
                  action assignment: variable=tMaskTwoGratingDirectionDeg, value=block2MaskOneGratingDirectionDeg
                  action assignment: variable=tMaskTwoGratingContrast, value=block2MaskOneGratingContrast
                action if: condition=!block2MatchStimOneParameters
                  action assignment: variable=tStimTwoGratingOnTimeMs, value=block2StimTwoGratingOnTimeMs
                  action assignment: variable=tStimTwoGratingDirectionDeg, value=block2StimTwoGratingDirectionDeg
                  action assignment: variable=tStimTwoGratingContrast, value=block2StimTwoGratingContrast
                  action assignment: variable=tStimTwoGratingElevationDeg, value=block2StimTwoGratingElevationDeg
                  action assignment: variable=tStimTwoGratingAzimuthDeg, value=block2StimTwoGratingAzimuthDeg
                  action assignment: variable=tStimTwoGratingDiameterDeg, value=block2StimTwoGratingDiameterDeg
                  action assignment: variable=tStimTwoGratingSpatialFreqCPD, value=block2StimTwoGratingSpatialFreqCPD
                  action assignment: variable=tStimTwoGratingTemporalFreqCPS, value=block2StimTwoGratingTemporalFreqCPS
                  action assignment: variable=tStimTwoGratingPhaseDeg, value=block2StimTwoGratingPhaseDeg
                  action assignment: variable=tMaskTwoGratingDirectionDeg, value=block2MaskTwoGratingDirectionDeg
                  action assignment: variable=tMaskTwoGratingContrast, value=block2MaskTwoGratingContrast
              action if: condition=!block2MatchB1AudStim
                action assignment: variable=tDoMatrix, value=block2DoMatrix
                action assignment: variable=tDoRandSoundAmp, value=block2DoRandSoundAmp
                action assignment: variable=tStimOneDoAuditoryStim, value=block2StimOneDoAuditoryStim
                action assignment: variable=tStimOneSoundAmplitude, value=block2StimOneSoundAmplitude
                action assignment: variable=tStimTwoDoAuditoryStim, value=block2StimTwoDoAuditoryStim
                action if: condition=block2MatchStimOneParameters
                  action assignment: variable=tStimTwoSoundAmplitude, value=block2StimTwoSoundAmplitude
                action if: condition=!block2MatchStimOneParameters
                  action assignment: variable=tStimTwoSoundAmplitude, value=block2StimOneSoundAmplitude
              action if: condition=block2DoTrialLaser
                action if: condition=!doLaserStimSteps
                  action assignment: variable=tBlock2TrialLaserPowerMw, value=block2TrialLaserPowerMw
                action if: condition=doLaserStimSteps
                  action assignment: variable=tTempStim1, value=tStimulusNumber2 % laserStepN
                  action assignment: variable=tBlock2TrialLaserPowerMw, value=block2TrialLaserPowerMw * pow(laserStepPerOctave,tTempStim1)
                action assignment: variable=tBlock2TrialLaserOnTimeMs, value=block2TrialLaserOnTimeMs
                action assignment: variable=tBlock2TrialLaserOffTimeMs, value=block2TrialLaserOffTimeMs
              action if: condition=!block2DoTrialLaser
                action assignment: variable=tBlock2TrialLaserPowerMw, value=0
                action assignment: variable=tBlock2TrialLaserOnTimeMs, value=0
                action assignment: variable=tBlock2TrialLaserOffTimeMs, value=0
          action if: condition=!doBlock2
            action assignment: variable=tBlock2TrialLaserPowerMw, value=0
            action assignment: variable=tBlock2TrialLaserOnTimeMs, value=0
            action assignment: variable=tBlock2TrialLaserOffTimeMs, value=0
          <!-- single condition calculations -->
          action if: condition=!tDoMatrix
            action if: condition=tDoRandISITime
              action assignment: variable=tTempStim1, value=tStimulusNumber % isiTimeN
              action assignment: variable=tISITimeMs, value=isiTimeMs * pow(isiTimeStepLog,tTempStim1)
              action if: condition=doBlock2
                action if: condition=tBlock2TrialNumber
                  action if: condition=!block2MatchB1VisStim
                    action assignment: variable=tTempStim1, value=tStimulusNumber % block2ISITimeN 
                    action assignment: variable=tISITimeMs, value=block2ISITimeMs * pow(block2ISITimeStepLog,tTempStim1)
            action if: condition=tDoRandStimOnTime
              action assignment: variable=tTempStim1, value=tStimulusNumber % stimOneGratingOnTimeStepN
              action assignment: variable=tStimOneGratingOnTimeMs, value=stimOneGratingOnTimeMs * pow(stimOneGratingOnTimeStepLog,tTempStim1)
              action if: condition=matchStimOneParameters
                action assignment: variable=tStimTwoGratingOnTimeMs, value=tStimOneGratingOnTimeMs
              action if: condition=!matchStimOneParameters
                action assignment: variable=tTempStim2, value=tStimulusNumber2 % stimTwoGratingOnTimeStepN
                action assignment: variable=tStimTwoGratingOnTimeMs, value=stimTwoGratingOnTimeMs * pow(stimTwoGratingOnTimeStepLog,tTempStim2)
              action if: condition=doBlock2
                action if: condition=tBlock2TrialNumber
                  action if: condition=!block2MatchB1VisStim
                    action assignment: variable=tTempStim1, value=tStimulusNumber % block2StimOneGratingOnTimeStepN
                    action assignment: variable=tStimOneGratingOnTimeMs, value=block2StimOneGratingOnTimeMs * pow(block2StimOneGratingOnTimeStepLog,tTempStim1)
                    action if: condition=block2MatchStimOneParameters
                      action assignment: variable=tStimTwoGratingOnTimeMs, value=tStimOneGratingOnTimeMs
                    action if: condition=!block2MatchStimOneParameters
                      action assignment: variable=tTempStim2, value=tStimulusNumber2 % block2StimTwoGratingOnTimeStepN
                      action assignment: variable=tStimTwoGratingOnTimeMs, value=block2StimTwoGratingOnTimeMs * pow(block2StimTwoGratingOnTimeStepLog,tTempStim2)
            action if: condition=tDoRandCon
              action assignment: variable=tTempStim1, value=tStimulusNumber % stimOneGratingContrastStepN
              action assignment: variable=tStimOneGratingContrast, value=stimOneGratingContrast * pow(stimOneGratingContrastStepLog,tTempStim1)
              action if: condition=matchStimOneParameters
                action assignment: variable=tStimTwoGratingContrast, value=tStimOneGratingContrast
              action if: condition=!matchStimOneParameters
                action assignment: variable=tTempStim2, value=tStimulusNumber2 % stimTwoGratingContrastStepN
                action assignment: variable=tStimTwoGratingContrast, value=stimTwoGratingContrast * pow(stimTwoGratingContrastStepLog,tTempStim2)
              action if: condition=doBlock2
                action if: condition=tBlock2TrialNumber
                  action if: condition=!block2MatchB1VisStim
                    action assignment: variable=tTempStim1, value=tStimulusNumber % block2StimOneGratingContrastStepN
                    action assignment: variable=tStimOneGratingContrast, value=block2StimOneGratingContrast * pow(block2StimOneGratingContrastStepLog,tTempStim1)
                    action if: condition=block2MatchStimOneParameters
                      action assignment: variable=tStimTwoGratingContrast, value=tStimOneGratingContrast
                    action if: condition=!block2MatchStimOneParameters
                      action assignment: variable=tTempStim2, value=tStimulusNumber2 % block2StimTwoGratingContrastStepN
                      action assignment: variable=tStimTwoGratingContrast, value=block2StimTwoGratingContrast * pow(block2StimTwoGratingContrastStepLog,tTempStim2)
            action if: condition=tDoRandDir
              action assignment: variable=tTempStim1, value=tStimulusNumber % stimOneGratingDirectionStepN
              action assignment: variable=tStimOneGratingDirectionDeg, value=stimOneGratingDirectionDeg + (stimOneGratingDirectionStepDeg * (tTempStim1))
              action if: condition=matchStimOneParameters
                action assignment: variable=tStimTwoGratingDirectionDeg, value=tStimOneGratingDirectionDeg
              action if: condition=!matchStimOneParameters
                action assignment: variable=tTempStim2, value=tStimulusNumber2 % stimTwoGratingDirectionStepN
                action assignment: variable=tStimTwoGratingDirectionDeg, value=stimTwoGratingDirectionDeg + (stimTwoGratingDirectionStepDeg * (tTempStim2))
              action if: condition=doBlock2
                action if: condition=tBlock2TrialNumber
                  action if: condition=!block2MatchB1VisStim
                    action assignment: variable=tTempStim1, value=tStimulusNumber % block2StimOneGratingDirectionStepN
                    action assignment: variable=tStimOneGratingDirectionDeg, value=block2StimOneGratingDirectionDeg + (block2StimOneGratingDirectionStepDeg * (tTempStim1))
                    action if: condition=block2MatchStimOneParameters
                      action assignment: variable=tStimTwoGratingDirectionDeg, value=tStimOneGratingDirectionDeg
                    action if: condition=!block2MatchStimOneParameters
                      action assignment: variable=tTempStim2, value=tStimulusNumber2 % block2StimTwoGratingDirectionStepN
                      action assignment: variable=tStimTwoGratingDirectionDeg, value=block2StimTwoGratingDirectionDeg + (block2StimTwoGratingDirectionStepDeg * (tTempStim2))
            action if: condition=tDoRandPhase
              action assignment: variable=tTempStim1, value=tStimulusNumber % stimOneGratingPhaseStepN
              action assignment: variable=tStimOneGratingPhaseDeg, value=stimOneGratingPhaseDeg + (stimOneGratingPhaseStepDeg * (tTempStim1))
              action if: condition=matchStimOneParameters
                action assignment: variable=tStimTwoGratingPhaseDeg, value=tStimOneGratingPhaseDeg
              action if: condition=!matchStimOneParameters
                action assignment: variable=tTempStim2, value=tStimulusNumber2 % stimTwoGratingPhaseStepN
                action assignment: variable=tStimTwoGratingPhaseDeg, value=stimTwoGratingPhaseDeg + (stimTwoGratingPhaseStepDeg * (tTempStim2))
              action if: condition=doBlock2
                action if: condition=tBlock2TrialNumber
                  action if: condition=!block2MatchB1VisStim
                    action assignment: variable=tTempStim1, value=tStimulusNumber % block2StimOneGratingPhaseStepN
                    action assignment: variable=tStimOneGratingPhaseDeg, value=block2StimOneGratingPhaseDeg + (block2StimOneGratingPhaseStepDeg * (tTempStim1))
                    action if: condition=block2MatchStimOneParameters
                      action assignment: variable=tStimTwoGratingPhaseDeg, value=tStimOneGratingPhaseDeg
                    action if: condition=!block2MatchStimOneParameters
                      action assignment: variable=tTempStim2, value=tStimulusNumber2 % block2StimTwoGratingPhaseStepN
                      action assignment: variable=tStimTwoGratingPhaseDeg, value=block2StimTwoGratingPhaseDeg + (block2StimTwoGratingPhaseStepDeg * (tTempStim2))
            action if: condition=tDoRandDiameter
              action assignment: variable=tTempStim1, value=tStimulusNumber % stimOneGratingDiameterStepN
              action assignment: variable=tStimOneGratingDiameterDeg, value=stimOneGratingDiameterDeg * pow(stimOneGratingDiameterStepLog,tTempStim1)
              action if: condition=matchStimOneParameters
                action assignment: variable=tStimTwoGratingDiameterDeg, value=tStimOneGratingDiameterDeg
              action if: condition=!matchStimOneParameters
                action assignment: variable=tTempStim2, value=tStimulusNumber2 % stimTwoGratingDiameterStepN
                action assignment: variable=tStimTwoGratingDiameterDeg, value=stimTwoGratingDiameterDeg * pow(stimTwoGratingDiameterStepLog,tTempStim2)
              action if: condition=doBlock2
                action if: condition=tBlock2TrialNumber
                  action if: condition=!block2MatchB1VisStim
                    action assignment: variable=tTempStim1, value=tStimulusNumber % block2StimOneGratingDiameterStepN
                    action assignment: variable=tStimOneGratingDiameterDeg, value=block2StimOneGratingDiameterDeg * pow(block2StimOneGratingDiameterStepLog,tTempStim1)
                    action if: condition=block2MatchStimOneParameters
                      action assignment: variable=tStimTwoGratingDiameterDeg, value=tStimOneGratingDiameterDeg
                    action if: condition=!block2MatchStimOneParameters
                      action assignment: variable=tTempStim2, value=tStimulusNumber2 % block2StimTwoGratingDiameterStepN
                      action assignment: variable=tStimTwoGratingDiameterDeg, value=block2StimTwoGratingDiameterDeg * pow(block2StimTwoGratingDiameterStepLog,tTempStim2)
            action if: condition=tDoRandTF
              action assignment: variable=tTempStim1, value=tStimulusNumber % stimOneGratingTemporalFreqStepN
              action assignment: variable=tStimOneGratingTemporalFreqCPS, value=stimOneGratingTemporalFreqCPS * pow(stimOneGratingTemporalFreqStepLog,tTempStim1)
              action if: condition=matchStimOneParameters
                action assignment: variable=tStimTwoGratingTemporalFreqCPS, value=tStimOneGratingTemporalFreqCPS
              action if: condition=!matchStimOneParameters
                action assignment: variable=tTempStim2, value=tStimulusNumber2 % stimTwoGratingTemporalFreqStepN
                action assignment: variable=tStimTwoGratingTemporalFreqCPS, value=stimTwoGratingTemporalFreqCPS * pow(stimTwoGratingTemporalFreqStepLog,tTempStim2)
              action if: condition=doBlock2
                action if: condition=tBlock2TrialNumber
                  action if: condition=!block2MatchB1VisStim
                    action assignment: variable=tTempStim1, value=tStimulusNumber % block2StimOneGratingTemporalFreqStepN
                    action assignment: variable=tStimOneGratingTemporalFreqCPS, value=block2StimOneGratingTemporalFreqCPS * pow(block2StimOneGratingTemporalFreqStepLog,tTempStim1)
                    action if: condition=block2MatchStimOneParameters
                      action assignment: variable=tStimTwoGratingTemporalFreqCPS, value=tStimOneGratingTemporalFreqCPS
                    action if: condition=!block2MatchStimOneParameters
                      action assignment: variable=tTempStim2, value=tStimulusNumber2 % block2StimTwoGratingTemporalFreqStepN
                      action assignment: variable=tStimTwoGratingTemporalFreqCPS, value=block2StimTwoGratingTemporalFreqCPS * pow(block2StimTwoGratingTemporalFreqStepLog,tTempStim2)
            action if: condition=tDoRandSF
              action assignment: variable=tTempStim1, value=tStimulusNumber % stimOneGratingSpatialFreqStepN
              action assignment: variable=tStimOneGratingSpatialFreqCPD, value=stimOneGratingSpatialFreqCPD * pow(stimOneGratingSpatialFreqStepLog,tTempStim1)
              action if: condition=matchStimOneParameters
                action assignment: variable=tStimTwoGratingSpatialFreqCPD, value=tStimOneGratingSpatialFreqCPD
              action if: condition=!matchStimOneParameters
                action assignment: variable=tTempStim2, value=tStimulusNumber2 % stimTwoGratingSpatialFreqStepN
                action assignment: variable=tStimTwoGratingSpatialFreqCPD, value=stimTwoGratingSpatialFreqCPD * pow(stimTwoGratingSpatialFreqStepLog,tTempStim2)
              action if: condition=doBlock2
                action if: condition=tBlock2TrialNumber
                  action if: condition=!block2MatchB1VisStim
                    action assignment: variable=tTempStim1, value=tStimulusNumber % block2StimOneGratingSpatialFreqStepN
                    action assignment: variable=tStimOneGratingSpatialFreqCPD, value=block2StimOneGratingSpatialFreqCPD * pow(block2StimOneGratingSpatialFreqStepLog,tTempStim1)
                    action if: condition=block2MatchStimOneParameters
                      action assignment: variable=tStimTwoGratingSpatialFreqCPD, value=tStimOneGratingSpatialFreqCPD
                    action if: condition=!block2MatchStimOneParameters
                      action assignment: variable=tTempStim2, value=tStimulusNumber2 % block2StimTwoGratingSpatialFreqStepN
                      action assignment: variable=tStimTwoGratingSpatialFreqCPD, value=block2StimTwoGratingSpatialFreqCPD * pow(block2StimTwoGratingSpatialFreqStepLog,tTempStim2)
            action if: condition=tDoRandSoundAmp
              action assignment: variable=tTempStim1, value=tStimulusNumber % stimOneSoundAmplitudeStepN
              action assignment: variable=tStimOneSoundAmplitude, value=stimOneSoundAmplitude * pow(stimOneSoundAmplitudeStepLog,tTempStim1)
              action if: condition=matchStimOneParameters
                action assignment: variable=tStimTwoSoundAmplitude, value=tStimOneSoundAmplitude
              action if: condition=!matchStimOneParameters
                action assignment: variable=tTempStim2, value=tStimulusNumber2 % stimTwoSoundAmplitudeStepN
                action assignment: variable=tStimTwoSoundAmplitude, value=stimTwoSoundAmplitude * pow(stimTwoSoundAmplitudeStepLog,tTempStim2)
              action if: condition=doBlock2
                action if: condition=tBlock2TrialNumber
                  action if: condition=!block2MatchB1AudStim
                    action assignment: variable=tTempStim1, value=tStimulusNumber % block2StimOneSoundAmplitudeStepN
                    action assignment: variable=tStimOneSoundAmplitude, value=block2StimOneSoundAmplitude * pow(block2StimOneSoundAmplitudeStepLog,tTempStim1)
                    action if: condition=block2MatchStimOneParameters
                      action assignment: variable=tStimTwoSoundAmplitude, value=tStimOneSoundAmplitude
                    action if: condition=!block2MatchStimOneParameters
                      action assignment: variable=tTempStim2, value=tStimulusNumber2 % block2StimTwoSoundAmplitudeStepN
                      action assignment: variable=tStimTwoSoundAmplitude, value=block2StimTwoSoundAmplitude * pow(block2StimTwoSoundAmplitudeStepLog,tTempStim2)
            action if: condition=tDoRandPos
              action assignment: variable=tTempStim1, value=tStimulusNumber % (stimOneGratingElevationStepN * stimOneGratingAzimuthStepN)
              action if: condition=tTempStim1 < stimOneGratingAzimuthStepN
                action assignment: variable=tStimOneGratingAzimuthDeg, value=stimOneGratingAzimuthDeg + (stimOneGratingAzimuthStepDeg * (tTempStim1))
                action assignment: variable=tStimOneGratingElevationDeg, value=stimOneGratingElevationDeg
              action if: condition=tTempStim1 >= stimOneGratingAzimuthStepN
                action assignment: variable=tStimOneGratingAzimuthDeg, value=stimOneGratingAzimuthDeg+ (stimOneGratingAzimuthStepDeg * ((tTempStim1) % stimOneGratingAzimuthStepN))
                action assignment: variable=tStimOneGratingElevationDeg, value=stimOneGratingElevationDeg+ (stimOneGratingElevationStepDeg * (floor(tTempStim1 / stimOneGratingAzimuthStepN)))
              action if: condition=matchStimOneParameters
                action assignment: variable=tStimTwoGratingAzimuthDeg, value=tStimOneGratingAzimuthDeg
                action assignment: variable=tStimTwoGratingElevationDeg, value=tStimOneGratingElevationDeg
              action if: condition=!matchStimOneParameters
                action assignment: variable=tTempStim2, value=tStimulusNumber % (stimTwoGratingElevationStepN * stimTwoGratingAzimuthStepN)
                action if: condition=tTempStim1 < stimTwoGratingAzimuthStepN
                  action assignment: variable=tStimTwoGratingAzimuthDeg, value=stimTwoGratingAzimuthDeg + (stimTwoGratingAzimuthStepDeg * (tTempStim2))
                  action assignment: variable=tStimTwoGratingElevationDeg, value=stimTwoGratingElevationDeg
                action if: condition=tTempStim1 >= stimTwoGratingAzimuthStepN
                  action assignment: variable=tStimTwoGratingAzimuthDeg, value=stimTwoGratingAzimuthDeg+ (stimTwoGratingAzimuthStepDeg * ((tTempStim2) % stimTwoGratingAzimuthStepN))
                  action assignment: variable=tStimTwoGratingElevationDeg, value=stimTwoGratingElevationDeg+ (stimTwoGratingElevationStepDeg * (floor(tTempStim2 / stimTwoGratingAzimuthStepN)))
              action if: condition=doBlock2
                action if: condition=tBlock2TrialNumber
                  action if: condition=!block2MatchB1VisStim
                    action assignment: variable=tTempStim1, value=tStimulusNumber % (block2StimOneGratingElevationStepN * block2StimOneGratingAzimuthStepN)
                    action if: condition=tTempStim1 < block2StimOneGratingAzimuthStepN
                      action assignment: variable=tStimOneGratingAzimuthDeg, value=block2StimOneGratingAzimuthDeg + (block2StimOneGratingAzimuthStepDeg * (tTempStim1))
                      action assignment: variable=tStimOneGratingElevationDeg, value=block2StimOneGratingElevationDeg
                    action if: condition=tTempStim1 >= block2StimOneGratingAzimuthStepN
                      action assignment: variable=tStimOneGratingAzimuthDeg, value=block2StimOneGratingAzimuthDeg+ (block2StimOneGratingAzimuthStepDeg * ((tTempStim1) % block2StimOneGratingAzimuthStepN))
                      action assignment: variable=tStimOneGratingElevationDeg, value=block2StimOneGratingElevationDeg+ (block2StimOneGratingElevationStepDeg * (floor(tTempStim1 / block2StimOneGratingAzimuthStepN)))
                    action if: condition=block2MatchStimOneParameters
                      action assignment: variable=tStimTwoGratingAzimuthDeg, value=tStimOneGratingAzimuthDeg
                      action assignment: variable=tStimTwoGratingElevationDeg, value=tStimOneGratingElevationDeg
                    action if: condition=!block2MatchStimOneParameters
                      action assignment: variable=tTempStim2, value=tStimulusNumber % (block2StimTwoGratingElevationStepN * block2StimTwoGratingAzimuthStepN)
                      action if: condition=tTempStim1 < block2StimTwoGratingAzimuthStepN
                        action assignment: variable=tStimTwoGratingAzimuthDeg, value=block2StimTwoGratingAzimuthDeg + (block2StimTwoGratingAzimuthStepDeg * (tTempStim2))
                        action assignment: variable=tStimTwoGratingElevationDeg, value=block2StimTwoGratingElevationDeg
                      action if: condition=tTempStim1 >= block2StimTwoGratingAzimuthStepN
                        action assignment: variable=tStimTwoGratingAzimuthDeg, value=block2StimTwoGratingAzimuthDeg+ (block2StimTwoGratingAzimuthStepDeg * ((tTempStim2) % block2StimTwoGratingAzimuthStepN))
                        action assignment: variable=tStimTwoGratingElevationDeg, value=block2StimTwoGratingElevationDeg+ (block2StimTwoGratingElevationStepDeg * (floor(tTempStim2 / block2StimTwoGratingAzimuthStepN)))
            action if: condition=doMask
              action assignment: variable=multVal, value=rand(0,1)
              action if: condition=multVal >= fractMaskTrials
                action assignment: variable=tDoMask, value=0
                action assignment: variable=tMaskOneGratingContrast, value=0
                action assignment: variable=tMaskTwoGratingContrast, value=0
              action if: condition=multVal < fractMaskTrials
                action assignment: variable=tDoMask, value=1
                action if: condition=tDoRandMaskCon && !tDoRandMaskDir
                  action assignment: variable=tTempMask1, value=tMaskNumber % maskOneGratingContrastStepN
                  action assignment: variable=tMaskOneGratingContrast, value=maskOneGratingContrast * pow(maskOneGratingContrastStepLog,tTempMask1)
                  action if: condition=matchStimOneParameters
                    action assignment: variable=tMaskTwoGratingContrast, value=tMaskOneGratingContrast
                  action if: condition=!matchStimOneParameters
                    action assignment: variable=tTempMask2, value=tMaskNumber2 % maskTwoGratingContrastStepN
                    action assignment: variable=tMaskTwoGratingContrast, value=maskTwoGratingContrast * pow(maskTwoGratingContrastStepLog,tTempMask2)
                  action if: condition=doBlock2
                    action if: condition=tBlock2TrialNumber
                      action if: condition=!block2MatchB1VisStim
                        action assignment: variable=tTempMask1, value=tMaskNumber % block2MaskOneGratingContrastStepN
                        action assignment: variable=tMaskOneGratingContrast, value=block2MaskOneGratingContrast * pow(block2MaskOneGratingContrastStepLog,tTempMask1)
                        action if: condition=matchStimOneParameters
                          action assignment: variable=tMaskTwoGratingContrast, value=tMaskOneGratingContrast
                        action if: condition=!block2MatchB1VisStim
                          action assignment: variable=tTempMask2, value=tMaskNumber2 % block2MaskTwoGratingContrastStepN
                          action assignment: variable=tMaskTwoGratingContrast, value=block2MaskTwoGratingContrast * pow(block2MaskTwoGratingContrastStepLog,tTempMask2)
                action if: condition=tDoRandMaskDir && !tDoRandMaskCon
                  action assignment: variable=tTempMask1, value=tMaskNumber % maskOneGratingDirectionStepN
                  action assignment: variable=tMaskOneGratingDirectionDeg, value=maskOneGratingDirectionDeg + (maskOneGratingDirectionStepDeg * (tTempMask1))
                  action if: condition=matchStimOneParameters
                    action assignment: variable=tMaskTwoGratingDirectionDeg, value=tMaskOneGratingDirectionDeg
                  action if: condition=!matchStimOneParameters
                    action assignment: variable=tTempMask2, value=tMaskNumber2 % maskTwoGratingDirectionStepN
                    action assignment: variable=tMaskTwoGratingDirectionDeg, value=maskTwoGratingDirectionDeg + (maskTwoGratingDirectionStepDeg * (tTempMask2))
                  action if: condition=doBlock2
                    action if: condition=tBlock2TrialNumber
                      action if: condition=!block2MatchB1VisStim
                        action assignment: variable=tTempMask1, value=tMaskNumber % block2MaskOneGratingDirectionStepN
                        action assignment: variable=tMaskOneGratingDirectionDeg, value=block2MaskOneGratingDirectionDeg + (block2MaskOneGratingDirectionStepDeg * (tTempMask1))
                        action if: condition=block2MatchStimOneParameters
                          action assignment: variable=tMaskTwoGratingDirectionDeg, value=tMaskOneGratingDirectionDeg
                        action if: condition=!block2MatchStimOneParameters
                          action assignment: variable=tTempMask2, value=tStimulusNumber2 % block2MaskTwoGratingDirectionStepN
                          action assignment: variable=tMaskTwoGratingDirectionDeg, value=block2MaskTwoGratingDirectionDeg + (block2MaskTwoGratingDirectionStepDeg * (tTempMask2))
                action if: condition=tDoRandMaskDir && tDoRandMaskCon
                  action assignment: variable=tTempMask1, value=tMaskNumber % (maskOneGratingDirectionStepN * maskOneGratingContrastStepN)
                  action if: condition=tTempMask1 < maskOneGratingDirectionStepN
                    action assignment: variable=tMaskOneGratingDirectionDeg, value=maskOneGratingDirectionDeg + (maskOneGratingDirectionStepDeg * (tTempMask1))
                    action assignment: variable=tMaskOneGratingContrast, value=maskOneGratingContrast
                  action if: condition=tTempMask1 >= maskOneGratingDirectionStepN
                    action assignment: variable=tMaskOneGratingDirectionDeg, value=maskOneGratingDirectionDeg+ (maskOneGratingDirectionStepDeg * ((tTempMask1) % maskOneGratingDirectionStepN))
                    action assignment: variable=tMaskOneGratingContrast, value=maskOneGratingContrast * pow(maskOneGratingContrastStepLog, (floor(tTempMask1 / maskOneGratingDirectionStepN)))
                  action if: condition=matchStimOneParameters
                    action assignment: variable=tMaskTwoGratingDirectionDeg, value=tMaskOneGratingDirectionDeg
                    action assignment: variable=tMaskTwoGratingContrast, value=tMaskOneGratingContrast
                  action if: condition=!matchStimOneParameters
                    action assignment: variable=tTempMask2, value=tMaskNumber % (maskTwoGratingDirectionStepN * maskTwoGratingContrastStepN)
                    action if: condition=tTempMask2 < maskTwoGratingDirectionStepN
                      action assignment: variable=tMaskTwoGratingDirectionDeg, value=maskTwoGratingDirectionDeg + (maskTwoGratingDirectionStepDeg * (tTempMask2))
                      action assignment: variable=tMaskTwoGratingContrast, value=maskTwoGratingContrast
                    action if: condition=tTempMask2 >= maskTwoGratingDirectionStepN
                      action assignment: variable=tMaskTwoGratingDirectionDeg, value=maskTwoGratingDirectionDeg+ (maskTwoGratingDirectionStepDeg * ((tTempMask2) % maskTwoGratingDirectionStepN))
                      action assignment: variable=tMaskTwoGratingContrast, value=maskTwoGratingContrast * pow(maskTwoGratingContrastStepLog, (floor(tTempMask2 / maskTwoGratingDirectionStepN)))
                  action if: condition=doBlock2
                    action if: condition=tBlock2TrialNumber
                      action if: condition=!block2MatchB1VisStim
                        action assignment: variable=tTempMask1, value=tMaskNumber % (block2MaskOneGratingDirectionStepN * block2MaskOneGratingContrastStepN)
                        action if: condition=tTempMask1 < block2MaskOneGratingDirectionStepN
                          action assignment: variable=tMaskOneGratingDirectionDeg, value=block2MaskOneGratingDirectionDeg + (block2MaskOneGratingDirectionStepDeg * (tTempMask1))
                          action assignment: variable=tMaskOneGratingContrast, value=block2MaskOneGratingContrast
                        action if: condition=tTempStim1 >= block2MaskOneGratingDirectionStepN
                          action assignment: variable=tMaskOneGratingDirectionDeg, value=block2MaskOneGratingDirectionDeg+ (block2MaskOneGratingDirectionStepDeg * ((tTempMask1) % block2MaskOneGratingDirectionStepN))
                          action assignment: variable=tMaskOneGratingContrast, value=block2MaskOneGratingContrast * pow(block2MaskOneGratingContrastStepLog, (floor(tTempMask1 / block2MaskOneGratingDirectionStepN)))
                        action if: condition=matchStimOneParameters
                          action assignment: variable=tMaskTwoGratingDirectionDeg, value=tMaskOneGratingDirectionDeg
                          action assignment: variable=tMaskTwoGratingContrast, value=tMaskOneGratingContrast
                        action if: condition=!matchStimOneParameters
                          action assignment: variable=tTempMask2, value=tStimulusNumber % (block2MaskTwoGratingDirectionStepN * block2MaskTwoGratingContrastStepN)
                          action if: condition=tTempMask2 < block2MaskTwoGratingDirectionStepN
                            action assignment: variable=tMaskTwoGratingDirectionDeg, value=block2MaskTwoGratingDirectionDeg + (block2MaskTwoGratingDirectionStepDeg * (tTempMask2))
                            action assignment: variable=tMaskTwoGratingContrast, value=block2MaskTwoGratingContrast * pow(block2MaskTwoGratingContrastStepLog, (floor(tTempMask2 / block2MaskTwoGratingDirectionStepN)))
          action if: condition=tDoMatrix
            action if: condition=tDoRandISITime && tDoRandDir
              action assignment: variable=tTempStim1, value=tStimulusNumber % (stimOneGratingDirectionStepN * isiTimeN)
              action if: condition=tTempStim1 < stimOneGratingDirectionStepN
                action assignment: variable=tStimOneGratingDirectionDeg, value=stimOneGratingDirectionDeg + (stimOneGratingDirectionStepDeg * (tTempStim1))
                action assignment: variable=tISITimeMs, value=isiTimeMs
              action if: condition=tTempStim1 >= stimOneGratingDirectionStepN
                action assignment: variable=tStimOneGratingDirectionDeg, value=stimOneGratingDirectionDeg+ (stimOneGratingDirectionStepDeg * ((tTempStim1) % stimOneGratingDirectionStepN))
                action assignment: variable=tISITimeMs, value=isiTimeMs * pow(isiTimeStepLog, (floor(tTempStim1 / stimOneGratingDirectionStepN)))
              action if: condition=matchStimOneParameters
                action assignment: variable=tStimTwoGratingDirectionDeg, value=tStimOneGratingDirectionDeg
              action if: condition=!matchStimOneParameters
                action assignment: variable=tTempStim2, value=tStimulusNumber % (stimTwoGratingDirectionStepN * isiTimeN)
                action if: condition=tTempStim2 < stimTwoGratingDirectionStepN
                  action assignment: variable=tStimTwoGratingDirectionDeg, value=stimTwoGratingDirectionDeg + (stimTwoGratingDirectionStepDeg * (tTempStim2))
                action if: condition=tTempStim2 >= stimTwoGratingDirectionStepN
                  action assignment: variable=tStimTwoGratingDirectionDeg, value=stimTwoGratingDirectionDeg+ (stimTwoGratingDirectionStepDeg * ((tTempStim2) % stimTwoGratingDirectionStepN))
            action if: condition=doBlock2
              action if: condition=tBlock2TrialNumber
                action if: condition=!block2MatchB1VisStim
                  action if: condition=block2DoRandDir && doLaserStimSteps && block2DoRandISITime
                    action assignment: variable=tTempStim1, value=tStimulusNumber % (block2StimOneGratingDirectionStepN * block2ISITimeN * laserStepN)
                    action if: condition=tTempStim1 < (block2ISITimeN * block2StimOneGratingDirectionStepN)
                      action assignment: variable=tBlock2TrialLaserPowerMw, value=block2TrialLaserPowerMw
                      action assignment: variable=tISITimeMs, value=block2ISITimeMs * pow(block2ISITimeStepLog, floor(tTempStim1/block2StimOneGratingDirectionStepN))
                      action assignment: variable=tStimOneGratingDirectionDeg, value=block2StimOneGratingDirectionDeg + (block2StimOneGratingDirectionStepDeg * (tTempStim1 % block2StimOneGratingDirectionStepN))
                      action report: message=ISI is $tISITimeMs ; Laserpower is $tBlock2TrialLaserPowerMw ; Direction is $tStimOneGratingDirectionDeg
                    action if: condition=tTempStim1 >= (block2ISITimeN * block2StimOneGratingDirectionStepN)
                      action assignment: variable=tBlock2TrialLaserPowerMw, value=block2TrialLaserPowerMw * pow(laserStepPerOctave, (floor((tTempStim1 % (block2ISITimeN * block2StimOneGratingDirectionStepN * laserStepN)) / (block2ISITimeN * block2StimOneGratingDirectionStepN))))
                      action assignment: variable=tISITimeMs, value=block2ISITimeMs * pow(block2ISITimeStepLog, floor(((tTempStim1) % (block2ISITimeN * block2StimOneGratingDirectionStepN))/block2StimOneGratingDirectionStepN))
                      action assignment: variable=tStimOneGratingDirectionDeg, value=block2StimOneGratingDirectionDeg + (block2StimOneGratingDirectionStepDeg * (tTempStim1 % block2StimOneGratingDirectionStepN))
                      action report: message=ISI is $tISITimeMs ; Laserpower is $tBlock2TrialLaserPowerMw ; Direction is $tStimOneGratingDirectionDeg
                    action if: condition=block2MatchStimOneParameters
                      action assignment: variable=tStimTwoGratingDirectionDeg, value=tStimOneGratingDirectionDeg
                    action if: condition=!block2MatchStimOneParameters
                      action report: message=in matrix block 2
                      action assignment: variable=tTempStim2, value=tStimulusNumber % (block2StimTwoGratingDirectionStepN * block2ISITimeN * laserStepN)
                      action if: condition=tTempStim2 < (block2ISITimeN * block2StimTwoGratingDirectionStepN)
                        action assignment: variable=tBlock2TrialLaserPowerMw, value=block2TrialLaserPowerMw
                        action assignment: variable=tStimTwoGratingDirectionDeg, value=block2StimTwoGratingDirectionDeg + (block2StimTwoGratingDirectionStepDeg * (tTempStim2 % block2StimTwoGratingDirectionStepN))
                      action if: condition=tTempStim2 >= (block2ISITimeN * block2StimTwoGratingDirectionStepN)
                        action assignment: variable=tBlock2TrialLaserPowerMw, value=block2TrialLaserPowerMw * pow(laserStepPerOctave, (floor((tTempStim2 % (block2ISITimeN * block2StimTwoGratingDirectionStepN * laserStepN)) / (block2ISITimeN * block2StimTwoGratingDirectionStepN))))
                        action assignment: variable=tISITimeMs, value=block2ISITimeMs * pow(block2ISITimeStepLog, floor(((tTempStim2) % (block2ISITimeN * block2StimTwoGratingDirectionStepN))/block2StimTwoGratingDirectionStepN))
                        action assignment: variable=tStimTwoGratingDirectionDeg, value=block2StimTwoGratingDirectionDeg + (block2StimTwoGratingDirectionStepDeg * (tTempStim2 % block2StimTwoGratingDirectionStepN))
                  action if: condition=block2DoRandDir && block2DoRandISITime && !doLaserStimSteps
                    action assignment: variable=tTempStim1, value=tStimulusNumber % (block2StimOneGratingDirectionStepN * block2ISITimeN)
                    action if: condition=tTempStim1 < block2StimOneGratingDirectionStepN
                      action assignment: variable=tStimOneGratingDirectionDeg, value=block2StimOneGratingDirectionDeg + (block2StimOneGratingDirectionStepDeg * (tTempStim1))
                      action assignment: variable=tISITimeMs, value=block2ISITimeMs
                    action if: condition=tTempStim1 >= block2StimOneGratingDirectionStepN
                      action assignment: variable=tStimOneGratingDirectionDeg, value=block2StimOneGratingDirectionDeg+ (block2StimOneGratingDirectionStepDeg * ((tTempStim1) % block2StimOneGratingDirectionStepN))
                      action assignment: variable=tISITimeMs, value=block2ISITimeMs * pow(block2ISITimeStepLog, (floor(tTempStim1 / block2StimOneGratingDirectionStepN)))
                    action if: condition=matchStimOneParameters
                      action assignment: variable=tStimTwoGratingDirectionDeg, value=tStimOneGratingDirectionDeg
                    action if: condition=!matchStimOneParameters
                      action assignment: variable=tTempStim2, value=tStimulusNumber % (block2StimTwoGratingDirectionStepN * block2ISITimeN)
                      action if: condition=tTempStim2 < block2StimTwoGratingDirectionStepN
                        action assignment: variable=tStimTwoGratingDirectionDeg, value=block2StimTwoGratingDirectionDeg + (block2StimTwoGratingDirectionStepDeg * (tTempStim2))
                      action if: condition=tTempStim2 >= block2StimTwoGratingDirectionStepN
                        action assignment: variable=tStimTwoGratingDirectionDeg, value=block2StimTwoGratingDirectionDeg+ (block2StimTwoGratingDirectionStepDeg * ((tTempStim2) % block2StimOneGratingDirectionStepN))
            action if: condition=tDoRandDir && tDoRandSF
              action assignment: variable=tTempStim1, value=tStimulusNumber % (stimOneGratingDirectionStepN * stimOneGratingSpatialFreqStepN)
              action if: condition=tTempStim1 < stimOneGratingDirectionStepN
                action assignment: variable=tStimOneGratingDirectionDeg, value=stimOneGratingDirectionDeg + (stimOneGratingDirectionStepDeg * (tTempStim1))
                action assignment: variable=tStimOneGratingSpatialFreqCPD, value=stimOneGratingSpatialFreqCPD
              action if: condition=tTempStim1 >= stimOneGratingDirectionStepN
                action assignment: variable=tStimOneGratingSpatialFreqCPD, value=stimOneGratingSpatialFreqCPD * pow(stimOneGratingSpatialFreqStepLog,floor(tTempStim1/stimOneGratingDirectionStepN))
                action assignment: variable=tStimOneGratingDirectionDeg, value=stimOneGratingDirectionDeg + (stimOneGratingDirectionStepDeg * (tTempStim1 % stimOneGratingDirectionStepN))
              action if: condition=matchStimOneParameters
                action assignment: variable=tStimTwoGratingDirectionDeg, value=tStimOneGratingDirectionDeg
                action assignment: variable=tStimTwoGratingSpatialFreqCPD, value=tStimOneGratingSpatialFreqCPD
            action if: condition=tDoRandCon && tDoRandDiameter
              action assignment: variable=tTempStim1, value=tStimulusNumber % (stimOneGratingContrastStepN * stimOneGratingDiameterStepN)
              action if: condition=tTempStim1 < stimOneGratingContrastStepN
                action assignment: variable=tStimOneGratingContrast, value=stimOneGratingContrast * pow(stimOneGratingContrastSPO,tTempStim1)
                action assignment: variable=tStimOneGratingDiameterDeg, value=stimOneGratingDiameterDeg
              action if: condition=tTempStim1 >= stimOneGratingContrastStepN
                action assignment: variable=tStimOneGratingContrast, value=stimOneGratingContrast* pow(stimOneGratingContrastSPO, ((tTempStim1) % stimOneGratingContrastStepN))
                action assignment: variable=tStimOneGratingDiameterDeg, value=tStimOneGratingDiameterDeg * pow(stimOneGratingDiameterSPO, (floor(tTempStim1 / stimOneGratingDiameterStepN)))
              action if: condition=matchStimOneParameters
                action assignment: variable=tStimTwoGratingContrast, value=tStimOneGratingContrast
                action assignment: variable=tStimTwoGratingDiameterDeg, value=tStimOneGratingDiameterDeg
              <!-- <action type="if" condition="!matchStimOneParameters">
                                <action type="assignment" variable="tTempStim2" value= "tStimulusNumber % (stimTwoGratingDirectionStepN * isiTimeN)"/>
                                <action type="if" condition="tTempStim2 &lt; stimTwoGratingDirectionStepN">
                                  <action type="assignment" variable="tStimTwoGratingDirectionDeg" value= "stimTwoGratingDirectionDeg + (stimTwoGratingDirectionStepDeg * (tTempStim2))"/>
                                </action>  
                                <action type="if" condition="tTempStim2 &gt;= stimTwoGratingDirectionStepN">
                                  <action type="assignment" variable="tStimTwoGratingDirectionDeg" value= "stimTwoGratingDirectionDeg+ (stimTwoGratingDirectionStepDeg * ((tTempStim2) % stimTwoGratingDirectionStepN))"/>
                                </action>  
                              </action>
                              <action type="if" condition="doBlock2">
                                <action type="if" condition="tBlock2TrialNumber">
                                  <action type="if" condition="!block2MatchB1VisStim">
                                    <action type="assignment" variable="tTempStim1" value= "tStimulusNumber % (block2StimOneGratingDirectionStepN * block2ISITimeN)"/>
                                    <action type="if" condition="tTempStim1 &lt; block2StimOneGratingDirectionStepN">
                                      <action type="assignment" variable="tStimOneGratingDirectionDeg" value= "block2StimOneGratingDirectionDeg + (block2StimOneGratingDirectionStepDeg * (tTempStim1))"/>
                                      <action type="assignment" variable="tISITimeMs" value= "block2ISITimeMs"/>
                                    </action>
                                    <action type="if" condition="tTempStim1 &gt;= block2StimOneGratingDirectionStepN">
                                      <action type="assignment" variable="tStimOneGratingDirectionDeg" value= "block2StimOneGratingDirectionDeg+ (block2StimOneGratingDirectionStepDeg * ((tTempStim1) % block2StimOneGratingDirectionStepN))"/>
                                      <action type="assignment" variable="tISITimeMs" value= "block2ISITimeMs * pow(block2ISITimeSPO, (floor(tTempStim1 / block2StimOneGratingDirectionStepN)))"/>
                                    </action>
                                    <action type="if" condition="matchStimOneParameters">
                                      <action type="assignment" variable="tStimTwoGratingDirectionDeg" value= "tStimOneGratingDirectionDeg"/>
                                    </action>
                                    <action type="if" condition="!matchStimOneParameters">
                                      <action type="assignment" variable="tTempStim2" value= "tStimulusNumber % (block2StimTwoGratingDirectionStepN * block2ISITimeN)"/>
                                      <action type="if" condition="tTempStim2 &lt; block2StimTwoGratingDirectionStepN">
                                        <action type="assignment" variable="tStimTwoGratingDirectionDeg" value= "block2StimTwoGratingDirectionDeg + (block2StimTwoGratingDirectionStepDeg * (tTempStim2))"/>
                                      </action>
                                    </action> 
                                  </action>
                                </action>
                              </action> -->
          action if: condition=!tStimOneDoVisualStim
            action assignment: variable=tStimOneGratingContrast, value=0
            action assignment: variable=tMaskOneGratingContrast, value=0
          action if: condition=!tStimTwoDoVisualStim
            action assignment: variable=tStimTwoGratingContrast, value=0
            action assignment: variable=tMaskTwoGratingContrast, value=0
          action if: condition=!tStimOneDoAuditoryStim
            action assignment: variable=tStimOneSoundAmplitude, value=0
          action if: condition=!tStimTwoDoAuditoryStim
            action assignment: variable=tStimTwoSoundAmplitude, value=0
          action if: condition=tStimOneGratingContrast > 1
            action assignment: variable=tStimOneGratingContrast, value=1
          action if: condition=tMaskOneGratingContrast > 1
            action assignment: variable=tMaskOneGratingContrast, value=1
          action if: condition=tStimTwoGratingContrast > 1
            action assignment: variable=tStimTwoGratingContrast, value=1
          action if: condition=tMaskTwoGratingContrast > 1
            action assignment: variable=tMaskTwoGratingContrast, value=1
          action if: condition=tStimOneGratingContrast < 0
            action assignment: variable=tStimOneGratingContrast, value=0
          action if: condition=tMaskOneGratingContrast < 0
            action assignment: variable=tMaskOneGratingContrast, value=0
          action if: condition=tStimTwoGratingContrast < 0
            action assignment: variable=tStimTwoGratingContrast, value=0
          action if: condition=tMaskTwoGratingContrast < 0
            action assignment: variable=tMaskTwoGratingContrast, value=0
          action if: condition=tDoMask
            action if: condition=tStimOneGratingContrast + tMaskOneGratingContrast > 1
              action assignment: variable=tMaskOneGratingContrast, value=0
            action if: condition=tStimTwoGratingContrast + tMaskTwoGratingContrast > 1
              action assignment: variable=tMaskTwoGratingContrast, value=0
          action if: condition=!tDoMask
            action assignment: variable=tMaskOneGratingContrast, value=0
            action assignment: variable=tMaskTwoGratingContrast, value=0
          action report: message=tStimOneGratingContrast is $tStimOneGratingContrast; tMaskOneGratingContrast is $tMaskOneGratingContrast
          action report: message=tStimOneGratingDirectionDeg is $tStimOneGratingDirectionDeg; tMaskOneGratingDirectionDeg is $tMaskOneGratingDirectionDeg
          action assignment: variable=tItiTimeMs, value=itiTimeMs
          action if: condition=block2DoPreStimLaser && tBlock2TrialNumber
            action assignment: variable=laserOn, value=1
          action if: condition=!tBlock2TrialNumber || (tBlock2TrialNumber && !block2DoPreStimLaser)
            action assignment: variable=laserOn, value=0
          action if: condition=laserOn
            action start_timer: timer=InterTrialTimer, duration=tItiTimeMs-block2PreStimLaserOnTimeMs, duration_units=ms
          action if: condition=!laserOn
            action start_timer: timer=InterTrialTimer, duration=tItiTimeMs, duration_units=ms
          <!-- <action type="start_timer" timer="InterTrialTimer" duration="tItiTimeMs" timebase="" duration_units="ms" /> -->
          <!-- initialize trial start/end times -->
          action if: condition=tThisTrialStartTimeMs == -1
            <!-- first trial, leave lasttime as -1 -->
            action assignment: variable=tLastTrialStartTimeMs, value=-1
          action if 9: condition=tThisTrialStartTimeMs != -1
            <!-- else -->
            <!-- later trials, copy this into last before setting this again below -->
            action assignment: variable=tLastTrialStartTimeMs, value=tThisTrialStartTimeMs
          action assignment: variable=tThisTrialStartTimeMs, value=now()/1000
          <!-- compute ITI time -->
          <!-- initialize with a const value -->
          action assignment: variable=tItiWaitTimeMs, value=itiTimeMs
          action if: condition=tDoRandStimOnTime
            action assignment: variable=maxStimOnTime, value=(stimOneGratingOnTimeMs * pow(stimOneGratingOnTimeStepLog,stimOneGratingOnTimeStepN)) + (stimTwoGratingOnTimeMs * pow(stimTwoGratingOnTimeStepLog,stimTwoGratingOnTimeStepN))
          action if: condition=!tDoRandStimOnTime
            action assignment: variable=maxStimOnTime, value=stimOneGratingOnTimeMs + stimTwoGratingOnTimeMs
          action if: condition=tDoRandISITime
            action assignment: variable=maxISITime, value=isiTimeMs * pow(isiTimeStepLog,isiTimeN-1)
          action if: condition=!tDoRandISITime
            action assignment: variable=maxISITime, value=isiTimeMs
          action if: condition=sendPClampSync
            action assignment: variable=tempMs, value=maxISITime-tISITimeMs
          action report: message=maxISI is $maxISITime
          action if: condition=doExtendItiOnShortPrevTrial == 1
            action if: condition=!isFirstTrial
              action assignment: variable=tempMs, value=(maxStimOnTime+maxISITime)-lastTrialTimeMs
              action assignment "-": variable=tItiWaitTimeMs, value=itiTimeMs+tempMs
          action assignment "Encode ItiStart": variable=strobedDigitalWord, value=6
          action if: condition=doWheelSpeed == 1
            action assignment: variable=doCerebellarStim, value=0
            action assignment: variable=DoWheelSpeed, value=doWheelSpeed
            action assignment: variable=speedIntervalUS, value=speedIntervalMS*1000
          action if: condition=tBlock2TrialNumber && block2DoTrialLaser && tBlock2TrialLaserPowerMw > 0
            action assignment "set trial laser power": variable=tTrialLaserPowerMw, value=tBlock2TrialLaserPowerMw
            action assignment "Send laser params to controller": variable=sendLaserParams, value=1
            action assignment "Send laser params to controller": variable=sendLaserParams, value=0
          action assignment: variable=MIO0, value=0
          action report: message=In ITI, waiting $tItiWaitTimeMs, then wait for press
          transition conditional "Queue Visual Stimulus": condition=timerExpired(InterTrialTimer) && laserOn, target=LaserOn
          transition conditional "Queue Visual Stimulus": condition=timerExpired(InterTrialTimer) && !laserOn, target=StimOneOn
        task_system_state "LaserOn"
          action if: condition=optic_device == 'led' 
            action assignment "set trial laser power": variable=tTrialLaserPowerMw, value=tBlock2TrialLaserPowerMw
          action if: condition=optic_device != 'led' 
            action assignment "set trial laser power": variable=tTrialLaserPowerMw, value=tBlock2TrialLaserPowerMw
            <!-- <action type="report" message="send laser params"></action>
                          <action type="assignment" tag="Send laser params to controller" variable="sendLaserParams" value="1"></action>
                          <action type="assignment" tag="Send laser params to controller" variable="sendLaserParams" value="0"></action> -->
            action assignment: variable=laserTrigger, value=1
            action assignment: variable=laserDuration, value=laserDurationMS
            action report: message=-----Laser Duration is to $laserDuration
            action report: message=********* SENDING LASER TRIGGER *********
            action assignment "Encode LaserStimOn": variable=strobedDigitalWord, value=5
          action if: condition=block2DoLaserVisStim
            action start_timer: timer=toNextStage, duration=block2PreStimLaserOnTimeMs-tStimOneGratingOnTimeMs, duration_units=ms
          action if: condition=!block2DoLaserVisStim
            action start_timer: timer=toNextStage, duration=block2PreStimLaserOnTimeMs, duration_units=ms
          transition conditional "Queue Visual Stimulus": condition=timerExpired(toNextStage) && block2DoLaserVisStim, target=StimOneOn
          transition conditional "Queue Visual Stimulus": condition=timerExpired(toNextStage) && !block2DoLaserVisStim, target=LaserOff
        task_system_state "LaserOff"
          action if: condition=optic_device == 'led' 
            action assignment "set trial laser power": variable=tTrialLaserPowerMw, value=0
          action if: condition=optic_device != 'led' 
            action assignment: variable=laserTrigger, value=0
          action start_timer: timer=toNextStage, duration=tISITimeMs, duration_units=ms
          transition conditional "Queue Visual Stimulus": condition=timerExpired(toNextStage), target=StimOneOn
        task_system_state "StimOneOn"
          <!-- if trialLaser, send params to controller -->
          action if: condition=(tBlock2TrialLaserPowerMw > 0) && tBlock2TrialNumber && block2DoLaserVisStim
            action if: condition=optic_device == 'led' 
              action assignment "set trial laser power": variable=tTrialLaserPowerMw, value=tBlock2TrialLaserPowerMw
              action report: message=Block2 is on; tTrialLaserPowerMw is $tTrialLaserPowerMw
            action if: condition=optic_device != 'led' 
              action assignment "set trial laser power": variable=tTrialLaserPowerMw, value=tBlock2TrialLaserPowerMw
              <!-- <action type="report" message="send laser params"></action>
                            <action type="assignment" tag="Send laser params to controller" variable="sendLaserParams" value="1"></action>
                            <action type="assignment" tag="Send laser params to controller" variable="sendLaserParams" value="0"></action> -->
              action assignment: variable=laserTrigger, value=1
              action assignment: variable=laserDuration, value=laserDurationMS
              action report: message=-----Laser Duration is to $laserDuration
              action report: message=********* SENDING LASER TRIGGER *********
              action assignment "Encode LaserStimOn": variable=strobedDigitalWord, value=5
          action start_timer: timer=stimTimer, duration=tStimOneGratingOnTimeMs, duration_units=ms
          action report: message=in stim on
          action assignment: variable=ntrials, value=ntrials + 1
          action live_queue_stimulus "Queue Stimulus": stimulus=stimOne
          action play_dynamic_stimulus "StimOn": stimulus=stimOne
          action if: condition=doMask
            action live_queue_stimulus "Queue Stimulus": stimulus=maskOne
            action play_dynamic_stimulus "StimOn": stimulus=maskOne
          action if: condition=doPhotodiode
            action live_queue_stimulus "Queue Stimulus": stimulus=photoDiodeGrating
            action dequeue_stimulus "Dequeue Stimulus": stimulus=photoDiodeMask
            action play_dynamic_stimulus "StimOn": stimulus=photoDiodeGrating
          action update_stimulus_display "justincase": predicted_output_time=predictOutputUs
          action play_sound: sound=stimOneSound
          action assignment: variable=mwStimOneOnMs, value=now()/1000
          action if: condition=sendElectrophysSync
            action assignment: variable=MIO0, value=1
          transition conditional "Dequeue Visual Stimulus": condition=timerExpired(stimTimer), target=StimOneOff
        task_system_state "StimOneOff" --> 
                    
         -->
          action dequeue_stimulus: stimulus=stimOne
          action dequeue_stimulus: stimulus=maskOne
          action if: condition=doPhotodiode
            action dequeue_stimulus "dequeue Stimulus": stimulus=photoDiodeGrating
            action live_queue_stimulus "Queue Stimulus": stimulus=photoDiodeMask
            action play_dynamic_stimulus "StimOn": stimulus=photoDiodeMask
          action update_stimulus_display "Update Stimulus"
          <!-- <action type="if" condition="(tBlock2TrialLaserPowerMw > 0) &amp;&amp; tBlock2TrialNumber">
                      	<action type="start_timer" timer="ISItimer" timebase="" duration="250" duration_units="ms"/>
                  	</action>

                  	<action type="if" condition="!tBlock2TrialNumber">
                      	<action type="start_timer" timer="ISItimer" timebase="" duration="tISITimeMs" duration_units="ms"/>
                  	</action> -->
          action start_timer: timer=ISItimer, duration=tISITimeMs, duration_units=ms
          action if: condition=(tBlock2TrialLaserPowerMw > 0) && doLaserDelayOn
            action start_timer: timer=ISItimer, duration=tISITimeMs-laserDelayTimeMs, duration_units=ms
          action assignment: variable=mwStimOneOffMs, value=(now()/1000)
          action if: condition=sendElectrophysSync
            action assignment: variable=MIO0, value=0
          <!-- <action type="if" condition="tBlock2TrialLaserPowerMw > 0">
                        <action type="if" condition="optic_device == 'led' ">
                            <action type="assignment" tag="set trial laser power" variable="tTrialLaserPowerMw" value="0"></action>
                          </action>

                          <action type="if" condition="optic_device != 'led' ">
                            <action type="assignment" variable="laserTrigger" value="0"></action>
                          </action>
                        </action> -->
          transition conditional "Queue Visual Stimulus": condition=(timerExpired(ISItimer) && tStimTwoGratingContrast > 0), target=StimTwoOn
          transition conditional "Queue Visual Stimulus": condition=tStimTwoGratingContrast == 0, target=EndTrial
        task_system_state "StimTwoOn"
          action start_timer: timer=stimTimer, duration=tStimTwoGratingOnTimeMs, duration_units=ms
          action live_queue_stimulus "Queue Stimulus": stimulus=stimTwo
          action play_dynamic_stimulus "StimOn": stimulus=stimTwo
          action if: condition=doMask
            action live_queue_stimulus "Queue Stimulus": stimulus=maskTwo
            action play_dynamic_stimulus "StimOn": stimulus=maskTwo
          action if: condition=doPhotodiode
            action live_queue_stimulus "Queue Stimulus": stimulus=photoDiodeGrating
            action dequeue_stimulus "Dequeue Stimulus": stimulus=photoDiodeMask
            action play_dynamic_stimulus "StimOn": stimulus=photoDiodeGrating
          action update_stimulus_display "justincase"
          action play_sound: sound=stimTwoSound
          action assignment: variable=mwStimTwoOnMs, value=now()/1000
          action if: condition=sendElectrophysSync
            action assignment: variable=MIO0, value=1
          transition conditional "Dequeue Visual Stimulus": condition=timerExpired(stimTimer), target=StimTwoOff
        task_system_state "StimTwoOff"
          action if % for PV ChR2: condition=sendPClampSync
            <!-- <action type="start_timer" timer="stimOffTimer" timebase="" duration="tempMs+400" duration_units="ms"/> % for size tuning -->
            action start_timer: timer=stimOffTimer, duration=tempMs+400, duration_units=ms
            action report: message=time is $tempMs
          action if: condition=!sendPClampSync
            action start_timer: timer=stimOffTimer, duration=100, duration_units=ms
          action dequeue_stimulus: stimulus=stimTwo
          action dequeue_stimulus: stimulus=maskTwo
          action if: condition=doPhotodiode
            action dequeue_stimulus "dequeue Stimulus": stimulus=photoDiodeGrating
            action live_queue_stimulus "Queue Stimulus": stimulus=photoDiodeMask
            action play_dynamic_stimulus "StimOn": stimulus=photoDiodeMask
          action update_stimulus_display "Update Stimulus"
          action assignment: variable=mwStimTwoOffMs, value=(now()/1000)
          action if: condition=sendElectrophysSync
            action assignment: variable=MIO0, value=0
          transition conditional "Queue Visual Stimulus": condition=timerExpired(stimOffTimer), target=LaserTwoOff
        task_system_state "LaserTwoOff"
          action report: message=in laser off
          action if: condition=optic_device == 'led' 
            action assignment "set trial laser power": variable=tTrialLaserPowerMw, value=0
          action if: condition=optic_device != 'led' 
            action assignment "Send laser params to controller": variable=sendLaserParams, value=0
            action assignment: variable=laserTrigger, value=0
          action start_timer: timer=toNextStage, duration=800, duration_units=ms
          transition conditional "Queue Visual Stimulus": condition=timerExpired(toNextStage), target=EndTrial
        task_system_state "EndTrial"
          action if: condition=tBlock2TrialNumber && block2DoTrialLaser && !block2StimOneLaserOnly
            action if: condition=optic_device == 'led' 
              action assignment "set trial laser power": variable=tTrialLaserPowerMw, value=0
            action if: condition=optic_device != 'led' 
              action assignment "saveTrialLaser": variable=tTrialLaserPowerMw_save, value=tTrialLaserPowerMw
              action assignment "set trial laser power": variable=tTrialLaserPowerMw, value=0
              action report: message=send laser params
              action assignment "Send laser params to controller": variable=sendLaserParams, value=1
              action assignment "Send laser params to controller": variable=sendLaserParams, value=0
              action assignment: variable=laserTrigger, value=0
          action report: message=Trial Ended
          <!-- accept stim selection -->
          action accept_selections: selection=svStimNumber
          action assignment: variable=tNStimAccepted, value=tNStimAccepted + 1
          <!-- update selection variable -->
          action if: condition=tNStimAccepted >= 80
            action reset_selection: selection=svStimNumber
            action assignment: variable=tNStimAccepted, value=0
            action report: message=Should be resetting selections,tNStimAccepted=$tNStimAccepted
          action if: condition=tNStimAccepted < 80
            action next_selection: selection=svStimNumber
            action report: message=Next selection,tNStimAccepted=$tNStimAccepted
          action accept_selections: selection=svStimNumber2
          action assignment: variable=tNStimAccepted2, value=tNStimAccepted2 + 1
          <!-- update selection variable -->
          action if: condition=tNStimAccepted2 >= 80
            action reset_selection: selection=svStimNumber2
            action assignment: variable=tNStimAccepted2, value=0
          action if: condition=tNStimAccepted2 < 80
            action next_selection: selection=svStimNumber2
          action accept_selections: selection=svMaskNumber
          action assignment: variable=tNMaskAccepted, value=tNMaskAccepted + 1
          <!-- update selection variable -->
          action if: condition=tNMaskAccepted >= 80
            action reset_selection: selection=svMaskNumber
            action assignment: variable=tNMaskAccepted, value=0
          action if: condition=tNMaskAccepted < 80
            action next_selection: selection=svMaskNumber
          action accept_selections: selection=svMaskNumber2
          action assignment: variable=tNMaskAccepted2, value=tNMaskAccepted2 + 1
          <!-- update selection variable -->
          action if: condition=tNMaskAccepted2 >= 80
            action reset_selection: selection=svMaskNumber2
            action assignment: variable=tNMaskAccepted2, value=0
          action if: condition=tNMaskAccepted2 < 80
            action next_selection: selection=svMaskNumber2
          action if: condition=doWheelSpeed == 1
            action assignment: variable=DoWheelSpeed, value=0
          action assignment "End Matlab Sync": variable=sync, value=0
          transition yield "return to parent task system"
    action assignment: variable=laserTrigger, value=0
    action if: condition=optic_device == 'led' 
      action assignment: variable=tTrialLaserPowerMw, value=0
    action stop_device_IO "Stop IO Device": device=LabJackU6
    action dequeue_stimulus: stimulus=stimTwo
    action update_stimulus_display "Update Stimulus"
