<?xml version="1.0" encoding="UTF-8"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices"/>
    <variables tag="Variables">
        <variable tag="diameter" scope="global" logging="when_changed" default_value="20" type="float"/>
        <variable tag="diameterbig" scope="global" logging="when_changed" default_value="20" type="float"/>
    </variables>
    <sounds tag="Sounds"/>
    <stimuli tag="Stimuli">
        <stimulus tag="background" type="blank_screen" color="0.5, 0.5, 0.5"/>
        <stimulus type="drifting_grating" tag="d1_back" 
		  frames_per_second="60" direction="0" starting_phase="0" 
		  spatial_frequency="4"
		  speed="0.04" 
		  grating_type="sinusoid" mask="gaussian" std_dev="0.3" mean="0.1" 
		  x_size="300" y_size="300" 
		  x_position="0" y_position="0" 
		  rotation="0" 
		  alpha_multiplier="1.0"></stimulus>
        <stimulus type="rectangle" tag="d1_back_mask" color="0.5,0.5,0.5" x_size="200" y_size="200" 
                  x_position="5" y_position="5" rotation="0" alpha_multiplier="0.80"/>

        <stimulus type="drifting_grating" tag="d1" 
		  frames_per_second="10" direction="0" starting_phase="0" 
		  spatial_frequency="0.25"
		  speed="10" 
		  grating_type="sinusoid" mask="gaussian" std_dev="0.3" mean="0.1" 
		  x_size="100" y_size="100" 
		  x_position="0" y_position="0" 
		  rotation="0" 
		  alpha_multiplier="1.0"></stimulus>


        <stimulus type="rectangle" tag="green_rectangle" color="0,1,0" x_size="diameter" y_size="diameter" x_position="5" y_position="5" rotation="0" alpha_multiplier="0.5"/>
        <stimulus type="rectangle" tag="blue_rectangle" color="0,0,1" x_size="diameter" y_size="diameter" x_position="0" y_position="-5" rotation="0" alpha_multiplier="0.5"/>
    </stimuli>
    <filters tag="Filters"/>
    <optimizers tag="Optimizers"/>
    <experiment tag="New Experiment" full_name="" description="">
        <protocol tag="New Protocol" nsamples="10" sampling_method="cycles" selection="sequential">
            <action tag="Queue real background" type="queue_stimulus" stimulus="background"/>
            <action tag="Update Stimulus" type="update_stimulus_display"/>
            <action type="wait" tag="Wait" duration="2" duration_units="s"/>


            <action tag="Queue background" type="queue_stimulus" stimulus="d1_back"/>
            <action tag="Queue background m " type="queue_stimulus" stimulus="d1_back_mask"/>
            <action type="play_dynamic_stimulus" stimulus="d1_back" tag="start"></action>
            <action tag="Update Stimulus" type="update_stimulus_display"/>

            <!-- <action tag="Queue moving grating" type="queue_stimulus" stimulus="d1"/> -->
            <!-- <action tag="Queue 2" type="queue_stimulus" stimulus="green_rectangle"/> -->


            <action type="wait" tag="Wait" duration="2" duration_units="s"/>
        </protocol>
    </experiment>
</monkeyml>
