<?xml version="1.0"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices">
        <iodevice tag="LabJackU6" priority="" type="LabJackU6" pulse_duration="juice" pulse_on="juice" lever_press="FIO1" alt="FakeMonkey" lever_solenoid="FIO2"></iodevice>
        <iodevice tag="FakeMonkey" priority="" type="fake_monkey" id="" alt="" spike_rate="10">
            -->
        </iodevice>
    </io_devices>
    <variables tag="Variables">
        <folder tag="Behavioral Control">
            <variable tag="subjectNum" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable tag="doWaitForUp" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"></variable>
            <variable tag="doLeverSolenoidAllTrials" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable tag="doLeverSolenoidOnMiss" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable tag="doLeverSolenoidOnEarly" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable tag="doHoldTone" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable tag="holdRepeatIntervalMs" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1"></variable>
            <variable tag="tooFastTimeMs" scope="global" logging="when_changed" default_value="100" type="integer" persistant="1"></variable>
            <variable tag="randReqHoldMaxMs" scope="global" logging="when_changed" default_value="300" type="integer" persistant="1"></variable>
            <variable tag="fixedReqHoldTimeMs" scope="global" logging="when_changed" default_value="400" type="integer" persistant="1"></variable>
            <variable tag="reactTimeMs" scope="global" logging="when_changed" default_value="1000" type="integer" persistant="1"></variable>
            <variable tag="earlyTimeoutMs" scope="global" logging="when_changed" default_value="200" type="integer" persistant="1"></variable>
            <variable tag="missedTimeoutMs" scope="global" logging="when_changed" default_value="2000" type="integer" persistant="1"></variable>
            <variable tag="itiTimeMs" scope="global" logging="when_changed" default_value="750" type="integer" persistant="1"></variable>
            <variable tag="postRewardMs" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1"></variable>
            <variable tag="minRewardUs" scope="global" logging="when_changed" default_value="20000" type="integer" persistant="1"></variable>
            <variable tag="maxRewardUs" scope="global" logging="when_changed" default_value="20000" type="integer" persistant="1"></variable>
	    <variable tag="doRampDownReward" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable tag="rampDownRewardTimeMs" scope="global" logging="when_changed" default_value="800" type="integer" persistant="1"></variable>
            <variable tag="earlyRewardUs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable tag="missedRewardUs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable tag="doTurnOffStimAtRampBottom" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"></variable>
            <variable tag="interRewardIntervalMs" scope="global" logging="when_changed" default_value="200" type="integer" persistant="1"></variable>
            <variable tag="maxConsecCorrects" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"></variable>
            <variable tag="jackpotProb" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable tag="jackpotRewardSizeUs" scope="global" logging="when_changed" default_value="100000" type="integer" persistant="1"></variable>
        </folder>
        <folder tag="Stimuli">
            <variable tag="gratingAzimuthDeg" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable tag="gratingDirectionDeg" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable tag="gratingElevationDeg" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable tag="gratingHeightDeg" scope="global" logging="when_changed" default_value="5" type="integer" persistant="1"></variable>
            <variable tag="gratingSpatialFreqCPD" scope="global" logging="when_changed" default_value="0.5" type="integer" persistant="1"></variable>
            <variable tag="gratingSpeedDPS" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"></variable>
            <variable tag="gratingWidthDeg" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1"></variable>
            <variable tag="imageContrastMustChangeXML" scope="global" logging="when_changed" default_value="0.1" type="float" persistant="1"></variable>
        </folder>
        <folder tag="Fake Mouse">
            <variable tag="doLever" scope="global" logging="when_changed" default_value="0" type="boolean" persistant="1"></variable>
            <variable tag="fakeMouseMaxPressMs" scope="global" logging="when_changed" default_value="300" type="integer" persistant="1"></variable>
            <variable tag="fakeMouseMaxReactMs" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1"></variable>
        </folder>
        <folder tag="Task Status">
            <variable tag="failure" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable tag="leverResult" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
            <variable tag="stimulusOn" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
            <variable tag="success" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable tag="ignore" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable tag="trialStart" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
            <variable tag="pressTimestampMs" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"></variable>
            <variable tag="actualHoldTimeMs" scope="global" logging="when_changed" default_value="0" type="float" persistant="0"></variable>
        </folder>
        <folder tag="Online Display">
            <variable tag="sync" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        </folder>
        <folder tag="Hardware variables">
            <variable tag="FIO1" full_name="FIO1" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"></variable>
            <variable tag="FIO2" full_name="FIO2" default_value="0" scope="GLOBAL" type="boolean" editable="never" logging="when_changed"></variable>
            <variable tag="juice" full_name="juice" scope="GLOBAL" logging="when_changed" default_value="0" type="integer"></variable>
        </folder>
        <folder tag="Internal Variables">
            <variable tag="tTotalReqHoldTimeMs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable tag="tTotalRewardTimeUs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable tag="tRandReqHoldTimeMs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable tag="tFakeMouseReactMs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable tag="consecCorrects" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable tag="tNRewards" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable tag="tInterRewardIntervalMs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable tag="tRewardAddPerMsHoldUs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable tag="tIsJackpot" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable tag="tActualHoldRelMs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable tag="tStimTurnedOn" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        </folder>
    </variables>
    <sounds tag="Sounds">
        <sound tag="louderPressSound" type="wav_file" path="wavs/louderPress.wav"></sound>
        <sound tag="waitingForLeverSound" type="wav_file" path="wavs/trialStart-F10e-short.wav"></sound>
        <sound tag="correctSound" type="wav_file" path="wavs/shortCorrect.wav"></sound>
        <sound tag="incorrectSound" type="wav_file" path="wavs/incorrectMouse.wav"></sound>
        <sound tag="holdSound" type="wav_file" path="wavs/quietHold.wav"></sound>
        <sound tag="rewardSound" type="wav_file" path="wavs/shortCorrect.wav"></sound>
    </sounds>
    <stimuli tag="Stimuli">
        <stimulus type="rectangle" tag="testRect" color="1,1,1" x_size="50" y_size="50" x_position="0" y_position="0" rotation="0" contrast="1"></stimulus>
        <stimulus type="image_file" tag="imageStimulus" path="images/big-sin-grating-ori90-sf200.png" x_size="40" y_size="40" x_position="0.0" y_position="0.0" rotation="0.0" alpha_multiplier="imageContrastMustChangeXML"></stimulus>
        <stimulus type="blank_screen" tag="brightBackground" color="0.5,0.5,0.5"></stimulus>
    </stimuli>
    <experiment tag="Experiment" full_name="DigitalInExample">
        <protocol tag="JuiceOnHoldProtocol" full_name="Protocol" interruptable="YES" selection="sequential_ascending" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
            <action tag="Queue Stimulus" type="queue_stimulus" stimulus="brightBackground"></action>
            <action tag="Update Stimulus 3" type="update_stimulus_display"></action>
            <action type="assignment" tag="consecCorrects = 0" variable="consecCorrects" value="0"></action>
            <task_system tag="Preamble" interruptible="YES">
                <task_system_state tag="openITC" full_name="openITC" interruptable="YES" description="" interruptible="YES">
                    <action type="assignment" tag="juice = 0" variable="juice" value="0"></action>
                    <transition type="yield" tag="Exit Task System..."></transition>
                </task_system_state>
            </task_system>
            <trial tag="Trial" full_name="Trial" description="" interruptible="1" selection="sequential" nsamples="1000" sampling_method="cycles">
                <task_system tag="TS" full_name="TS" interruptable="YES" description="" interruptible="YES" _error="Task Systems must contain at least one transition that yields to the Task System parent">
                    <task_system_state tag="Intertrial" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action type="assignment" tag="Set trialStart" variable="trialStart" value="1"></action>
                        <action type="assignment" tag="Sync Matlab" variable="sync" value="1"></action>
                        <action type="assignment" tag="juice = 0" variable="juice" value="0"></action>
                        <action type="assignment" tag="leverResult = 0" variable="leverResult" value="0"></action>
                        <action tag="Start IO Device" type="start_device_IO" device="LabJackU6"></action>
                        <action type="start_timer" tag="Start interTrialTimer" timer="interTrialTimer" timebase="" duration="itiTimeMs" duration_units="ms"></action>
                        <action type="assignment" tag="Clear stimulusOn" variable="stimulusOn" value="0"></action>
                        <action type="assignment" tag="Compute tIsJackpot" variable="tIsJackpot" value="rand(0,1000) &lt; jackpotProb*1000"></action>
                        <action type="if" tag="if doLeverSolenoidAllTrials" condition="doLeverSolenoidAllTrials">
                            <!-- Turn on solenoid for ITI only if doLS is true, not if doLSErrorsOnly -->
                            <action type="assignment" tag="lever Solenoid on" variable="FIO2" value="1"></action>
                        </action>
                        
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="timer_expired" tag="If Expired, Go To WaitForUp" target="WaitForUp" timer="interTrialTimer"></transition>
                    </task_system_state>
                    <task_system_state tag="WaitForUp" interruptible="YES">
                        <action type="if" tag="if doLeverSolenoid/ErrorsOnly" condition="doLeverSolenoidAllTrials || doLeverSolenoidOnMiss || doLeverSolenoidOnEarly">
                            <!-- Lower solenoid at beginning of trial for any solenoid -->
                            <action type="assignment" tag="lever Solenoid off" variable="FIO2" value="0"></action>
                        </action>
                        <action tag="Play waitingForLeverSound" type="play_sound" sound="waitingForLeverSound"></action>
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action type="report" tag="Report WaitForUp" message="Waiting for release (WaitForUp)"></action>
                        <action type="start_timer" tag="Start Timer 2" timer="holdToneTimer" timebase="" duration="holdRepeatIntervalMs" duration_units="ms"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="conditional" tag="If LeverUp (and not fakeMouse) go to StartTrial" condition="FIO1 == 0 || doLever == 0 || doWaitForUp == 0" target="StartTrial"></transition>
                        <transition type="timer_expired" tag="If Timer Expired, Go To PlayHoldTone" target="PlayHoldTone" timer="holdToneTimer"></transition>
                    </task_system_state>
                    <task_system_state tag="PlayHoldTone" interruptible="YES">
                        <action type="if" tag="if doHoldTone" condition="doHoldTone &amp;&amp; FIO1 == 1">
                            <action tag="Play holdSound" type="play_sound" sound="holdSound"></action>
                            <action type="report" tag="Report" message="in PlayHoldTone"></action>
                        </action>
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action type="start_timer" tag="Start Timer" timer="holdToneTimer" timebase="" duration="holdRepeatIntervalMs" duration_units="ms"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="conditional" tag="If LeverUp (and not fakeMouse) go to StartTrial" condition="FIO1 == 0 || doLever == 0 || doWaitForUp == 0" target="StartTrial"></transition>
                        <transition type="timer_expired" tag="If Timer Expired, Repeat this" target="PlayHoldTone" timer="holdToneTimer"></transition>
                    </task_system_state>
                    <task_system_state tag="StartTrial" full_name="ReadDigitalIn" description="" interruptible="YES">
                        <action type="if" tag="if fakeMouse" condition="!doLever">
                            <action type="start_timer" tag="Start Fake Mouse Press Timer" timer="fakeMousePressTimer" timebase="" duration="rand(0, fakeMouseMaxPressMs)" duration_units="ms"></action>
                        </action>
                        <action type="if" tag="if !fakeMouse" condition="doLever">
                            <action type="start_timer" tag="Start Fake Mouse Press Timer infinite" timer="fakeMousePressTimer" timebase="" duration="100000" duration_units="ms"></action>
                        </action>
                        <transition type="conditional" tag="If Lever Down, Go To Hold Lever" condition="FIO1 == 1" target="HoldLever"></transition>
                        <transition type="timer_expired" tag="If fakeMousePress expired, go to HoldLever" target="HoldLever" timer="fakeMousePressTimer"></transition>
                    </task_system_state>
                    <task_system_state tag="HoldLever" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
			<action tag="p" type="play_sound" sound="louderPressSound"></action>
                        <action type="assignment" tag="leverResult = 1" variable="leverResult" value="1"></action>
                        <action type="assignment" tag="set pressTimestampMs" variable="pressTimestampMs" value="now()/1000"></action>

                        <action type="assignment" tag="Assign tRandReqHoldTimeMs" variable="tRandReqHoldTimeMs" value="rand(0,randReqHoldMaxMs)"></action>
                        <action type="assignment" tag="Assign tTotalReqHoldTimeMs" variable="tTotalReqHoldTimeMs" value="fixedReqHoldTimeMs + tRandReqHoldTimeMs"></action>

                        <action type="if" tag="if fakeMouse" condition="!doLever">
                            <action type="assignment" tag="Assign tFakeMouseReactMs" variable="tFakeMouseReactMs" value="rand(0, fakeMouseMaxReactMs)"></action>
                            <action type="start_timer" tag="Start Fake Mouse Timer" timer="fakeMouseTimer" timebase="" duration="tFakeMouseReactMs" duration_units="ms"></action>
                            <action tag="Report FakeMouseTimer" full_name="Report Press" type="report" message="fake mouse to react in $tFakeMouseReactMs ms"></action>
                        </action>
                        <action type="if" tag="if ! fakeMouse" condition="doLever">
                            <action type="start_timer" tag="Start fakeMouseTimer infinite" timer="fakeMouseTimer" timebase="" duration="100000" duration_units="ms"></action>
                        </action>
                        <action type="start_timer" tag="Start LeverHold Timer" timer="leverHoldTimer" timebase="" duration="tTotalReqHoldTimeMs" duration_units="ms"></action>
                        <action tag="Report LeverDown" full_name="ReportDigital" type="report" message="LeverDown (need to hold for $tTotalReqHoldTimeMs + tooFastTime ms)"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="conditional" tag="If Lever Up, Go To EarlyRelease" condition="FIO1 == 0 &amp;&amp; doLever == 1" target="EarlyRelease"></transition>
                        <transition type="timer_expired" tag="If fakeMouseTimer expired, go to EarlyRelease" target="EarlyRelease" timer="fakeMouseTimer"></transition>
                        <transition type="timer_expired" tag="If leverHoldTimer Expired, Go To StimOn" target="StimOn" timer="leverHoldTimer"></transition>
                    </task_system_state>
                    <task_system_state tag="StimOn" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action type="assignment" tag="Set StimulusOn" variable="stimulusOn" value="1"></action>
                        <action tag="Report StimOn" full_name="ReportDigital" type="report" message="StimOn (still holding; signaling release ok)"></action>
                        <action type="start_timer" tag="Start Too Fast Timer" timer="tooFastTimer" timebase="" duration="tooFastTimeMs" duration_units="ms"></action>
                        <action type="start_timer" tag="Start React Timer" timer="reactTimeTimer" timebase="" duration="reactTimeMs" duration_units="ms"></action>
                        <action tag="Queue Stimulus" type="queue_stimulus" stimulus="imageStimulus"></action>
                        <action tag="Update Stimulus" type="update_stimulus_display"></action>
			<action type="assignment" tag="-" variable="tStimTurnedOn" value="1"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="direct" tag="Always Go to CheckTooFastTime" target="CheckTooFastTime"></transition>
                    </task_system_state>
                    <task_system_state tag="CheckTooFastTime" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="timer_expired" tag="if tooFastTimer expired, go to React" target="React" timer="tooFastTimer"></transition>
                        <transition type="conditional" tag="If LeverUp, go to EarlyRelease" condition="FIO1 == 0 &amp;&amp; doLever == 1" target="EarlyRelease"></transition>
                        <transition type="timer_expired" tag="If fakeMouseTimer expired, go to EarlyRelease" target="EarlyRelease" timer="fakeMouseTimer"></transition>
                    </task_system_state>
                    <task_system_state tag="React" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>

			<!-- turn off stimulus if longer than minAgain -->			
                        <action type="if" tag="-" condition="doTurnOffStimAtRampBottom == 1">
			  <action type="if" tag="-" condition="tStimTurnedOn == 1">  <!-- so we only turn it off once here -->
			    <action type="if" tag="-" condition="(((now()/1000) - pressTimestampMs) - tTotalReqHoldTimeMs) > rampDownRewardTimeMs">
			      <action tag="-" type="dequeue_stimulus" stimulus="imageStimulus"></action>
			      <action tag="-" type="update_stimulus_display"></action>
			      <action type="assignment" tag="-" variable="tStimTurnedOn" value="0"></action>
			    </action>
			  </action>
			</action>


                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="conditional" tag="If Lever Up, Go To Reward" condition="FIO1 == 0 &amp;&amp; doLever == 1" target="Reward"></transition>
                        <transition type="timer_expired" tag="If fakeMouse expired, Transition to Reward" target="Reward" timer="fakeMouseTimer"></transition>
                        <transition type="timer_expired" tag="If React Time Expired, Go To Missed" target="Missed" timer="reactTimeTimer"></transition>
                        <transition type="direct" tag="-" target="React"></transition> <!-- spin on this state to turn off stim if necessary -->
                    </task_system_state>
                    <task_system_state tag="EarlyRelease" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action type="assignment" tag="leverResult = 0" variable="leverResult" value="0"></action>
                        <action type="assignment" tag="-" variable="actualHoldTimeMs" value=" (now()/1000) - pressTimestampMs"></action>
                        <action type="report" tag="Report" message="actualHoldTimeMs = $actualHoldTimeMs"></action>
                        <action tag="ReportEarlyRelease" full_name="ReportDigital" type="report" message="** Early Release (FIO1 = $FIO1 )"></action>
                        <action type="assignment" tag="failure++" variable="failure" value="failure+1"></action>
                        <action type="assignment" tag="consecCorrects = 0" variable="consecCorrects" value="0"></action>
			
			<action tag="Play incorrectSound" type="play_sound" sound="incorrectSound"></action>
			
			<!-- give an early reward if nonzero -->
			<action type="if" tag="-" condition="earlyRewardUs > 0">
			  <action type="assignment" tag="Give reward" variable="juice" value="earlyRewardUs"></action>
			</action>

                        <action type="if" tag="if doLeverSolenoid/Early" condition="doLeverSolenoidAllTrials || doLeverSolenoidOnEarly">
                            <action type="assignment" tag="lever Solenoid on" variable="FIO2" value="1"></action>
                        </action>
                        <action tag="Dequeue Stimulus 0" type="dequeue_stimulus" stimulus="imageStimulus"></action>
                        <action tag="Update Stimulus 2" type="update_stimulus_display"></action>
                        <action type="start_timer" tag="Start earlyTimeoutTimer" timer="earlyTimeoutTimer" timebase="" duration="earlyTimeoutMs" duration_units="ms"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="timer_expired" tag="If earlyTimeoutTimer expired go to EndTrial" target="EndTrial" timer="earlyTimeoutTimer"></transition>
                    </task_system_state>
                    <task_system_state tag="Reward" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action type="assignment" tag="leverResult = 0" variable="leverResult" value="0"></action>
                        <action type="assignment" tag="-" variable="actualHoldTimeMs" value=" (now()/1000) - pressTimestampMs"></action>
                        <action type="report" tag="Report" message="actualHoldTimeMs = $actualHoldTimeMs"></action>
                        <action tag="Report Reward" full_name="ReportDigital" type="report" message="** Success"></action>
                        <action type="assignment" tag="success++" variable="success" value="success+1"></action>

		        <!-- assign reward size based on elapsed rand if rampdown == 0 -->
                        <action type="if" tag="if doa" condition="doRampDownReward == 0">
			  <action type="assignment" tag="Compute tRewardAddPerMsHoldUs" variable="tRewardAddPerMsHoldUs" 
				  value="(maxRewardUs - minRewardUs) / ( randReqHoldMaxMs )"></action>
			  <action type="assignment" tag="Assign tTotalRewardTimeUs" variable="tTotalRewardTimeUs" 
				  value="minRewardUs + ( tRewardAddPerMsHoldUs * tRandReqHoldTimeMs )"></action>
			</action>

			<!-- do ramp down reward if rampdown == 1; reset tTotalRewardTimeUs from above -->
                        <action type="if" tag="-" condition="doRampDownReward == 1">
			  <action type="assignment" tag="Compute tRewardAddPerMsHoldUs" variable="tRewardAddPerMsHoldUs" 
				  value="- (maxRewardUs - minRewardUs) / ( rampDownRewardTimeMs )"></action>
			  <!-- scale based on hold time -->
			  <action type="assignment" tag="-" variable="tActualHoldRelMs"
				  value="actualHoldTimeMs - tTotalReqHoldTimeMs"></action>
			  <action type="assignment" tag="-" variable="tTotalRewardTimeUs" 
				    value="maxRewardUs + (tActualHoldRelMs * tRewardAddPerMsHoldUs)"></action> <!--actually a subtraction see above -->
			  <!-- hack - force to min if too long-->
			  <action type="if" tag="-" condition="tActualHoldRelMs > rampDownRewardTimeMs">
			    <action type="assignment" tag="-" variable="tTotalRewardTimeUs" 
				    value="minRewardUs"></action>
			  </action>
			</action>

			<!-- scale based on consec corrects -->
                        <action type="if" tag="if consecCorrects &lt; max" condition="consecCorrects &lt; maxConsecCorrects">
                            <action type="assignment" tag="consecCorrects++" variable="consecCorrects" value="consecCorrects+1"></action>
                        </action>
                        <action type="assignment" tag="set tNRewards" variable="tNRewards" value="consecCorrects"></action>


                        <action tag="Dequeue Stimulus 2" type="dequeue_stimulus" stimulus="imageStimulus"></action>
                        <action tag="Update Stimulus 5" type="update_stimulus_display"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="direct" tag="Always Go to GiveReward" target="GiveReward"></transition>
                    </task_system_state>
                    <task_system_state tag="GiveReward" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action type="assignment" tag="tNRewards--" variable="tNRewards" value="tNRewards-1"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="conditional" tag="if rewards remain, go to SingleReward (note must be -1)" condition="tNRewards > -1" target="SingleReward"></transition>
                        <transition type="direct" tag="Always Go to PRP" target="PostRewardPause"></transition>
                    </task_system_state>
                    <task_system_state tag="PostRewardPause" interruptible="YES">
                        <action type="start_timer" tag="StartTimer" timer="postRewardTimer" timebase="" duration="postRewardMs" duration_units="ms"></action>
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="timer_expired" tag="If timer expired, go to EndTrial" target="EndTrial" timer="postRewardTimer"></transition>
                    </task_system_state>
                    <task_system_state tag="SingleReward" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action type="if" tag="if Jackpot" condition="tIsJackpot">
                            <action type="assignment" tag="Reward = jackpot" variable="tTotalRewardTimeUs" value="jackpotRewardSizeUs"></action>
                            <action tag="Report" full_name="ReportDigital" type="report" message="** Jackpot reward of $jackpotRewardSizeUs us"></action>
                        </action>
                        <action type="assignment" tag="interRewardInterval minimum to juiceTime" variable="tInterRewardIntervalMs" value="interRewardIntervalMs + ( tTotalRewardTimeUs / 1000 )"></action>
                        <action type="start_timer" tag="Start interRewardIntervalTimer" timer="interRewardIntervalTimer" timebase="" duration="tInterRewardIntervalMs" duration_units="ms"></action>
                        <action type="assignment" tag="Start reward" variable="juice" value="tTotalRewardTimeUs"></action>
                        <action type="report" tag="Report" message="juice = $juice"></action>
                        <action tag="Play reward sound" type="play_sound" sound="rewardSound"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="timer_expired" tag="If interRewardIntervalTimer expired, go to GiveReward" target="GiveReward" timer="interRewardIntervalTimer"></transition>
                    </task_system_state>
                    <task_system_state tag="Missed" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action type="assignment" tag="leverResult = 0" variable="leverResult" value="0"></action>
                        <action type="assignment" tag="-" variable="actualHoldTimeMs" value=" (now()/1000) - pressTimestampMs"></action>
                        <action type="report" tag="Report" message="actualHoldTimeMs = $actualHoldTimeMs"></action>
                        <action type="assignment" tag="ignore++" variable="ignore" value="ignore + 1"></action>
                        <action type="assignment" tag="consecCorrects = 0" variable="consecCorrects" value="0"></action>
                        <action tag="Report 4" full_name="ReportDigital" type="report" message="** Ignored react stimulus"></action>
                        <action tag="Play incorrectSound 2" type="play_sound" sound="incorrectSound"></action>
			
			<!-- give a missed reward if nonzero -->
                        <action type="if" tag="if do reward" condition="missedRewardUs > 0">
			  <action type="assignment" tag="Give reward" variable="juice" value="missedRewardUs"></action>
			</action>

                        <action type="start_timer" tag="start timer" timer="missedTimeoutTimer" timebase="" duration="missedTimeoutMs" duration_units="ms"></action>
                        <action type="if" tag="if doLeverSolenoid/ErrorsOnly" condition="doLeverSolenoidAllTrials || doLeverSolenoidOnMiss">
                            <action type="assignment" tag="lever Solenoid on" variable="FIO2" value="1"></action>
                        </action>
                        <action tag="Dequeue Stimulus 1" type="dequeue_stimulus" stimulus="imageStimulus"></action>
                        <action tag="Update Stimulus 4" type="update_stimulus_display"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="timer_expired" tag="-" target="EndTrial" timer="missedTimeoutTimer"></transition>
                    </task_system_state>
                    <task_system_state tag="EndTrial" interruptible="YES">
                        <action_marker _unmoveable="1" tag="Actions"></action_marker>
                        <action tag="Stop IO Device" type="stop_device_IO" device="LabJackU6"></action>
                        <action tag="Dequeue Stimulus 0" type="dequeue_stimulus" stimulus="imageStimulus"></action>
                        <action tag="Update Stimulus 2" type="update_stimulus_display"></action>
                        <action type="assignment" tag="End Matlab Sync" variable="sync" value="0"></action>
                        <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                        <transition type="direct" tag="Go To Intertrial" target="Intertrial"></transition>
                    </task_system_state>
                </task_system>
            </trial>
        </protocol>
    </experiment>
</monkeyml>
